config:
  title: OLA Simple Workflow
  description: Aquarium workflow enabling rapid HIV drug resistance detection using the OLA simple technique.
  version: 1.0.00.1
  maintainer: {name: Abe Miller/Nuttada Panpradist, email: abraham.r.m@gmail.com/nuttadap@uw.edu}
  github: {user: gamemackerel, repo: OLASimple-Protocols, organization: OLA-Simple}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
operation_type: Fluorescence Analysis
category: Misc.
deployed: false
on_the_fly: false
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protocol:
# frozen_string_literal: true

# This is a default, one-size-fits all protocol that shows how you can
# access the inputs and outputs of the operations associated with a job.
# Add specific instructions for this protocol!
needs 'OLASimple/NetworkRequests'
class Protocol
  include NetworkRequests
  API_URL = 'http://ola_image_processing:5000/api/classifyfluorescence'
  def main
    operations.each do |op|
      image_results = nil
      5.times.each do |_i|
        break if image_results

        upload = accept_file

        image_results = make_calls(upload)
      end

      if image_results.nil?
        op.error(:image_result_failed, 'Image processing has failed. Check that the OLA IP service is running and connected correctly, and that the file is in a normal image format.')
        raise 'Image processing has failed. Check that the OLA IP service is running and connected correctly, and that the file is in a normal image format.'
      end

      result_table = [['tube #', 'viral', 'r', 'g', 'b']]
      tubes = image_results[0].size
      tubes.times do |i|
        rgb = image_results[0][i]
        classification = image_results[1][i]
        result_table << [i.to_s, classification, *rgb]
      end

      show do
        title 'Image analyzed'
        note 'Results:'
        table result_table
      end
    end
    {}
  end

  def make_calls(image_upload)
    res = post_file(API_URL, 'file', image_upload)
    JSON.parse(res.body)['results']
  end

  def accept_file
    result = show do
      title 'Upload file for analysis'
      upload var: :files
    end
    upload_hashes = result[:files] || []
    uhash = upload_hashes.first
    Upload.find(uhash[:id])
  end
end

operation_type: Pipette Training
category: Misc.
deployed: false
on_the_fly: false
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protocol:
class Protocol

def main
    
    show do
      title "Gather Materials"
      check "Four 14 mL test tubes"
      check "Four different colors of food coloring"
      check "Five 1.5 mL tubes"
    end

    show do
      title "Exercise Preparation"
      note "Fill each test tube about 2/3 full with sink water."
      note "To each test tube add one drop of a different color of food coloring."
      warning "Make sure the blue and purple drops are very small because the color is dark."
      note "Label tubes as I, II, III, and IV."
      note "Put test tubes in a test tube rack and set aside."
    end
    
    show do
      title "Large Volume Exercise"
      note "Take out five 1.5 mL tubes and label them A - E. Put tubes C - D off to the side."
      note "Using the 1 mL pipette, add solution I to the tubes: 100 uL to A and 150 uL to B."
      note "Using the same pipette but a fresh tip, add solution II to the tubes: 200 uL to A and 250 uL to B."
      note "Using the same pipette but a fresh tip, add solution III to the tubes: 150 uL to A and 350 uL to B."
      note "Using the same pipette but a fresh tip, and solution IV to the tubes: 550 uL to A and 250 uL to B."
      check "Each tube should now have 1 mL (total volume) in it, so, to check the error from pipetting, set the 1 mL pipette to 1000 uL and draw up as much liquid as possible from each tube."
    end
    
    calculate_error()
    
    show do
      title "Discard Tubes"
      check "Throw out tubes A and B"
    end
    
    show do 
      title "Small Volume Exercise"
    
      note "Take out tubes C - E, and the 10 uL pipette and pipette tip box."
      note "Add solution I to the tubes: 4 uL in in C, 4 uL in D, and 4 uL in E."
      note "Using the same pipette but a new tip, add solution II to the tubes: 5 uL to C, 5 uL to D, and 4 uL to E."
      note "Using the same pipette but a new tip, add solution III to the tuebs: 1 uL to C, and 1 uL to E."
      note "Using the same pipette but a new tip, add solution IV to the tubes: 1 uL to D and 1 uL to E."
      note "Each tube should now have 10 uL (total volume) in it, so to check the error from pipetting, set the 10 uL pipette to 10 uL and draw up as much liquid as possible from each tube."
    end
    
    calculate_error()
    
    show do
      title "Discard Tubes"
      check "Throw out tubes C, D, and E"
    end
    
    return {}

  end
  
  
  def calculate_error
    choice = show do
      title "Calculate Measurement Error"
      bullet "If there is still liquid left in the tube, too much was added."
      bullet "If there is air at the end of the tip, too little was added."
      bullet "If the tube is filled exactly with liquid, the measurement error is 0."
      
      select ["Too much", "Too little", "Just right"], var: "choice", label: "How much liquid did you add?", default: [0,1,2].sample
    end.get_response("choice")
      
    if choice == "Too much"
      show do
        title "Calculate Measurement Error"
        note "To determine the error if too much was added, follow thise steps:"
        check "Discard the tip with liquid in it and get a fresh tip. "
        check "Carefully pipette up the remaining liquid in the tip, and then rotate the volume dial until the liquid reaches the bottom of the tip." 
        note "The error rate is (new volume / total volume)"
      end
    elsif choice == "Too little"
      show do
        title "Calculate Measurement Error"
        note "To determine the error if too little was added, follow thise steps:"
        check "Slowly decrease the volume until the liquid reaches the end of the tip."
        note "The error rate is ((total volume - new volume) / total volume)"
      end
    else
      show do
        title "Calculate Measurement Error"
        note "If the tube is filled exactly with liquid, the measurement error is 0."
        note "Try again and mess up more so that you can practice calculating measurement error!"
      end
    end
  end
end

sample_types:
  - {name: OLASimple Sample, description: Patient sample and OLA kit}
    - {name: Patient ID, ftype: string}
    - {name: Secondary Patient ID, ftype: string}
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object_types:
  - {name: OLA PCR, description: OLA PCR, handler: sample_container, unit: OLASimple Sample, release_method: return, sample_type_name: OLASimple Sample}
  - {name: OLA Ligation Stripwell, description: OLA Ligation Stripwell, handler: collection, unit: Well, release_method: return, rows: 1, columns: 12}
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operation_type: OLASimple Ligation
category: OLASimple
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: PCR Product, sample_types: [OLASimple Sample], object_types: [OLA PCR], routing: PP}
  - {ftype: sample, role: output, name: Ligation Product, sample_types: [OLASimple Sample], object_types: [OLA Ligation Stripwell], routing: PP}
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documentation:
Add small pieces of DNA to the PCR product from OLASimple PCR that allow detection of HIV mutations.

precondition:
eval Library.find_by_name("OLAScheduling").code("source").content
extend OLAScheduling

def precondition(op)
  schedule_same_kit_ops(op)
  true
end

cost_model:
def cost(op)
  { labor: 7.5, materials: 0 }
end

protocol:
# frozen_string_literal: true

##########################################
#
#
# OLASimple Ligation
# author: Justin Vrana
# date: March 2018
#
#
##########################################

needs 'OLASimple/OLAConstants'
needs 'OLASimple/OLALib'
needs 'OLASimple/OLAGraphics'
needs 'OLASimple/JobComments'
needs 'OLASimple/OLAKitIDs'

class Protocol
  include OLALib
  include OLAGraphics
  include OLAConstants
  include JobComments
  include OLAKitIDs

  ##########################################
  # INPUT/OUTPUT
  ##########################################
  INPUT = 'PCR Product'
  OUTPUT = 'Ligation Product'
  PACK = 'Ligation Pack'
  A = 'Diluent A'

  ##########################################
  # TERMINOLOGY
  ##########################################

  ##########################################
  # Protocol Specifics
  ##########################################

  AREA = POST_PCR

  # for debugging
  PREV_COMPONENT = '2'
  PREV_UNIT = 'A'

  CENTRIFUGE_TIME = '5 seconds' # time to pulse centrifuge to pull down dried powder
  VORTEX_TIME = '5 seconds' # time to pulse vortex to mix
  TUBE_CAP_WARNING = 'Check to make sure tube caps are completely closed.'

  PACK_HASH = LIGATION_UNIT

  LIGATION_VOLUME = PACK_HASH['Ligation Mix Rehydration Volume'] # volume to rehydrate ligation mix
  SAMPLE_VOLUME = PACK_HASH['PCR to Ligation Mix Volume'] # volume of pcr product to ligation mix
  MATERIALS = [
    'nitrile gloves (wear tight gloves to reduce contamination risk)',
    'P200 pipette and filtered tips',
    'P2 pipette and filtered tips',
    'a spray bottle of 10% v/v bleach',
    'a spray bottle of 70% v/v ethanol',
    'balancing tube (on rack)',
    'centrifuge',
    'vortex mixer'
  ].freeze
  COMPONENTS = PACK_HASH['Components']['sample tubes']

  ##########################################
  # ##
  # Input Restrictions:
  # Input needs a kit, unit, components,
  # and sample data associations to work properly
  ##########################################

  def main
    operations.running.retrieve interactive: false
    save_user operations
    debug_setup(operations) if debug
    save_temporary_input_values(operations, INPUT)
    # save_pack_hash(operations, PACK)
    operations.each do |op|
      op.temporary[:pack_hash] = PACK_HASH
    end
    save_temporary_output_values(operations)
    run_checks operations

    expert_mode = true

    introduction(operations.running)
    record_technician_id
    safety_warning
    area_preparation(POST_PCR, MATERIALS, PRE_PCR)
    simple_clean("OLASimple Ligation")

    get_samples_from_thermocycler(operations.running)
    validate_ligation_inputs(operations.running)

    get_ligation_packages(operations.running)
    validate_ligation_packages(operations.running)
    open_ligation_packages(operations.running)
    # check_for_tube_defects operations.running
    centrifuge_samples(sorted_ops.running)
    rehydrate_ligation_mix(sorted_ops.running, expert_mode)
    vortex_and_centrifuge_samples(sorted_ops.running)
    add_template(sorted_ops.running, expert_mode)
    vortex_and_centrifuge_samples(sorted_ops.running)
    cleanup(sorted_ops)
    start_ligation(sorted_ops.running)
    wash_self
    accept_comments
    conclusion(sorted_ops)
    {}
  end

  def sorted_ops
    operations.sort_by { |op| op.output_ref(OUTPUT) }.extend(OperationList)
  end

  def save_user(ops)
    ops.each do |op|
      username = get_technician_name(jid)
      op.associate(:technician, username)
    end
  end

  def debug_setup(ops)
    # make an alias for the inputs
    if debug
      ops.each_with_index do |op, i|
        kit_num = 'K001'
        sample_num = sample_num_to_id(i + 1)
        make_alias(op.input(INPUT).item, kit_num, PREV_UNIT, PREV_COMPONENT, 'a patient id', sample_num)
      end
    end
  end

  def run_checks(_myops)
    if operations.running.empty?
      show do
        title 'All operations have errored'
        note "Contact #{SUPERVISOR}"
        operations.each do |op|
          note (op.errors.map { |k, v| [k, v] }).to_s
        end
      end
      {}
    end
  end

  def ask_if_expert
    resp = show do
      title 'Expert Mode?'
      note 'Are you an expert at this protocol? If you do not know what this means, then continue without enabling expert mode.'
      select ['Continue in normal mode', 'Enable expert mode'], var: :choice, label: 'Expert Mode?', default: 0
    end
    resp[:choice] == 'Enable expert mode'
  end

  def introduction(_ops)
    show do
      title 'Welcome to OLASimple Ligation'
      note 'You will be running the OLASimple Ligation protocol'
      note 'In this protocol you will be using PCR samples from the PCR protocol' \
      ' and adding small pieces of DNA which will allow you to detect HIV mutations.'
    end
  end

  def get_ligation_packages(myops)
    gops = myops.group_by { |op| op.temporary[:output_kit_and_unit] }
    show do
      title "Take #{LIG_PKG_NAME.pluralize(gops.length)} from the R1 #{FRIDGE_POST} "
      gops.each do |unit, _ops|
        check "Retrieve #{PACKAGE_POST} #{unit.bold}"
      end
      check "Place #{pluralizer(PACKAGE_POST, gops.length)} on the #{BENCH_POST} in the #{AREA.bold}."
    end
  end

  def validate_ligation_packages(myops)
    group_packages(myops).each { |unit, _ops| package_validation_with_multiple_tries(unit) }
  end

  def open_ligation_packages(_myops)
    grouped_by_unit = operations.running.group_by { |op| op.temporary[:output_kit_and_unit] }
    grouped_by_unit.each do |kit_and_unit, ops|
      ops.each do |op|
        op.make_collection_and_alias(OUTPUT, 'sample tubes', INPUT)
      end

      ops.each do |op|
        op.temporary[:label_string] = "#{op.output_refs(OUTPUT)[0]} through #{op.output_refs(OUTPUT)[-1]}"
      end

      ##################################
      # get output collection references
      #################################

      show_open_package(kit_and_unit, '', ops.first.temporary[:pack_hash][NUM_SUB_PACKAGES_FIELD_VALUE]) do
        tube = make_tube(closedtube, '', ops.first.tube_label('diluent A'), 'medium')
        num_samples = ops.first.temporary[:pack_hash][NUM_SAMPLES_FIELD_VALUE]
        grid = SVGGrid.new(1, num_samples, 0, 100)
        tokens = ops.first.output_tokens(OUTPUT)
        ops.each_with_index do |op, i|
          _tokens = tokens.dup
          _tokens[-1] = op.temporary[:input_sample]
          ligation_tubes = display_ligation_tubes(*_tokens, COLORS)
          stripwell = ligation_tubes.g
          grid.add(stripwell, 0, i)
        end
        grid.align_with(tube, 'center-right')
        grid.align!('center-left')
        img = SVGElement.new(children: [tube, grid], boundx: 1000, boundy: 300).translate!(30, -50)
        note 'Check that the following tubes are in the pack:'
        # check "a 1.5mL tube of #{DILUENT_A} labeled #{ops.first.ref("diluent A")}"
        # ops.each do |op|
        #   check "a strip of colored tubes labeled #{op.temporary[:label_string].bold}"
        # end
        note display_svg(img, 0.75)
      end

      show do
        title 'Place strips of tubes into a rack'
        check "Take #{pluralizer('tube strip', ops.length)} and place them in the plastic racks"
      end
    end
  end

  def centrifuge_samples(ops)
    labels = ops.map { |op| op.temporary[:label_string] }
    diluentALabels = ops.map { |op| op.ref('diluent A') }.uniq
    show do
      title 'Centrifuge samples for 5 seconds to pull down reagents'
      note 'Put the tag side of the rack toward the center of the centrifuge'
      check "Centrifuge #{(labels + diluentALabels).to_sentence.bold} for 5 seconds."
    end
    # centrifuge_helper("tube set", labels, CENTRIFUGE_TIME,
    #                   "to pull down dried powder.",
    #                   "There may be dried powder on the inside of the tube #{"lid".pluralize(labels.length)}.")
    # centrifuge_helper("tube", diluentALabels, CENTRIFUGE_TIME,
    #                   "to pull down liquid.")
  end

  def vortex_and_centrifuge_samples(ops)
    labels = ops.map { |op| op.temporary[:label_string] }
    vortex_and_centrifuge_helper('tube set', labels, CENTRIFUGE_TIME, VORTEX_TIME,
                                 'to mix.', 'to pull down the fluid.', AREA)
    show do
      title 'Check your tubes.'
      note 'Dried powder of reagents should be dissolved at this point. '
      check 'Look on the side of the tubes to check if you see any remaining powder. If you notice any powder remains on the side, rotate the tubes while vortexing for 5 seconds and centrifuge for 5 seconds.'
    end
  end

  def get_samples_from_thermocycler(myops)
    show do
      title "Retrieve PCR samples from the #{THERMOCYCLER}"
      check "Take #{PCR_SAMPLE.pluralize(myops.length)} #{myops.map { |op| ref(op.input(INPUT).item).bold }.join(', ')} from the #{THERMOCYCLER}"
      note 'If thermocycler run is complete (infinite hold at 4C), hit cancel followed by yes. '
      check "Position #{PCR_SAMPLE.pluralize(myops.length)} on #{BENCH_POST} in front of you."
      centrifuge_proc(PCR_SAMPLE, myops.map { |op| ref(op.input(INPUT).item) }, '3 seconds', 'to pull down liquid.', AREA, balance = false)
    end
  end

  def validate_ligation_inputs(myops)
    expected_inputs = myops.map { |op| ref(op.input(INPUT).item) }
    sample_validation_with_multiple_tries(expected_inputs)
  end

  def rehydrate_ligation_mix(myops, expert_mode)
    gops = myops.group_by { |op| op.temporary[:input_kit_and_unit] }
    gops.each do |_unit, ops|
      ops.each do |op|
        labels = op.output_refs(OUTPUT)
        if expert_mode
          # All transfers at once...
          from = op.ref('diluent A')
          tubeA = make_tube(opentube, [DILUENT_A, from], op.tube_label('diluent A'), 'medium')
          show do
            title "Add #{DILUENT_A} #{from} to #{LIGATION_SAMPLE}s #{op.temporary[:label_string].bold}"
            labels.map! { |l| "<b>#{l}</b>" }
            note "In this step we will be adding #{LIGATION_VOLUME}uL of #{DILUENT_A} #{from} into #{pluralizer('tube', COMPONENTS.length)} "
            "of the colored strip of tubes labeled <b>#{labels[0]} to #{labels[-1]}</b>"
            note "Set a #{P200_POST} pipette to [0 2 4]."
            note "Using add #{LIGATION_VOLUME}uL from #{DILUENT_A} #{from} into each of the #{COMPONENTS.length} tubes."
            warning 'Only open one of the ligation tubes at a time.'

            ligation_tubes = display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS).translate!(0, -20)

            transfer_image = make_transfer(tubeA, ligation_tubes, 300, "#{LIGATION_VOLUME}uL", "(#{P200_POST} pipette)")
            note display_svg(transfer_image, 0.6)

            labels.each do |l|
              check "Transfer #{LIGATION_VOLUME}uL from #{from.bold} into #{l}"
            end

            # t = Table.new
            # t.add_column("Tube", labels)
            # t.add_column("Color", COMPONENTS_COLOR_CODE)
            # table t
          end
        else
          # each transfer
          from = op.ref('diluent A')
          ligation_tubes = display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS)
          ligation_tubes.align!('bottom-left')
          ligation_tubes.align_with(tube, 'bottom-right')
          ligation_tubes.translate!(50)
          tubeA = make_tube(closedtube, DILUENT_A, op.tube_label('diluent A'), 'medium')
          image = SVGElement.new(children: [tubeA, ligation_tubes], boundx: 1000, boundy: tube.boundy)
          image.translate!(50, -50)
          show do
            title "Position #{DILUENT_A} #{from.bold} and colored tubes #{op.temporary[:label_string].bold} in front of you."
            note "In the next steps you will dissolve the powder in #{pluralizer('tube', COMPONENTS.length)} using #{DILUENT_A}"
            note display_svg(image, 0.75)
          end
          ligation_tubes_svg = display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS).translate!(0, -20)
          img = display_svg(ligation_tubes_svg, 0.7)
          # centrifuge_helper(LIGATION_SAMPLE, op.temporary[:labels], CENTRIFUGE_TIME, "to pull down dried powder.", img)

          labels.each.with_index do |label, i|
            show do
              raw transfer_title_proc(LIGATION_VOLUME, from, label)
              # title "Add #{LIGATION_VOLUME}uL #{DILUENT_A} #{from.bold} to #{LIGATION_SAMPLE} #{label}
              warning 'Change pipette tip between tubes'
              note "Set a #{P200_POST} pipette to [0 2 4]."
              check "Add #{LIGATION_VOLUME}uL from #{from.bold} into tube #{label.bold}"
              note "Close tube #{label.bold}"
              tubeA = make_tube(opentube, [DILUENT_A, from], '', 'medium')
              transfer_image = transfer_to_ligation_tubes_with_highlight(
                tubeA, i, *op.output_tokens(OUTPUT), COLORS, LIGATION_VOLUME, "(#{P200_POST} pipette)"
              )
              note display_svg(transfer_image, 0.6)
            end
          end
        end
        # vortex_and_centrifuge_helper(LIGATION_SAMPLE,
        #                              op.temporary[:labels],
        #                              VORTEX_TIME,
        #                              CENTRIFUGE_TIME,
        #                              "to mix well.",
        #                              "to pull down liquid.",
        #                              img)

        # show do
        #   title "Mix ligation tubes #{op.temporary[:labels][0]} through #{op.temporary[:labels][-1]}"
        #   note display_svg(display_ligation_tubes(op.temporary[:input_kit], THIS_UNIT, COMPONENTS, op.temporary[:input_sample]), 0.5)
        #   warning "Make sure tubes are firmly closed before proceeding."
        #   check "Vortex #{pluralizer("tube", COMPONENTS.length)} for 5 seconds to mix well."
        #   warning "Make sure all powder is dissolved. Vortex for 10 more seconds to dissolve powder."
        #   check "Centrifuge #{pluralizer("tube", COMPONENTS.length)} for 5 seconds to pull down liquid."
        #   check "Place tubes back into the rack."
        # end
      end
    end

    # vortex_and_centrifuge_helper("tube set",
    #                              myops.map { |op| op.temporary[:label_string] },
    #                              VORTEX_TIME,
    #                              CENTRIFUGE_TIME,
    #                              "to mix well.",
    #                              "to pull down liquid.")
  end

  def add_template(myops, expert_mode)
    gops = myops.group_by { |op| op.temporary[:input_kit_and_unit] }
    gops.each do |_unit, ops|
      ops.each do |op|
        from = op.input_ref(INPUT)
        labels = op.output_refs(OUTPUT)
        to_strip_name = "#{op.temporary[:output_unit]}-#{op.temporary[:output_sample]}"
        tubeP = make_tube(opentube, ['PCR Sample'], op.input_tube_label(INPUT), 'small').scale(0.75)
        ligation_tubes = display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS).translate!(0, -20)
        pre_transfer_validation_with_multiple_tries(from, to_strip_name, tubeP, ligation_tubes)
        if expert_mode
          # All transfers at once...
          show do
            raw transfer_title_proc(SAMPLE_VOLUME, from, op.temporary[:label_string])
            warning 'Change of pipette tip between tubes'
            check "Using a P2 pipette set to [1 2 0]."
            note "Add #{SAMPLE_VOLUME}uL from #{from.bold} into each of #{op.temporary[:label_string].bold}. Only open one ligation tube at a time."

            transfer_image = make_transfer(tubeP, ligation_tubes, 300, "#{SAMPLE_VOLUME}uL", "(Post-PCR P2 pipette)")
            note display_svg(transfer_image, 0.6)
            labels.each do |l|
              check "Transfer #{SAMPLE_VOLUME}uL from #{from.bold} into #{l}"
            end
          end
        else
          show do
            title "Position #{PCR_SAMPLE} #{from.bold} and #{LIGATION_SAMPLE.pluralize(COMPONENTS.length)} #{op.temporary[:label_string].bold} in front of you."
            note "In the next steps you will add #{PCR_SAMPLE} to #{pluralizer('tube', COMPONENTS.length)}"
            tube = make_tube(closedtube, [PCR_SAMPLE, from], '', 'small')
            ligation_tubes = display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS)
            ligation_tubes.align!('bottom-left')
            ligation_tubes.align_with(tube, 'bottom-right')
            ligation_tubes.translate!(50)
            image = SVGElement.new(children: [tube, ligation_tubes], boundx: 1000, boundy: tube.boundy)
            image.translate!(50, -30)
            note display_svg(image, 0.75)
          end
          labels.each.with_index do |label, i|
            show do
              raw transfer_title_proc(SAMPLE_VOLUME, from, label)
              # title "Add #{PCR_SAMPLE} #{from.bold} to #{LIGATION_SAMPLE} #{label}"
              warning 'Change of pipette tip between tubes'
              check "Using a P2 pipette set to [1 2 0], add #{SAMPLE_VOLUME}uL from #{from.bold} into tube #{label.bold}"
              note "Close tube #{label.bold}"
              tube = make_tube(opentube, ['PCR Sample'], op.input_tube_label(INPUT), 'small').scale(0.75)
              img = transfer_to_ligation_tubes_with_highlight(tube, i, *op.output_tokens(OUTPUT), COLORS, SAMPLE_VOLUME, "(Post-PCR P2 pipette)")
              note display_svg(img, 0.6)
            end
          end
        end

        # ligation_tubes_svg = display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS)
        # img = display_svg(ligation_tubes_svg, 0.7)
        # vortex_and_centrifuge_helper(LIGATION_SAMPLE,
        #                              op.output_refs(OUTPUT),
        #                              VORTEX_TIME,
        #                              CENTRIFUGE_TIME,
        #                              "to mix well.",
        #                              "to pull down liquid.",
        #                              img)
      end
    end
  end

  def start_ligation(myops)
    gops = myops.group_by { |op| op.temporary[:input_kit_and_unit] }
    ops = gops.map { |_unit, ops| ops }.flatten # organize by unit
    # show do
    #   title "Place #{LIGATION_SAMPLE.pluralize(COMPONENTS.length)} into #{THERMOCYCLER}"
    #   check "Place #{pluralizer(LIGATION_SAMPLE, ops.length * COMPONENTS.length)} (#{ops.length} #{"set".pluralize(ops.length)} of #{COMPONENTS.length})" \
    #     " in the #{THERMOCYCLER}"
    #   check "Close and tighten the lid."
    #   ops.each do |op|
    #     note display_svg(display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS), 0.5)
    #   end
    # end

    add_to_thermocycler('sample', ops.length * COMPONENTS.length, LIG_CYCLE, ligation_cycle_table, 'Ligation')

    show do
      title 'Set a timer for 45 minutes'
      #   check "Return to the #{PRE_PCR}."
      check 'Find a timer and set it for 45 minutes. Continue to next step.'
    end
  end

  def ligation_cycle_table
    t = Table.new
    cycles_temp = "<table style=\"width:100%\">
                        <tr><td>95C</td></tr>
                        <tr><td>37C</td></tr>
          </table>"
    cycles_time = "<table style=\"width:100%\">
                        <tr><td>30 sec</td></tr>
                        <tr><td>4 min</td></tr>
          </table>"
    # t.add_column("STEP", ["Initial Melt", "10 cycles of", "Hold"])
    t.add_column('TEMP', ['95C', cycles_temp, '4C'])
    t.add_column('TIME', ['4 min', cycles_time, 'forever'])
    t
  end

  def cleanup(myops)
    items = [INPUT].map { |x| myops.map { |op| op.input(x) } }.flatten.uniq
    item_refs = [INPUT].map { |x| myops.map { |op| op.input_ref(x) } }.flatten.uniq
    item_refs = [] if KIT_NAME == 'uw kit'
    temp_items = ['diluent A'].map { |x| myops.map { |op| op.ref(x) } }.flatten.uniq

    all_refs = temp_items + item_refs

    show do
      title "Discard items into the #{WASTE_POST}"

      note "Discard the following items into the #{WASTE_POST} in the #{AREA}"
      all_refs.each { |r| bullet r }
    end
    # clean_area AREA
  end

  def conclusion(myops)
    if KIT_NAME == 'uw kit'
      show do
        title 'Please return PCR products'
        check "Place #{'sample'.pluralize(myops.length)} #{myops.map { |op| op.input_ref(INPUT) }.join(', ')} in the -20."
        image 'Actions/OLA/map_Klavins.svg '
      end
    end
    show do
      title 'Thank you!'
      note "The #{THERMOCYCLER} will be done in 50 minutes."
    end
  end
end

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object_types:
  - {name: OLA viral RNA, description: RNA extracted from patient plasma, handler: sample_container, unit: OLASimple Sample, release_method: return, sample_type_name: OLASimple Sample}
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operation_type: OLASimple PCR
category: OLASimple
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Patient Sample, sample_types: [OLASimple Sample], object_types: [OLA viral RNA], routing: P}
  - {ftype: sample, role: output, name: PCR Product, sample_types: [OLASimple Sample], object_types: [OLA PCR], routing: P}
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documentation:
Generate PCR products from cell lysate which will be used later to detect HIV mutations.

precondition:
eval Library.find_by_name("OLAScheduling").code("source").content
extend OLAScheduling

def precondition(op)
  schedule_same_kit_ops(op)
  true
end

cost_model:
def cost(op)
  { labor: 7.5, materials: 0 }
end

protocol:
# frozen_string_literal: true

##########################################
#
#
# OLASimple PCR
# author: Justin Vrana
# date: March 2018
#
#
##########################################

needs 'OLASimple/OLAConstants'
needs 'OLASimple/OLALib'
needs 'OLASimple/OLAGraphics'
needs 'OLASimple/JobComments'
needs 'OLASimple/OLAKitIDs'

# TODO: There should be NO calculations in the show blocks

class Protocol
  include OLAConstants
  include OLALib
  include OLAGraphics
  include JobComments
  include OLAKitIDs

  ##########################################
  # INPUT/OUTPUT
  ##########################################
  INPUT = 'Patient Sample'
  OUTPUT = 'PCR Product'
  PACK = 'PCR Pack'
  A = 'Diluent A'

  ##########################################
  # TERMINOLOGY
  ##########################################

  ##########################################
  # Protocol Specifics
  ##########################################

  PACK_HASH = PCR_UNIT
  AREA = PRE_PCR
  SAMPLE_VOLUME = 10 # volume of sample to add to PCR mix
  PCR_MIX_VOLUME = PACK_HASH['PCR Rehydration Volume'] # volume of water to rehydrate PCR mix in
  CENTRIFUGE_TIME = '5 seconds' # time to pulse centrifuge to pull down dried powder
  VORTEX_TIME = '5 seconds' # time to pulse vortex to mix

  # for debugging
  PREV_COMPONENT = '6'
  PREV_UNIT = 'E'

  TUBE_CAP_WARNING = 'Check to make sure tube caps are completely closed.'

  component_to_name_hash = {
    'diluent A' => 'Diluent A',
    'sample tube' => 'PCR sample'
  }

  MATERIALS = [
    'P200 pipette and filtered tips',
    'P20 pipette and filtered tips',
    'a timer',
    'nitrile gloves (wear tight gloves to reduce contamination risk)',
    'pre-PCR rack',
    'a balancing tube (on rack)',
    'biohazard waste (red bag)',
    'vortex',
    'centrifuge'
  ].freeze

  SAMPLE_ALIAS = 'RNA Extract'

  ##########################################
  # ##
  # Input Restrictions:
  # Input needs a kit, unit, components,
  # and sample data associations to work properly
  ##########################################

  def main
    operations.running.retrieve interactive: false
    operations.running.make
    save_user operations

    if debug
      labels = %w[001 002]
      kit_num = 'K001'
      operations.each.with_index do |op, i|
        op.input(INPUT).item.associate(SAMPLE_KEY, labels[i])
        op.input(INPUT).item.associate(COMPONENT_KEY, PREV_COMPONENT)
        op.input(INPUT).item.associate(KIT_KEY, kit_num)
        op.input(INPUT).item.associate(UNIT_KEY, PREV_UNIT)
        op.input(INPUT).item.associate(PATIENT_KEY, "A PATIENT ID")        
      end
    end

    save_temporary_input_values(operations, INPUT)
    operations.each do |op|
      op.temporary[:pack_hash] = PACK_HASH
    end
    save_temporary_output_values(operations)

    run_checks(operations)
    kit_introduction(operations.running)
    record_technician_id
    safety_warning
    area_preparation('pre-PCR', MATERIALS, POST_PCR)
    simple_clean("OLASimple PCR")
    get_inputs(operations.running)
    validate_pcr_inputs(operations.running)
    get_pcr_packages(operations.running)
    validate_pcr_packages(operations.running)
    open_pcr_packages(operations.running)
    # debug_table(operations.running)
    # check_for_tube_defects sorted_ops.running
    # nuttada thaw
    # nuttada needs vortex + centrigure
    centrifuge_samples(sorted_ops.running)
    resuspend_pcr_mix(sorted_ops.running)
    add_template_to_master_mix(sorted_ops.running)
  
    cleanup(sorted_ops)
    start_thermocycler(sorted_ops.running)
    wash_self
    accept_comments
    conclusion(sorted_ops)
    {}
  end # main

  # end of main

  #######################################
  # Utilities
  #######################################
  def save_user(ops)
    ops.each do |op|
      username = get_technician_name(jid)
      op.associate(:technician, username)
    end
  end

  def run_checks(_myops)
    if operations.running.empty?
      show do
        title 'All operations have errored'
        note "Contact #{SUPERVISOR}"
        operations.each do |op|
          note (op.errors.map { |k, v| [k, v] }).to_s
        end
      end
      {}
    end
  end

  def sorted_ops
    operations.sort_by { |op| op.output_ref(OUTPUT) }.extend(OperationList)
  end

  #######################################
  # Instructions
  #######################################

  def kit_introduction(ops)
    show do
      title "Welcome to OLASimple PCR"
      note 'You will be running the OLASimple PCR protocol. You will start with RNA Extraction products and will generate PCR products from the samples and use them later to detect HIV mutations.'
    end
  end

  def get_inputs(myops)
    gops = group_packages(myops)

    show do
      title "Place #{SAMPLE_ALIAS.bold} samples in #{AREA.bold}."
      note "Retrieve from cold rack and place the following #{SAMPLE_ALIAS.bold} samples into a rack in the #{AREA.bold} area."
      note 'Samples may also be in the -20 freezer if this protocol has been delayed.'
      tubes = []
      gops.each do |unit, ops|
        ops.each_with_index do |op, i|
          tubes << make_tube(closedtube, '', ref(op.input(INPUT).item).split('-'), 'medium', true).translate!(100 * i)
        end
        img = SVGElement.new(children: tubes, boundy: 300, boundx: 300).translate!(20)
        note display_svg(img)
      end
    end
  end

  def validate_pcr_inputs(myops)
    expected_inputs = myops.map { |op| ref(op.input(INPUT).item) }
    sample_validation_with_multiple_tries(expected_inputs)
  end

  def get_pcr_packages(myops)
    # TODO: remove all references to 4C fridge and replace with refridgerator
    gops = group_packages(myops)
    show do
      title "Take #{PCR_PKG_NAME.pluralize(gops.length)} from the #{FRIDGE_PRE} and place on the #{BENCH_PRE} in the #{AREA}"
      # check "Take the following from the #{FRIDGE} and place #{pluralizer(PACKAGE, gops.length)} on the #{BENCH}"
      gops.each do |unit, _ops|
        check 'Take package ' "#{unit.bold}" ' from fridge.'
        check 'Place package ' "#{unit.bold}" ' on the bench.'
      end
    end
  end

  def validate_pcr_packages(myops)
    group_packages(myops).each { |unit, _ops| package_validation_with_multiple_tries(unit) }
  end

  def open_pcr_packages(myops)
    grouped_by_unit = myops.group_by { |op| op.temporary[:output_kit_and_unit] }
    grouped_by_unit.each do |kit_and_unit, ops|
      ops.each do |op|
        op.make_item_and_alias(OUTPUT, 'sample tube', INPUT)
      end

      show_open_package(kit_and_unit, '', ops.first.temporary[:pack_hash][NUM_SUB_PACKAGES_FIELD_VALUE]) do
        # img
        pcr_tube_labels = ops.map { |op| op.output_tube_label(OUTPUT) }

        num_samples = ops.first.temporary[:pack_hash][NUM_SAMPLES_FIELD_VALUE]
        kit, unit, component, sample = ops.first.output_tokens(OUTPUT)
        # diluentATube = label_tube(closedtube, tube_label(kit, unit, diluentAcomponent, ""))
        diluentATube = make_tube(closedtube, 'Diluent A', ops.first.tube_label('diluent A'), 'medium', true)

        grid = SVGGrid.new(num_samples, 1, 75, 10)
        pcr_tube_labels.each_with_index do |tube_label, i|
          pcrtube = make_tube(closedtube, '', tube_label, 'powder', true).scale(0.75)
          grid.add(pcrtube, i, 0)
        end
        grid.boundy = closedtube.boundy * 0.75
        grid.align_with(diluentATube, 'center-right')
        grid.align!('center-left')
        grid.translate!(25, 25)
        img = SVGElement.new(children: [diluentATube, grid], boundy: diluentATube.boundy + 50, boundx: 300).translate!(20)

        check "Look for #{num_samples + 1} #{'tube'.pluralize(num_samples)}"
        check 'Place tubes on a rack'
        note display_svg(img, 0.75)
      end
    end
  end

  def debug_table(myops)
    if debug
      show do
        title 'DEBUG: I/O Table'

        table myops.running.start_table
                   .custom_column(heading: 'Input Kit') { |op| op.temporary[:input_kit] }
                   .custom_column(heading: 'Output Kit') { |op| op.temporary[:output_kit] }
                   .custom_column(heading: 'Input Unit') { |op| op.temporary[:input_unit] }
                   .custom_column(heading: 'Output Unit') { |op| op.temporary[:output_unit] }
                   .custom_column(heading: 'Diluent A') { |op| op.ref('diluent A') }
                   .custom_column(heading: 'Input Ref') { |op| op.input_ref(INPUT) }
                   .custom_column(heading: 'Output Ref') { |op| op.output_ref(OUTPUT) }
                   .end_table
      end
    end
  end

  def centrifuge_samples(ops)
    labels = ops.map { |op| ref(op.output(OUTPUT).item) }
    diluentALabels = ops.map { |op| op.ref('diluent A') }
    show do
      title 'Centrifuge all samples for 5 seconds'
      check 'Place all tubes and samples in the centrifuge, along with a balancing tube. It is important to balance the tubes.'
      check 'Centrifuge the tubes for 5 seconds to pull down liquid and dried reagents'
    end
    # centrifuge_helper("sample", labels, CENTRIFUGE_TIME,
    #                   "to pull down dried powder.",
    #                   "There may be dried powder on the inside of the tube #{"lid".pluralize(labels.length)}.")
    # centrifuge_helper("tube", diluentALabels, CENTRIFUGE_TIME,
    #                   "to pull down liquid.")
  end

  def resuspend_pcr_mix(myops)
    gops = group_packages(myops)
    gops.each do |_unit, ops|
      from = ops.first.ref('diluent A')
      tos = ops.map { |op| ref(op.output(OUTPUT).item) }
      to_tubes = ops.map.with_index do |op, i|
        to_item = op.output(OUTPUT).item
        to = ref(to_item)
        tubeP = make_tube(opentube, [PCR_SAMPLE, to], '', fluid = 'powder').scale!(0.75)
        tubeP.translate!(120 * i, 0)
      end
      tubeA = make_tube(opentube, [DILUENT_A, from], '', fluid = 'medium')
      tubes_P = SVGElement.new(children: to_tubes, boundx: 200, boundy: 200)
      img = make_transfer(tubeA, tubes_P, 300, "#{PCR_MIX_VOLUME}uL", "(#{P200_PRE} pipette)")
      img.translate!(25)
      show do
        raw transfer_title_proc(PCR_MIX_VOLUME, from, tos.to_sentence)
        # title "Add #{PCR_MIX_VOLUME}uL from #{DILUENT_A} #{from.bold} to #{PCR_SAMPLE} #{to.bold}"
        note "#{DILUENT_A} will be used to dissolve the powder in the #{PCR_SAMPLE}s."
        note "Use a #{P200_PRE} pipette and set it to <b>[0 4 0]</b>."
        note 'Avoid touching the inside of the lid, as this could cause contamination. '
        tos.each do |to|
          check "Transfer #{PCR_MIX_VOLUME}uL from #{from.bold} into #{to.bold}"
          note 'Discard pipette tip.'
        end
        note display_svg(img, 0.75)
      end
      # TODO: add "make sure tube caps are completely closed" for any centrifugation or vortexing step.
      #
    end

    labels = myops.map { |op| ref(op.output(OUTPUT).item) }
    vortex_and_centrifuge_helper('sample',
                                 labels,
                                 VORTEX_TIME, CENTRIFUGE_TIME,
                                 'to mix.', 'to pull down liquid', AREA, mynote = nil)
  end

  def add_template_to_master_mix(myops)
    gops = group_packages(myops)

    gops.each do |_unit, ops|
      samples = ops.map { |op| op.input(INPUT).item }
      sample_refs = samples.map { |sample| ref(sample) }
      ops.each do |op|
        from = ref(op.input(INPUT).item)
        to = ref(op.output(OUTPUT).item)
        tubeS = make_tube(opentube, [SAMPLE_ALIAS, from], '', fluid = 'medium')
        tubeP = make_tube(opentube, [PCR_SAMPLE, to], '', fluid = 'medium').scale!(0.75)
        tubeS_closed = make_tube(closedtube, [SAMPLE_ALIAS, from], '', fluid = 'medium')
        tubeP_closed = make_tube(closedtube, [PCR_SAMPLE, to], '', fluid = 'medium').translate!(0,40).scale!(0.75)
        pre_transfer_validation_with_multiple_tries(from, to, tubeS_closed, tubeP_closed)
        show do
          raw transfer_title_proc(SAMPLE_VOLUME, "#{SAMPLE_ALIAS} #{from}", "#{PCR_SAMPLE} #{to}")
          note "Carefully open tube #{from.bold} and tube #{to.bold}"
          note "Use a #{P20_PRE} pipette and set it to <b>[1 0 0]</b>."
          check "Transfer #{SAMPLE_VOLUME}uL from #{from.bold} into #{to.bold}"
          img = make_transfer(tubeS, tubeP, 300, "#{SAMPLE_VOLUME}uL", "(#{P20_PRE} pipette)")
          img.translate!(25)
          note display_svg(img, 0.75)
          check 'Close tubes and discard pipette tip'
        end
      end
    end
  end

  def start_thermocycler(ops)
    # Adds the PCR tubes to the PCR machine.
    # Instructions for PCR cycles.
    #
    samples = ops.map { |op| op.output(OUTPUT).item }
    sample_refs = samples.map { |sample| ref(sample) }

    # END OF PRE_PCR PROTOCOL

    vortex_and_centrifuge_helper(PCR_SAMPLE,
                                 sample_refs,
                                 VORTEX_TIME, CENTRIFUGE_TIME,
                                 'to mix.', 'to pull down liquid', AREA, mynote = nil)

    t = Table.new
    cycles_temp = "<table style=\"width:100%\">
                    <tr><td>95C</td></tr>
                    <tr><td>57C</td></tr>
                    <tr><td>72C</td></tr>
      </table>"
    cycles_time = "<table style=\"width:100%\">
                    <tr><td>30 sec</td></tr>
                    <tr><td>30 sec</td></tr>
                    <tr><td>30 sec</td></tr>
      </table>"
    t.add_column('STEP', ['Initial Melt', '45 cycles of', 'Extension', 'Hold'])
    t.add_column('TEMP', ['95C', cycles_temp, '72C', '4C'])
    t.add_column('TIME', ['4 min', cycles_time, '7 min', 'forever'])

    show do
      title 'Run PCR'
      check 'Close all the lids of the pipette tip boxes and pre-PCR rack'
      check "Take only the PCR tubes (#{sample_refs.to_sentence}) with you"
      check 'Place the PCR samples in the assigned thermocycler, close, and tighten the lid'
      check "Select the program named #{PCR_CYCLE} under OS"
      check "Hit #{'Run'.quote} and #{'OK to 50uL'.quote}"
      table t
    end

    operations.each do |op|
      op.output(OUTPUT).item.move THERMOCYCLER
    end

    # END OF POST_PCR PCR REACTION...
  end

  def cleanup(myops)
    items = [INPUT].map { |x| myops.map { |op| op.input(x) } }.flatten.uniq
    item_refs = [INPUT].map { |x| myops.map { |op| op.input_ref(x) } }.flatten.uniq
    temp_items = ['diluent A'].map { |x| myops.map { |op| op.ref(x) } }.flatten.uniq

    all_refs = temp_items + item_refs

    show do
      title "Discard items into the #{WASTE_PRE}"

      note "Discard the following items into the #{WASTE_PRE}"
      all_refs.each { |r| bullet r }
    end
    # clean_area AREA
  end

  def conclusion(_myops)
    show do
      title 'Thank you!'
      note 'You may start the next protocol in 2 hours.'
    end
  end
end # Class

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object_types:
  - {name: OLA Detection Strips, description: OLA Detection STrips, handler: collection, unit: strip, release_method: return, rows: 1, columns: 12}
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operation_type: OLASimple Paper Detection
category: OLASimple
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Ligation Product, sample_types: [OLASimple Sample], object_types: [OLA Ligation Stripwell], routing: LP}
  - {ftype: sample, role: output, name: Detection Strip, sample_types: [OLASimple Sample], object_types: [OLA Detection Strips], routing: LP}
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documentation:
Samples from the OLASimple ligation protocol are added onto paper detection strips. Then, an an image of the strips is scanned and uploaded. The strips will detect whether the sample has drug resistance mutations, and the protocol will extract this information using computer vision.

This protocol relies on an image processing service available at the URL given in the OLAConstants library as `OLA_IP_API_URL`.

precondition:
eval Library.find_by_name("OLAScheduling").code("source").content
extend OLAScheduling

BATCH_SIZE = 2
def precondition(op)
  schedule_same_kit_ops(op)
  true
end

cost_model:
def cost(op)
  { labor: 12.5, materials: 0 }
end

protocol:
# frozen_string_literal: true

##########################################
#
#
# OLASimple Detection
# author: Justin Vrana
# date: March 2018
#
#
##########################################

needs 'OLASimple/OLAConstants'
needs 'OLASimple/OLALib'
needs 'OLASimple/OLAGraphics'
needs 'OLASimple/JobComments'
needs 'OLASimple/OLAKitIDs'

class Protocol
  include OLAConstants
  include OLALib
  include OLAGraphics
  include JobComments
  include OLAKitIDs

  ###########################################
  ## INPUT/OUTPUT
  ###########################################
  # F
  INPUT = 'Ligation Product'
  OUTPUT = 'Detection Strip'
  PACK = 'Detection Pack'
  A = 'Diluent A'
  G = 'Gold Mix'
  S = 'Stop Mix'

  ###########################################
  ## TERMINOLOGY
  ###########################################

  ###########################################
  ## Protocol Specifics
  ###########################################
  AREA = POST_PCR
  NUM_SUB_PACKAGES = 4

  CENTRIFUGE_TIME = '5 seconds' # time to pulse centrifuge to pull down dried powder
  VORTEX_TIME = '5 seconds' # time to pulse vortex to mix
  TUBE_CAP_WARNING = 'Check to make sure tube caps are completely closed.'
  PACK_HASH = DETECTION_UNIT
  THIS_UNIT = PACK_HASH['Unit Name']
  STOP_VOLUME = PACK_HASH['Stop Rehydration Volume']
  GOLD_VOLUME = PACK_HASH['Gold Rehydration Volume']
  STOP_TO_SAMPLE_VOLUME = PACK_HASH['Stop to Sample Volume'] # volume of competitive oligos to add to sample
  SAMPLE_TO_STRIP_VOLUME = PACK_HASH['Sample to Strip Volume'] # volume of sample to add to the strips
  GOLD_TO_STRIP_VOLUME = PACK_HASH['Gold to Strip Volume']
  PREV_COMPONENTS = PACK_HASH['Components']['strips']
  MUTATION_LABELS = PACK_HASH['Mutation Labels']

  PREV_UNIT = 'L'
  MATERIALS = [
    'P1000 pipette and filtered tips',
    'P200 pipette and filtered tips',
    'P20 pipette and filtered tips',
    'a spray bottle of 10% v/v bleach',
    'a spray bottle of 70% v/v ethanol',
    'a timer',
    'nitrile gloves'
  ].freeze

  POSITIVE = 'positive'
  NEGATIVE = 'negative'
  DEBUG_UPLOAD_ID = 1

  ##########################################
  # ##
  # Input Restrictions:
  # Input needs a kit, unit, components,
  # and sample data associations to work properly
  ##########################################

  def main
    operations.each do |op|
      op.temporary[:pack_hash] = PACK_HASH
    end
    save_user operations
    operations.running.retrieve interactive: false
    debug_setup operations
    save_temporary_input_values(operations, INPUT)
    save_temporary_output_values(operations)
    expert_mode = true
    introduction operations.running
    record_technician_id
    safety_warning
    area_preparation POST_PCR, MATERIALS, PRE_PCR
    simple_clean('OLASimple Paper Detection')

    get_detection_packages operations.running
    validate_detection_packages operations.running
    open_detection_packages operations.running
    rehydrate_stop_solution(sorted_ops.running)
    wait_for_pcr sorted_ops.running
    retrieve_inputs(sorted_ops.running)
    validate_detection_inputs(sorted_ops.running)

    stop_ligation_product(sorted_ops.running, expert_mode)
    # short_timer
    rehydrate_gold_solution(sorted_ops.running)
    display_detection_strip_diagram
    add_ligation_product_to_strips(sorted_ops.running)
    add_gold_solution(sorted_ops.running)
    read_from_scanner(sorted_ops.running)
    analysis operations.running

    discard_things(sorted_ops.running)
    clean_area(AREA)
    conclusion sorted_ops
    wash_self
    accept_comments
    { 'Ok' => 1 }
  end

  def sorted_ops
    operations.sort_by { |op| op.output_ref(OUTPUT) }.extend(OperationList)
  end

  def save_user(ops)
    ops.each do |op|
      username = get_technician_name(jid)
      op.associate(:technician, username)
    end
  end

  def debug_setup(ops)
    # make an alias for the inputs
    if debug
      ops.each_with_index do |op, i|
        kit_num = 'K001'
        sample_num = sample_num_to_id(i + 1)
        make_alias(op.input(INPUT).item, kit_num, PREV_UNIT, PREV_COMPONENTS, 'a patient id', sample_num)
      end
    end
  end

  def run_checks(_myops)
    if operations.running.empty?
      show do
        title 'All operations have errored'
        note "Contact #{SUPERVISOR}"
        operations.each do |op|
          note (op.errors.map { |k, v| [k, v] }).to_s
        end
      end
      {}
    end
  end

  def introduction(_myops)
    show do
      title 'Welcome to OLASimple Paper Detection procotol'
      note 'In this protocol you will be adding samples from the ligation protocol onto paper detection strips. ' \
            'You will then scan an image of the strips and upload the image. The strips will detect whether the sample has drug resistance mutations.'
    end
  end

  def get_detection_packages(myops)
    gops = group_packages(myops)
    show do
      title "Get #{DET_PKG_NAME.pluralize(gops.length)} from the #{FRIDGE_POST}"
      gops.each do |unit, _ops|
        check "Retrieve package #{unit.bold}"
      end
      check "Place #{pluralizer('package', gops.length)} on the bench in the #{AREA.bold} area."
    end
  end

  def validate_detection_packages(myops)
    group_packages(myops).each { |unit, _ops| package_validation_with_multiple_tries(unit) }
  end

  def open_detection_packages(myops)
    kit_ops = myops.running.group_by { |op| op.temporary[:output_kit] }
    kit_ops.each do |kit, ops|
      ops.each do |op|
        op.make_collection_and_alias(OUTPUT, 'strips', INPUT)
      end

      ops.each do |op|
        op.temporary[:label_string] = "#{op.output_refs(OUTPUT)[0]} through #{op.output_refs(OUTPUT)[-1]}"
      end

      tokens = ops.first.output_tokens(OUTPUT)
      num_samples = ops.first.temporary[:pack_hash][NUM_SAMPLES_FIELD_VALUE]

      grid = SVGGrid.new(num_samples, num_samples, 50, 50)
      ops.each_with_index do |op, i|
        tokens = op.output_tokens(OUTPUT)
        grid.add(display_strip_panel(*tokens, COLORS).scale!(0.5), i, i)
      end

      diluentATube = make_tube(closedtube, 'Diluent A', ops.first.tube_label('diluent A'), 'medium', true).scale!(0.75)
      stopTube = make_tube(closedtube, 'Stop mix', ops.first.tube_label('stop'), 'powder', true).scale!(0.75)
      goldTube = make_tube(closedtube, 'Gold mix', ops.first.tube_label('gold'), 'powder', true, fluidclass: 'pinkfluid').scale!(0.75)
      diluentATube.translate!(50, 75)
      goldTube.align_with(diluentATube, 'top-right').translate!(50)
      stopTube.align_with(goldTube, 'top-right').translate!(50)
      img = SVGElement.new(children: [grid, diluentATube, goldTube, stopTube], boundx: 500, boundy: 220)

      show_open_package(kit, THIS_UNIT, NUM_SUB_PACKAGES) do
        note "Check that there are the following tubes and #{STRIPS}:"
        note display_svg(img, 1.0)
      end
    end
  end

  def rehydrate_stop_solution(myops)
    gops = group_packages(myops)
    gops.each do |_unit, ops|
      from = ops.first.ref('diluent A')
      to = ops.first.ref('stop')
      show do
        raw transfer_title_proc(STOP_VOLUME, from, to)
        check "Centrifuge tube #{to} for 5 seconds to pull down powder."
        check "Set a #{P200_POST} pipette to <b>[0 3 6]</b>. Add #{STOP_VOLUME}uL from #{from.bold} into tube #{to.bold}"
        tubeA = make_tube(opentube, DILUENT_A, ops.first.tube_label('diluent A'), 'medium')
        tubeS = make_tube(opentube, STOP_MIX, ops.first.tube_label('stop'), 'powder')
        img = make_transfer(tubeA, tubeS, 300, "#{STOP_VOLUME}uL", "(#{P200_POST} pipette)")
        img.translate!(20)
        note display_svg(img, 0.75)
      end

      vortex_and_centrifuge_helper('tube',
                                   [to],
                                   VORTEX_TIME, CENTRIFUGE_TIME,
                                   'to mix.', 'to pull down liquid', AREA, mynote = nil)
    end
  end

  def wait_for_pcr(_myops)
    show do
      title 'Wait for thermocycler to finish'

      note "The thermocycler containing the #{LIGATION_SAMPLE.pluralize(5)} needs to complete before continuing"
      check "Check the #{THERMOCYCLER} to see if the samples are done."
      bullet 'If the cycle is at "hold at 4C" then it is done. If it is done, hit CANCEL followed by YES. If not, continue waiting.'
      note 'Else, if your ligation sample has been stored, retrieve from M20, 4th shelf down, green box.'
      warning "Do not proceed until the #{THERMOCYCLER} is finished."
    end
  end

  def retrieve_inputs(myops)
    gops = myops.group_by { |op| op.temporary[:output_kit_and_unit] }
    num_tubes = myops.inject(0) { |sum, op| sum + op.output_refs(OUTPUT).length }
    # ordered_ops = gops.map {|unit, ops| ops}.flatten.extend(OperationList) # organize by unit
    show do
      title "Take #{pluralizer('sample', num_tubes)} from the #{THERMOCYCLER} and place on rack in #{AREA.bold} area"
      check 'Centrifuge for 5 seconds to pull down liquid'
      check 'Place on rack in post-PCR area'

      gops.each do |_unit, ops|
        ops.each do |op|
          note display_svg(display_ligation_tubes(*op.input_tokens(INPUT), COLORS), 0.75)
        end
      end
    end
  end

  def validate_detection_inputs(myops)
    expected_inputs = myops.map { |op| "#{op.temporary[:input_unit]}-#{op.temporary[:input_sample]}" }
    sample_validation_with_multiple_tries(expected_inputs)
  end

  def stop_ligation_product(myops, expert_mode)
    gops = myops.group_by { |op| op.temporary[:output_kit_and_unit] }

    gops.each do |_unit, ops|
      from = ops.first.ref('stop')
      ops.each do |op|
        to_labels = op.input_refs(INPUT)
        show do
          # title "Get ready to add #{STOP_MIX} to #{LIGATION_SAMPLE.pluralize(MUTATIONS.length)} for #{unit}"
          title "Position #{STOP_MIX} #{from.bold} and colored tubes #{op.input_refs(INPUT)[0].bold} to #{op.input_refs(INPUT)[-1].bold} in front of you."
          note "In the next steps you will add #{STOP_MIX} to #{pluralizer('tube', PREV_COMPONENTS.length)}"
          tube = closedtube.scale(0.75)
          tube.translate!(0, -50)
          tube = tube.g
          tube.g.boundx = 0
          labeled_tube = make_tube(closedtube, STOP_MIX, op.tube_label('stop'), 'medium', true)
          ligation_tubes = display_ligation_tubes(*op.input_tokens(INPUT), COLORS)
          ligation_tubes.align!('bottom-left')
          ligation_tubes.align_with(tube, 'bottom-right')
          ligation_tubes.translate!(50)
          image = SVGElement.new(children: [labeled_tube, ligation_tubes], boundx: 600, boundy: tube.boundy)
          image.translate!(50)
          image.boundy = image.boundy + 50
          note display_svg(image, 0.75)
        end
        if expert_mode
          show do
            # title "Get ready to add #{STOP_MIX} to #{LIGATION_SAMPLE.pluralize(MUTATIONS.length)} for #{unit}"
            title "Add #{STOP_MIX} #{from.bold} to each of #{op.input_refs(INPUT)[0].bold} to #{op.input_refs(INPUT)[-1].bold} in front of you."
            tube = closedtube.scale(0.75)
            tube.translate!(0, -50)
            tube = tube.g
            tube.g.boundx = 0
            labeled_tube = make_tube(closedtube, STOP_MIX, op.tube_label('stop'), 'medium', true)
            ligation_tubes = display_ligation_tubes(*op.input_tokens(INPUT), COLORS)
            ligation_tubes.align!('bottom-left')
            ligation_tubes.align_with(tube, 'bottom-right')
            ligation_tubes.translate!(50)
            transfer_image = make_transfer(labeled_tube, ligation_tubes, 300, "#{STOP_TO_SAMPLE_VOLUME}uL", "(#{P20_POST} pipette)")
            note display_svg(transfer_image, 0.75)
            to_labels.each do |l|
              check "Transfer #{STOP_TO_SAMPLE_VOLUME}uL from #{STOP_MIX.bold} into #{l.bold}"
            end
          end
        else
          to_labels.each.with_index do |label, i|
            show do
              raw transfer_title_proc(STOP_TO_SAMPLE_VOLUME, from, label)
              # title "Add #{STOP_TO_SAMPLE_VOLUME}uL #{STOP_MIX} #{from.bold} to #{LIGATION_SAMPLE} #{label}"
              note "Set a #{P20_POST} pipette to [0 2 4]. Add #{STOP_TO_SAMPLE_VOLUME}uL from #{from.bold} into tube #{label.bold}"
              note "Close tube #{label}."
              note 'Discard pipette tip.'
              tubeS = make_tube(opentube, STOP_MIX, op.tube_label('stop'), 'medium')
              transfer_image = transfer_to_ligation_tubes_with_highlight(
                tubeS, i, *op.input_tokens(INPUT), COLORS, STOP_TO_SAMPLE_VOLUME, "(#{P20_POST} pipette)"
              )
              note display_svg(transfer_image, 0.75)
            end
          end
        end
      end
    end

    show do
      title "Vortex and centrifuge all #{operations.size * PREV_COMPONENTS.size} tubes for 5 seconds."
      check 'Vortex for 5 seconds.'
      check 'Centrifuge for 5 seconds.'
      note 'This step is important to avoid FALSE POSITIVE.'
    end

    t = Table.new
    t.add_column('STEP', ['Initial Melt', 'Annealing'])
    t.add_column('TEMP', %w[95C 37C])
    t.add_column('TIME', ['30s', '4 min'])
    add_to_thermocycler('tube', myops.length * PREV_COMPONENTS.length, STOP_CYCLE, t, 'Stop Cycle')
  end

  def short_timer
    show do
      title 'Set timer for 6 minutes'
      check 'Set a timer for 6 minutes. This will notify you when the thermocycler is done.'
      timer initialize: { minute: 6 }
      check 'Click the "<b>play</b>" button on the left. Proceed to next step now.'
    end
  end

  def display_detection_strip_diagram
    show do
      title "Review detection #{STRIP} diagram"
      note 'In the next steps you will be adding ligation mixtures followed by the gold solutions to the detection strips.'
      note 'You will pipette into the <b>Port</b>. After pipetting, you should see the <b>Reading Window</b> become wet after a few minutes.'
      warning 'Do not add liquid directly to the <b>Reading Window</b>'
      note display_svg(detection_strip_diagram, 0.75)
    end
  end

  def add_ligation_product_to_strips(myops)
    gops = group_packages(myops)

    show do
      title 'Wait for stop cycle to finish (5 minutes).'
      note "Wait for the #{THERMOCYCLER} containing your samples to finish. "
      bullet "If the #{THERMOCYCLER} beeps, it is done. If not, continue waiting."
      warning "Once the #{THERMOCYCLER} finishes, <b>IMMEDIATELY</b> continue to the next step."
      check "Take all #{pluralizer('sample', myops.length * PREV_COMPONENTS.length)} from the #{THERMOCYCLER}."
      check "Vortex #{'sample'.pluralize(PREV_COMPONENTS.length)} for 5 seconds to mix."
      check "Centrifuge #{'sample'.pluralize(PREV_COMPONENTS.length)} for 5 seconds to pull down liquid"
      check "Place on rack in the #{POST_PCR.bold} area."
    end

    timer_set = false
    gops.each do |_unit, ops|
      ops.each do |op|
        kit = op.temporary[:output_kit]
        sample = op.temporary[:output_sample]
        panel_unit = op.temporary[:output_unit]
        tube_unit = op.temporary[:input_unit]
        # show do
        #   title "Arrange #{STRIPS} and tubes" # for sample 1?
        #   note "Place the detection #{STRIPS} and #{LIGATION_SAMPLE.pluralize(PREV_COMPONENTS.length)} as shown in the picture:"
        #   note display_svg(display_panel_and_tubes(kit, panel_unit, tube_unit, PREV_COMPONENTS, sample, COLORS).translate!(50), 0.6)
        # end

        # Validate samples
        from_name = "#{op.temporary[:input_unit]}-#{op.temporary[:input_sample]}"
        to_name = "#{op.temporary[:output_unit]}-#{op.temporary[:output_sample]}"
        svg_both = display_panel_and_tubes(kit, panel_unit, tube_unit, PREV_COMPONENTS, sample, COLORS).translate!(50).scale!(0.8)
        p = proc do
          title "Arrange #{STRIPS} and tubes" # for sample 1?
          note "Place the detection #{STRIPS} #{to_name} and #{LIGATION_SAMPLE.pluralize(PREV_COMPONENTS.length)} #{from_name} as shown in the picture:"
          note 'Scan in IDS of objects for confirmation.'
        end
        content = ShowBlock.new(self).run(&p)
        pre_transfer_validation_with_multiple_tries(from_name, to_name, svg_both, content_override: content)

        show do
          title "For each colored tube, add #{SAMPLE_TO_STRIP_VOLUME}uL of #{LIGATION_SAMPLE} to the sample port of each #{STRIP}."
          unless timer_set
            warning '<h2>Complicated Step! Take note of all instructions before beginning transfers.</h2>'
            note 'Set a 5 minute timer after adding ligation sample to <b>FIRST</b> strip at the SAMPLE PORT.'
          end
          note '<b>Immediately</b> click OK when finished adding ligation sample to LAST strip at the sample port.'
          note '<hr>'
          timer_set = true
          #   check "Set a 5 minute timer" unless set_timer
          check "Set a #{P200_POST} pipette to [0 2 4]. Add #{SAMPLE_TO_STRIP_VOLUME}uL of <b>each</b> #{LIGATION_SAMPLE} to the corresponding #{STRIP}."
          note "Match the sample tube color with the #{STRIP} color. For example, match #{op.input_refs(INPUT)[0].bold} to #{op.output_refs(OUTPUT)[0].bold}"
          #   note "After adding the first sample, set the timer for 5 minutes"
          warning 'Dispose of pipette tip and close tube after each strip.'
          tubes = display_ligation_tubes(*op.input_tokens(INPUT), COLORS, (0..PREV_COMPONENTS.length - 1).to_a, [], 90)
          panel = display_strip_panel(*op.output_tokens(OUTPUT), COLORS)
          tubes.align_with(panel, 'center-bottom')
          tubes.align!('center-top')
          tubes.translate!(50, -50)
          img = SVGElement.new(children: [panel, tubes], boundy: 330, boundx: panel.boundx)
          note display_svg(img, 0.6)
        end
      end
    end
  end

  def rehydrate_gold_solution(myops)
    gops = group_packages(myops)
    gops.each do |_unit, ops|
      from = ops.first.ref('diluent A')
      to = ops.first.ref('gold')

      show do
        raw transfer_title_proc(GOLD_VOLUME, from, to)
        # title "Add #{GOLD_VOLUME}uL of #{DILUENT_A} #{from.bold} to #{GOLD_MIX} #{to.bold}"
        raw centrifuge_proc(GOLD_MIX, [to], CENTRIFUGE_TIME, 'to pull down dried powder.', AREA)
        note "Set a #{P1000_POST} pipette to <b>[ 0 6 0 ]</b>. Add #{GOLD_VOLUME}uL from #{from.bold} into tube #{to.bold}."
        raw vortex_proc(GOLD_MIX, [to], '10 seconds', 'to mix well.')
        warning "Make sure #{GOLD_MIX} is fully dissolved."
        warning "Do not centrifuge #{to.bold} after vortexing."
        tubeA = make_tube(opentube, DILUENT_A, ops.first.tube_label('diluent A'), 'medium')
        tubeG = make_tube(opentube, GOLD_MIX, ops.first.tube_label('gold'), 'powder', fluidclass: 'pinkfluid')
        img = make_transfer(tubeA, tubeG, 300, "#{GOLD_VOLUME}uL", "(#{P1000_POST} pipette)")
        img.translate!(20)
        note display_svg(img, 0.75)
      end
    end
  end

  def add_gold_solution(myops)
    gops = group_packages(myops)
    set_timer = false

    show do
      title 'Wait until 5 minute timer ends'
      warning 'Do not proceed before 5 minute timer is up.'
      note 'The strips need a chance to become fully wet.'
    end

    gops.each do |_unit, ops|
      show do
        title "Add gold solution to #{pluralizer(STRIP, PREV_COMPONENTS.length * ops.length)}"
        note 'Set a 10 minute timer after adding gold to <b>FIRST</b> strip at the SAMPLE PORT.'
        note 'Add gold to the rest of strips at the SAMPLE PORT and then <b>immediately</b> click OK.'
        warning 'DO NOT add gold solution onto the reading window.'
        note '<hr>'
        check "Set a #{P200_POST} pipette to <b>[0 4 0]</b>. Transfer #{GOLD_TO_STRIP_VOLUME}uL of #{GOLD_MIX} #{ops.first.ref('gold').bold} to #{pluralizer(STRIP, PREV_COMPONENTS.length * ops.length)} at the SAMPLE PORT."
        grid = SVGGrid.new(ops.length, ops.length, 50, 50)
        ops.each.with_index do |op, i|
          _tokens = op.output_tokens(OUTPUT)
          grid.add(display_strip_panel(*_tokens, COLORS).scale!(0.5).translate!(0, -50), i, i)
        end
        tubeG = make_tube(opentube, GOLD_MIX, ops.first.tube_label('gold'), 'medium', fluidclass: 'pinkfluid')
        img = make_transfer(tubeG, grid, 300, "#{GOLD_TO_STRIP_VOLUME}uL", '(each strip)')
        img.boundx = 900
        img.boundy = 400
        img.translate!(40)
        note display_svg(img, 0.6)
      end
    end
  end

  def read_from_scanner(myops)
    gops = group_packages(myops)
    show do
      title "Bring #{pluralizer(STRIP, myops.length * PREV_COMPONENTS.length)} to the #{PHOTOCOPIER}."
    end

    show do
      title 'Wait until 10 minute timer is up'
      note "#{STRIPS.capitalize} need to rest for 10 minutes before taking an image."
      check "In the meantime, make sure you have access to the #{PHOTOCOPIER}."
      note 'Signal can develop more slowly if the room is humid. After the 10-min timer ends, you should see at least two lines on each strip.'
      note 'If your signal is hard to see by eye, give it another 5 minutes before clicking OK.'
      note 'Do not continue to next step until signal is visible.'
    end

    # show do
    #   title "IMPORTANT NOTE TO JUSTIN"
    #   warning "This protocol should be broken into two since technician will be moving from one computer to the next."
    #   note "This really depends on whether we want to use the laptop ONLY for detection purposes (I think we should)"
    # end

    myops.each do |op|
      op.temporary[:filename] = "#{op.output(OUTPUT).item.id}_#{op.temporary[:output_kit]}#{op.temporary[:output_sample]}"
    end

    gops.each do |_unit, ops|
      ops.each do |op|
        labels = op.output_refs(OUTPUT)
        show do
          title "Scan #{STRIPS} <b>#{labels[0]} to #{labels[-1]}</b>"
          check "Open #{PHOTOCOPIER}"
          check "Place #{STRIPS} face down in the #{PHOTOCOPIER}"
          check "Align colored part of #{STRIPS} with the colored tape on the #{PHOTOCOPIER}"
          check "Close the #{PHOTOCOPIER}"
        end

        image_confirmed = false

        5.times.each do |_this_try|
          next if image_confirmed

          show do
            title 'Scan the image'
            check "Press the <b>\"AUTO SCAN\"</b> button firmly on the side of the #{PHOTOCOPIER} and hold for a few seonds. A new window should pop up, with a green bar indicating scanning in progress."
            check "Wait for #{PHOTOCOPIER} to complete. This takes about 1 minute."
          end

          rename = '<md-button ng-disabled="true" class="md-raised">rename</md-button>'
          copy = '<md-button ng-disabled="true" class="md-raised">copy</md-button>'
          paste = '<md-button ng-disabled="true" class="md-raised">paste</md-button>'

          show do
            title "Copy image file name #{op.temporary[:filename].bold}"
            note "1. highlight the file name: #{op.temporary[:filename].bold}"
            note "2. then click #{copy}"
            title "Then rename the new image file to #{op.temporary[:filename].bold}"
            note '1. a new file should appear on the desktop. Minimize this browser and find the new file.'
            note "2. right-click and then click #{rename}"
            note "3. right-click and click #{paste} to rename file."
          end

          show_with_expected_uploads(op, op.temporary[:filename], SCANNED_IMAGE_UPLOAD_KEY) do
            title "Upload file <b>#{op.temporary[:filename]}</b>"
            note "Click the button below to upload file <b>#{op.temporary[:filename]}</b>"
            note "Navigate to the desktop. Click on file <b>#{op.temporary[:filename]}</b>"
          end

          op.temporary[SCANNED_IMAGE_UPLOAD_KEY] = Upload.find(DEBUG_UPLOAD_ID) if debug # false upload if debug

          confirmed = show do
            title "Confirm image labels say #{op.temporary[:label_string].bold}"
            select %w[yes no], var: 'confirmed', label: 'Do the image labels and your image match?', default: 0
            img = display_strip_panel(*op.output_tokens(OUTPUT), COLORS).g
            img.boundy = 50
            note display_svg(img, 0.75)
            raw display_upload(op.temporary[SCANNED_IMAGE_UPLOAD_KEY])
          end

          image_confirmed = confirmed[:confirmed] == 'yes'

          next if image_confirmed

          show do
            title "You selected that the images don't match!"
            note 'You will now be asked to scan and upload the strip again.'
          end
        end

        op.associate(SCANNED_IMAGE_UPLOAD_ID_KEY, op.temporary[SCANNED_IMAGE_UPLOAD_KEY].id)
        op.output(OUTPUT).item.associate(SCANNED_IMAGE_UPLOAD_ID_KEY, op.temporary[SCANNED_IMAGE_UPLOAD_KEY].id)
      end
    end
  end

  def discard_things(myops)
    def discard_refs_from_op(op)
      refs = []
      refs.push('Diluent A ' + op.ref('diluent A').bold)
      refs.push('Gold Mix ' + op.ref('gold').bold)
      refs.push('Stop Mix ' + op.ref('stop').bold)
      refs.push("Samples #{op.input_refs(INPUT).join(', ').bold}")
      refs.push("Strips #{op.output_refs(OUTPUT).join(', ').bold}")
      refs
    end

    all_refs = myops.map { |op| discard_refs_from_op(op) }.flatten.uniq

    show do
      title "Throw items into the #{WASTE_POST}"

      note "Throw the following items into the #{WASTE_POST} in the #{AREA.bold} area:"
      t = Table.new
      t.add_column('Item to throw away', all_refs)
      table t
    end
  end

  def filename(op)
    item_id = op.output(OUTPUT).item.id
    labels = op.output_refs(OUTPUT)
    "#{labels[0]}_#{labels[-1]}_#{item_id}"
  end

  def conclusion(_myops)
    show do
      title 'Thank you!'
      note 'Thank you for your hard work.'
    end
  end

  def analysis(ops)
    band_choices = {
      "M": { bands: [mut_band], description: '-CTRL -WT +MUT' },
      "N": { bands: [control_band, wt_band, mut_band], description: '+CTRL +WT +MUT' },
      "O": { bands: [control_band, mut_band], description: '+CTRL -WT +MUT' },
      "P": { bands: [control_band, wt_band], description: '+CTRL +WT -MUT' },
      "Q": { bands: [control_band], description: '+CTRL -WT -MUT' },
      "R": { bands: [], description: '-CTRL -WT -MUT' }
    }

    categories = {
      "M": POSITIVE,
      "N": POSITIVE,
      "O": POSITIVE,
      "P": NEGATIVE,
      "Q": 'ligation failure',
      "R": 'detection failure'
    }

    run_image_analysis ops.running, band_choices, categories
    show_calls ops.running, band_choices
    show_summary ops.running
  end

  def run_image_analysis(ops, _band_choices, category_hash)
    ops.each do |op|
      image_result = nil
      5.times.each do |_i|
        break if image_result

        upload = op.temporary[SCANNED_IMAGE_UPLOAD_KEY]
        image_result = make_calls_from_image(upload)
      end

      if image_result.nil?
        op.error(:image_result_failed, 'Image processing has failed. Check that the OLA IP service is running and connected correctly, and that the file is in a normal image format.')
        next
      end

      this_kit = op.temporary[:output_kit]
      this_unit = op.temporary[:output_unit]
      this_sample = op.temporary[:output_sample]

      raise 'scanned image had less strips than expected!' if PREV_COMPONENTS.size > image_result.size && !debug
      raise 'scanned image had more strips than expected!' if PREV_COMPONENTS.size < image_result.size && !debug

      PREV_COMPONENTS.each.with_index do |_this_component, i|
        alias_label = op.output_refs(OUTPUT)[i]
        the_choice = image_result[i]
        op.output(OUTPUT).item.associate(make_call_key(alias_label), the_choice)
        op.output(OUTPUT).item.associate(make_call_category_key(alias_label), category_hash[the_choice.to_sym])
        op.associate(make_call_key(alias_label), the_choice)
        op.associate(make_call_category_key(alias_label), category_hash[the_choice.to_sym])
      end
    end
  end

  def make_call_key(alias_label)
    "#{alias_label}_call".to_sym
  end

  def make_call_description_key(alias_label)
    "#{alias_label}_call_description".to_sym
  end

  def make_call_category_key(alias_label)
    "#{alias_label}_call_category".to_sym
  end

  def show_calls(myops, band_choices)
    myops.each do |op|
      kit_summary = {}

      this_kit = op.temporary[:input_kit]
      this_item = op.output(OUTPUT).item
      this_unit = op.temporary[:output_unit]
      this_sample = op.temporary[:output_sample]

      grid = SVGGrid.new(MUTATION_LABELS.length, 1, 90, 10)
      categories = []

      PREV_COMPONENTS.each.with_index do |this_component, i|
        alias_label = op.output_refs(OUTPUT)[i]
        strip_label = tube_label(this_kit, this_unit, this_component, this_sample)
        strip = make_strip(strip_label, COLORS[i] + 'strip')
        band_choice = this_item.get(make_call_key(alias_label))
        codon_label = label(MUTATION_LABELS[i], 'font-size'.to_sym => 25)
        codon_label.align_with(strip, 'center-bottom')
        codon_label.align!('center-top').translate!(0, 30)
        category = this_item.get(make_call_category_key(alias_label))
        kit_summary[MUTATION_LABELS[i]] = { alias: alias_label, category: category.to_s, call: band_choice.to_s }
        tokens = category.split(' ')
        tokens.push('') if tokens.length == 1
        category_label = two_labels(*tokens)
        category_label.scale!(0.75)
        category_label.align!('center-top')
        category_label.align_with(codon_label, 'center-bottom')
        category_label.translate!(0, 10)
        bands = band_choices[band_choice.to_sym][:bands]
        grid.add(strip, i, 0)
        grid.add(codon_label, i, 0)
        grid.add(category_label, i, 0)
        bands.each do |band|
          grid.add(band, i, 0)
        end
      end

      op.associate(:results, kit_summary)
      op.output(OUTPUT).item.associate(:results, kit_summary)
      op.temporary[:results] = kit_summary

      img = SVGElement.new(children: [grid], boundx: PREV_COMPONENTS.size * 100, boundy: 350)
      img.translate!(15)
      show do
        refs = op.output_refs(OUTPUT)
        title "Here is the summary of your results for <b>#{refs[0]} to #{refs[-1]}</b>"
        note display_svg(img)
      end
    end
  end

  def show_summary(ops)
    ops.each do |op|
      hits = op.temporary[:results].select { |_k, v| v == POSITIVE }
    end
    show do
      title 'Sample summary'
      note "You analyzed #{ops.length} #{'kit'.pluralize(ops.length)}. Below is the exportable summarized data if you need it."

      results_hash = {}
      kits = ops.map { |op| op.output(OUTPUT).item.get(KIT_KEY) }
      samples = ops.map { |op| op.output(OUTPUT).item.get(SAMPLE_KEY) }
      patients = ops.map { |op| op.output(OUTPUT).item.get(PATIENT_KEY) }
      t = Table.new
      t.add_column('Kit', kits)
      t.add_column('Sample', samples)
      t.add_column('Patient ID', patients)
      MUTATION_LABELS.each do |label|
        col = ops.map { |op| op.temporary[:results][label][:category] }
        t.add_column(label, col)
        results_hash[label] = col
      end
      results_hash['kits'] = kits
      results_hash['samples'] = samples
      table t
    end
  end
end

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object_types:
  - {name: OLA plasma, description: Patient plasma in tube identified as SXXX. Starting point for OLA Simple RT-PCR workflow., handler: sample_container, unit: OLASimple Sample, release_method: return, sample_type_name: OLASimple Sample}
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operation_type: OLASimple RNA Extraction
category: OLASimple
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: Viral RNA, sample_types: [OLASimple Sample], object_types: [OLA viral RNA], routing: C}
  - {ftype: sample, role: input, name: Plasma, sample_types: [OLASimple Sample], object_types: [OLA plasma], routing: C}
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documentation:
Blood CD4+ cells are negatively selected and lysed. Magnetic beads and antibodies are used to separate unwanted cells.

precondition:
eval Library.find_by_name("OLAScheduling").code("source").content
extend OLAScheduling

BATCH_SIZE = 2
def precondition(op)
  schedule_same_kit_ops(op)
  true
end

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protocol:
# frozen_string_literal: true

needs 'OLASimple/OLAConstants'
needs 'OLASimple/OLALib'
needs 'OLASimple/OLAGraphics'
needs 'OLASimple/JobComments'
needs 'OLASimple/OLAKitIDs'
needs 'OLASimple/RNAExtractionResources'

class Protocol
  include OLAConstants
  include OLALib
  include OLAGraphics
  include JobComments
  include OLAKitIDs
  include FunctionalSVG
  include RNAExtractionResources

  ##########################################
  # INPUT/OUTPUT
  ##########################################

  INPUT = 'Plasma'
  OUTPUT = 'Viral RNA'

  ##########################################
  # COMPONENTS
  ##########################################

  AREA = PRE_PCR
  BSC = 'BSC'
  PACK_HASH = EXTRACTION_UNIT

  THIS_UNIT     = PACK_HASH['Unit Name']
  DTT           = THIS_UNIT + PACK_HASH['Components']['dtt']                # E0
  LYSIS_BUFFER  = THIS_UNIT + PACK_HASH['Components']['lysis buffer']       # E1
  WASH1         = THIS_UNIT + PACK_HASH['Components']['wash buffer 1']      # E2
  WASH2         = THIS_UNIT + PACK_HASH['Components']['wash buffer 2']      # E3
  SA_WATER      = THIS_UNIT + PACK_HASH['Components']['sodium azide water'] # E4
  SAMPLE_COLUMN = THIS_UNIT + PACK_HASH['Components']['sample column']      # E5
  RNA_EXTRACT   = THIS_UNIT + PACK_HASH['Components']['rna extract tube']   # E6
  ETHANOL       = 'Molecular Grade Ethanol'
  GuSCN_WASTE = 'GuSCN waste container'

  # KIT_SVGs = {
  #   DTT => {closed_dry: E0_closed_dry}
  #   LYSIS_BUFFER => :screwbottle,
  #   SA_WATER => :tube,
  #   WASH1 => :roundedtube,
  #   WASH2 => :roundedtube,
  #   SAMPLE_COLUMN => :samplecolumn,
  #   RNA_EXTRACT => :tube
  #   ETHANOL => {open: ethanol_container_open, closed: ethanol_container}
  # }.freeze

  SHARED_COMPONENTS = [DTT, WASH1, WASH2, SA_WATER, ETHANOL, GuSCN_WASTE].freeze
  PER_SAMPLE_COMPONENTS = [LYSIS_BUFFER, SAMPLE_COLUMN, RNA_EXTRACT].freeze
  OUTPUT_COMPONENT = '6'

  CENTRIFUGE_TIME = '1 minute'

  # for debugging
  PREV_COMPONENT = 'S'
  PREV_UNIT = ''

  def main
    this_package = prepare_protocol_operations

    introduction
    record_technician_id

    safety_warning(AREA)
    cynanide_warning
    required_equipment
    simple_clean('OLASimple RNA Extraction')

    retrieve_package(this_package)
    package_validation_with_multiple_tries(this_package)
    open_package(this_package)

    fill_ethanol
    prepare_buffers
    lyse_samples
    remove_outer_layer
    incubate_lysed_samples(operations)
    add_ethanol

    4.times do
      operations.each { |op| add_sample_to_column(op) }
      centrifuge_columns(flow_instructions: "Discard flow through into #{GuSCN_WASTE}")
    end
    change_collection_tubes

    add_wash_1
    centrifuge_columns(flow_instructions: "Discard flow through into #{GuSCN_WASTE}")
    change_collection_tubes

    add_wash_2
    centrifuge_columns(flow_instructions: "Discard flow through into #{GuSCN_WASTE}")

    transfer_column_to_e6
    elute
    incubate(sample_labels.map { |s| "#{SAMPLE_COLUMN}-#{s}" }, '1 minute')
    centrifuge_columns(flow_instructions: '<b>DO NOT DISCARD FLOW THROUGH</b>', extra_warning: 'DO NOT DISCARD FLOW THROUGH')

    finish_up
    disinfect
    store
    cleanup
    wash_self
    accept_comments
    conclusion(operations)
    {}
  end

  # perform initiating steps for operations,
  # and gather kit package from operations
  # that will be used for this protocol.
  # returns kit package if nothing went wrong
  def prepare_protocol_operations
    if operations.length > BATCH_SIZE
      raise "Batch size > #{BATCH_SIZE} is not supported for this protocol. Please rebatch."
    end

    operations.make.retrieve interactive: false

    if debug
      labels = %w[001 002]
      operations.each.with_index do |op, i|
        op.input(INPUT).item.associate(SAMPLE_KEY, labels[i])
        op.input(INPUT).item.associate(COMPONENT_KEY, PREV_COMPONENT)
        op.input(INPUT).item.associate(UNIT_KEY, PREV_UNIT)
        op.input(INPUT).item.associate(KIT_KEY, 'K001')
        op.input(INPUT).item.associate(PATIENT_KEY, 'a patient id')
      end
    end
    save_temporary_input_values(operations, INPUT)
    operations.each do |op|
      op.temporary[:pack_hash] = PACK_HASH
    end
    save_temporary_output_values(operations)

    operations.each do |op|
      op.make_item_and_alias(OUTPUT, 'rna extract tube', INPUT)
    end

    kits = operations.running.group_by { |op| op.temporary[:input_kit] }
    this_package = kits.keys.first + THIS_UNIT
    raise 'More than one kit is not supported by this protocol. Please rebatch.' if kits.length > 1

    this_package
  end

  def sample_labels
    operations.map { |op| op.temporary[:input_sample] }
  end

  def save_user(ops)
    ops.each do |op|
      username = get_technician_name(jid)
      op.associate(:technician, username)
    end
  end

  def introduction
    show do
      title 'Welcome to OLASimple RNA Extraction'
      note 'In this protocol you will lyse and purify RNA from HIV-infected plasma.'
      # image of tubes
    end

    show do
      title 'RNase degrades RNA'
      note 'RNA is prone to degradation by RNase present in our eyes, skin, and breath.'
      note 'Avoid opening tubes outside the Biosafety Cabinet (BSC).'
      bullet 'Change gloves whenever you suspect potential RNAse contamination'
      # show image of gloves
    end

    show do
      title 'Required Reagent (not provided)'
      check 'Before starting this protocol, make sure you have access to molecular grade ethanol (~10 mL).'
      note 'Do not use other grades of ethanol as this will negatively affect the RNA extraction yield.'
      note 'Soon, using a serological pipette, we will transfer 4ml of the molecular grade ethanol to the provided ethanol container in the kit.'
      note display_ethanol_question_svg
    end
  end

  def cynanide_warning
    show do
      title 'Review the safety warnings'
      warning '<b>TOXIC CYANIDE GAS</b>'
      note "Do not mix #{LYSIS_BUFFER} or #{WASH1} with bleach, as this can generate cyanide gas."
      note "#{LYSIS_BUFFER} AND #{WASH1} waste must be discarded into the GuSCN waste container"
      note display_guscn_waste_svg
    end
  end

  def required_equipment
    show do
      title 'You will need the following supplies in the BSC'
      materials = [
        'P1000 pipette and filter tips',
        'P200 pipette and filter tips',
        'P20 pipette and filter tips',
        'Pipette controller and 10mL serological pipette',
        'Vortex mixer',
        'Minifuge',
        'Cold tube rack',
        '70% v/v Ethanol spray for cleaning',
        '10% v/v Bleach spray for cleaning',
        'Molecular grade ethanol'
      ]
      materials.each do |m|
        check m
      end
    end
  end

  def retrieve_package(this_package)
    show do
      title "Retrieve package"
      check "Grab package #{this_package.bold} from the #{FRIDGE_PRE} and place in the #{BSC}"
    end
  end

  def open_package(this_package)
    show_open_package(this_package, '', 0) do
      img = kit_image
      check 'Check that the following are in the pack:'
      note display_svg(img, 0.75)
      note 'Arrange tubes on plastic rack for later use.'
    end
  end

  def kit_image
    grid = SVGGrid.new(PER_SAMPLE_COMPONENTS.size + SHARED_COMPONENTS.size + 1, operations.size, 80, 100)
    initial_kit_components = {
      DTT => :E0_closed_dry,
      LYSIS_BUFFER => :E1_closed,
      SA_WATER => :E4_closed,
      WASH1 => :E2_closed,
      WASH2 => :E3_closed,
      SAMPLE_COLUMN => :E5_empty_closed_w_empty_collector,
      RNA_EXTRACT => :E6_closed,
      ETHANOL => :ethanol_container,
      GuSCN_WASTE => :guscn_container
    }

    SHARED_COMPONENTS.each_with_index do |component, i|
      svg_label = component != ETHANOL && component != GuSCN_WASTE ? component : ''
      svg = draw_svg(initial_kit_components[component], svg_label: svg_label)
      grid.add(svg, i, 0)
    end

    operations.each_with_index do |op, i|
      sample_num = op.temporary[:output_sample]
      PER_SAMPLE_COMPONENTS.each_with_index do |component, j|
        svg = draw_svg(initial_kit_components[component], svg_label: "#{component}\n#{sample_num}")
        svg.translate!(30 * (i % 2), 0)
        grid.add(svg, j + SHARED_COMPONENTS.size, i)
      end
    end

    grid.add(many_collection_tubes(6), PER_SAMPLE_COMPONENTS.size + SHARED_COMPONENTS.size, 0)

    grid.align!('center-left')
    SVGElement.new(children: [grid], boundx: 1000, boundy: 300).translate!(30, 50)
  end

  def retrieve_inputs
    input_sample_ids = operations.map do |op|
      op.input_ref(INPUT)
    end

    grid = SVGGrid.new(input_sample_ids.size, 1, 80, 100)
    input_sample_ids.each_with_index do |s, i|
      svg = draw_svg(:sXXX_closed, svg_label: s.split('-').join("\n"), opened: false, contents: 'full')
      grid.add(svg, i, 0)
    end

    img = SVGElement.new(children: [grid], boundx: 1000, boundy: 200).translate!(0, -30)
    show do
      title 'Retrieve Samples'
      note display_svg(img, 0.75)
      check "Take #{input_sample_ids.to_sentence} from #{FRIDGE_PRE}"
    end
  end

  def fill_ethanol
    svg = SVGElement.new(children: [ethanol_container_open], boundx: 400, boundy: 200)
    show do
      title 'Transfer 4mL of Molecular grade ethanol to Provided Container'
      check 'Use a serological pipette to transfer <b>4ml</b> of <b>Molecular Grade Ethanol</b> into provided container.'
      note display_svg(svg)
      check 'Return the Molecular grade ethanol to the flammable cabinet.'
    end
  end

  # helper method for simple transfers in this protocol
  def transfer_and_vortex(title, from, to, volume_ul, warning: nil, to_svg: nil, from_svg: nil, skip_centrifuge: false, extra_check: nil)
    pipette, extra_note, setting_instruction = pipette_decision(volume_ul)

    if to.is_a?(Array) # MULTI TRANSFER
      img = nil
      if from_svg && to_svg
        from_component, from_sample_num = from.split('-')
        from_label = from_component != ETHANOL && from_component != GuSCN_WASTE ? from.split('-').join("\n") : ''
        from_svg_rendered = draw_svg(from_svg, svg_label: from_label)
        to_labels = to.map { |t| t.split('-').join("\n") }
        to_svgs_rendered = to_labels.map.with_index { |to_label, i| draw_svg(to_svg, svg_label: to_label).translate!(130 * i, 0) }
        to_svg_final = SVGElement.new(children: to_svgs_rendered, boundx: 300, boundy: 220)
        img = make_transfer(from_svg_rendered, to_svg_final, 300, "#{volume_ul}ul", "(#{pipette})")
      end
      show do
        title title
        check setting_instruction
        to.each do |t|
          check "Transfer <b>#{volume_ul}uL</b> of <b>#{from}</b> into <b>#{t}</b> using a #{pipette} pipette."
          note extra_note if extra_note
          check "Discard pipette tip into #{WASTE_PRE}."
          check extra_check if extra_check
        end
        warning warning if warning
        note display_svg(img, 0.75) if img
        check "Ensure tube caps are tightly shut for #{to.to_sentence}."
        check "Vortex <b>#{to.to_sentence}</b> for <b>2 seconds, twice</b>."
        check "Centrifuge <b>#{to.to_sentence}</b> for <b>5 seconds</b>." unless skip_centrifuge
      end
    else # SINGLE TRANSFER
      from_component, from_sample_num = from.split('-')
      to_component, to_sample_num = to.split('-')
      if from_svg && to_svg
        from_label = from_component != ETHANOL && from_component != GuSCN_WASTE ? [from_component, from_sample_num].join("\n") : ''
        from_svg = draw_svg(from_svg, svg_label: from_label)
        to_label = to_component != ETHANOL && to_component != GuSCN_WASTE ? [to_component, to_sample_num].join("\n") : ''
        to_svg = draw_svg(to_svg, svg_label: to_label)
        img = make_transfer(from_svg, to_svg, 300, "#{volume_ul}ul", "(#{pipette})")
      end

      show do
        title title
        check setting_instruction
        check "Transfer <b>#{volume_ul}uL</b> of <b>#{from}</b> into <b>#{to}</b> using a #{pipette} pipette."
        note extra_note if extra_note
        warning warning if warning
        note display_svg(img, 0.75) if img
        check "Discard pipette tip into #{WASTE_PRE}."
        check extra_check if extra_check
        check "Ensure tube cap is tightly shut for #{to}."
        check "Vortex <b>#{to}</b> for <b>2 seconds, twice</b>."
        check "Centrifuge <b>#{to}</b> for <b>5 seconds</b>." unless skip_centrifuge
      end
    end
  end

  def pipette_decision(volume_ul)
    if volume_ul <= 20
      setting = '[ ' + (volume_ul * 10).round.to_s.rjust(3, '0').split('').join(' ') + ' ]'
      [P20_PRE, nil, "Set P20 pipette to <b>#{setting}</b>"]
    elsif volume_ul <= 200
      setting = '[ ' + volume_ul.round.to_s.rjust(3, '0').split('').join(' ') + ' ]'
      [P200_PRE, nil, "Set p200 pipette to <b>#{setting}</b>"]
    elsif volume_ul <= 1000
      setting = '[ ' + (volume_ul / 10).round.to_s.rjust(3, '0').split('').join(' ') + ' ]'
      [P1000_PRE, nil, "Set p1000 pipette to <b>#{setting}</b>"]
    else
      factor = volume_ul.fdiv(1000).ceil
      split_volume = volume_ul.fdiv(factor)
      setting = '[ ' + (split_volume / 10).round.to_s.rjust(3, '0').split('').join(' ') + ' ]'
      [P1000_PRE, "Transfer <b>#{split_volume.round}uL</b>, <b>#{factor} times</b>.", "Set p1000 pipette to <b>#{setting}</b>"]
    end
  end

  # helper method for simple incubations
  def incubate(samples, time)
    show do
      title 'Incubate Sample Solutions'
      note "Let <b>#{samples.to_sentence}</b> incubate for <b>#{time}</b> at room temperature."
      check "Set a timer for <b>#{time}</b>"
      note 'Do not proceed until time has elapsed.'
    end
  end

  def centrifuge_columns(flow_instructions: nil, extra_warning: nil)
    columns = sample_labels.map { |s| "#{SAMPLE_COLUMN}-#{s}" }

    show do
      title " Centrifuge Columns for #{CENTRIFUGE_TIME}"
      warning extra_warning if extra_warning
      warning 'Ensure both tube caps are tightly closed'
      raw centrifuge_proc('Column', columns, CENTRIFUGE_TIME, '', AREA)
      note display_balance_tubes_svg
      check flow_instructions if flow_instructions
    end
  end

  def prepare_buffers
    show do
      title "Centrifuge #{DTT} and #{SA_WATER}"
      check "Centrifuge <b>#{DTT}</b> and <b>#{SA_WATER}</b> for <b>5 seconds</b>."
    end

    # add sa water to dtt/trna
    transfer_and_vortex(
      "Prepare #{DTT}",
      SA_WATER,
      DTT,
      25,
      from_svg: :E4_open,
      to_svg: :E0_open_dry
    )

    # add dtt solution to lysis buffer

    lysis_buffers = operations.map { |op| "#{LYSIS_BUFFER}-#{op.temporary[:output_sample]}" }
    transfer_and_vortex(
      "Prepare Lysis Buffers #{lysis_buffers.to_sentence}",
      DTT,
      lysis_buffers,
      10,
      from_svg: :E0_open_wet,
      to_svg: :E1_open,
      skip_centrifuge: true
    )

    # prepare wash buffer 2 with ethanaol
    transfer_and_vortex(
      "Prepare #{WASH2}",
      ETHANOL,
      WASH2,
      1600,
      from_svg: :ethanol_container_open,
      to_svg: :E3_open
    )
  end

  SAMPLE_VOLUME = 350
  # transfer plasma Samples into lysis buffer and incubate
  def lyse_samples
    operations.each do |op|
      from_name = op.input_ref(INPUT).to_s
      to_name = "#{LYSIS_BUFFER}-#{op.temporary[:output_sample]}"
      from_svg = draw_svg(:sXXX_closed, svg_label: op.input_ref(INPUT).to_s.sub('-', "\n"))
      to_svg = draw_svg(:E1_closed, svg_label: "#{LYSIS_BUFFER}\n#{op.temporary[:output_sample]}")
      pre_transfer_validation_with_multiple_tries(from_name, to_name, from_svg, to_svg)
      transfer_and_vortex(
        "Lyse Sample #{op.input_ref(INPUT)}",
        op.input_ref(INPUT).to_s,
        "#{LYSIS_BUFFER}-#{op.temporary[:output_sample]}",
        SAMPLE_VOLUME,
        from_svg: :sXXX_open,
        to_svg: :E1_open,
        skip_centrifuge: true,
        extra_check: "Close #{from_name} tightly and discard into #{WASTE_PRE}."
      )
    end
  end

  def incubate_lysed_samples(ops)
    lysed_samples = ops.map { |op| "#{LYSIS_BUFFER}-#{op.temporary[:output_sample]}" }
    incubate(lysed_samples, '15 minutes')
  end

  ETHANOL_BUFFER_VOLUME = 1400
  def add_ethanol
    lysis_buffers = operations.map { |op| "#{LYSIS_BUFFER}-#{op.temporary[:output_sample]}" }
    transfer_and_vortex(
      "Add #{ETHANOL} to samples #{lysis_buffers.to_sentence}",
      ETHANOL,
      lysis_buffers,
      ETHANOL_BUFFER_VOLUME,
      from_svg: :ethanol_container_open,
      to_svg: :E1_open,
      skip_centrifuge: true
    )
  end

  COLUMN_VOLUME = 800
  def add_sample_to_column(op)
    from = "#{LYSIS_BUFFER}-#{op.temporary[:output_sample]}"
    to = "#{SAMPLE_COLUMN}-#{op.temporary[:output_sample]}"
    from_svg = draw_svg(:E1_closed, svg_label: from.sub('-', "\n"))
    to_svg = draw_svg(:E5_empty_closed_w_empty_collector, svg_label: to.sub('-', "\n"))
    pre_transfer_validation_with_multiple_tries(from, to, from_svg, to_svg)
    transfer_carefully(from, to, COLUMN_VOLUME, from_type: 'sample', to_type: 'column', from_svg: :E1_open, to_svg: :E5_full_open_w_empty_collector)
  end

  def change_collection_tubes
    sample_columns = operations.map { |op| "#{SAMPLE_COLUMN}-#{op.temporary[:output_sample]}" }
    from_svgs_rendered = sample_columns.map.with_index { |from_label, i| draw_svg(:E5_empty_closed_w_empty_collector, svg_label: from_label.sub('-', "\n")).translate!(80 * i, 0) }
    from_svg_final = SVGElement.new(children: from_svgs_rendered, boundx: 150, boundy: 200)
    img = make_transfer(from_svg_final, many_collection_tubes(sample_columns.size), 300, '', '(Change Tubes)')
    show do
      title 'Change Collection Tubes'
      note display_svg(img, 0.8)
      sample_columns.each do |column|
        check "Transfer <b>#{column}</b> to a new collection tube."
      end
      note 'Discard previous collection tubes.'
    end
  end

  def add_wash_1
    columns = operations.map { |op| column = "#{SAMPLE_COLUMN}-#{op.temporary[:output_sample]}" }
    transfer_carefully(WASH2, columns, COLUMN_VOLUME, from_type: 'buffer', to_type: 'column', from_svg: :E2_open, to_svg: :E5_full_open_w_empty_collector)
  end

  def add_wash_2
    columns = operations.map { |op| column = "#{SAMPLE_COLUMN}-#{op.temporary[:output_sample]}" }
    transfer_carefully(WASH2, columns, COLUMN_VOLUME, from_type: 'buffer', to_type: 'column', from_svg: :E3_open, to_svg: :E5_full_open_w_empty_collector)
  end

  def transfer_carefully(from, to, volume_ul, from_type:, to_type:, from_svg: nil, to_svg: nil)
    pipette, extra_note, setting_instruction = pipette_decision(volume_ul)
    if to.is_a?(Array) # MULTI TRANSFER
      img = nil
      if from_svg && to_svg
        from_label = from.split('-').join("\n")
        from_svg_rendered = draw_svg(from_svg, svg_label: from_label)
        to_labels = to.map { |t| t.split('-').join("\n") }
        to_svgs_rendered = to_labels.map.with_index { |to_label, i| draw_svg(to_svg, svg_label: to_label).translate!(80 * i, 0) }
        to_svg_final = SVGElement.new(children: to_svgs_rendered, boundx: 300, boundy: 300)
        img = make_transfer(from_svg_rendered, to_svg_final, 300, "#{volume_ul}ul", "(#{pipette})")
      end
      show do
        title "Add #{from_type || from} to each #{to_type + ' ' + to.to_sentence || to}"
        check setting_instruction
        note "<b>Carefully</b> open #{to_type.pluralize(to)} <b>#{to.to_sentence}</b> lid."
        to.each do |t|
          check "<b>Carefully</b> Add <b>#{volume_ul}uL</b> of #{from_type} <b>#{from}</b> to <b>#{t}</b> using a #{pipette} pipette."
          check 'Discard pipette tip.'
        end
        note extra_note if extra_note
        note display_svg(img, 0.75) if img
        note "<b>Slowly</b> close lid of <b>#{to.to_sentence}</b>"
      end
    else # SINGLE TRANSFER
      img = nil
      if from_svg && to_svg
        from_label = from.split('-').join("\n")
        from_svg_rendered = draw_svg(from_svg, svg_label: from_label)
        to_label = to.split('-').join("\n")
        to_svg_rendered = draw_svg(to_svg, svg_label: to_label)
        img = make_transfer(from_svg_rendered, to_svg_rendered, 300, "#{volume_ul}ul", "(#{pipette})")
      end
      show do
        title "Add #{from_type || from} to #{to_type + ' ' + to || to}"
        check setting_instruction
        note "<b>Carefully</b> open #{to_type} <b>#{to}</b> lid."
        check "<b>Carefully</b> Add <b>#{volume_ul}uL</b> of #{from_type} <b>#{from}</b> to <b>#{to}</b> using a #{pipette} pipette."
        note extra_note if extra_note
        note display_svg(img, 0.75) if img
        check 'Discard pipette tip.'
        note "<b>Slowly</b> close lid of <b>#{to}</b>"
      end
    end
  end

  def transfer_column_to_e6
    show do
      title 'Transfer Columns'
      warning 'Make sure the bottom of the E5 columns did not touch any fluid from the previous collection tubes. When in doubt, centrifuge the tube for 1 more minute.'
      note display_pre_elution_warning
      operations.each do |op|
        column = "#{SAMPLE_COLUMN}-#{op.temporary[:output_sample]}"
        extract_tube = "#{RNA_EXTRACT}-#{op.temporary[:output_sample]}"
        check "Transfer column <b>#{column}</b> to <b>#{extract_tube}</b>"
      end
    end
  end

  def elute
    show do
      title 'Add Elution Buffer'
      warning 'Add buffer to center of columns'
      columns = operations.map { |op| column = "#{SAMPLE_COLUMN}-#{op.temporary[:output_sample]}" }
      note display_elution_addition
      columns.each do |column|
        check "Add <b>60uL</b> from <b>#{SA_WATER}</b> to column <b>#{column}</b>"
      end
      check 'Close lid on column tightly.'
    end
  end

  def finish_up
    show do
      title 'Prepare Samples for Storage'
      operations.each do |op|
        column = "#{SAMPLE_COLUMN}-#{op.temporary[:output_sample]}"
        extract_tube = "#{RNA_EXTRACT}-#{op.temporary[:output_sample]}"
        check "Remove column <b>#{column}</b> from <b>#{extract_tube}</b>, and discard <b>#{column} in #{WASTE_PRE}</b>"
      end
      extract_tubes = sample_labels.map { |s| "#{RNA_EXTRACT}-#{s}" }
      check "Ensure lids are firmly closed for all of #{extract_tubes.to_sentence}."
      check "Place <b>#{extract_tubes.to_sentence}</b> on cold rack"
    end
  end

  def store
    show do
      title 'Store Items'
      extract_tubes = sample_labels.map { |s| "#{RNA_EXTRACT}-#{s}" }
      note "Store <b>#{extract_tubes.to_sentence}</b> in the fridge on a cold rack if the amplification module will proceed immediately."
      note "Store <b>#{extract_tubes.to_sentence}</b> in -20C freezer if proceeding with the amplification module later."
    end
  end

  def cleanup
    show do
      title 'Clean up Waste'
      warning "DO NOT dispose of liquid waste and bleach into #{GuSCN_WASTE}, this can produce dangerous gas."
      bullet 'Dispose of liquid waste in bleach down the sink with running water.'
      bullet "Dispose of remaining tubes into #{WASTE_PRE}."
      bullet "Dispose of #{GuSCN_WASTE} in the manner that you are trained to."
    end

    show do
      title 'Clean Biosafety Cabinet (BSC)'
      note 'Place items in the BSC off to the side.'
      note 'Spray surface of BSC with 10% bleach. Wipe clean using paper towel.'
      note 'Spray surface of BSC with 70% ethanol. Wipe clean using paper towel.'
      note "After cleaning, dispose of gloves and paper towels in #{WASTE_PRE}."
    end
  end

  def conclusion(_myops)
    show do
      title 'Thank you!'
      note 'You may start the next protocol immediately, or you may take a short break and come back.'
    end
  end

  def remove_outer_layer
    show do
      title 'Remove outer Layer of Gloves'
      check "Remove outer layer of gloves and discard them into #{WASTE_PRE}"
    end
  end
end

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operation_type: OLASimple Sample Preparation
category: OLASimple
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: Patient Sample, sample_types: [OLASimple Sample], object_types: [OLA plasma], routing: S}
  - {ftype: string, role: input, name: Patient Sample Identifier}
  - {ftype: string, role: input, name: Kit Identifier}
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precondition:
eval Library.find_by_name("OLAScheduling").code("source").content
extend OLAScheduling

def precondition(_op)
  if _op.plan && _op.plan.status != 'planning'
    schedule_same_kit_ops(_op)
  end
  true
end

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protocol:
# frozen_string_literal: true

needs 'OLASimple/OLAConstants'
needs 'OLASimple/OLAKitIDs'
needs 'OLASimple/OLAGraphics'
needs 'OLASimple/SVGGraphics'
needs 'OLASimple/OLALib'
needs 'OLASimple/JobComments'

class Protocol
  include OLALib
  include OLAGraphics
  include FunctionalSVG
  include OLAKitIDs
  include OLAConstants
  include JobComments

  AREA = PRE_PCR

  OUTPUT = 'Patient Sample'
  PATIENT_ID_INPUT = 'Patient Sample Identifier'
  KIT_ID_INPUT = 'Kit Identifier'

  UNIT = 'S'
  OUTPUT_COMPONENT = ''
  PLASMA_LOCATION = '-80 freezer'
  SAMPLE_VOLUME = 380

  def main
    operations.make
    operations.each_with_index do |op, i|
      if debug
        op.temporary[OLAConstants::PATIENT_KEY] = "patientid#{i}"
        op.temporary[OLAConstants::KIT_KEY] = 'K001'
      else
        op.temporary[OLAConstants::PATIENT_KEY] = op.input(PATIENT_ID_INPUT).value
        op.temporary[OLAConstants::KIT_KEY] = op.input(KIT_ID_INPUT).value
      end
    end

    kit_groups = operations.group_by { |op| op.temporary[OLAConstants::KIT_KEY] }

    introduction
    record_technician_id
    safety_warning(AREA)
    required_equipment
    clean_area(AREA)

    kit_groups.each do |kit_num, ops|
      next unless check_batch_size(ops)

      first_module_setup(ops, kit_num)
      set_output_components_and_units(ops, OUTPUT, OUTPUT_COMPONENT, UNIT)

      this_package = "#{kit_num}#{UNIT}"
      retrieve_package(this_package)
      package_validation_with_multiple_tries(this_package)
      open_package(this_package, ops)
      retrieve_plasma(ops)
      _, expected_plasma_samples = plasma_tubes(ops)
      sample_validation_with_multiple_tries(expected_plasma_samples)
      wait_for_thaw
      transfer_plasma(ops)
      remove_outer_layer
      disinfect
      store(ops)
    end
    accept_comments
    conclusion(operations)
    {}
  end

  # Since this is the first protocol in the workflow, we
  # pause here to link the incoming patient ids to the kit sample numbers
  # in a coherent and deterministic way.
  #
  # Makes the assumptions that all operations here are from the same kit
  # with output items made, and have a suitable batch size
  def first_module_setup(ops, kit_num)
    check_batch_size(ops)
    assign_sample_aliases_from_kit_id(ops, kit_num)

    data_associations = []
    ops.each do |op|
      output_item = op.output(OUTPUT).item
      data_associations << output_item.associate(OLAConstants::KIT_KEY, op.temporary[OLAConstants::KIT_KEY])
      data_associations << output_item.associate(OLAConstants::SAMPLE_KEY, op.temporary[OLAConstants::SAMPLE_KEY])
      data_associations << output_item.associate(OLAConstants::PATIENT_KEY, op.temporary[OLAConstants::PATIENT_KEY])
    end

    DataAssociation.import data_associations, on_duplicate_key_update: [:object]
  end

  # Assigns sample aliases in order of patient id. each operation must have op.temporary[:patient] set.
  # Sample alias assignment is placed in op.temporary[:sample_num] for each op.
  #
  # requires that "operations" input only contains operations from a single kit
  def assign_sample_aliases_from_kit_id(operations, kit_id)
    operations = operations.sort_by { |op| op.temporary[OLAConstants::PATIENT_KEY] }
    sample_nums = sample_nums_from_kit_num(extract_kit_number(kit_id))
    operations.each_with_index do |op, i|
      op.temporary[OLAConstants::SAMPLE_KEY] = sample_num_to_id(sample_nums[i])
    end
  end

  def check_batch_size(ops)
    if ops.size > OLAConstants::BATCH_SIZE
      ops.each do |op|
        op.error(:batch_size_too_big, "operations.size operations batched with #{kit_num}, but max batch size is #{BATCH_SIZE}.")
      end
      false
    else
      true
    end
  end

  def introduction
    show do
      title 'Welcome to OLASimple Sample Preparation'
      note 'In this protocol you will transfer a specific volume of patient plasma into barcoded sample tubes.'
    end
  end

  def required_equipment
    show do
      title 'You will need the following supplies in the BSC'
      materials = [
        'P1000 pipette and filter tips',
        'P200 pipette and filter tips',
        'P20 pipette and filter tips',
        'Pipette controller and 10mL serological pipette',
        'Vortex mixer',
        'Minifuge',
        'Cold tube rack',
        '70% v/v Ethanol spray for cleaning',
        '10% v/v Bleach spray for cleaning',
        'Molecular grade ethanol'
      ]
      materials.each do |m|
        check m
      end
    end
  end

  def retrieve_package(this_package)
    show do
      title "Retrieve Package #{this_package.bold}"
      check "Grab #{this_package} from the #{FRIDGE_PRE} and place inside the BSC"
      # check 'Remove the <b>outside layer</b> of gloves (since you just touched the handle).'
      # check 'Put on a new outside layer of gloves.'
    end
  end

  def open_package(this_package, ops)
    show_open_package(this_package, '', 0) do
      img = kit_image(ops)
      check 'Check that the following are in the pack:'
      note display_svg(img, 0.75)
    end
  end

  def kit_image(ops)
    tubes, = kit_tubes(ops)
    grid = SVGGrid.new(tubes.size, 1, 80, 100)
    tubes.each_with_index do |svg, i|
      grid.add(svg, i, 0)
    end
    SVGElement.new(children: [grid], boundx: 1000, boundy: 300)
  end

  def retrieve_plasma(ops)
    tubes, plasma_ids = plasma_tubes(ops)
    grid = SVGGrid.new(tubes.size, 1, 250, 100)
    tubes.each_with_index do |svg, i|
      grid.add(svg, i, 0)
    end
    img = SVGElement.new(children: [grid], boundx: 1000, boundy: 300).translate(100, 0)
    show do
      title 'Retrieve Plasma samples'
      note "Retrieve plasma samples labeled #{plasma_ids.to_sentence.bold}."
      note "Patient samples are located in the #{PLASMA_LOCATION.bold}."
      note display_svg(img, 0.75)
    end
  end

  def wait_for_thaw
    show do
      title 'Wait for Plasma to thaw'
      note 'Let plasma sit at room temperature to thaw for 5 minutes.'
      check 'Set a timer.'
      note 'Built in timer is available in the top left.'
      note 'Plasma should be completely thawed and mixed before pipetting to ensure concentration of virus is homogeneous.'
    end
  end

  def transfer_plasma(ops)
    from_tubes_open, from_names = plasma_tubes_opened(ops)
    to_tubes_open, to_names = kit_tubes_opened(ops)
    from_tubes, from_names = plasma_tubes(ops)
    to_tubes, to_names = kit_tubes(ops)
    ops.each_with_index do |_op, i|
      pre_transfer_validation_with_multiple_tries(from_names[i], to_names[i], from_tubes[i], to_tubes[i])
      transfer_img = make_transfer(from_tubes_open[i], to_tubes_open[i], 250, "#{SAMPLE_VOLUME}ul", "(#{P1000_PRE})").translate(100, 0)
      show do
        title "Transfer #{from_names[i]} to #{to_names[i]}"
        note "Use a #{P1000_PRE} pipette and set it to <b>[3 8 0]</b>."
        check "Transfer <b>#{SAMPLE_VOLUME}uL</b> from <b>#{from_names[i]}</b> to <b>#{to_names[i]}</b> using a #{P1000_PRE} pipette."
        note display_svg(transfer_img, 0.75)
        check "Discard pipette tip into #{WASTE_PRE}"
        check "Close both tubes."
      end
    end
  end
  
  def remove_outer_layer
    show do
      title 'Remove outer Layer of Gloves'
      check "Remove outer layer of gloves and discard them into #{WASTE_PRE}"
    end
  end

  def store(ops)
    show do
      title 'Store Items'
      sample_tubes = sample_labels.map { |s| "#{UNIT}-#{s}" }
      _, plasma_tube_names = plasma_tubes(ops)
      check "Return #{plasma_tube_names.to_sentence} to #{PLASMA_LOCATION}."
      note "Leave <b>#{sample_tubes.to_sentence}</b> in the BSC for immediate continuation."
    end
  end

  def cleanup
    show do
      title 'Clean Biosafety Cabinet (BSC)'
      note 'Place items in the BSC off to the side.'
      note 'Spray surface of BSC with 10% bleach. Wipe clean using paper towel.'
      note 'Spray surface of BSC with 70% ethanol. Wipe clean using paper towel.'
    end
  end

  def conclusion(_myops)
    show do
      title 'Thank you!'
      note 'You will start the next protocol immediately.'
    end
  end

  def kit_tubes(ops)
    tube_names = ops.map { |op| "#{UNIT}-#{op.temporary[OLAConstants::SAMPLE_KEY]}" }
    tubes = []
    tube_names.each_with_index do |s, _i|
      tubes << draw_svg(:empty_sxx, svg_label: s.split('-').join("\n"), svg_label_initial_offset: -25)
    end
    [tubes, tube_names]
  end

  def plasma_tubes(ops)
    plasma_ids = ops.map { |op| op.temporary[OLAConstants::PATIENT_KEY] }
    tubes = []
    plasma_ids.each_with_index do |s, _i|
      tubes << draw_svg(:plasma_sample_closed, svg_label: "\n\n\n\n\n" + s)
    end
    [tubes, plasma_ids]
  end

  def kit_tubes_opened(ops)
    tube_names = ops.map { |op| "#{UNIT}-#{op.temporary[OLAConstants::SAMPLE_KEY]}" }
    tubes = []
    tube_names.each_with_index do |s, _i|
      tubes << draw_svg(:empty_sxx_opened, svg_label: s.split('-').join("\n"))
    end
    [tubes, tube_names]
  end

  def plasma_tubes_opened(ops)
    plasma_ids = ops.map { |op| op.temporary[OLAConstants::PATIENT_KEY] }
    tubes = []
    plasma_ids.each_with_index do |s, _i|
      tubes << draw_svg(:plasma_sample_opened, svg_label: "\n\n\n\n" + s)
    end
    [tubes, plasma_ids]
  end

  def sample_labels
    operations.map { |op| op.temporary[OLAConstants::SAMPLE_KEY] }
  end

  def empty_sxx
    tube(opened: false)
  end

  def empty_sxx_opened
    tube(opened: true)
  end

  def plasma_sample_closed
    svg_from_html(
      '<svg><defs><style>.cls-1{fill:#efe7a3;}.cls-2,.cls-3{fill:none;}.cls-3,.cls-4{stroke:#231f20;stroke-miterlimit:10;stroke-width:0.5px;}.cls-4{fill:#fff;}</style></defs><title>Plasma_tube_closed_lid</title><path class="cls-1" d="M386.8,334.93a13.86,13.86,0,0,1-13.24-2v45a12,12,0,0,0,12,12h19.85a12,12,0,0,0,12-12V309.32C405.29,313.67,397.2,331.15,386.8,334.93Z" transform="translate(-373.31 -222.24)"/><path class="cls-2" d="M376.55,250.87" transform="translate(-373.31 -222.24)"/><path class="cls-3" d="M8.85,35.78H35.5a8.6,8.6,0,0,1,8.6,8.6v111a12,12,0,0,1-12,12H12.25a12,12,0,0,1-12-12v-111a8.6,8.6,0,0,1,8.6-8.6Z"/><path class="cls-4" d="M395.48,222.49c-12.11,0-21.93,3-21.93,6.74v28.22c0,3.72,9.82,6.74,21.93,6.74s21.93-3,21.93-6.74V229.23C417.41,225.51,407.59,222.49,395.48,222.49Z" transform="translate(-373.31 -222.24)"/><ellipse class="cls-4" cx="22.18" cy="6.87" rx="16.97" ry="4.01"/><line class="cls-3" x1="4.12" y1="12.2" x2="4.12" y2="35.31"/><line class="cls-3" x1="22.97" y1="16" x2="22.97" y2="39.11"/><line class="cls-3" x1="41.55" y1="10.88" x2="41.55" y2="33.99"/><line class="cls-3" x1="32.79" y1="14.89" x2="32.79" y2="38"/><line class="cls-3" x1="13.15" y1="14.89" x2="13.15" y2="38"/></svg>'
    ).translate!(0,70)
  end

  def plasma_sample_opened
    svg_from_html(
      '<svg><defs><style>.cls-1{fill:#efe7a3;}.cls-2,.cls-3{fill:none;}.cls-2,.cls-4{stroke:#010101;stroke-miterlimit:10;stroke-width:0.5px;}.cls-4{fill:#fff;}</style></defs><title>Plasma_tube_open_lid</title><path class="cls-1" d="M359.1,326.3a13.89,13.89,0,0,1-13.2-2v45a12,12,0,0,0,12,12h19.9a12,12,0,0,0,12-12V300.7C377.6,305.1,369.5,322.5,359.1,326.3Z" transform="translate(-345.45 -230.85)"/><path class="cls-2" d="M384,249.9V237c0-3.3-7.3-5.9-16.3-5.9s-16.3,2.7-16.3,5.9v12.9a8.68,8.68,0,0,0-5.7,8.1V369a12,12,0,0,0,12,12h19.9a12,12,0,0,0,12-12V258A8.55,8.55,0,0,0,384,249.9Z" transform="translate(-345.45 -230.85)"/><path class="cls-3" d="M348.8,242.2" transform="translate(-345.45 -230.85)"/><path class="cls-4" d="M423.4,340.1c-12.1,0-21.9,3-21.9,6.7V375c0,3.7,9.8,6.7,21.9,6.7s21.9-3,21.9-6.7V346.8C445.3,343.1,435.5,340.1,423.4,340.1Z" transform="translate(-345.45 -230.85)"/><ellipse class="cls-4" cx="77.95" cy="115.85" rx="17" ry="4"/><line class="cls-2" x1="59.95" y1="121.15" x2="59.95" y2="144.25"/><line class="cls-2" x1="78.75" y1="124.95" x2="78.75" y2="148.05"/><line class="cls-2" x1="97.35" y1="119.85" x2="97.35" y2="142.95"/><line class="cls-2" x1="88.55" y1="123.85" x2="88.55" y2="146.95"/><line class="cls-2" x1="68.95" y1="123.85" x2="68.95" y2="146.95"/><ellipse class="cls-4" cx="22.35" cy="6.05" rx="12.6" ry="3.5"/></svg>',
      100
    ).translate!(0,70)
  end

  def tube(opened: false, contents: 'empty')
    tube = SVGElement.new(boundx: 46.92, boundy: 140)
    
    if contents == 'empty' && !opened
      tube.add_child(
        '<svg><defs><style>.cls-1_tube{fill:#fff;}.cls-1_tube,.cls-2_tube{stroke:#231f20;stroke-miterlimit:10;stroke-width:0.5px;}.cls-2_tube{fill:none;}</style></defs><rect class="cls-1_tube" x="5.5" y="2.53" width="33.11" height="9.82" rx="2.36" ry="2.36"/><rect class="cls-1_tube" x="0.25" y="0.25" width="42.88" height="7.39" rx="2.36" ry="2.36"/><path class="cls-2_tube" d="M411.36,243.86" transform="translate(-371.69 -233.08)"/><path class="cls-2_tube" d="M412,245.43a3.88,3.88,0,0,0,3.29-2.79,4.85,4.85,0,0,0-.42-4.28" transform="translate(-371.69 -233.08)"/><path class="cls-2_tube" d="M412,247.27a6,6,0,0,0,6.16-4.86,5.79,5.79,0,0,0-3.17-7" transform="translate(-371.69 -233.08)"/><rect class="cls-1_tube" x="0.53" y="11.4" width="42.32" height="4.79" rx="2.4" ry="2.4"/><path class="cls-2_tube" d="M374.62,249.27V304.5l11.32,68c.8,4.79,4.61,5.75,7.86,5.09s4.39-5.33,4.39-5.33l13.16-67.79V249.27Z" transform="translate(-371.69 -233.08)"/></svg>'
        )
    elsif contents == 'empty' && opened
      tube.add_child(
        '<svg><defs><style>.cls-1_tube{fill:none;}.cls-1_tube,.cls-2_tube{stroke:#231f20;stroke-miterlimit:10;stroke-width:0.5px;}.cls-2_tube{fill:#fff;}</style></defs><title>Untitled-1</title><path class="cls-1_tube" d="M410.51,263.07" transform="translate(-371.13 -215.85)"/><path class="cls-1_tube" d="M411.12,264.64a3.88,3.88,0,0,0,3.29-2.79,4.85,4.85,0,0,0-.42-4.28" transform="translate(-371.13 -215.85)"/><path class="cls-1_tube" d="M411.12,266.47a6,6,0,0,0,6.16-4.86,5.79,5.79,0,0,0-3.17-7" transform="translate(-371.13 -215.85)"/><rect class="cls-2_tube" x="0.25" y="47.83" width="42.32" height="4.79" rx="2.4" ry="2.4"/><path class="cls-1_tube" d="M373.78,268.47V323.7l11.32,68c.8,4.79,4.61,5.75,7.86,5.09s4.39-5.33,4.39-5.33l13.16-67.79V268.47Z" transform="translate(-371.13 -215.85)"/><rect class="cls-2_tube" x="394.99" y="233.39" width="33.11" height="9.82" rx="2.36" ry="2.36" transform="translate(236.03 -411.02) rotate(84.22)"/><rect class="cls-2_tube" x="393.55" y="233.89" width="42.88" height="7.39" rx="2.36" ry="2.36" transform="translate(238.41 -415.09) rotate(84.22)"/></svg>'
        )
    end
    tube.translate!(0,70)
  end
end

library: {name: JobComments, category: OLASimple}
code_source:
# frozen_string_literal: true

module JobComments
  COMMENT_KEY = 'Technician Comment'

  def accept_comments
    comments = ask_for_comments
    associate_comments_to_operation_and_plan comments unless comments.blank?
  end

  # Associates the comment entered by the lab technician to the operations and plans
  # of the protocol that uses this library.
  #
  # @param [String] the feedback entered by the lab technician.
  def associate_comments_to_operation_and_plan(comments)
    full_comment_key = COMMENT_KEY + "- job #{jid}"

    operations.each do |op|
      op.associate(full_comment_key, comments)
      op.plan.associate(full_comment_key, comments)
    end
  end

  def ask_for_comments
    comment = show do
      title 'Leave Comments'

      note 'If anything out of the ordinary happened during this protocol, make a note of it here.'

      warning 'Be as specific as possible, mentioning names of steps and labels of involved items when appropriate.'
      warning 'Wash hands well before using keyboard or tablet.'

      get 'text', var: 'response_key', label: 'Enter your feedback here', default: ''
    end
    comment[:response_key] # return
  end
end

library: {name: NetworkRequests, category: OLASimple}
code_source:
# This library allows complex network requests to be made from protocols
# so that external APIs can be consulted during protocol execution

require 'net/https'
module NetworkRequests
  
  # make post request to a URL, sending a Upload object as a file
  # returns the http response
  def post_file(post_url, key, aq_upload)
    file_url = aq_upload.url
    file_name = aq_upload.name
    file_obj = URI.open(file_url)
    
    uri = URI(post_url)
    req = Net::HTTP::Post.new(uri)
    req.set_form([[key, file_obj, {'filename': file_name}]], 'multipart/form-data')
    
    res = Net::HTTP.start(uri.hostname, uri.port) do |http|
      http.request(req)
    end
    return res
  end
  
end

library: {name: OLAConstants, category: OLASimple}
code_source:
needs "OLASimple/OLAKits"

module OLAConstants
  include OLAKits
  
  ##########################################
  # TECHNICAL (SHOULD NOT NEED TO CHANGE)
  ##########################################

  OLA_IP_API_URL = "http://ola_image_processing:5000/api/processstrips" # URL of OLASimple strip image processing service 

  ##########################################
  # DATA ASSOCIATION KEYS (DO NOT CHANGE)
  ##########################################
  #
  PATIENT_KEY = :patient
  TECH_KEY = :technician
  ALIAS_KEY = :alias
  KIT_KEY = :kit
  UNIT_KEY = :unit
  COMPONENT_KEY = :component
  SAMPLE_KEY = :sample
  SCANNED_IMAGE_UPLOAD_KEY = :scanned_image_upload
  SCANNED_IMAGE_UPLOAD_ID_KEY = :scanned_image_upload_id

  ##########################################
  # KIT SELECTION
  ##########################################

  KIT_SELECTION = OLAKits.rt_pcr()
  KIT_NAME = KIT_SELECTION["name"]
  SAMPLE_PREP_UNIT = KIT_SELECTION["sample prep"]
  EXTRACTION_UNIT = KIT_SELECTION["extraction"]
  PCR_UNIT = KIT_SELECTION["pcr"]
  LIGATION_UNIT = KIT_SELECTION["ligation"]
  DETECTION_UNIT = KIT_SELECTION["detection"]
  ANALYSIS_UNIT = KIT_SELECTION["analysis"]
  COLORS = DETECTION_UNIT["Mutation Colors"]

  ##########################################
  # LAB SPECIFICATIONS
  ##########################################
  SAVE_SAMPLES = false
  SUPERVISOR = "Nuttada P. or Cami C."

  ##########################################
  # KIT SPECIFICATIONS
  ##########################################

  # mutations
  MUTATIONKEY = :mutations

  # kit components
  DILUENT_A = "Diluent A" # what to call the Diluent A tube (i.e. water)
  STOP_MIX = "stop mix" # what to call the input samples (cell lysates)
  GOLD_MIX = "gold mix"
  STRIP = "detection strip"
  STRIPS = STRIP.pluralize(10)
  BAND = "band"
  BANDS = "bands"
  PANEL = "panel"
  AQUARIUM = "Aquarium"
  
  BATCH_SIZE = 2 # Changing batch size must be done in OLAScheduling as well as here

  ##########################################
  # CODONS
  ##########################################

  pcr_pkg_color = "STEELBLUE"
  lig_pkg_color = "PALETURQUOISE"
  det_pkg_color = "MEDIUMPURPLE"
  SAMPLE_PREP_PKG_NAME = "sample prep package"
  PCR_PKG_NAME = "PCR package"
  LIG_PKG_NAME = "ligation package"
  DET_PKG_NAME = "detection package"

  # names of sample field value and validate kit field types
  SAMPLE_PREP_FIELD_VALUE = "Sample Prep Pack"
  PCR_FIELD_VALUE = "PCR Pack"
  LIGATION_FIELD_VALUE = "Ligation Pack"
  DETECTION_FIELD_VALUE = "Detection Pack"
  KIT_FIELD_VALUE = "Kit"
  CODONS_FIELD_VALUE = "Codons"
  CODON_COLORS_FIELD_VALUE = "Codon Colors"
  NUM_SAMPLES_FIELD_VALUE = "Number of Samples"
  NUM_SUB_PACKAGES_FIELD_VALUE = "Number of Sub Packages"
  UNIT_NAME_FIELD_VALUE = "Unit Name"
  COMPONENTS_FIELD_VALUE = "Components"

  ##########################################
  # TERMINOLOGY
  ##########################################
  
  # areas
  PRE_PCR = "pre-PCR"
  POST_PCR = "post-PCR"

  # kit samples
  CELL_LYSATE = "cell lysate" # what to call the input samples (cell lysates)
  PCR_SAMPLE = "PCR sample" # what to call the tubes for the PCR protocol
  LIGATION_SAMPLE = "ligation sample"

  # equipment
  THERMOCYCLER = "thermocycler" # what to call the thermocycler
  CENTRIFUGE_PRE = "Minifuge"
  CENTRIFUGE_POST = "Minifuge"
  PCR_RACK_PRE = "PCR rack (in the #{PRE_PCR} area)" # what to call the racks the PCR tubes go in
  PCR_RACK_POST = "PCR rack (in the #{POST_PCR} area)" # what to call the racks the PCR tubes go in
  PHOTOCOPIER = "scanner"
  BASIC_MATERIALS_PRE = [
      "200uL pipette and filtered tips",
      "20uL pipette and filtered tips",
      "a spray bottle of 10% v/v bleach",
      "a spray bottle of 70% v/v ethanol",
      "a timer",
      "latex gloves"
  ]
  BASIC_MATERIALS_POST = [
      "200uL pipette and filtered tips",
      "20uL pipette and filtered tips",
      "a spray bottle of 10% v/v bleach",
      "a spray bottle of 70% v/v ethanol",
      "a timer",
      "latex gloves"
  ]
  TRASH_PRE = "trash (in the #{PRE_PCR} area)"
  TRASH_POST = "trash (in the #{POST_PCR} area)"
  WASTE_PRE = "biohazard waste (red bag in the #{PRE_PCR} area)"
  WASTE_POST = "biohazard waste (red bag in the #{POST_PCR} area)"
  BENCH_PRE = "bench 1 (in the #{PRE_PCR} area)"
  BENCH_POST = "bench 2 (in the #{POST_PCR} area)"
  PACKAGE_PRE = "package (#{PRE_PCR})"
  PACKAGE_POST = "package (#{POST_PCR})"
  FRIDGE_PRE = "fridge"
  FRIDGE_POST = "fridge"
  P20_PRE = "#{PRE_PCR} P20"
  P20_POST = "#{POST_PCR} P20"
  P200_PRE = "#{PRE_PCR} P200"
  P200_POST = "#{POST_PCR} P200"
  P1000_PRE = "#{PRE_PCR} P1000"
  P1000_POST = "#{POST_PCR} P1000"
  WIPE = "Paper towel"
  WIPE_PRE = WIPE
  WIPE_POST = WIPE

  # verbs
  CENTRIFUGE_VERB = "centrifuge" # or spin?

  PCR_CYCLE = "OSPCR"
  LIG_CYCLE = "OSLIG"
  STOP_CYCLE = "OSSTOP"
  
  def map_temporary_from_input(input, outputs, keys)
    outputs = [outputs].flatten
    keys = [keys].flatten
    operations.each do |op|
      input_item = op.input(input).item
      outputs.each do |out|
        keys.each do |k|
          op.output(out).item.associate LOT, input_item.get(k)
        end
      end
    end
  end

  def explicit_retrieve
    operations.retrieve interactive: false

    show do
      title "Retrieve the following items:"

      t = Table.new
      input_items = operations.map {|op| op.inputs.map {|i| i.item}}.flatten
      t.add_column("ID", input_items.map {|i| i.id})
      t.add_column("Type", input_items.map {|i| i.object_type.name})
      t.add_column("Location", input_items.map {|i| i.location})
      table t
    end
  end
end

library: {name: OLAGraphics, category: OLASimple}
code_source:
# require_relative 'graphics'
needs "OLASimple/SVGGraphics"
module OLAGraphics
  include Graphics
  include Graphics::MyGraphics

  @@colors = ["red", "yellow", "green", "blue", "purple", "gray"]

  def self.set_tube_colors(new_colors)
    @@colrs = new_colors
  end


  #####################################
  # BASICS
  #####################################

  def get_style
    <<EOF
      /* <![CDATA[ */
      
      #svg .yellow path {
          fill: #f7f9c2;
      }
      
      #svg .white rect {
          fill: #ffffff;
      }
      
      #svg .gray path {
          fill: #d4d4d4;
      }
      
      #svg .blue path {
          fill: #bdf8f9;
      }
      
      #svg .red path {
          fill: #ffc4c4;
      }
      
      #svg .green path {
          fill: #c4f9c2;
      }
      
      #svg .purple path {
          fill: #f1e0fc;
      }

      #svg .hidden {
        opacity: 0.3;
      }

      #svg .yellowstrip rect {
          fill: #f7f9c2;
      }
      
      #svg .bluestrip rect {
          fill: #bdf8f9;
      }
      
      #svg .whitestrip rect {
          fill: #ffffff;
      }
      
      #svg .redstrip rect {
          fill: #ffc4c4;
      }
      
      #svg .graystrip rect {
          fill: #d4d4d4;
      }
      
      #svg .greenstrip rect {
          fill: #c4f9c2;
      }
      
      #svg .purplestrip rect {
          fill: #f1e0fc;
      }

      #svg .redfluid path {
        fill: #ff7c66;
      }
      
      #svg .brownfluid path {
        fill: #8B4513;
      }

      #svg .pinkfluid path {
        fill: #ff8eec;
      }
      
      #svg .palefluid path {
          fill: #F2F5D1;
      }
      /* ]]> */
EOF
  end

  def display_svg(element, scale = 1)
    element.style!(self.get_style)
    element.svg(element.boundx, element.boundy, scale).to_str
  end

  # two labels on top of each other
  def two_labels(text1, text2)
    label1 = label(text1, "font-size".to_sym => 25)
    label2 = label(text2, "font-size".to_sym => 25)
    label2.align!('center-top')
    label2.align_with(label1, 'center-bottom')
    label2.translate!(0, 12)
    SVGElement.new(children: [label1, label2], boundx: label1.boundx, boundy: label1.boundy * 2)
  end

  # make a tube label
  def tube_label(kit, unit, component, sample)
    self.two_labels("#{unit}#{component}", "#{sample}")
  end

  def make_arrow(from, to, tlabel = nil, blabel = nil, tfontsize = 25, bfontsize = 25)
    # make right arrow
    top_label = label(tlabel, "font-size".to_sym => tfontsize)
    bottom_label = label(blabel, "font-size".to_sym => bfontsize)
    arrow = rarrow.scale(0.75)
    arrow.align!('center-right')
    arrow.align_with(to, 'center-left')
    v1 = from.get_abs_anchor('center-right') - from.abs_anchor_vector
    v2 = to.get_abs_anchor('center-left') - to.abs_anchor_vector
    m = (v1 + v2) / 2.0
    line = Line.new(*v1, *v2, 'black', 3)
    unless top_label.nil?
      top_label.translate!(*m)
      top_label.align!('center-bottom').translate!(0, -10)
    end
    unless bottom_label.nil?
      bottom_label.translate!(*m)
      puts bottom_label
      bottom_label.align!('center-top').translate!(0, 10)
    end
    myarrow = SVGElement.new(children: [line, arrow, bottom_label, top_label].compact)
  end

  def make_transfer(from, to, spacing, top_label, bottom_label)
    to.align_with(from, 'center-right').align!('center-left')
    to.translate!(spacing)
    arrow = make_arrow(from, to, top_label, bottom_label)
    elements = [arrow, from, to]
    puts elements.map {|e| Vector[e.x, e.y] + e.get_abs_anchor('center-right')}
    max_x = elements.map {|e| (Vector[e.x, e.y] + e.get_abs_anchor('center-right'))[0]}.max
    max_y = elements.map {|e| (Vector[e.x, e.y] + e.get_abs_anchor('center-bottom'))[1]}.max
    svg = SVGElement.new(
        children: elements,
        boundx: 1000,
        boundy: 300,
        )
    svg.translate!(20)
  end

  def make_tube(tube, bottom_label, middle_label, fluid = nil, cropped_for_closed_tube = false, fluidclass: nil)
    bottom_label = bottom_label.join("\n") if bottom_label.is_a?(Array)
    middle_label = middle_label.join("\n") if middle_label.is_a?(Array)
    img = SVGElement.new(boundx: tube.boundx, boundy: tube.boundy)
    tube_group = tube
    bottom_labels = bottom_label.split("\n")
    middle_labels = middle_label.split("\n")

    img.add_child(tube)
    fluidImage = nil
    if fluid == "small"
      fluidImage = fluid_small
    elsif fluid == "medium"
      fluidImage = fluid_medium
    elsif fluid == "large"
      fluidImage = fluid_large
    elsif fluid == "powder"
      fluidImage = powder
    end
    puts fluid
    fluidImage.new_class!(fluidclass) unless fluidImage.nil? or fluidclass.nil?
    img.add_child(fluidImage) unless fluidImage.nil?
    puts fluid
    if bottom_label != ""
      bl = nil
      if bottom_labels.length == 2
        bl = two_labels(*bottom_labels)
      else
        label = label(bottom_label, "font-size".to_sym => 25)
        bl = label
      end
      bl.align!('center-top')
      bl.align_with(tube, 'center-bottom')
      bl.translate!(-5 * tube.xscale, 5 * tube.yscale)
      tube.boundy = tube.boundy + bl.boundy
      img.add_child(bl)
    end

    if middle_label != ""
      ml = nil
      if middle_labels.length == 2
        ml = two_labels(*middle_labels)
      else
        ml = label(middle_label, "font-size".to_sym => 25)
      end
      ml.align!('center-center')
      ml.align_with(tube, 'center-bottom')
      ml.translate!(-9 * tube.xscale, -110 * tube.yscale)
      img.add_child(ml)
    end


    img.boundx = tube.boundx
    img.boundy = tube.boundy
    if cropped_for_closed_tube
      shift = 70
      img.boundy = img.boundy - shift
      img.group_children.translate!(0, -shift)
    end
    img.translate!(10)
  end

  #####################################
  # LIGATIONS
  #####################################

  def stripwell(kit, unit, components, sample, open_tubes, apply_classes, hide, spacing)
    open_tubes = open_tubes || []
    hide = hide || []
    apply_classes = apply_classes || []
    num = components.length
    grid = SVGGrid.new(num, 1, spacing, opentube.boundy)
    grid.each_pos do |r, c|

      # add label
      tube_label = ["#{unit}#{components[r]}", "#{sample}"]
      tube_type = closedtube
      if open_tubes.include?(r)
        tube_type = opentube
      end
      tube = make_tube(tube_type,
                       "",
                       tube_label,
                       nil,
                       false)
      tube.new_class!(apply_classes[r])
      if hide.include?(r)
        tube = tube.g(classname: 'hidden')
      end
      grid.add(tube, r, c)
    end
    grid
  end

  def display_ligation_tubes(kit, unit, components, sample, colors, open_tubes = nil, hide = nil, spacing = 70)
    
    mystripwell = stripwell(kit, unit, components, sample, open_tubes, colors, hide, spacing).scale!(0.75)
    myimage = SVGElement.new(boundx: 500, boundy: 190)
    myimage.add_child(mystripwell)
  end

  def highlight_ligation_tube(i, kit, unit, components, sample, colors)
    ligation_tubes = self.display_ligation_tubes(
        kit, unit, components, sample, colors, [i], (0..components.length - 1).to_a.reject {|x| x == i})
    ligation_tubes
  end

  def transfer_to_ligation_tubes_with_highlight(from, i, kit, unit, components, sample, colors, vol, bottom_label = nil)
    bottom_label = bottom_label || ""
    ligation_tubes = self.highlight_ligation_tube(i, kit, unit, components, sample, colors)
    ligation_tubes.align_with(from, 'center-right').align!('center-left')
    ligation_label = label("ligation tubes", "font-size".to_sym => 25)
    # ligation_label.align_with(ligation_tubes, 'center-bottom').align!('center-top')
    svg = self.make_transfer(from, ligation_tubes, 300, "#{vol}uL", bottom_label)
    svg.translate!(20)
    svg.boundy = svg.boundy - 20
    svg.boundx = 700
    svg.boundy = 295
    svg
  end

  #####################################
  # DETECTION
  #####################################

  def display_strip_panel(kit, unit, components, sample, colors)
    def panel kit, unit, components, sample, apply_classes
      apply_classes = apply_classes || []
      num = components.length
      strip = make_strip(nil, "")
      grid = SVGGrid.new(num, 1, 90, strip.boundy)
      grid.each_pos do |r, c|

        # add label
        strip_label = self.tube_label(kit, unit, components[r], sample).scale(0.8)
        strip = make_strip(strip_label, apply_classes[r] + "strip")
        grid.add(strip, r, c)
      end
      grid.scale!(0.75)
    end
    
    mypanel = panel(kit, unit, components, sample, colors)
    mypanel.boundx = 600
    mypanel
  end

  def display_panel_and_tubes(kit, panel_unit, tube_unit, components, sample, colors)
    tubes = display_ligation_tubes(kit, tube_unit, components, sample, colors)
    panel = display_strip_panel(kit, panel_unit, components, sample, colors)
    tubes.align_with(panel, 'center-bottom')
    tubes.align!('center-top')
    tubes.translate!(0, -50)
    img = SVGElement.new(children: [tubes, panel], boundy: 330, boundx: panel.boundx)
  end

  def make_strip mylabel, classname
    mystrip = SVGElement.new(boundx: 83.1, boundy: 247.45)
    mystrip.add_child(self.strip)
    mystrip.add_child(self.striplabel.new_class(classname))
    # mylabel = label("Strip", "font-size".to_sym=>20)
    unless mylabel.nil?
      mylabel.align_with(mystrip, 'center-top')
      mylabel.align!('center-center')
      mylabel.translate!(0, 20)
      mystrip.add_child(mylabel)
    end
    mystrip
  end

  def detection_strip_diagram
    img = SVGElement.new(boundx: 270, boundy: 350)
    img.add_child(<<EOF
     <g id="Strip">
	<g>
		<rect x="4.75" fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" width="78.346" height="242.948"/>
		<line fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" x1="0" y1="247.448" x2="4.75" y2="242.948"/>
		<polygon fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" points="-0.067,4.777 4.75,0.001 4.75,242.948 0,247.448 		"/>
		<polygon fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" points="74.917,247.448 0,247.448 4.75,242.948 83.096,242.948 
					"/>
	</g>
	<g>
		<rect x="19.583" y="49.433" fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" width="46.667" height="80"/>
		<rect x="27.083" y="57.433" fill="#FFFFFF" stroke="#000000" stroke-miterlimit="10" width="31.667" height="64"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="27.083" y1="121.433" x2="19.583" y2="129.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="58.75" y1="121.433" x2="66.25" y2="129.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="58.75" y1="57.433" x2="66.25" y2="49.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="27.083" y1="57.433" x2="19.583" y2="49.433"/>
	</g>
	<g>
		<path fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" d="M57.524,216.515c0,4.385-3.693,7.938-8.249,7.938H36.557
			c-4.556,0-8.249-3.554-8.249-7.938v-22.164c0-4.385,3.693-7.939,8.249-7.939h12.718c4.556,0,8.249,3.554,8.249,7.939V216.515z"/>
		<path fill="#FFFFFF" stroke="#000000" stroke-miterlimit="10" d="M52.917,213.019c0,3.002-2.528,5.435-5.647,5.435h-8.706
			c-3.119,0-5.647-2.433-5.647-5.435v-15.172c0-3.001,2.528-5.435,5.647-5.435h8.706c3.119,0,5.647,2.433,5.647,5.435V213.019z"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="34.01" y1="216.224" x2="30.27" y2="221.647"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="51.823" y1="216.224" x2="55.562" y2="221.647"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="51.823" y1="194.642" x2="55.023" y2="188.663"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="34.01" y1="194.195" x2="30.27" y2="189.666"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="32.917" y1="205.433" x2="28.308" y2="205.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="52.917" y1="205.433" x2="57.524" y2="205.433"/>
	</g>
</g>
<g id="StripLabel">
	<rect x="4.75" fill="#ED1C24" stroke="#000000" stroke-miterlimit="10" width="78.346" height="46.433"/>
</g>
<polygon fill="#BBC9E7" stroke="#000000" stroke-miterlimit="10" points="43.923,198.542 48.016,201.414 166.567,59.148 
	141.463,41.534 "/>
<text transform="matrix(1 0 0 1 -60.75 216.2236)" font-family="'MyriadPro-Regular'" font-size="20">Port</text>
<text transform="matrix(1 0 0 1 -87.2627 91.1001)"><tspan x="0" y="0" font-family="'MyriadPro-Regular'" font-size="20">Reading</tspan><tspan x="0" y="24" font-family="'MyriadPro-Regular'" font-size="20">Window</tspan></text>
<line fill="none" stroke="#000000" stroke-width="4" stroke-miterlimit="10" x1="-11.417" y1="95.1" x2="32.917" y2="94.1"/>
<line fill="none" stroke="#000000" stroke-width="4" stroke-miterlimit="10" x1="-17.417" y1="209.401" x2="26.917" y2="208.401"/>
EOF
    )
    img.translate!(100)
    return img
  end

  def negative_selection_diagram
    img = SVGElement.new(boundx: 600, boundy: 262)
    img.add_child(<<EOF
<g id="SingleTubes_3_">
	<g id="ClosedLid_3_">
		<g>
			<path fill="#F7FCFE" d="M363.205,46.889c22.801,0,22.801,18.312,0,18.312c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173
				C363.205,49.268,363.205,48.078,363.205,46.889z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M363.205,46.889c22.801,0,22.801,18.312,0,18.312
				c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173C363.205,49.268,363.205,48.078,363.205,46.889z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M317.727,67.92c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688c0-1.1-0.535-2-1.188-2
				c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2s-1.188,0.9-1.188,2
				V67.92z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M317.727,67.92c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688
				c0-1.1-0.535-2-1.188-2c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2
				s-1.188,0.9-1.188,2V67.92z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M308.352,48.026c-0.55-0.952-0.1-1.731,1-1.731h55.473c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121
				c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731L308.352,48.026z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M308.352,48.026c-0.55-0.952-0.1-1.731,1-1.731h55.473
				c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731
				L308.352,48.026z"/>
		</g>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="380.16" y1="58.514" x2="381.305" y2="58.514"/>
	</g>
	<g id="Tube_3_">
		<path fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M312.102,65.873v45.309l14.998,90.066
			c0,4.35,5.037,7.875,11.25,7.875c6.215,0,11.25-3.525,11.25-7.875l15-90.066V65.873H312.102z"/>
		<g>
			<path fill="#F7FCFE" d="M369.35,61.873c0,2.199-1.799,4-4,4h-54c-2.199,0-4-1.801-4-4v-1.875c0-2.201,1.801-4,4-4h54
				c2.201,0,4,1.799,4,4V61.873z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M369.35,61.873c0,2.199-1.799,4-4,4h-54c-2.199,0-4-1.801-4-4
				v-1.875c0-2.201,1.801-4,4-4h54c2.201,0,4,1.799,4,4V61.873z"/>
		</g>
	</g>
</g>
<g id="SingleTubes_1_">
	<g id="ClosedLid_1_">
		<g>
			<path fill="#F7FCFE" d="M175.96,48.821c22.801,0,22.801,18.312,0,18.312c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173
				C175.96,51.2,175.96,50.011,175.96,48.821z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M175.96,48.821c22.801,0,22.801,18.312,0,18.312
				c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173C175.96,51.2,175.96,50.011,175.96,48.821z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M130.481,69.853c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688c0-1.1-0.535-2-1.188-2
				c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2s-1.188,0.9-1.188,2
				V69.853z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M130.481,69.853c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688
				c0-1.1-0.535-2-1.188-2c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2
				s-1.188,0.9-1.188,2V69.853z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M121.106,49.959c-0.55-0.952-0.1-1.731,1-1.731h55.473c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121
				c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731L121.106,49.959z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M121.106,49.959c-0.55-0.952-0.1-1.731,1-1.731h55.473
				c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731
				L121.106,49.959z"/>
		</g>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="192.915" y1="60.446" x2="194.06" y2="60.446"/>
	</g>
	<g id="Tube_1_">
		<path fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M124.856,67.806v45.309l14.998,90.066
			c0,4.35,5.037,7.875,11.25,7.875c6.215,0,11.25-3.525,11.25-7.875l15-90.066V67.806H124.856z"/>
		<g>
			<path fill="#F7FCFE" d="M182.104,63.806c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V63.806
				z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M182.104,63.806c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875
				c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V63.806z"/>
		</g>
	</g>
</g>
<g id="SingleTubes_2_">
	<g id="ClosedLid_2_">
		<g>
			<path fill="#F7FCFE" d="M272.545,47.965c22.801,0,22.801,18.312,0,18.312c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173
				C272.545,50.344,272.545,49.154,272.545,47.965z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M272.545,47.965c22.801,0,22.801,18.312,0,18.312
				c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173C272.545,50.344,272.545,49.154,272.545,47.965z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M227.066,68.996c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688c0-1.101-0.534-2-1.188-2
				s-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2s-1.188,0.899-1.188,2V68.996z"
				/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M227.066,68.996c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688
				c0-1.101-0.534-2-1.188-2s-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2
				s-1.188,0.899-1.188,2V68.996z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M217.691,49.103c-0.55-0.953-0.1-1.732,1-1.732h55.473c1.1,0,2.311,0.845,2.69,1.877l1.146,3.121
				c0.38,1.032-0.21,1.877-1.31,1.877h-54.028c-1.1,0-2.45-0.779-3-1.732L217.691,49.103z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M217.691,49.103c-0.55-0.953-0.1-1.732,1-1.732h55.473
				c1.1,0,2.311,0.845,2.69,1.877l1.146,3.121c0.38,1.032-0.21,1.877-1.31,1.877h-54.028c-1.1,0-2.45-0.779-3-1.732L217.691,49.103z
				"/>
		</g>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="289.5" y1="59.59" x2="290.645" y2="59.59"/>
	</g>
	<g id="Tube_2_">
		<path fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M221.441,66.949v45.309l14.998,90.066
			c0,4.35,5.037,7.875,11.25,7.875c6.215,0,11.25-3.525,11.25-7.875l15-90.066V66.949H221.441z"/>
		<g>
			<path fill="#F7FCFE" d="M278.689,62.949c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V62.949
				z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M278.689,62.949c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875
				c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V62.949z"/>
		</g>
	</g>
</g>
<g id="SingleTubes_4_">
	<g id="ClosedLid_4_">
		<g>
			<path fill="#F7FCFE" d="M459.754,47.131c22.801,0,22.801,18.312,0,18.312c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173
				C459.754,49.51,459.754,48.32,459.754,47.131z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M459.754,47.131c22.801,0,22.801,18.312,0,18.312
				c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173C459.754,49.51,459.754,48.32,459.754,47.131z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M414.275,68.162c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688c0-1.1-0.535-2-1.188-2
				c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2s-1.188,0.9-1.188,2
				V68.162z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M414.275,68.162c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688
				c0-1.1-0.535-2-1.188-2c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2
				s-1.188,0.9-1.188,2V68.162z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M404.9,48.269c-0.55-0.952-0.1-1.731,1-1.731h55.473c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121
				c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731L404.9,48.269z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M404.9,48.269c-0.55-0.952-0.1-1.731,1-1.731h55.473
				c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731
				L404.9,48.269z"/>
		</g>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="476.709" y1="58.756" x2="477.854" y2="58.756"/>
	</g>
	<g id="Tube_4_">
		<path fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M408.65,66.115v45.309l14.998,90.066
			c0,4.35,5.037,7.875,11.25,7.875c6.215,0,11.25-3.525,11.25-7.875l15-90.066V66.115H408.65z"/>
		<g>
			<path fill="#F7FCFE" d="M465.898,62.115c0,2.199-1.799,4-4,4h-54c-2.199,0-4-1.801-4-4V60.24c0-2.201,1.801-4,4-4h54
				c2.201,0,4,1.799,4,4V62.115z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M465.898,62.115c0,2.199-1.799,4-4,4h-54c-2.199,0-4-1.801-4-4
				V60.24c0-2.201,1.801-4,4-4h54c2.201,0,4,1.799,4,4V62.115z"/>
		</g>
	</g>
</g>
<rect x="180.021" y="67.951" fill="#58595B" stroke="#000000" stroke-miterlimit="10" width="16.705" height="143.104"/>
<rect x="276.023" y="68.36" fill="#58595B" stroke="#000000" stroke-miterlimit="10" width="16.705" height="143.104"/>
<rect x="366.934" y="66.539" fill="#58595B" stroke="#000000" stroke-miterlimit="10" width="16.705" height="143.104"/>
<g>
	<path fill="#F2F5D1" stroke="#000000" stroke-miterlimit="10" d="M151.104,211.465c6.215,0,11.25-3.525,11.25-7.875l15-90.066
		V92.904c-3.914-4.414-7.246-9.508-14.937-9.508c-13.567,0-13.567,15.856-27.136,15.856c-4.752,0-7.837-1.947-10.426-4.476v18.746
		l14.998,90.066C139.854,207.939,144.891,211.465,151.104,211.465z"/>
	<path id="largegoop_1_" fill="#BE1E2D" d="M176.233,99.027c-0.539-0.592-1.101-1.156-1.7-1.677
		c-2.18-1.891-4.767-3.295-7.818-4.106c-3.108-0.959-5.194-0.299-6.55,1.576c-1.355,1.877-1.983,4.971-2.176,8.881
		c-0.043,4.081,0.029,8.187,0.148,12.31c-0.371,3.683-0.492,7.357-0.467,11.022c0.897,18.184,3.846,37.165-0.056,56.177
		c-0.8,1.744-1.673,3.365-2.61,4.925c-3.899,3.502-12.119,3.583-12.802,9.137c-1.465,7.144,6.075,12.614,13.855,11.348
		c1.231-0.126,2.429-0.324,3.597-0.573c0.996-1.113,1.578-2.408,1.578-3.796l15-85.266V99.027z"/>
</g>
<g>
	<path fill="#F2F5D1" stroke="#000000" stroke-miterlimit="10" d="M338.349,210.596c6.215,0,11.25-3.525,11.25-7.875l15-90.066
		V92.035c-3.914-4.414-7.246-9.508-14.937-9.508c-13.567,0-13.567,15.856-27.136,15.856c-4.752,0-7.837-1.947-10.426-4.476v18.746
		l14.998,90.066C327.099,207.07,332.136,210.596,338.349,210.596z"/>
	<path id="smallgoop_1_" fill="#BE1E2D" d="M351.601,187.893c-0.48,0.29-0.853,0.667-1.167,1.104
		c-0.286,0.446-0.544,0.889-0.791,1.329c-0.345,0.425-0.624,0.832-0.864,1.229c-0.991,1.92-1.5,3.797-3.802,6.113
		c-0.326,0.24-0.664,0.473-1.014,0.702c-1.255,0.63-3.409,1.163-3.962,1.811c-0.864,0.87,0.737,0.984,2.856,0.351
		c2.816-0.787,5.354-1.938,7.215-3.107c0.564-0.939,0.878-1.972,0.878-3.055l1.118-6.713
		C351.903,187.729,351.745,187.806,351.601,187.893z"/>
</g>
<g>
	<path fill="#F2F5D1" stroke="#000000" stroke-miterlimit="10" d="M247.69,210.199c6.215,0,11.25-3.525,11.25-7.875l15-90.066
		V91.639c-3.914-4.414-7.246-9.508-14.937-9.508c-13.567,0-13.567,15.856-27.136,15.856c-4.752,0-7.837-1.947-10.426-4.476v18.746
		l14.998,90.066C236.44,206.674,241.478,210.199,247.69,210.199z"/>
	<path id="mediumgoop_1_" fill="#BE1E2D" d="M265.456,155.475c-1.722-0.177-2.978,0.252-3.904,1.138s-1.526,2.229-1.938,3.884
		c-0.338,1.716-0.611,3.433-0.859,5.154c-0.497,1.573-0.849,3.123-1.115,4.659c-0.877,7.564-0.631,15.315-4.343,23.576
		c-0.596,0.789-1.225,1.533-1.886,2.255c-2.521,1.753-7.274,2.385-8.095,4.764c-1.395,3.104,2.541,4.853,7.132,3.756
		c3.25-0.642,6.229-1.791,8.848-3.264c0.022-0.203,0.044-0.406,0.044-0.613l7.516-45.127
		C266.412,155.575,265.951,155.51,265.456,155.475z"/>
</g>
<g>
	<path fill="#F2F5D1" stroke="#000000" stroke-miterlimit="10" d="M434.899,209.771c6.215,0,11.25-3.525,11.25-7.875l15-90.066
		V91.211c-3.914-4.414-7.246-9.508-14.937-9.508c-13.567,0-13.567,15.856-27.136,15.856c-4.752,0-7.837-1.947-10.426-4.476v18.746
		l14.998,90.066C423.649,206.246,428.687,209.771,434.899,209.771z"/>
</g>
<text transform="matrix(1 0 0 1 11.918 253.2422)" font-family="'MyriadPro-Regular'" font-size="25">Unwanted Cells</text>
<text transform="matrix(1 0 0 1 12.8271 173.3662)" font-family="'MyriadPro-Regular'" font-size="25">CD+ Cells</text>
<g>
	<polygon stroke="#000000" stroke-miterlimit="10" points="158.353,205.239 150.153,202.41 156.704,194.296 	"/>
	<line fill="none" stroke="#000000" stroke-width="3" stroke-miterlimit="10" x1="154.61" y1="202.672" x2="147.199" y2="232.312"/>
</g>
<g>
	<polygon stroke="#000000" stroke-miterlimit="10" points="135.032,139.835 133.309,134.386 142.02,130.715 	"/>
	
		<line fill="none" stroke="#000000" stroke-width="3" stroke-miterlimit="10" x1="135.147" y1="136.361" x2="110.832" y2="156.343"/>
</g>
<text transform="matrix(1 0 0 1 140.5879 38.501)" font-family="'MyriadPro-Regular'" font-size="41">1</text>
<text transform="matrix(1 0 0 1 234.8652 36.8428)" font-family="'MyriadPro-Regular'" font-size="41">2</text>
<text transform="matrix(1 0 0 1 326.0049 38.4541)" font-family="'MyriadPro-Regular'" font-size="41">3</text>
<text transform="matrix(1 0 0 1 435.0049 38.4541)" font-family="'MyriadPro-Regular'" text-anchor="middle" font-size="25">CD4+/RBC</text>
EOF
    )
    img
  end
end

library: {name: OLAKitIDs, category: OLASimple}
code_source:
# frozen_string_literal: true

needs 'OLASimple/OLAConstants'
needs 'OLASimple/OLAGraphics'

module OLAKitIDs
  include OLAGraphics

  KIT_NUM_DIGITS = 3
  SAMPLE_NUM_DIGITS = 3
  BATCH_SIZE = OLAConstants::BATCH_SIZE
  PROPOGATION_KEYS = [OLAConstants::KIT_KEY, OLAConstants::SAMPLE_KEY, OLAConstants::PATIENT_KEY].freeze # which associations to propogate forward during an operation
  ALL_KIT_KEYS = PROPOGATION_KEYS + [OLAConstants::COMPONENT_KEY, OLAConstants::UNIT_KEY].freeze # all keys for important kit item associations

  def extract_kit_number(id)
    id.chars[-KIT_NUM_DIGITS, KIT_NUM_DIGITS].join.to_i if id.chars[-KIT_NUM_DIGITS, KIT_NUM_DIGITS]
  end

  def extract_sample_number(id)
    id.chars[-SAMPLE_NUM_DIGITS, SAMPLE_NUM_DIGITS].join.to_i if id.chars[-SAMPLE_NUM_DIGITS, SAMPLE_NUM_DIGITS]
  end

  def sample_num_to_id(num)
    num.to_s.rjust(SAMPLE_NUM_DIGITS, '0')
  end

  def kit_num_to_id(num)
    num.to_s.rjust(KIT_NUM_DIGITS, '0')
  end

  # requires and returns integer ids
  def kit_num_from_sample_num(sample_num)
    ((sample_num - 1) / BATCH_SIZE).floor + 1
  end

  # requires and returns integer ids
  def sample_nums_from_kit_num(kit_num)
    sample_nums = []
    BATCH_SIZE.times do |i|
      sample_nums << kit_num * BATCH_SIZE - i
    end
    sample_nums.reverse
  end

  AUTOFILL = false # for debugging purposes when you don't have a barcode scanner

  def validate_package(this_package)
    resp = show do
      title 'Validate kit package'
      note "Scan in the ID of package #{this_package} which you've retrieved."
      default = AUTOFILL ? this_package : ''
      get 'text', var: :package, label: "Package ID", default: default
    end
    return false if resp[:package] != this_package

    return true
  end

  def package_validation_with_multiple_tries(this_package)
    5.times do
      result = validate_package(this_package)
      return true if result || debug

      show do
        title 'Wrong Package'
        note 'Ensure that you have the correct package before continuing.'
        note "The package should be labeled <b>#{this_package}</b>."
        note 'On the next step you will retry scanning in the package.'
      end
    end
    operations.each do |op|
      op.error(:package_problem, 'Package id is wrong and could not be resolved')
    end
    raise 'Package id is wrong and could not be resolved. Speak to a Lab manager.'
  end

  def validate_samples(expected_object_ids, svgs, ids_override: nil)
    show_ids = expected_object_ids
    expected_object_ids = ids_override if ids_override
    resp = show do
      title 'Validate Incoming Samples'

      note "To ensure we are working with the right samples, scan in the IDs of the retrieved inputs #{show_ids.to_sentence}."
      expected_object_ids.size.times do |i|
        default = AUTOFILL ? expected_object_ids[i] : ''
        get 'text', var: i.to_s.to_sym, label: '', default: default
      end
    end

    expected_object_ids.size.times do |i|
      if resp[i.to_s.to_sym]
        found = expected_object_ids.delete(resp[i.to_s.to_sym])
      end
      return false unless found
    end
    true
  end

  def pre_transfer_validate(expected_object_ids, svgs, ids_override: nil, content_override: nil)
    show_ids = expected_object_ids
    expected_object_ids = ids_override if ids_override
    grid = SVGGrid.new(svgs.size, 1, 150, 100)
    svgs.each_with_index do |svg, i|
      grid.add(svg, i, 0)
    end
    img = SVGElement.new(children: [grid], boundx: 1000, boundy: 300).translate(100, 0)

    resp = show do
      if content_override
        raw content_override
      else
        title 'Prepare Samples for transfer'

        check "In preparation for liquid transfer, set aside tubes #{show_ids.to_sentence}."
        note 'Scan in tube IDs for confirmation.'
      end
      note display_svg(img, 0.75)
      expected_object_ids.size.times do |i|
        default = AUTOFILL ? expected_object_ids[i] : ''
        get 'text', var: i.to_s.to_sym, label: '', default: default 
      end
    end

    expected_object_ids.size.times do |i|
      if resp[i.to_s.to_sym]
        found = expected_object_ids.delete(resp[i.to_s.to_sym])
      end
      return false unless found
    end
    true
  end

  def pre_transfer_validation_with_multiple_tries(from_name, to_name, from_svg=nil, to_svg=nil, content_override: nil)
    from_id = from_name.dup.sub("-", "")
    to_id = to_name.dup.sub("-", "")
    5.times do
      result = pre_transfer_validate([from_name, to_name], [from_svg, to_svg], ids_override: [from_id, to_id], content_override: content_override)
      return true if result || debug

      show do
        title 'Wrong tubes'
        note 'Ensure that you have the correct tubes before continuing.'
        note 'On the next step you will retry scanning in the samples.'
      end
    end
    operations.each do |op|
      op.error(:wrong_items, 'Objects for transfer are wrong and could not be resolved')
    end
    raise 'Objects for transfer are wrong and could not be resolved. Speak to a lab manager.'
  end

  def sample_validation_with_multiple_tries(expected_object_ids, expected_svgs=nil)
    expected_object_ids = expected_object_ids.map { |id| id.dup.sub("-", "") }
    5.times do
      result = validate_samples(expected_object_ids, expected_svgs, ids_override: expected_object_ids)
      return true if result || debug

      show do
        title 'Wrong Samples'
        note 'Ensure that you have the correct samples before continuing.'
        note 'On the next step you will retry scanning in the samples.'
      end
    end
    operations.each do |op|
      op.error(:sample_problem, 'Incoming samples are wrong and could not be resolved')
    end
    raise 'Incoming samples are wrong and could not be resolved. Speak to a Lab manager.'
  end

  def record_technician_id
    resp = show do
      title 'Scan your technician ID'
      note 'Scan the technician ID barcode on your badge.'
      note display_svg(technician_id_svg, 0.5)
      default = AUTOFILL ? 'TECH634' : ''
      get 'text', var: :id, label: 'ID', default: default
    end
    operations.each do |op|
      op.associate(OLAConstants::TECH_KEY, resp[:id])
    end
  end

  ################################################################################
  ####  ID PROPOGATION
  ################################################################################

  def populate_temporary_kit_info_from_input_associations(ops, input_name)
    if debug
      ops.each_with_index do |op, i|
        op.temporary["input_#{OLAConstants::KIT_KEY}"] = kit_num_to_id(1)
        op.temporary["input_#{OLAConstants::SAMPLE_KEY}"] = sample_num_to_id(i + 1)
        op.temporary["input_#{OLAConstants::PATIENT_KEY}"] = rand(1..30).to_s
        op.temporary["output_#{OLAConstants::KIT_KEY}"] = op.temporary["input_#{OLAConstants::KIT_KEY}"]
        op.temporary["output_#{OLAConstants::SAMPLE_KEY}"] = op.temporary["input_#{OLAConstants::SAMPLE_KEY}"]
        op.temporary["output_#{OLAConstants::PATIENT_KEY}"] = op.temporary["input_#{OLAConstants::PATIENT_KEY}"]
      end
    else
      # grab all data associations from inputs and place into temporary
      populate_temporary_values_from_input_associations(ops, input_name, ALL_KIT_KEYS, PROPOGATION_KEYS)
    end
  end

  def populate_temporary_values_from_input_associations(ops, input_name, keys, propogated_keys)
    ops.each do |op|
      from = op.input(input_name).item
      from_das = DataAssociation.where(parent_id: from.id, parent_class: from.class.to_s, key: keys)
      from_das.each do |da|
        op.temporary["input_#{da.key}".to_sym] = da.value
        op.temporary["output_#{da.key}".to_sym] = da.value if PROPOGATION_KEYS.include?(da.key)
      end
    end
  end

  # Sends forward kit num, sample num, and patient id from the input item to the output item
  # for all operations
  def propogate_kit_info_forward(ops, input_name, output_name)
    das = []
    ops.each do |op|
      new_das = propogate_information_lazy(
        op.input(input_name).item,
        op.output(output_name).item,
        PROPOGATION_KEYS
      )
      das.concat(new_das)
    end
    DataAssociation.import das, on_duplicate_key_update: [:object]
  end

  # helper for propogate_kit_information_forward
  def propogate_information_lazy(from, to, keys = [])
    from_das = DataAssociation.where(parent_id: from.id, parent_class: from.class.to_s, key: keys)
    from_das.map { |da| to.lazy_associate(da.key, da.value) }
  end

  # Assumes only one output item
  # Sets the output items (and operation temporay values) to the given component and unit
  def set_output_components_and_units(ops, output_name, component, unit)
    data_associations = []
    ops.each do |op|
      it = op.output(output_name).item
      data_associations << it.lazy_associate(OLAConstants::COMPONENT_KEY, component)
      data_associations << it.lazy_associate(OLAConstants::UNIT_KEY, unit)
      op.temporary[OLAConstants::COMPONENT_KEY] = component
      op.temporary[OLAConstants::UNIT_KEY] = unit
    end
    DataAssociation.import data_associations, on_duplicate_key_update: [:object]
  end

  def technician_id_svg
    child = icon_from_html(
      '<svg><defs><clipPath id="clip-path" transform="translate(-117.03 -68.5)"><polygon points="190.6 172.5 205.9 144.6 167.7 121.4 91.1 232.7 131.2 285.2 194 237.4 278.2 229.1 279.1 196.4 190.6 196.4 190.6 172.5" fill="none"/></clipPath></defs><title>2_TechnicianIDcard</title><rect x="73.57" y="0.5" width="197.8" height="127.4" fill="#fff" stroke="#000" stroke-miterlimit="10"/><g clip-path="url(#clip-path)"><path d="M139.2,210.9c2.1-1.9,8.4-9.2,10.1-14.6s9.1-22.9,13.4-25.7,12.9-10.2,15.8-14.9a143.5,143.5,0,0,1,8.2-11.8s3-6.2,5.6-3.6,4.2,10.4.4,16-10.2,12.8-12,17.4c0,0,23-2,26.7-4.3s26.1-10.7,27.3-11.6,19.7-8.4,24.1-7.1,6.5,2.1,6.1,4.2a14.94,14.94,0,0,1-2.8,4.8s11.3-4.9,12.8-3.3c0,0,6.6,1.4,3.7,6.4a20.15,20.15,0,0,1-8.4,7.4l-10.3,6.3c5.3-2.3,12.4-5.2,13.4-4.1,1.5,1.6,8.7,3.7.2,8.6-7.6,4.5-20.4,11.4-23,12.8h0c5.6-2.3,8-1.3,12,.3s-8.2,9.6-9.7,11-18.6,9.7-26.4,16.3-26.7,14.6-32.6,15.5-32.8,10.4-37.7,12.3-14.5,15.6-21.2,17.1-17.3-38.2-17.3-38.2S137.2,212.8,139.2,210.9Z" transform="translate(-117.03 -68.5)" fill="#b4b9de"/><path d="M179.1,185.3a42.36,42.36,0,0,1,1.9-11.1c1.8-4.6,8.2-11.8,12-17.4s2.2-13.5-.4-16-5.6,3.6-5.6,3.6-5.3,7.1-8.2,11.8-11.5,12-15.8,14.9-11.6,20.2-13.4,25.7-8,12.7-10.1,14.6-21.9,17.2-21.9,17.2,10.5,39.6,17.3,38.2,16.2-15.2,21.2-17.1,31.9-11.5,37.7-12.3,24.8-8.8,32.6-15.5,24.9-15,26.4-16.3,13.7-9.4,9.7-11-6.5-2.7-12.5-.1-15.6,9.9-19.1,11.2-7.1,4.8-7.1,4.8" transform="translate(-117.03 -68.5)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/><path d="M181.1,174.2s23-2,26.7-4.3,26.1-10.7,27.3-11.6,19.7-8.4,24.1-7.1,6.5,2.1,6.1,4.2a15.65,15.65,0,0,1-9.5,9.4c-5.1,1.4-26.9,10.1-31.4,13-4.7,2.9-7.4,4.7-7.4,4.7" transform="translate(-117.03 -68.5)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/><path d="M223.5,193.4s28.7-13.7,31.3-14.3,17.6-8,19.1-6.4,8.7,3.7.2,8.6c-8.5,5.1-23.5,13.1-23.5,13.1" transform="translate(-117.03 -68.5)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/><path d="M262.6,160s11.3-4.9,12.8-3.3c0,0,6.6,1.4,3.7,6.4a20.15,20.15,0,0,1-8.4,7.4l-10.3,6.3" transform="translate(-117.03 -68.5)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/></g><g style="isolation:isolate"><text transform="translate(110.02 52.91)" font-size="21.42" font-family="ArialMT, Arial" style="isolation:isolate">OLA-Simple</text><text transform="translate(110.02 78.61)" font-size="21.42" font-family="ArialMT, Arial" style="isolation:isolate"><tspan letter-spacing="-0.11em">T</tspan><tspan x="10.71" y="0">echnician ID</tspan></text></g><rect x="73.57" y="0.5" width="197.8" height="23.3" fill="#0d537c"/><text transform="translate(114.25 19.7)" font-size="21.67" fill="#16f70b" font-family="Arial-BoldMT, Arial" font-weight="700" style="isolation:isolate">AQUARIUM</text><rect x="104.47" y="89" width="3.2" height="30.4"/><rect x="109.37" y="89" width="1.9" height="30.4"/><rect x="114.27" y="89" width="1.8" height="30.4"/><rect x="122.97" y="89" width="3.1" height="30.4"/><rect x="127.67" y="89" width="5.1" height="30.4"/><rect x="138.07" y="89" width="1.5" height="30.4"/><rect x="140.97" y="89" width="2.1" height="30.4"/><rect x="146.17" y="89" width="5.2" height="30.4"/><rect x="152.87" y="89" width="3.4" height="30.4"/><rect x="159.47" y="89" width="2" height="30.4"/><rect x="213.75" y="88.9" width="2.9" height="30.4"/><rect x="210.47" y="88.9" width="1.7" height="30.4"/><rect x="205.96" y="88.9" width="1.7" height="30.4"/><rect x="196.81" y="88.9" width="2.9" height="30.4"/><rect x="190.63" y="88.9" width="4.7" height="30.4"/><rect x="184.43" y="88.9" width="1.4" height="30.4"/><rect x="181.26" y="88.9" width="1.9" height="30.4"/><rect x="173.56" y="88.9" width="4.8" height="30.4"/><rect x="168.98" y="88.9" width="3.1" height="30.4"/><rect x="164.19" y="88.9" width="1.8" height="30.4"/><rect x="221.97" y="89" width="3.2" height="30.4"/><rect x="226.77" y="89" width="1.9" height="30.4"/><rect x="231.77" y="89" width="1.8" height="30.4"/><rect x="240.37" y="89" width="3.1" height="30.4"/><rect x="246.77" y="89" width="1.5" height="30.4"/></svg>'
    )
    SVGElement.new(children: [child], boundx: 400, boundy: 200)
  end
end

library: {name: OLAKits, category: OLASimple}
code_source:
module OLAKits
  def self.rt_pcr()
    {
        "name" => "rt pcr kit",
        "sample prep" => {
            "Unit Name" => "S",
            "Components" => {
                "sample tube" => ""
            }
        },
        "extraction" => {
            "Unit Name" => "E",
            "Components" => {
                "dtt" => "0",
                "lysis buffer" => "1",
                "wash buffer 1" => "2",
                "wash buffer 2" => "3",
                "sodium azide water" => "4",
                "sample column" => "5",
                "rna extract tube" => "6",
            },
            "Number of Samples" => 2,
        },
        "pcr" => {
            "Unit Name" => "A",
            "Components" => {
                "sample tube" => "2",
                "diluent A" => "1"
            },
            "PCR Rehydration Volume" => 40,
            "Number of Samples" => 2,
            "Number of Sub Packages" => 2,
        },

        "ligation" => {
            "Unit Name" => "L",
            "Components" => {
                "sample tubes" => [
                    "1",
                    "2",
                    "3",
                    "4",
                    "5",
                    "6",
                    "7"
                ],
                "diluent A" => "0"
            },
            "PCR to Ligation Mix Volume" => 1.2,
            "Ligation Mix Rehydration Volume" => 24,
            "Number of Samples" => 2,
            "Number of Sub Packages" => 2
        },

        "detection" => {
            "Unit Name" => "D",
            "Components" => {
                "strips" => [
                    "1",
                    "2",
                    "3",
                    "4",
                    "5",
                    "6",
                    "7"
                ],
                "diluent A" => "0",
                "stop" => "1",
                "gold" => "2"
            },
            "Number of Samples" => 2,
            "Number of Sub Packages" => 4,
            "Stop Rehydration Volume" => 36,
            "Gold Rehydration Volume" => 600,
            "Gold to Strip Volume" => 40,
            "Sample to Strip Volume" => 24,
            "Stop to Sample Volume" => 2.4,
            "Sample Volume" => 2.4,
            "Mutation Labels" => [
                "K65R",
                "70E",
                "K103N",
                "V106M",
                "Y181C",
                "M184V",
                "G190A",
            ],
            "Mutation Colors" => ["red", "green","yellow", "blue", "purple", "white", "gray"]

        }

    }
  end
end

library: {name: OLALib, category: OLASimple}
code_source:
# frozen_string_literal: true

# Library code here
# category = "Tissue Culture Libs"
# needs "#{category}/TissueCulture"
needs 'OLASimple/OLAConstants'
needs 'OLASimple/OLAGraphics'
needs 'OLASimple/NetworkRequests'

module TextExtension
  include ActionView::Helpers::TagHelper

  def bold
    content_tag(:b, to_s)
  end

  def ital
    content_tag(:i, to_s)
  end

  def strong
    content_tag(:strong, to_s)
  end

  def color(which_color)
    content_tag(:font, to_s, color: which_color)
  end

  def cap
    remaining = ''
    remaining = self[1..-1] if length > 1
    self[0].capitalize + remaining
  end

  def quote
    "\"#{self}\""
  end
end

module RefExtension
  include OLAConstants
  # this requires :output_kit, :output_unit, :output_sample, and :pack_hash temporary values
  # references require :kit, :unit, :component, and :sample keys

  def sort_by(&block)
    super(&block).extend(OperationList)
  end

  def component(name)
    temporary[:pack_hash][COMPONENTS_FIELD_VALUE][name]
  end

  def input_component(name)
    get_input_item_helper(name).get(COMPONENT_KEY)
  end

  def output_component(name)
    get_output_item_helper(name).get(COMPONENT_KEY)
  end

  def ref(name, with_sample = false)
    # returns the label for a temporary item by name
    t = temporary
    c = component(name)
    kit = t[:output_kit]
    unit = t[:output_unit]
    # samp = t[:output_sample]
    samp = ''
    samp = t[:output_sample] if with_sample
    alias_helper(kit, unit, c, samp)
  end

  def tube_label(name, with_sample = false)
    label_helper(*ref_tokens(name, with_sample))
  end

  def label_helper(_k, u, c, s)
    ["#{u}#{c}", s.to_s]
  end

  def input_tube_label(name)
    label_helper(*input_tokens(name))
  end

  def output_tube_label(name)
    label_helper(*output_tokens(name))
  end

  # TOKENS
  def ref_tokens(name, with_sample = false)
    # return array for kit-unit and component-sample, usually for labeling purposes
    t = temporary
    c = component(name)
    kit = t[:output_kit]
    unit = t[:output_unit]
    samp = '' # t[:output_sample]
    samp = t[:output_sample] if with_sample
    [kit, unit, c, samp]
  end

  def ref_tokens_helper(item)
    [item.get(KIT_KEY), item.get(UNIT_KEY), item.get(COMPONENT_KEY), item.get(SAMPLE_KEY)]
  end

  def input_tokens(name)
    ref_tokens_helper(get_input_item_helper(name))
  end

  def output_tokens(name)
    ref_tokens_helper(get_output_item_helper(name))
  end

  def alias_helper(_kit, unit, component, sample)
    # returns the label given kit, unit, comp and sample
    if !sample.blank?
      "#{unit}#{component}-#{sample}"
    else
      "#{unit}#{component}"
    end
  end

  def ref_helper(item)
    # returns the label for an item
    alias_helper(*ref_tokens_helper(item))
  end

  def refs_helper(item)
    # returns an array of labels for a collection
    components = item.get(COMPONENT_KEY)
    raise 'Components must be an array to use refs_helper' unless components.is_a?(Array)

    components.map do |c|
      alias_helper(item.get(KIT_KEY), item.get(UNIT_KEY), c, item.get(SAMPLE_KEY))
    end
  end

  def get_input_item_helper(name)
    input = self.input(name)
    raise "Could not find input field_value #{name}" if input.nil?

    item = input(name).item
    raise "Input #{name} has no item" if item.nil?

    item
  end

  def get_output_item_helper(name)
    output = self.output(name)
    raise "Could not find output field_value \"#{name}\"" if output.nil?

    item = output(name).item
    raise "Output \"#{name}\" has no item" if item.nil?

    item
  end

  def input_ref(name)
    # return the label for an input
    ref_helper(get_input_item_helper(name))
  end

  def input_ref_tokens(name)
    # return the label for an input
    ref_tokens_helper(get_input_item_helper(name))
  end

  def output_ref(name)
    # return the label for an output
    ref_helper(get_output_item_helper(name))
  end

  def output_ref_tokens(name)
    # return the label for an input
    ref_tokens_helper(get_output_item_helper(name))
  end

  def input_refs(name)
    # return the array of labels for an input
    refs_helper(get_input_item_helper(name))
  end

  def output_refs(name)
    # return the array of labels for an output
    refs_helper(get_output_item_helper(name))
  end

  def make_alias_from_pack_hash(output_item, package_name, from_item)
    kit = temporary[:output_kit]
    unit = temporary[:output_unit]
    component = self.component(package_name)
    sample = temporary[:output_sample]
    patient = temporary[:patient]

    raise 'Kit is nil' if kit.nil?
    raise 'Unit is nil' if unit.nil?
    raise 'Component is nil' if component.nil?
    raise 'Sample is nil' if sample.nil?
    raise 'Patient ID is nil' if patient.nil?

    output_item.associate(KIT_KEY, kit)
    output_item.associate(UNIT_KEY, unit)
    output_item.associate(COMPONENT_KEY, component)
    output_item.associate(SAMPLE_KEY, sample)
    output_item.associate(PATIENT_KEY, patient)
    output_item.associate(ALIAS_KEY, ref_helper(output_item))

    # from associations
    output_item.associate(:from, input(from_item).item.id)
    output_item.associate(:fromref, input_ref(from_item))
    output_item.associate(:from_pack, "#{temporary[:input_unit]}#{temporary[:input_kit]}")
    output_item
  end

  def make_item_and_alias(name, package_name, from_item)
    output(name).make
    output_item = output(name).item
    make_alias_from_pack_hash(output_item, package_name, from_item)
  end

  def make_collection_and_alias(name, package_name, from_item)
    output_collection = output(name).make_collection
    components = component(package_name)
    components.each do |_c|
      output_collection.add_one(output(name).sample)
    end
    output_item = output(name).item
    make_alias_from_pack_hash(output_item, package_name, from_item)
  end
end

module OLALib
  include OLAConstants
  include NetworkRequests
  include OLAGraphics
  include FunctionalSVG

  String.prepend TextExtension
  Integer.prepend TextExtension
  Float.prepend TextExtension
  Operation.prepend RefExtension
  #   include TissueCulture

  #######################################
  # OLA image processing API
  #######################################

  # TODO: add error handling to this function, since function could fail if api service disconnected
  def make_calls_from_image(image_upload)
    res = post_file(OLA_IP_API_URL, 'file', image_upload)
    JSON.parse(res.body)['results']
  end

  #######################################
  # Utilities
  #######################################

  def pluralizer(noun, num)
    if num == 1
      "the #{noun.pluralize(num)}"
    elsif num == 2
      "both #{noun.pluralize(num)}"
    else
      "all #{num} #{noun.pluralize(num)}"
    end
  end

  def group_by_unit(ops)
    ops.running.group_by { |op| op.temporary[:unit] }
  end

  def get_technician_name(job_id)
    job = Job.find(job_id)
    user_id = job.user_id
    username = '"unknown user"'
    username = User.find(job.user_id).name unless user_id.nil?
    username
  end

  ####################################
  # Item Alias
  ####################################

  def alias_helper(_kit, unit, component, sample)
    # returns the label given kit, unit, comp and sample
    if !sample.blank?
      "#{unit}#{component}-#{sample}"
    else
      "#{unit}#{component}"
    end
  end

  def make_alias(item, kit, unit, component, patient, sample = nil)
    sample ||= ''
    label = alias_helper(kit, unit, component, sample)
    item.associate(ALIAS_KEY, label)
    item.associate(KIT_KEY, kit)
    item.associate(UNIT_KEY, unit)
    item.associate(COMPONENT_KEY, component)
    item.associate(SAMPLE_KEY, sample)
    item.associate(PATIENT_KEY, patient)
  end

  def get_alias_array(item)
    [item.get(KIT_KEY), item.get(UNIT_KEY), item.get(COMPONENT_KEY), item.get(SAMPLE_KEY), item.get(PATIENT_KEY)]
  end

  def ref(item)
    "#{item.get(UNIT_KEY)}#{item.get(COMPONENT_KEY)}-#{item.get(SAMPLE_KEY)}"
  end

  def save_temporary_input_values(ops, input)
    # get the aliases from the inputs
    ops.each do |op|
      kit, unit, component, sample, patient = get_alias_array(op.input(input).item)
      op.temporary[:patient] = patient
      op.temporary[:input_kit] = kit
      op.temporary[:input_unit] = unit
      op.temporary[:input_component] = component
      op.temporary[:input_sample] = sample
      op.temporary[:input_kit_and_unit] = [kit, unit].join('')
    end
  end

  def save_pack_hash(ops, pack)
    ops.running.each do |op|
      op.temporary[:pack_hash] = get_pack_hash(op.input(pack).sample)
    end
  end

  def save_temporary_output_values(myops)
    myops.each do |op|
      op.temporary[:output_kit] = op.temporary[:input_kit]
      op.temporary[:output_unit] = op.temporary[:pack_hash][UNIT_NAME_FIELD_VALUE]
      op.temporary[:output_sample] = op.temporary[:input_sample]
      op.temporary[:output_kit_and_unit] = [op.temporary[:output_kit], op.temporary[:output_unit]].join('')
      op.temporary[:output_number_of_samples] = op.temporary[:pack_hash][NUM_SAMPLES_FIELD_VALUE]
    end
  end

  def group_packages(myops)
    myops.group_by { |op| "#{op.temporary[:output_kit]}#{op.temporary[:output_unit]}" }
  end

  ####################################
  # Collection Alias
  ####################################

  def make_array_association(item, label, data)
    raise 'must be an item not a collection for array associations' unless item.is_a?(Item)

    data.each.with_index do |d, i|
      item.associate("#{label}#{i}".to_sym, d)
    end
  end

  def get_array_association(item, label, i)
    item.get("#{label}#{i}".to_sym)
  end

  ####################################
  # Kit and Package Parser
  ####################################

  def parse_component(component_string)
    # parses the component value for a OLASimple Package sample
    # values are formatted as "key: value" or "key: [val1, val2, val3]"
    val = nil
    tokens = component_string.split(/\s*\:\s*/)
    m = /\[(.+)\]/.match(tokens[1])
    if !m.nil?
      arr_str = m[1]
      val = arr_str.split(/\s*,\s*/).map(&:strip)
    else
      val = tokens[1]
    end
    [tokens[0], val]
  end

  def get_component_dictionary(package_sample)
    # parses all of the components in a OLASimple Package
    components = package_sample.properties[COMPONENTS_FIELD_VALUE]
    components.map { |v| [*parse_component(v)] }.to_h
  end

  def get_pack_hash(sample)
    pack_hash = {}
    # get the properties for the output pack sample
    pack_hash = sample.properties

    # parse the component values, formatted as "key: value" or "key: [val1, val2, val3]"
    pack_hash[COMPONENTS_FIELD_VALUE] = get_component_dictionary(sample)
    pack_hash
  end

  def get_kit_hash(op)
    kit_hash = {}
    # validates that input and output kits sample definitions are formatted correctly
    [SAMPLE_PREP_FIELD_VALUE, PCR_FIELD_VALUE, LIGATION_FIELD_VALUE, DETECTION_FIELD_VALUE].each do |x|
      # validate that the input kit is the same as the expected output kits
      output_sample = op.output(x).sample
      kit_hash[x] = get_pack_hash(output_sample)
    end

    kit_hash
  end

  def kit_hash_to_json(kit_hash)
    h = kit_hash.map { |k, v| [k, v.reject { |key, _val| key == KIT_FIELD_VALUE }] }.to_h
    JSON.pretty_generate(h)
  end

  def validate_kit_hash(op, kit_hash)
    # validates the kit hash
    errors = []

    kit_hash.each do |pack_name, pack_properties|
      if pack_properties.empty?
        errors.push(["components_empty_for_#{pack_name}".to_sym, 'Package components are empty!'])
      end

      if pack_properties[KIT_FIELD_VALUE] != op.input(KIT_FIELD_VALUE).sample
        errors.push(["kit_not_found_in_input_for_#{pack_name}".to_sym, 'Input kit does not match output package definition.'])
      end
    end

    kit_sample = op.input(KIT_FIELD_VALUE).sample
    kit_sample_props = kit_sample.properties
    num_codons = kit_sample_props[CODONS_FIELD_VALUE].length
    num_codon_colors = kit_sample_props[CODON_COLORS_FIELD_VALUE].length
    num_ligation_tubes = kit_hash[LIGATION_FIELD_VALUE][COMPONENTS_FIELD_VALUE]['sample tubes'].length
    num_strips = kit_hash[DETECTION_FIELD_VALUE][COMPONENTS_FIELD_VALUE]['strips'].length

    if debug
      show do
        title 'DEBUG: Kit Hash Errors'
        errors.each do |k, v|
          note "#{k}: #{v}"
        end
      end
    end

    errors.each do |k, v|
      op.error(k, v)
    end

    if debug
      show do
        title 'DEBUG: Kit Hash'
        note kit_hash_to_json(kit_hash).to_s
        # note "#{kit_hash}"
      end
    end
  end

  ####################################
  # Step Utilities
  ####################################

  def ask_if_expert
    resp = show do
      title 'Expert Mode?'
      note 'Are you an expert at this protocol? If you do not know what this means, then continue without enabling expert mode.'
      select ['Continue in normal mode', 'Enable expert mode'], var: :choice, label: 'Expert Mode?', default: 0
    end
    resp[:choice] == 'Enable expert mode'
  end

  def wash_self
    show do
      title 'Discard gloves and wash hands'
      check "After clicking #{'OK'.quote.bold}, discard your gloves and wash your hands with soap."
    end
  end

  def check_for_tube_defects(_myops)
    # show do
    defects = show do
      title 'Check for cracked or damaged tubes.'
      select %w[No Yes], var: 'cracked', label: 'If there are cracks or defects in the tube, select "Yes" from the dropdown menu below.', default: 0
      note "If yes, #{SUPERVISOR} will replace the samples or tubes for you."
    end

    if defects['cracked'] == 'Yes'
      show do
        title "Contact #{SUPERVISOR} about missing or damaged tubes."

        note 'You said there are some problems with the samples.'
        check "Contact #{SUPERVISOR} about this issue."
        note 'We will simply replace these samples for you.'
      end
    end
  end

  def area_preparation(which_area, materials, other_area)
    show do
      title "#{which_area.cap} preparation"

      note "You will be doing the protocol in the #{which_area.bold} area"
      warning "Keep all materials in the #{which_area.bold} area separate from the #{other_area.bold} area"
      note "Before continuing, make sure you have the following items in the #{which_area.bold} area:"
      materials.each do |i|
        check i
      end
    end
  end

  def put_on_ppe(which_area)
    show do
      title 'Put on Lab Coat and Gloves'

      check 'Put on a lab coat'
      warning "make sure lab coat is from the #{which_area.bold}"
      check 'Put on a pair of latex gloves.'
    end
  end

  def transfer_title_proc(vol, from, to)
    p = proc do
      title "Add #{vol}uL from #{from.bold} to #{to.bold}"
    end
    ShowBlock.new(self).run(&p)
  end

  def show_open_package(kit, unit, num_sub_packages)
    show do
      title "Tear open #{kit.bold}#{unit.bold}"
      note 'Tear open all smaller packages.' if num_sub_packages > 0
      run(&Proc.new) if block_given?
      check 'Discard the packaging material.'
    end
  end

  def disinfect
    show do
      title 'Disinfect Items'
      check 'Spray and wipe down all reagent and sample tubes with 10% bleach.'
      check 'Spray and wipe down all reagent and sample tubes with 70% ethanol.'
    end
  end

  def centrifuge_proc(sample_identifier, sample_labels, time, reason, area, balance = false)
    if area == PRE_PCR
      centrifuge = CENTRIFUGE_PRE
    elsif area == POST_PCR
      centrifuge = CENTRIFUGE_POST
    else
      raise 'Invalid Area'
    end
    p = proc do
      check "Place #{sample_identifier.pluralize(sample_labels.length)} #{sample_labels.join(', ').bold} in the #{centrifuge}"
      check "#{CENTRIFUGE_VERB.cap} #{pluralizer(sample_identifier, sample_labels.length)} for #{time} #{reason}"
      if balance
        if num.even?
          warning "Balance tubes in the #{centrifuge} by placing #{num / 2} #{sample_identifier.pluralize(num / 2)} on each side."
        else
          warning "Use a spare tube to balance #{sample_identifier.pluralize(num)}."
        end
      end
    end
    ShowBlock.new(self).run(&p)
  end

  def vortex_proc(sample_identifier, sample_labels, time, reason)
    p = proc do
      # check "Vortex #{pluralizer(sample_identifier, num)} for #{time} #{reason}"
      check "Vortex #{sample_identifier.pluralize(sample_labels.length)} #{sample_labels.join(', ').bold} for #{time} #{reason}"
      # check "Vortex #{sample_identifier.pluralize(sample_labels.length)} #{sample_labels.map { |label| label.bold })}
    end
    ShowBlock.new(self).run(&p)
  end

  def centrifuge_helper(sample_identifier, sample_labels, time, reason, area, mynote = nil)
    sample_labels = sample_labels.uniq
    show do
      title "#{CENTRIFUGE_VERB.cap} #{sample_identifier.pluralize(sample_labels.length)} for #{time}"
      note mynote unless mynote.nil?
      warning "Ensure #{pluralizer('tube cap', sample_labels.length)} are closed before centrifuging."
      raw centrifuge_proc(sample_identifier, sample_labels, time, reason, area)
    end
  end

  def vortex_helper(sample_identifier,
                    sample_labels,
                    vortex_time,
                    vortex_reason, mynote = nil)
    num = sample_labels.length
    show do
      title "Vortex #{sample_identifier.pluralize(num)}"
      note mynote unless mynote.nil?
      warning "Close #{pluralizer('tube cap', sample_labels.length)}."
      raw vortex_proc(sample_identifier, sample_labels, vortex_time, vortex_reason)
    end
  end

  def vortex_and_centrifuge_helper(sample_identifier,
                                   sample_labels,
                                   vortex_time, spin_time,
                                   vortex_reason, spin_reason, area, mynote = nil)
    num = sample_labels.length
    show do
      title "Vortex and #{CENTRIFUGE_VERB} #{sample_identifier.pluralize(num)}"
      note mynote unless mynote.nil?
      warning "Close #{pluralizer('tube cap', sample_labels.length)}."
      # note "Using #{sample_identifier.pluralize(num)} #{sample_labels.join(', ').bold}:"
      raw vortex_proc(sample_identifier, sample_labels, vortex_time, vortex_reason)
      raw centrifuge_proc(sample_identifier, sample_labels, spin_time, spin_reason, area)
      check 'Place the tubes back on rack'
    end
  end

  def add_to_thermocycler(sample_identifier, sample_labels, program_name, program_table, name)
    len = if sample_labels.is_a?(Array)
            sample_labels.length
          else
            sample_labels
          end

    show do
      title "Run #{name}"
      check "Add #{pluralizer(sample_identifier, len)} to #{THERMOCYCLER}"
      check 'Close and tighten the lid.'
      check "Select the program named #{program_name.bold} under the <b>OS</b>"
      check 'Hit <b>"Run"</b> and click <b>"OK"</b>'
      table program_table
    end
  end

  def clean_area(area)
    show do
      disinfectant = '10% bleach'
      title "Wipe down #{area} with #{disinfectant.bold}."
      note "Now you will wipe down your #{area} space and equipment with #{disinfectant.bold}."
      check "Spray #{disinfectant.bold} onto a #{WIPE_PRE} and clean off pipettes and pipette tip boxes."
      check "Spray #{disinfectant.bold} onto a #{WIPE_PRE} and wipe down the bench surface."
      # check "Spray some #{disinfectant.bold} on a #{WIPE}, gently wipe down keyboard and mouse of this computer/tablet."
      warning "Do not spray 10% bleach directly onto tablet, computer, barcode scanner or centrifuge!"
      # check "Finally, spray outside of gloves with #{disinfectant.bold}."
    end

    show do
      disinfectant = '70% ethanol'
      title "Wipe down #{area} with #{disinfectant.bold}."
      note "Now you will wipe down your #{area} space and equipment with #{disinfectant.bold}."
      check "Spray #{disinfectant.bold} onto a #{WIPE_PRE} and clean off pipettes and pipette tip boxes."
      check "Spray #{disinfectant.bold} onto a #{WIPE_PRE} and wipe down the bench surface."
      note "Bleach residues can inhibit the assay. Make sure to completely wipe all surface with 70% ethanol spray"
      warning "Do not spray #{disinfectant.bold} onto tablet or computer!"
      # check "Finally, spray outside of gloves with #{disinfectant.bold}."
    end
  end

  def simple_clean(protocol)
    show do
      title 'Ensure Workspace is Clean'
      note "#{protocol} is prone to contamination. False positives can occur when the area is not clean."
      check "If area is not clean, or you aren't sure, wipe down space with 10% bleach and 70% ethanol."
      note 'Spray disinfectants onto wipes, not directly onto surfaces.'
      warning 'Only spray bleach and ethanol when all tubes are closed. Bleach can inhibit the reactions.'
    end
  end

  def area_setup(area, materials, other_area = nil)
    area_preparation area, materials, other_area
    put_on_ppe area
    clean_area area
  end

  def safety_warning(area = nil)
    grid = SVGGrid.new(3, 1, 200, 100)
    grid.add(gloves_svg, 0, 0)
    grid.add(coat_svg, 1, 0)
    img2 = SVGElement.new(children: [grid], boundx: 1000, boundy: 200)
    show do
      title 'Review Safety Warnings'
      note '<b>Always</b> pay attention to orange warning blocks throughout the protocol.'
      if area && area == PRE_PCR
        img1 = SVGElement.new(children: [bsc_svg], boundx: 200, boundy: 200)
        warning '<b>INFECTIOUS MATERIALS</b>'
        note 'You will be working with infectious materials.'
        note 'Do <b>ALL</b> work in a biosafety cabinet (BSC).'
        note display_svg(img1, 0.2)
      end
      note '<b>PPE is required</b>'
      note display_svg(img2, 0.2)
      check 'Put on lab coat.'
      check "Put on #{(area && area == PRE_PCR) ? 'layers of ' : ''}gloves."
      bullet 'Make sure to use tight gloves. Tight gloves reduce the chance of the gloves getting caught on the tubes when closing their lids.'
      if area && area == PRE_PCR
        bullet 'Change outer layer of gloves after handling infectious sample and before touching surfaces outside of the BSC (such as a refrigerator door handle).'
      end
    end
  end

  def gloves_svg
    icon_from_html(
      '<svg><title>3_gloveson</title><path d="M413,353c0-2.8-1.1-12.4-4-17.3s-10.8-22.1-10-27.2,1.2-16.4-.4-21.7-3.2-14-3.2-14-2.5-6.4,1.1-6.6,10.5,3.9,12.1,10.5,2.6,16.2,4.8,20.6c0,0,14-18.4,14.8-22.7s9.7-26.5,9.8-28,7.1-20.2,11-22.6,5.9-3.4,7.2-1.7a13.26,13.26,0,0,1,1.6,5.3s4-11.7,6.2-11.7c0,0,5.5-3.9,7.2,1.6a20.58,20.58,0,0,1-.2,11.2l-2.3,11.9c1.9-5.5,4.5-12.7,6-12.7,2.2,0,8.6-4,6.5,5.7-1.8,8.7-5.3,22.8-6,25.6h0c2.1-5.7,4.4-6.8,8.3-8.7s1.6,12.5,1.6,14.6-5.4,20.3-5.7,30.5-7.2,29.6-10.5,34.5-14.4,31.2-16.3,36.2,1.8,21.2-1.6,27.2-39.9-12.9-39.9-12.9S413,355.8,413,353Z" transform="translate(-305.22 -213.96)" fill="#b4b9de"/><path d="M420.9,306.2s-4.7-4.5-6.9-8.9-3.2-14-4.8-20.6-8.5-10.7-12.1-10.5-1.1,6.6-1.1,6.6,1.7,8.7,3.2,14,1.1,16.6.4,21.7,7.1,22.2,10,27.2,4,14.5,4,17.3-2,27.8-2,27.8,36.4,18.9,39.9,12.9-.3-22.2,1.6-27.2,13-31.3,16.3-36.2,10.2-24.3,10.5-34.5,5.7-28.5,5.7-30.5,2.3-16.5-1.6-14.6-6.4,3-8.5,9.2-3.2,18.2-4.6,21.7-1.2,8.5-1.2,8.5" transform="translate(-305.22 -213.96)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/><path d="M414,297.3s14-18.4,14.8-22.7,9.7-26.5,9.8-28,7.1-20.2,11-22.6,5.9-3.4,7.2-1.7a13.26,13.26,0,0,1,1.6,5.3,14.65,14.65,0,0,1-1.1,8c-2.4,4.7-10.6,26.7-11.5,32s-1.5,8.6-1.5,8.6" transform="translate(-305.22 -213.96)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/><path d="M456.8,278.9s9.2-30.5,10.5-32.8,5.9-18.4,8.1-18.4,8.6-4,6.5,5.7-6.2,26.2-6.2,26.2" transform="translate(-305.22 -213.96)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/><path d="M458.4,227.5s4-11.7,6.2-11.7c0,0,5.5-3.9,7.2,1.6a20.58,20.58,0,0,1-.2,11.2l-2.3,11.9" transform="translate(-305.22 -213.96)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/><path d="M384.9,353.1c0-2.6,1.1-11.6,4.3-16s11.5-20,10.7-24.8-1.4-15.5.3-20.3a129.68,129.68,0,0,0,3.4-12.9s2.6-5.9-1.2-6.2-11.3,2.9-13,9-2.7,15.1-5.1,19c0,0-15.2-18.2-16-22.3s-10.6-25.5-10.6-27-7.7-19.5-11.9-22-6.3-3.6-7.7-2.1a10.09,10.09,0,0,0-1.7,4.8s-4.3-11.3-6.7-11.4c0,0-5.9-4-7.7,1s.3,10.5.3,10.5l2.5,11.3c-2.1-5.3-4.9-12.3-6.5-12.4-2.4-.2-9.2-4.4-7,4.9,2,8.3,5.8,21.8,6.6,24.5h0c-2.2-5.5-4.8-6.7-8.9-8.7-4.3-2.1-1.7,11.6-1.7,13.6s5.9,19.5,6.2,29.1,7.9,28.3,11.4,33.2,15.6,30.3,17.6,35.2-1.9,19.8,1.8,25.7,42.9-9.3,42.9-9.3S384.9,355.7,384.9,353.1Z" transform="translate(-305.22 -213.96)" fill="#b4b9de"/><path d="M376.2,308.6s5-3.9,7.4-7.9,3.5-12.9,5.1-19,9.1-9.4,13-9,1.2,6.2,1.2,6.2-1.8,8.1-3.4,12.9-1.1,15.5-.3,20.3-7.6,20.4-10.7,24.8-4.2,13.4-4.3,16,2.2,26.3,2.2,26.3-39.2,15.2-42.9,9.3.3-20.8-1.8-25.7-14.1-30.4-17.6-35.2-11.1-23.5-11.4-33.2-6.3-27.1-6.2-29.1-2.6-15.7,1.7-13.6,6.9,3.3,9.1,9.2,3.5,17.4,5,20.7,1.3,8.1,1.3,8.1" transform="translate(-305.22 -213.96)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/><path d="M383.6,300.7s-15.2-18.2-16-22.3-10.6-25.5-10.6-27-7.7-19.5-11.9-22-6.3-3.6-7.7-2.1a10.09,10.09,0,0,0-1.7,4.8,12.13,12.13,0,0,0,1.3,7.6c2.6,4.6,11.5,25.8,12.5,30.9s1.7,8.2,1.7,8.2" transform="translate(-305.22 -213.96)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/><path d="M337.5,280.5s-10-29.3-11.4-31.6-6.4-17.7-8.8-17.8-9.2-4.4-7,4.9,6.7,25,6.7,25" transform="translate(-305.22 -213.96)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/><path d="M335.6,232.1s-4.3-11.3-6.7-11.4c0,0-5.9-4-7.7,1s.3,10.5.3,10.5l2.5,11.3" transform="translate(-305.22 -213.96)" fill="none" stroke="#2e3192" stroke-miterlimit="10"/></svg>'
    )
  end

  def coat_svg
    icon_from_html(
      '<svg><title>3_labcoaton</title><path d="M365.7,206.7l-33.6,12.8s-10.5,4.2-10.5,12.6V349h27.9l.6,52.7H440V349.6l28.8-.7V235.1s-5.4-17.4-20.4-19.2L425,206.7H365.7Z" transform="translate(-320.6 -205.7)" fill="#abb2da" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><path d="M458.5,246.8a94.68,94.68,0,0,0-5-30.2,20.07,20.07,0,0,0-5.1-1.3L425,206.1H365.7l-33.6,12.8s-10.5,4.2-10.5,12.6V335.6a102.22,102.22,0,0,0,37.3,7C413.9,342.5,458.5,299.6,458.5,246.8Z" transform="translate(-320.6 -205.7)" fill="#d8def0"/><polyline points="45.1 1 74.6 45.5 104.4 1" fill="#919195" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><polyline points="34.4 5.1 36.4 28.5 53.1 31.4 53.1 43.2 74.7 71.1 94.8 45.5 94.8 31.4 110.5 25.5 112.5 5.1" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><line x1="28.9" y1="143.2" x2="28.9" y2="51.9" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><line x1="119.4" y1="143.8" x2="119.4" y2="51.9" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><path d="M365.7,206.7l-33.6,12.8s-10.5,4.2-10.5,12.6V349h27.9l.6,52.7H440V349.6l28.8-.7V235.1s-5.4-17.4-20.4-19.2L425,206.7H365.7Z" transform="translate(-320.6 -205.7)" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><line x1="74.6" y1="45.5" x2="74.6" y2="197.6" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><line x1="40.3" y1="125.9" x2="60.3" y2="125.9" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><line x1="88.8" y1="125.9" x2="109.4" y2="125.9" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><line x1="40.3" y1="71.4" x2="60.3" y2="71.4" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><path d="M376.8,223.4" transform="translate(-320.6 -205.7)" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><polygon points="93.2 17.7 74.6 45.5 56.2 17.7 93.2 17.7" fill="#abb2da" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/></svg>'
    )
  end

  def bsc_svg
    icon_from_html(
      '<svg><title>3_bsccabinet</title><path d="M481.7,319.3H309.3a7.17,7.17,0,0,1-7.2-7.2V222.6a7.17,7.17,0,0,1,7.2-7.2H481.7a7.17,7.17,0,0,1,7.2,7.2v89.5A7.3,7.3,0,0,1,481.7,319.3Z" transform="translate(-302.1 -215.4)" fill="#d8def0"/><path d="M462.7,233.3H331a7.17,7.17,0,0,1-7.2-7.2v-2.2a7.17,7.17,0,0,1,7.2-7.2H462.8a7.17,7.17,0,0,1,7.2,7.2v2.2A7.32,7.32,0,0,1,462.7,233.3Z" transform="translate(-302.1 -215.4)" fill="#262261" stroke="#2e3191" stroke-miterlimit="10"/><path d="M481.6,216.9H463.2c8,7.6,12.7,16.7,12.7,26.4,0,26.9-35.5,48.7-79.3,48.7s-79.3-21.8-79.3-48.7c0-9.7,4.7-18.8,12.7-26.4H309.3a7.17,7.17,0,0,0-7.2,7.2v89.5a7.17,7.17,0,0,0,7.2,7.2H481.7a7.17,7.17,0,0,0,7.2-7.2V224.1A7.39,7.39,0,0,0,481.6,216.9Z" transform="translate(-302.1 -215.4)" fill="#abb2da"/><rect x="10.2" y="103.9" width="7.5" height="76.1" fill="#abb2da"/><rect x="167.8" y="103.9" width="7.5" height="76.1" fill="#abb2da"/><polyline points="7.1 1.5 7.1 79.9 179.3 80.8 179.5 1.5" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><line x1="40.4" y1="20.4" x2="27.8" y2="34.2" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><line x1="69.8" y1="20.4" x2="64.4" y2="34.2" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><line x1="117.9" y1="20.4" x2="122.1" y2="34.2" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/><line x1="160.4" y1="20.4" x2="171.6" y2="30.9" fill="none" stroke="#2e3191" stroke-miterlimit="10" stroke-width="2"/></svg>'
    )
  end

  ####################################
  # Displaying Images
  ######################################
  def extract_basename(filename)
    ext = File.extname(filename)
    basename = File.basename(filename, ext)
    basename
  end

  def show_with_expected_uploads(op, filename, save_key = nil, num_tries = 5)
    upload_hashes = []
    warning_msg = nil
    num_tries.times.each do |i|
      next unless upload_hashes.empty?

      # ask for uploads
      result = show do
        warning warning_msg unless warning_msg.nil?
        run(&Proc.new) if block_given?
        upload var: :files
      end
      upload_hashes = result[:files] || []

      if debug && (i >= 1)
        n = 'default_filename.txt'
        n = filename if i >= 2
        upload_hashes.push({ id: 12_345, name: n })
      end

      # try again if not files were uploaded
      warning_msg = 'You did not upload any files! Please try again.' if upload_hashes.empty?

      next if upload_hashes.empty?

      # get name to id hash
      name_to_id_hash = upload_hashes.map { |u| [extract_basename(u[:name]), u[:id]] }.to_h

      # get the file even if technician uploaded multiple files
      if name_to_id_hash.keys.include?(extract_basename(filename))
        upload_hashes = [{ name: filename, id: name_to_id_hash[filename] }]
      else
        warning_msg = "File #{filename} not uploaded. Please find file <b>\"#{filename}\"</b>. You uploaded files #{name_to_id_hash.keys.join(', ')}"
        upload_hashes = []
      end
    end
    raise 'Expected file uploads, but there were none!' if upload_hashes.empty?

    upload_ids = upload_hashes.map { |uhash| uhash[:id] }
    uploads = []
    if debug
      random_uploads = Upload.includes(:job)
      uploads = upload_ids.map { |_u| random_uploads.sample }
    else
      uploads = upload_ids.map { |u_id| Upload.find(u_id) }
    end
    upload = uploads.first
    op.temporary[save_key] = upload unless save_key.nil?
    op.temporary["#{save_key}_id".to_sym] = upload.id unless save_key.nil?
    upload
  end

  def display_upload(upload, size = '100%')
    p = proc do
      note "<img src=\"#{upload.expiring_url}\" width=\"#{size}\"></img>"
    end
    ShowBlock.new(self).run(&p)
  end

  def display_strip_section(upload, display_section, num_sections, size)
    p = proc do
      x = 100.0 / num_sections
      styles = []
      num_sections.times.each do |section|
        x1 = 100 - (x * (section + 1)).to_i
        x2 = (x * section).to_i
        styles.push(".clipimg#{section} { clip-path: inset(0% #{x1}% 0% #{x2}%); }")
      end
      style = "<head><style>#{styles.join(' ')}</style></head>"
      note style
      note "<img class=\"clipimg#{display_section}\" src=\"#{upload.expiring_url}\" width=\"#{size}\"></img>"
    end
    ShowBlock.new(self).run(&p)
end
end

library: {name: OLAScheduling, category: OLASimple}
code_source:
module OLAScheduling
  
  SCHEDULER_USER = User.first
  
  # redundant definitions from OLAConstants required to get around precondition limitations
  BATCH_SIZE = 2
  KIT_KEY = :kit
  KIT_PARAMETER = "Kit Identifier"
  
  # retrieve kit id from first input's associations if avialable,
  # also try to retrieve kit id from a kit input parameter if it is available.
  # returns nil if no kit could be found
  def get_kit_id(op)
    op.inputs[0].retrieve
    op.inputs[0].item&.get(KIT_KEY) || op.input(KIT_PARAMETER)&.value
  end
  
  # return if this protocol is being run in developer testing mode 
  def testing_mode?(op)
    op.plan.nil?
  end
  
  # used in place of returning true in precondition
  # gathers together all the other ops with the same kit
  # and schedules them together if they are all ready
  # looks at this_op.inputs[0].item.get(KIT_KEY) to decide what kit an op belongs
  # 
  def schedule_same_kit_ops(this_op)
    return true if testing_mode?(this_op)

    kit_id = get_kit_id(this_op)
    if kit_id.nil?
      this_op.error(:no_kit, "This operation did not have an associated kit id in its input and so couldn't be batched")
      exit
    end
    
    operations = Operation.where({operation_type_id: this_op.operation_type_id, status: ["pending"]})
    this_op.status = "pending"
    this_op.save
    operations << this_op
    operations = operations.to_a.uniq
    operations = operations.select { |op| get_kit_id(op) == kit_id }
    if operations.length == BATCH_SIZE
      Job.schedule(
        operations: operations,
        user: SCHEDULER_USER
      )
    elsif operations.length > BATCH_SIZE
      operations.each do |op|
        op.error(:batch_too_big, "There are too many samples being run with kit #{kit_id}. The Batch size is set to #{BATCH_SIZE}, but there are #{operations.length} operations which list #{kit_id} as their kit association.")
        op.save
        op.plan.error("There are too many samples being run with kit #{kit_id}. The Batch size is set to #{BATCH_SIZE}, but there are #{operations.length} operations which list #{kit_id} as their kit association.", :batch_too_big)
        op.plan.save
      end
    end
    exit
  end
end

library: {name: RNAExtractionResources, category: OLASimple}
code_source:
needs 'OLASimple/OLAGraphics'
needs 'OLASimple/OLALib'

module RNAExtractionResources
  include OLALib
  include OLAGraphics
  include FunctionalSVG

  def display_and_wrap_with_new_bounds_and_size(html, bx, by, scale)
    svg = icon_from_html(html)
    result = SVGElement.new(children: [svg], boundx: bx, boundy: by)
    display_svg(result, scale)
  end

  def display_ethanol_question_svg
    html = '<svg><title>1_Ethanol_questions</title><rect x="270.62" y="215.13" width="54.1" height="54.1" transform="translate(-167.09 177.27) rotate(-45)" fill="none" stroke="#000" stroke-miterlimit="10"/><line x1="195.58" y1="118.85" x2="233.78" y2="157.15" fill="none" stroke="#000" stroke-miterlimit="10"/><line x1="233.78" y1="118.85" x2="195.58" y2="157.15" fill="none" stroke="#000" stroke-miterlimit="10"/><rect x="265.28" y="228.72" width="26.8" height="26.8" transform="translate(-172.61 163.82) rotate(-45)" fill="#3b53a4" stroke="#000" stroke-miterlimit="10"/><rect x="284.26" y="209.72" width="26.8" height="26.8" transform="translate(-153.61 171.68) rotate(-45)" fill="#ed1c24" stroke="#000" stroke-miterlimit="10"/><rect x="303.57" y="228.71" width="26.8" height="26.8" transform="translate(-161.38 190.9) rotate(-45)" fill="#fff200" stroke="#000" stroke-miterlimit="10"/><text transform="translate(208.58 127.95)" font-size="25.86" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">3</text><text transform="translate(189.26 144.42)" font-size="25.86" fill="#fff" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">2</text><text transform="translate(227.54 144.42)" font-size="25.86" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">1</text><g style="isolation:isolate"><text transform="translate(182.73 193.95)" font-size="17.15" font-family="Arial-BoldMT, Arial" font-weight="700" style="isolation:isolate">Ethanol</text><text transform="translate(178.93 214.55)" font-size="17.15" font-family="ArialMT, Arial" style="isolation:isolate">container</text></g><circle cx="68.58" cy="68.35" r="58.1" fill="#f7941d" stroke="#be1e2d" stroke-miterlimit="10"/><text transform="translate(51.87 110.88)" font-size="120.58" font-family="ArialMT, Arial" style="isolation:isolate">!</text><path d="M248.8,244.7" transform="translate(-83.02 -104.15)" fill="none"/><path d="M341.4,322.9H254a8.66,8.66,0,0,1-8.6-8.6V189.8a8.66,8.66,0,0,1,8.6-8.6h87.3a8.66,8.66,0,0,1,8.6,8.6V314.3A8.51,8.51,0,0,1,341.4,322.9Z" transform="translate(-83.02 -104.15)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M297.7,104.4c-28.9,0-52.3,6.3-52.3,14.2V178c0,7.8,23.4,14.2,52.3,14.2S350,185.9,350,178V118.7C350,110.8,326.6,104.4,297.7,104.4Z" transform="translate(-83.02 -104.15)" fill="#c4e4f1" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><ellipse cx="214.68" cy="14.25" rx="40.4" ry="8.4" fill="#c4e4f1" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="171.68" y1="25.45" x2="171.68" y2="74.05" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="216.58" y1="33.45" x2="216.58" y2="82.05" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="260.88" y1="22.65" x2="260.88" y2="71.25" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="239.98" y1="31.05" x2="239.98" y2="79.65" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="193.18" y1="31.05" x2="193.18" y2="79.65" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><g style="isolation:isolate"><text transform="translate(0.8 165.64)" font-size="29.41" font-family="ArialMT, Arial" style="isolation:isolate">Molecular </text><text transform="translate(0 200.94)" font-size="29.41" font-family="ArialMT, Arial" style="isolation:isolate">grade only</text></g></svg>'
    display_and_wrap_with_new_bounds_and_size(html, 400, 250, 0.4)
  end

  def display_guscn_waste_svg
    html = '<svg><title>1.2_GuSCNwaste_reminder</title><polygon points="241.98 240.68 241.98 442.88 189.58 462.48 141.98 442.88 141.98 240.68 141.98 147.68 241.98 147.68 241.98 240.68" fill="#e2ecf7" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M332.5,261.9V387a15.51,15.51,0,0,1-1.1,5.6l-30.6,75.5a15,15,0,0,1-13.8,9.3h0a15,15,0,0,1-14.1-9.9l-26.8-75.2a14.26,14.26,0,0,1-.9-5V168.9h87.3Z" transform="translate(-97.12 -21.22)" fill="#fff" stroke="#000" stroke-miterlimit="10"/><rect x="262.32" y="234.91" width="54.1" height="54.1" transform="translate(-197.6 260.12) rotate(-45)" fill="none" stroke="#000" stroke-miterlimit="10"/><line x1="173.08" y1="221.58" x2="211.38" y2="259.88" fill="none" stroke="#000" stroke-miterlimit="10"/><line x1="211.38" y1="221.58" x2="173.08" y2="259.88" fill="none" stroke="#000" stroke-miterlimit="10"/><rect x="256.97" y="248.5" width="26.8" height="26.8" transform="translate(-203.12 246.67) rotate(-45)" fill="#3b53a4" stroke="#000" stroke-miterlimit="10"/><rect x="275.95" y="229.5" width="26.8" height="26.8" transform="translate(-184.13 254.53) rotate(-45)" fill="#ed1c24" stroke="#000" stroke-miterlimit="10"/><rect x="295.27" y="248.49" width="26.8" height="26.8" transform="translate(-191.9 273.75) rotate(-45)" fill="#fff200" stroke="#000" stroke-miterlimit="10"/><text transform="translate(186.16 230.68)" font-size="25.86" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">1</text><text transform="translate(166.84 247.14)" font-size="25.86" fill="#fff" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">2</text><text transform="translate(205.12 247.14)" font-size="25.86" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">2</text><path d="M116.4,48S147.7,78,159,68.6s22.6-44,22.6-44-1.3,56.2,12.5,53.6c0,0,5,6.5,48.9-9.3,0,0-35.1,13.4-30.1,23.2s36.3,25.3,52.6,28.2c0,0-51.4-7.7-58.9,5.1s0,51.7,0,51.7-16.3-41.1-25.1-40-46.3,31.2-47.6,40,12.5-30.6,8.8-46S97.2,109,97.2,109s40.5,2,40.5-7.6S131.4,60.5,116.4,48Z" transform="translate(-97.12 -21.22)" fill="#e41c42" stroke="#be1e2d" stroke-miterlimit="10"/><text transform="translate(62.69 113.49)" font-size="96.86" fill="#fff" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">!</text><path d="M233.6,139.3v37.2c0,6.6,24.7,11.9,55.2,11.9s55.2-5.3,55.2-11.9V139.3Z" transform="translate(-97.12 -21.22)" fill="#e2ecf7" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><ellipse cx="191.78" cy="118.08" rx="55.2" ry="11.9" fill="#e2ecf7" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><g style="isolation:isolate"><text transform="translate(162.2 314.24)" font-size="17.15" font-family="ArialMT, Arial" style="isolation:isolate">GuSCN</text><text transform="translate(167.4 334.84)" font-size="17.15" font-family="ArialMT, Arial" style="isolation:isolate"><tspan letter-spacing="-0.04em">W</tspan><tspan x="15.55" y="0">aste</tspan></text><text transform="translate(154.6 355.44)" font-size="17.15" font-family="ArialMT, Arial" style="isolation:isolate">Container</text></g></svg>'
    display_and_wrap_with_new_bounds_and_size(html, 400, 450, 0.3)
  end

  def display_balance_tubes_svg
    html = '<svg><defs><radialGradient id="radial-gradient" cx="180.58" cy="270.85" r="117.85" gradientUnits="userSpaceOnUse"><stop offset="0" stop-color="#fff"/><stop offset="0.86" stop-color="#4a4a4c"/><stop offset="1"/></radialGradient></defs><title>27_balance_tubes</title><circle cx="180.58" cy="270.85" r="117.85" stroke="#231f20" stroke-miterlimit="10" fill="url(#radial-gradient)"/><circle cx="180.58" cy="270.85" r="75.29" fill="#101112" stroke="#231f20" stroke-miterlimit="10"/><circle cx="180.58" cy="270.85" r="50.55" fill="#fff" stroke="#231f20" stroke-miterlimit="10"/><line x1="154.55" y1="282.71" x2="203.07" y2="255.13" fill="none" stroke="#b7bde0" stroke-miterlimit="10" stroke-width="6"/><polygon points="161.27 289.22 143.32 289.1 152.4 273.61 161.27 289.22" fill="#b7bde0"/><polygon points="205.22 264.24 214.3 248.75 196.35 248.63 205.22 264.24" fill="#b7bde0"/><circle cx="265.49" cy="227.03" r="17.7" fill="#fff" stroke="#231f20" stroke-miterlimit="10"/><circle cx="95.36" cy="318.03" r="17.7" fill="#fff" stroke="#231f20" stroke-miterlimit="10"/><circle cx="287.34" cy="328.2" r="17.7" transform="translate(-164.55 258.98) rotate(-42.09)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="3"/><circle cx="105.78" cy="262.96" r="17.7" transform="translate(-167.64 120.44) rotate(-42.09)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="3"/><circle cx="208.73" cy="385.14" r="17.7" transform="translate(-245.63 412.34) rotate(-67.5)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="3"/><circle cx="189.75" cy="193.14" r="17.7" transform="translate(-79.96 276.27) rotate(-67.5)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="3"/><circle cx="95.36" cy="318.03" r="14.57" fill="#3950a3" stroke="#231f20" stroke-miterlimit="10"/><circle cx="265.49" cy="227.03" r="14.57" fill="#3950a3" stroke="#231f20" stroke-miterlimit="10"/><text transform="translate(84.23 324.51)" font-size="21.17" fill="#fff" font-family="MyriadPro-Regular, Myriad Pro">E5</text><text transform="translate(255.87 234)" font-size="21.17" fill="#fff" font-family="MyriadPro-Regular, Myriad Pro">E5</text><text transform="translate(124.41 132.67)" font-size="20.72" fill="#231f20" font-family="ArialMT, Arial">Balance tubes</text><path d="M37.94,45.07s31.3,30,42.6,20.6,22.6-44,22.6-44-1.3,56.2,12.5,53.6c0,0,5,6.5,48.9-9.3,0,0-35.1,13.4-30.1,23.2s36.3,25.3,52.6,28.2c0,0-51.4-7.7-58.9,5.1s0,51.7,0,51.7-16.3-41.1-25.1-40-46.3,31.2-47.6,40,12.5-30.6,8.8-46-45.5-22.1-45.5-22.1,40.5,2,40.5-7.6S52.94,57.57,37.94,45.07Z" transform="translate(-18.66 -18.29)" fill="#e22043" stroke="#be202e" stroke-miterlimit="10"/><text transform="translate(62.69 113.49)" font-size="96.86" fill="#fff" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">!</text></svg>'
    display_and_wrap_with_new_bounds_and_size(html, 400, 450, 0.4)
  end

  def display_elution_addition
    html = '<svg><title>elute1</title><path d="M395.71,259.27a3.88,3.88,0,0,0,3.29-2.79,4.85,4.85,0,0,0-.42-4.28" transform="translate(-350.77 -211.88)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M395.71,261.1a6,6,0,0,0,6.16-4.86,5.79,5.79,0,0,0-3.17-7" transform="translate(-350.77 -211.88)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="366.77" y="233.47" width="33.11" height="9.82" rx="2.36" ry="2.36" transform="translate(-48.1 -417.64) rotate(47.83)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M360.94,261.62v51.26a1.65,1.65,0,0,0,.85,1.44l5.56,3.06a1.65,1.65,0,0,1,.85,1.44v7.3a1.65,1.65,0,0,0,1.65,1.65H384.4a1.65,1.65,0,0,0,1.65-1.65v-7.25a1.65,1.65,0,0,1,.91-1.48l6.18-3.09a1.65,1.65,0,0,0,.91-1.48V261.62" transform="translate(-350.77 -211.88)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="18.83" y="105.98" width="15.06" height="6.09" rx="0.98" ry="0.98" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="364.23" y="232.06" width="42.88" height="7.39" rx="2.36" ry="2.36" transform="translate(-49.27 -420.24) rotate(47.83)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M399.82,257.14" transform="translate(-350.77 -211.88)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M395.1,257.7" transform="translate(-350.77 -211.88)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M395.1,262.45" transform="translate(-350.77 -211.88)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M398.05,265.53s2,1.4,4.66-.54a6.78,6.78,0,0,0,2.9-4.26" transform="translate(-350.77 -211.88)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M396.9,267s3.52,3.41,8.63-.88,3.07-8.85,3.07-8.85" transform="translate(-350.77 -211.88)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M359.13,267.85v55.23l11.32,68c.8,4.79,4.61,5.75,7.86,5.09s4.39-5.33,4.39-5.33l13.16-67.79V267.85Z" transform="translate(-350.77 -211.88)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="403.07" y="239.96" width="33.11" height="9.82" rx="2.36" ry="2.36" transform="translate(549.92 -35.01) rotate(141.69)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="400.64" y="243.69" width="42.88" height="7.39" rx="2.36" ry="2.36" transform="translate(555.87 -32.04) rotate(141.69)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><polyline points="0.24 1.97 25.01 78.78 12.91 0.04" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="5.2" y="51.18" width="42.32" height="4.79" rx="2.4" ry="2.4" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="8.18" y="46.14" width="36.77" height="4.72" rx="1.19" ry="1.19" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M380.86,312.25l-3.73-16.67-3.73,16.67h0a3.57,3.57,0,0,0,0,.47,3.78,3.78,0,0,0,7.56,0,3.57,3.57,0,0,0,0-.47Z" transform="translate(-350.77 -211.88)" fill="#27aae1" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    display_and_wrap_with_new_bounds_and_size(html, 100, 200, 1)
  end

  def display_pre_elution_warning
    html = '<svg><title>30_last_Stepspinningbefore_eluatewarning</title><path d="M446.53,283.69v77.8c.1,1.9,4.5,35.4,19.9,31.8,0,0,12.6,4.6,17.4-30.9V362l-.6-78.3a2.48,2.48,0,0,0-2.5-2.5H449A2.48,2.48,0,0,0,446.53,283.69Z" transform="translate(-301.04 -215.1)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M479.63,240.09h-28.4a2.43,2.43,0,0,1-2.4-2.4v-5.1a2.43,2.43,0,0,1,2.4-2.4h28.4a2.43,2.43,0,0,1,2.4,2.4v5.1A2.43,2.43,0,0,1,479.63,240.09Z" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M482.43,242.49H448a1.16,1.16,0,0,1-1.2-1.2V239a1.16,1.16,0,0,1,1.2-1.2h34.4a1.16,1.16,0,0,1,1.2,1.2v2.3A1.22,1.22,0,0,1,482.43,242.49Z" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M448.83,242.49v51.3a1.42,1.42,0,0,0,.9,1.4l5.6,3.1a1.69,1.69,0,0,1,.9,1.4V307a1.58,1.58,0,0,0,1.6,1.6h14.5a1.58,1.58,0,0,0,1.6-1.6v-7.2a1.86,1.86,0,0,1,.9-1.5l6.2-3.1a1.65,1.65,0,0,0,.9-1.5v-51.2" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M471.53,304.79h-13.1a1,1,0,0,1-1-1v-4.1a1,1,0,0,1,1-1h13.1a1,1,0,0,1,1,1v4.1A.94.94,0,0,1,471.53,304.79Z" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M484.13,235.39h-38.2a2.43,2.43,0,0,1-2.4-2.4v-2.7a2.43,2.43,0,0,1,2.4-2.4h38.2a2.43,2.43,0,0,1,2.4,2.4V233A2.43,2.43,0,0,1,484.13,235.39Z" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M487.73,238" transform="translate(-301.04 -215.1)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M483,238.59" transform="translate(-301.04 -215.1)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M483.63,240.09a4,4,0,0,0,3.3-2.8,5.13,5.13,0,0,0-.4-4.3" transform="translate(-301.04 -215.1)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M483.63,242a6,6,0,0,0,6.2-4.9,5.77,5.77,0,0,0-3.2-7" transform="translate(-301.04 -215.1)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M482.73,283.59h-37.5a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4h37.5a2.43,2.43,0,0,1,2.4,2.4h0A2.37,2.37,0,0,1,482.73,283.59Z" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M415.33,275s14.9-2.1,21-6.3,10.6-18.2,15.9-20.5,15.7-11.7,13.9-14,.5-5.1-5.6-3.3-13.8,12.1-19.7,14a84.32,84.32,0,0,1-12.9,2.8l6.3-1.1s.3-7-1.1-9.4l1.1,4.6c3.9-1.1,5.6-10.1,5.6-10.1l15-8s19,5.6,22.6,2.3-4.2-5.6-4.2-5.6l-13.6-3.8c-6.1-1.7-16.9.8-21.8,3.8s-13.6,5.5-13.6,5.5l-8.9,2.1" transform="translate(-301.04 -215.1)" fill="#bfbfe0" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M483.93,358v-3.4c-7.5-.4-13.8,4.3-18.6,9.2-1.9,2-3.6,4-5.1,5.7-2.8,3.4-7.4,4-11.4,3.7,2.7,10,8,22.3,17.7,20,0,0,12.6,4.6,17.4-30.9V358Z" transform="translate(-301.04 -215.1)" fill="#29afe5"/><path d="M332.3,283v77.8c.1,1.9,4.5,35.4,19.9,31.8,0,0,12.6,4.6,17.4-30.9v-.4L369,283a2.48,2.48,0,0,0-2.5-2.5H334.8A2.47,2.47,0,0,0,332.3,283Z" transform="translate(-301.04 -215.1)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M365.4,239.4H337a2.43,2.43,0,0,1-2.4-2.4v-5.1a2.43,2.43,0,0,1,2.4-2.4h28.4a2.43,2.43,0,0,1,2.4,2.4V237A2.43,2.43,0,0,1,365.4,239.4Z" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M368.2,241.7H333.8a1.16,1.16,0,0,1-1.2-1.2v-2.3a1.16,1.16,0,0,1,1.2-1.2h34.4a1.16,1.16,0,0,1,1.2,1.2v2.3A1.16,1.16,0,0,1,368.2,241.7Z" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M334.6,241.7V293a1.42,1.42,0,0,0,.9,1.4l5.6,3.1a1.69,1.69,0,0,1,.9,1.4v7.3a1.58,1.58,0,0,0,1.6,1.6h14.5a1.58,1.58,0,0,0,1.6-1.6V299a1.86,1.86,0,0,1,.9-1.5l6.2-3.1a1.65,1.65,0,0,0,.9-1.5V241.7" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M357.4,304.1H344.3a1,1,0,0,1-1-1V299a1,1,0,0,1,1-1h13.1a1,1,0,0,1,1,1v4.1A1.08,1.08,0,0,1,357.4,304.1Z" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M369.9,234.7H331.7a2.43,2.43,0,0,1-2.4-2.4v-2.7a2.43,2.43,0,0,1,2.4-2.4h38.2a2.43,2.43,0,0,1,2.4,2.4v2.7A2.43,2.43,0,0,1,369.9,234.7Z" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M373.5,237.3" transform="translate(-301.04 -215.1)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M368.8,237.8" transform="translate(-301.04 -215.1)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M369.4,239.4a4,4,0,0,0,3.3-2.8,5.13,5.13,0,0,0-.4-4.3" transform="translate(-301.04 -215.1)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M369.4,241.2a6,6,0,0,0,6.2-4.9,5.77,5.77,0,0,0-3.2-7" transform="translate(-301.04 -215.1)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M368.6,282.8H331a2.43,2.43,0,0,1-2.4-2.4h0A2.43,2.43,0,0,1,331,278h37.5a2.43,2.43,0,0,1,2.4,2.4h0A2.29,2.29,0,0,1,368.6,282.8Z" transform="translate(-301.04 -215.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M301.1,274.3s14.9-2.1,21-6.3,10.6-18.2,15.9-20.5,15.7-11.7,13.9-14,.5-5.1-5.6-3.3-13.8,12.1-19.7,14a84.32,84.32,0,0,1-12.9,2.8l6.3-1.1s.3-7-1.1-9.4l1.1,4.6c3.9-1.1,5.6-10.1,5.6-10.1l15-8s19,5.6,22.6,2.3-4.2-5.6-4.2-5.6l-13.6-3.8c-6.1-1.7-16.9.8-21.8,3.8s-13.6,5.5-13.6,5.5l-8.9,2.1" transform="translate(-301.04 -215.1)" fill="#bfbfe0" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M369.7,357.2v-3.4l-.3-15.1V320.8s-1.9-3.8-5.2-4.1-6.1-8.8-6.1-8.8h-3.9c-3.9,0,0,8.5,0,8.5s8.4,12.1,10,20.2-4,19.4-4,19.4a39.37,39.37,0,0,0-9.1,7c-1.9,2-3.6,4-5.1,5.7-2.8,3.4-7.4,4-11.4,3.7,2.7,10,8,22.3,17.7,20,0,0,12.6,4.6,17.4-30.9v-4.3Z" transform="translate(-301.04 -215.1)" fill="#29afe5"/><text transform="translate(37.48 95.73)" font-size="38.32" fill="#010101" font-family="ArialMT, Arial" style="isolation:isolate">X</text><polyline points="114.29 87.79 121.49 97.59 136.29 69.59" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="3"/></svg>'
    display_and_wrap_with_new_bounds_and_size(html, 300, 200, 1)
  end

  def ethanol_container
    html = '<svg><title>12_etohcontainer</title><rect x="412.62" y="215.13" width="54.1" height="54.1" transform="translate(-429.62 277.68) rotate(-45)" fill="none" stroke="#000" stroke-miterlimit="10"/><line x1="33.45" y1="118.85" x2="71.65" y2="157.15" fill="none" stroke="#000" stroke-miterlimit="10"/><line x1="71.65" y1="118.85" x2="33.45" y2="157.15" fill="none" stroke="#000" stroke-miterlimit="10"/><rect x="407.28" y="228.72" width="26.8" height="26.8" transform="translate(-435.14 264.23) rotate(-45)" fill="#3b53a4" stroke="#000" stroke-miterlimit="10"/><rect x="426.26" y="209.72" width="26.8" height="26.8" transform="translate(-416.14 272.09) rotate(-45)" fill="#ed1c24" stroke="#000" stroke-miterlimit="10"/><rect x="445.57" y="228.71" width="26.8" height="26.8" transform="translate(-423.92 291.31) rotate(-45)" fill="#fff200" stroke="#000" stroke-miterlimit="10"/><text transform="translate(46.46 127.95)" font-size="25.86" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">3</text><text transform="translate(27.14 144.42)" font-size="25.86" fill="#fff" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">2</text><text transform="translate(65.41 144.42)" font-size="25.86" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">1</text><g style="isolation:isolate"><text transform="translate(20.6 193.95)" font-size="17.15" font-family="Arial-BoldMT, Arial" font-weight="700" style="isolation:isolate">Ethanol</text><text transform="translate(16.8 214.55)" font-size="17.15" font-family="ArialMT, Arial" style="isolation:isolate">container</text></g><path d="M390.8,244.7" transform="translate(-387.15 -104.15)" fill="none"/><path d="M483.4,322.9H396a8.66,8.66,0,0,1-8.6-8.6V189.8a8.66,8.66,0,0,1,8.6-8.6h87.3a8.66,8.66,0,0,1,8.6,8.6V314.3A8.51,8.51,0,0,1,483.4,322.9Z" transform="translate(-387.15 -104.15)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M439.7,104.4c-28.9,0-52.3,6.3-52.3,14.2V178c0,7.8,23.4,14.2,52.3,14.2S492,185.9,492,178V118.7C492,110.8,468.6,104.4,439.7,104.4Z" transform="translate(-387.15 -104.15)" fill="#c4e4f1" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><ellipse cx="52.55" cy="14.25" rx="40.4" ry="8.4" fill="#c4e4f1" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="9.55" y1="25.45" x2="9.55" y2="74.05" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="54.45" y1="33.45" x2="54.45" y2="82.05" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="98.75" y1="22.65" x2="98.75" y2="71.25" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="77.85" y1="31.05" x2="77.85" y2="79.65" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="31.05" y1="31.05" x2="31.05" y2="79.65" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70).scale!(0.6)
  end

  def ethanol_container_open
    html = '<svg><title>12_etohcontainer_open</title><path d="M439.15,273H427.58a12.07,12.07,0,0,0,1.25-5.4h0a13.31,13.31,0,0,0-9.77-12.78c-3.06-1.45-13-2.52-24.87-2.52-12.27,0-22.53,1.14-25.18,2.68a13.32,13.32,0,0,0-9.2,12.62h0a14.44,14.44,0,0,0,1.09,5.4h-9a8.66,8.66,0,0,0-8.6,8.6v124.5a8.66,8.66,0,0,0,8.6,8.6h87.48a8.51,8.51,0,0,0,8.42-8.6V281.65A8.66,8.66,0,0,0,439.15,273Z" transform="translate(-343 -252.1)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><rect x="368.47" y="306.98" width="54.1" height="54.1" transform="translate(-463.35 125.41) rotate(-45)" fill="none" stroke="#010101" stroke-miterlimit="10"/><line x1="33.45" y1="62.75" x2="71.65" y2="101.05" fill="none" stroke="#010101" stroke-miterlimit="10"/><line x1="71.65" y1="62.75" x2="33.45" y2="101.05" fill="none" stroke="#010101" stroke-miterlimit="10"/><rect x="363.13" y="320.57" width="26.8" height="26.8" transform="translate(-468.87 111.96) rotate(-45)" fill="#3c54a5" stroke="#010101" stroke-miterlimit="10"/><rect x="382.12" y="301.57" width="26.8" height="26.8" transform="translate(-449.88 119.82) rotate(-45)" fill="#ec2227" stroke="#010101" stroke-miterlimit="10"/><rect x="401.42" y="320.57" width="26.8" height="26.8" transform="translate(-457.65 139.04) rotate(-45)" fill="#fcee23" stroke="#010101" stroke-miterlimit="10"/><text transform="translate(46.46 71.85)" font-size="25.86" fill="#010101" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">3</text><text transform="translate(27.14 88.32)" font-size="25.86" fill="#fff" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">2</text><text transform="translate(65.41 88.32)" font-size="25.86" fill="#010101" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">1</text><text transform="translate(20.6 137.85)" font-size="17.15" fill="#010101" font-family="Arial-BoldMT, Arial" font-weight="700" style="isolation:isolate">Ethanol</text><text transform="translate(16.8 158.45)" font-size="17.15" fill="#010101" font-family="ArialMT, Arial" style="isolation:isolate">container</text><path d="M346.65,336.55" transform="translate(-343 -252.1)" fill="none"/><path d="M517.53,333.92c-28.9,0-52.3,6.3-52.3,14.2v59.4c0,7.8,23.4,14.2,52.3,14.2s52.3-6.3,52.3-14.2v-59.3C569.83,340.32,546.43,333.92,517.53,333.92Z" transform="translate(-343 -252.1)" fill="#c4e4f0" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><ellipse cx="174.53" cy="95.82" rx="40.4" ry="8.4" fill="#c4e4f0" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><line x1="131.53" y1="107.02" x2="131.53" y2="155.62" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><line x1="176.43" y1="115.02" x2="176.43" y2="163.62" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><line x1="220.73" y1="104.22" x2="220.73" y2="152.82" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><line x1="199.83" y1="112.62" x2="199.83" y2="161.22" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><line x1="153.03" y1="112.62" x2="153.03" y2="161.22" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><ellipse cx="52.47" cy="8.51" rx="25.33" ry="5.33" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html, 200, 150).translate!(0, 70).scale!(0.6)
  end

  def guscn_container
    html = '<svg><title>12_GuSCNwastecontainer</title><polygon points="105.75 134.75 105.75 336.95 53.35 356.55 5.75 336.95 5.75 134.75 5.75 41.75 105.75 41.75 105.75 134.75" fill="#e2ebf7" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M606.5,260.9V386a15.51,15.51,0,0,1-1.1,5.6l-30.6,75.5a15,15,0,0,1-13.8,9.3h0a15,15,0,0,1-14.1-9.9l-26.8-75.2a14.26,14.26,0,0,1-.9-5V167.9h87.3v93Z" transform="translate(-507.35 -126.15)" fill="#fff" stroke="#010101" stroke-miterlimit="10"/><rect x="536.29" y="233.92" width="54.1" height="54.1" transform="translate(-526.88 348.63) rotate(-45)" fill="none" stroke="#010101" stroke-miterlimit="10"/><line x1="36.85" y1="115.65" x2="75.15" y2="153.95" fill="none" stroke="#010101" stroke-miterlimit="10"/><line x1="75.15" y1="115.65" x2="36.85" y2="153.95" fill="none" stroke="#010101" stroke-miterlimit="10"/><rect x="530.98" y="247.48" width="26.8" height="26.8" transform="translate(-532.38 335.2) rotate(-45)" fill="#3c54a5" stroke="#010101" stroke-miterlimit="10"/><rect x="549.98" y="228.47" width="26.8" height="26.8" transform="translate(-513.37 343.06) rotate(-45)" fill="#ec2227" stroke="#010101" stroke-miterlimit="10"/><rect x="569.29" y="247.48" width="26.8" height="26.8" transform="translate(-521.15 362.28) rotate(-45)" fill="#fcee23" stroke="#010101" stroke-miterlimit="10"/><text transform="translate(49.93 124.75)" font-size="25.86" fill="#010101" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">1</text><text transform="translate(30.61 141.21)" font-size="25.86" fill="#fff" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">2</text><text transform="translate(68.89 141.21)" font-size="25.86" fill="#010101" font-family="MyriadPro-Regular, Myriad Pro" style="isolation:isolate">2</text><path d="M507.6,138.3v37.2c0,6.6,24.7,11.9,55.2,11.9s55.2-5.3,55.2-11.9V138.3Z" transform="translate(-507.35 -126.15)" fill="#e2ebf7" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><ellipse cx="55.55" cy="12.15" rx="55.2" ry="11.9" fill="#e2ebf7" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><text transform="translate(25.97 208.31)" font-size="17.15" fill="#010101" font-family="ArialMT, Arial" style="isolation:isolate">GuSCN</text><text transform="translate(31.17 228.91)" font-size="17.15" fill="#010101" font-family="ArialMT, Arial" style="isolation:isolate"><tspan letter-spacing="-0.04em">W</tspan><tspan x="15.55" y="0">aste</tspan></text><text transform="translate(18.37 249.51)" font-size="17.15" fill="#010101" font-family="ArialMT, Arial" style="isolation:isolate">Container</text></svg>'
    svg_from_html(html, 50, 450).translate!(0, 70).scale!(0.6)
  end

  def collection_tube
    html = '<svg><title>12_collectiontubes</title><path d="M377.7,251.6v77.8c.1,1.9,4.5,35.4,19.9,31.8,0,0,12.6,4.6,17.4-30.9v-.4l-.6-78.3a2.48,2.48,0,0,0-2.5-2.5H380.2A2.48,2.48,0,0,0,377.7,251.6Z" transform="translate(-374.95 -246.45)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M415.1,251.5H377.6a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4h37.5a2.43,2.43,0,0,1,2.4,2.4h0A2.37,2.37,0,0,1,415.1,251.5Z" transform="translate(-374.95 -246.45)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def many_collection_tubes(num)
    tubes = []
    num.times do |i|
      tubes << collection_tube.translate!(i * 5, i * 10)
    end
    SVGElement.new(children: tubes, boundx: 200, boundy: 200)
  end

  def E0_closed_dry
    html = '<svg><title>12_E0</title><path d="M408.1,246.4H379.7a2.43,2.43,0,0,1-2.4-2.4v-5.1a2.43,2.43,0,0,1,2.4-2.4h28.4a2.43,2.43,0,0,1,2.4,2.4V244A2.5,2.5,0,0,1,408.1,246.4Z" transform="translate(-371.75 -233.95)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.6,241.7H374.4a2.43,2.43,0,0,1-2.4-2.4v-2.7a2.43,2.43,0,0,1,2.4-2.4h38.2a2.43,2.43,0,0,1,2.4,2.4v2.7A2.5,2.5,0,0,1,412.6,241.7Z" transform="translate(-371.75 -233.95)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M411.5,244.8" transform="translate(-371.75 -233.95)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.1,246.4a4,4,0,0,0,3.3-2.8,5.13,5.13,0,0,0-.4-4.3" transform="translate(-371.75 -233.95)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.1,248.2a6,6,0,0,0,6.2-4.9,5.77,5.77,0,0,0-3.2-7" transform="translate(-371.75 -233.95)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.3,250.2H374.8a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4h37.5a2.43,2.43,0,0,1,2.4,2.4h0A2.37,2.37,0,0,1,412.3,250.2Z" transform="translate(-371.75 -233.95)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M374.7,250.2v55.2l11.3,68c.8,4.8,4.6,5.8,7.9,5.1s4.4-5.3,4.4-5.3l13.2-67.8V250.2H374.7Z" transform="translate(-371.75 -233.95)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><circle cx="21.35" cy="109.25" r="9.2" fill="#bec0e1" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E0_open_dry
    html = '<svg><title>13_E0_dry_open</title><path d="M454.7,171.3" transform="translate(-415.35 -124.04)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M455.3,172.9a4,4,0,0,0,3.3-2.8,5.13,5.13,0,0,0-.4-4.3" transform="translate(-415.35 -124.04)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M455.3,174.7a6,6,0,0,0,6.2-4.9,5.77,5.77,0,0,0-3.2-7" transform="translate(-415.35 -124.04)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M455.5,176.7H418a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4h37.5a2.43,2.43,0,0,1,2.4,2.4h0A2.43,2.43,0,0,1,455.5,176.7Z" transform="translate(-415.35 -124.04)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M417.9,176.7v55.2l11.3,68c.8,4.8,4.6,5.8,7.9,5.1s4.4-5.3,4.4-5.3l13.2-67.8V176.7H417.9Z" transform="translate(-415.35 -124.04)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><circle cx="21.15" cy="145.06" r="9.2" fill="#bec0e1" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M452.3,161.2l-2.9-28.3a2.37,2.37,0,0,1,2.1-2.6l5.1-.5a2.37,2.37,0,0,1,2.6,2.1l2.9,28.3a2.37,2.37,0,0,1-2.1,2.6l-5.1.5A2.38,2.38,0,0,1,452.3,161.2Z" transform="translate(-415.35 -124.04)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M457.4,165.2l-3.8-38a2.37,2.37,0,0,1,2.1-2.6l2.7-.3a2.37,2.37,0,0,1,2.6,2.1l3.8,38a2.37,2.37,0,0,1-2.1,2.6l-2.7.3A2.37,2.37,0,0,1,457.4,165.2Z" transform="translate(-415.35 -124.04)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E0_open_wet
    html = '<svg><title>14_E0_wetopen</title><path d="M458.2,321.9" transform="translate(-418.85 -274.64)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M458.9,323.5a4,4,0,0,0,3.3-2.8,5.13,5.13,0,0,0-.4-4.3" transform="translate(-418.85 -274.64)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M458.9,325.3a6,6,0,0,0,6.2-4.9,5.77,5.77,0,0,0-3.2-7" transform="translate(-418.85 -274.64)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M459,327.3H421.5a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4H459a2.43,2.43,0,0,1,2.4,2.4h0A2.37,2.37,0,0,1,459,327.3Z" transform="translate(-418.85 -274.64)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M421.5,327.3v55.2l11.3,68c.8,4.8,4.6,5.8,7.9,5.1s4.4-5.3,4.4-5.3l13.2-67.8V327.3Z" transform="translate(-418.85 -274.64)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M455.8,311.7l-2.9-28.3a2.37,2.37,0,0,1,2.1-2.6l5.1-.5a2.37,2.37,0,0,1,2.6,2.1l2.9,28.3a2.37,2.37,0,0,1-2.1,2.6l-5.1.5A2.35,2.35,0,0,1,455.8,311.7Z" transform="translate(-418.85 -274.64)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M461,315.8l-3.8-38a2.37,2.37,0,0,1,2.1-2.6l2.7-.3a2.37,2.37,0,0,1,2.6,2.1l3.8,38a2.37,2.37,0,0,1-2.1,2.6l-2.7.3A2.37,2.37,0,0,1,461,315.8Z" transform="translate(-418.85 -274.64)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M440.7,415.4c-.3-.2-.5-.3-.8-.5a16.7,16.7,0,0,0-13.4-2.8l.5,3.3,5.9,35.2c.8,4.8,4.6,5.8,7.9,5.1s4.4-5.3,4.4-5.3l6.2-32.1.6-2.9H440.7Z" transform="translate(-418.85 -274.64)" fill="#bec0e1" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E1_closed
    html = '<svg><title>12_E1xxx</title><path d="M378,342.1c-4.2-1-8.5.3-11.9,2v15.1a8.71,8.71,0,0,0,8.7,8.7h41.7a8.71,8.71,0,0,0,8.7-8.7V344.6c-9.2.2-7.9,3.5-19.4,7.6C394.2,356.5,387.8,344.4,378,342.1Z" transform="translate(-365.85 -243.55)" fill="#26afe5"/><path d="M369.1,280.1" transform="translate(-365.85 -243.55)" fill="none"/><path d="M416.6,367.3H374.7a8.66,8.66,0,0,1-8.6-8.6V295.8a8.66,8.66,0,0,1,8.6-8.6h41.9a8.66,8.66,0,0,1,8.6,8.6v62.9A8.6,8.6,0,0,1,416.6,367.3Z" transform="translate(-365.85 -243.55)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M395.7,243.8c-16.3,0-29.5,3.6-29.5,8v33.5c0,4.4,13.2,8,29.5,8s29.5-3.6,29.5-8V251.8C425.2,247.4,412,243.8,395.7,243.8Z" transform="translate(-365.85 -243.55)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><ellipse cx="29.85" cy="8.15" rx="22.9" ry="4.8" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="5.55" y1="14.45" x2="5.55" y2="41.95" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="30.95" y1="19.05" x2="30.95" y2="46.45" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="55.95" y1="12.95" x2="55.95" y2="40.35" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="44.15" y1="17.65" x2="44.15" y2="45.15" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="17.65" y1="17.65" x2="17.65" y2="45.15" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E1_open
    html = '<svg ><title>14_E1_open</title><path d="M302.9,247.4" transform="translate(-299.55 -234.15)" fill="none"/><ellipse cx="30.05" cy="6.95" rx="18.7" ry="3.9" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M311.8,308.8c-4.2-1-8.5.3-11.9,2V326a8.71,8.71,0,0,0,8.7,8.7h41.7A8.71,8.71,0,0,0,359,326V311.4c-9.2.2-7.9,3.5-19.4,7.6S321.5,311.1,311.8,308.8Z" transform="translate(-299.55 -234.15)" fill="#26afe5"/><path d="M395.1,287.9c-16.3,0-29.5,3.6-29.5,8v33.5c0,4.4,13.2,8,29.5,8s29.5-3.6,29.5-8V295.9C424.6,291.5,411.4,287.9,395.1,287.9Z" transform="translate(-299.55 -234.15)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><ellipse cx="95.55" cy="61.55" rx="22.9" ry="4.8" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="71.15" y1="67.95" x2="71.15" y2="95.45" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="96.55" y1="72.45" x2="96.55" y2="99.95" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="121.65" y1="66.35" x2="121.65" y2="93.85" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="109.85" y1="71.15" x2="109.85" y2="98.65" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><line x1="83.35" y1="71.15" x2="83.35" y2="98.65" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M352.3,254.8V243c0-4.7-10.2-8.6-22.9-8.6s-22.9,3.8-22.9,8.6v11.8a8.68,8.68,0,0,0-6.7,8.4v62.9a8.66,8.66,0,0,0,8.6,8.6h41.9a8.66,8.66,0,0,0,8.6-8.6V263.2A8.49,8.49,0,0,0,352.3,254.8Z" transform="translate(-299.55 -234.15)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    s = svg_from_html(html, 80,90).translate!(0, 70)
  end

  def E4_closed
    html = '<svg><title>12_E4</title><path d="M408.8,245.5H380.4a2.43,2.43,0,0,1-2.4-2.4V238a2.43,2.43,0,0,1,2.4-2.4h28.4a2.43,2.43,0,0,1,2.4,2.4v5.1A2.5,2.5,0,0,1,408.8,245.5Z" transform="translate(-372.45 -233.05)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M413.3,240.8H375.1a2.43,2.43,0,0,1-2.4-2.4v-2.7a2.43,2.43,0,0,1,2.4-2.4h38.2a2.43,2.43,0,0,1,2.4,2.4v2.7A2.5,2.5,0,0,1,413.3,240.8Z" transform="translate(-372.45 -233.05)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.2,243.9" transform="translate(-372.45 -233.05)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.8,245.5a4,4,0,0,0,3.3-2.8,5.13,5.13,0,0,0-.4-4.3" transform="translate(-372.45 -233.05)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.8,247.3a6,6,0,0,0,6.2-4.9,5.77,5.77,0,0,0-3.2-7" transform="translate(-372.45 -233.05)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M413,249.3H375.5a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4H413a2.43,2.43,0,0,1,2.4,2.4h0A2.37,2.37,0,0,1,413,249.3Z" transform="translate(-372.45 -233.05)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M375.4,249.3v55.2l11.3,68c.8,4.8,4.6,5.8,7.9,5.1s4.4-5.3,4.4-5.3l13.2-67.8V249.3Z" transform="translate(-372.45 -233.05)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M394.6,337.3c-.3-.2-.5-.3-.8-.5a16.7,16.7,0,0,0-13.4-2.8l.5,3.3,5.9,35.2c.8,4.8,4.6,5.8,7.9,5.1s4.4-5.3,4.4-5.3l6.2-32.1.6-2.9H394.6Z" transform="translate(-372.45 -233.05)" fill="#26afe5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E4_open
    html = '<svg><title>E4_opened</title><path d="M604.51,369.07" transform="translate(-565.13 -321.85)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M605.12,370.64a3.88,3.88,0,0,0,3.29-2.79,4.85,4.85,0,0,0-.42-4.28" transform="translate(-565.13 -321.85)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M605.12,372.47a6,6,0,0,0,6.16-4.86,5.79,5.79,0,0,0-3.17-7" transform="translate(-565.13 -321.85)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="0.25" y="47.83" width="42.32" height="4.79" rx="2.4" ry="2.4" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M567.78,374.47V429.7l11.32,68c.8,4.79,4.61,5.75,7.86,5.09s4.39-5.33,4.39-5.33l13.16-67.79V374.47Z" transform="translate(-565.13 -321.85)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="588.99" y="339.39" width="33.11" height="9.82" rx="2.36" ry="2.36" transform="translate(321.94 -614.71) rotate(84.22)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="587.55" y="339.89" width="42.88" height="7.39" rx="2.36" ry="2.36" transform="translate(324.32 -618.79) rotate(84.22)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M586.95,462.55c-.27-.17-.53-.34-.8-.53a16.45,16.45,0,0,0-13.45-2.76l.55,3.29,5.86,35.18c.8,4.79,4.61,5.75,7.86,5.09s4.39-5.33,4.39-5.33l6.23-32.06.56-2.88Z" transform="translate(-565.13 -321.85)" fill="#26afe5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E2_closed
    html = '<svg><title>12_E2</title><path d="M414.8,285.6c-8.8,5.8-17.9,3.6-26.5.9l-10.5,3v45.6c.1,1.9,4.5,35.4,19.9,31.8,0,0,12.6,4.6,17.4-30.9v-.4Z" transform="translate(-374.35 -241.15)" fill="#26afe5"/><path d="M385.9,285.7a15.75,15.75,0,0,0-8.1-.7v4.4l10.5-3A16.82,16.82,0,0,1,385.9,285.7Z" transform="translate(-374.35 -241.15)" fill="#26afe5"/><path d="M410.7,253.6H382.3a2.43,2.43,0,0,1-2.4-2.4v-5.1a2.43,2.43,0,0,1,2.4-2.4h28.4a2.43,2.43,0,0,1,2.4,2.4v5.1A2.58,2.58,0,0,1,410.7,253.6Z" transform="translate(-374.35 -241.15)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M415.2,248.9H377a2.43,2.43,0,0,1-2.4-2.4v-2.7a2.43,2.43,0,0,1,2.4-2.4h38.2a2.43,2.43,0,0,1,2.4,2.4v2.7A2.5,2.5,0,0,1,415.2,248.9Z" transform="translate(-374.35 -241.15)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M377.4,257.6v77.8c.1,1.9,4.5,35.4,19.9,31.8,0,0,12.6,4.6,17.4-30.9v-.4l-.6-78.3a2.48,2.48,0,0,0-2.5-2.5H379.9A2.42,2.42,0,0,0,377.4,257.6Z" transform="translate(-374.35 -241.15)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M414.8,257.4H377.3a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4h37.5a2.43,2.43,0,0,1,2.4,2.4h0A2.31,2.31,0,0,1,414.8,257.4Z" transform="translate(-374.35 -241.15)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E2_open
    html = '<svg><title>E2_opened</title><path d="M383.89,254.35a3.88,3.88,0,0,0,3.29-2.79,4.85,4.85,0,0,0-.42-4.28" transform="translate(-343.9 -212.92)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M383.89,256.19a6,6,0,0,0,6.16-4.86,5.79,5.79,0,0,0-3.17-7" transform="translate(-343.9 -212.92)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M384,286.37c-8.82,5.75-17.91,3.62-26.54.87l-10.47,3v45.4c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.67,2.67,0,0,0,0-.37Z" transform="translate(-343.9 -212.92)" fill="#26afe5"/><path d="M355.11,286.47a15.52,15.52,0,0,0-8.13-.66v4.44l10.47-3Z" transform="translate(-343.9 -212.92)" fill="#26afe5"/><rect x="379.52" y="225.03" width="33.11" height="9.82" rx="2.36" ry="2.36" transform="translate(471.66 -166.81) rotate(126.2)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="377.68" y="228.02" width="42.88" height="7.39" rx="2.36" ry="2.36" transform="translate(477.92 -166.44) rotate(126.2)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M383.28,252.78" transform="translate(-343.9 -212.92)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M346.61,258.32v77.6c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.66,2.66,0,0,0,0-.37l-.61-78.29a2.52,2.52,0,0,0-2.52-2.5H349.13A2.52,2.52,0,0,0,346.61,258.32Z" transform="translate(-343.9 -212.92)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="0.25" y="40.48" width="42.32" height="4.79" rx="2.4" ry="2.4" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E3_closed
    html = '<svg><title>12_E3</title><path d="M413.1,427.1v-3.4c-7.5-.4-13.8,4.3-18.6,9.2-1.9,2-3.6,4-5.1,5.7-2.8,3.4-7.4,4-11.4,3.7,2.7,10,8,22.3,17.7,20,0,0,12.6,4.6,17.4-30.9v-4.3Z" transform="translate(-372.45 -336.45)" fill="#26afe5"/><path d="M408.8,348.9H380.4a2.43,2.43,0,0,1-2.4-2.4v-5.1a2.43,2.43,0,0,1,2.4-2.4h28.4a2.43,2.43,0,0,1,2.4,2.4v5.1A2.43,2.43,0,0,1,408.8,348.9Z" transform="translate(-372.45 -336.45)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M413.3,344.2H375.1a2.43,2.43,0,0,1-2.4-2.4v-2.7a2.43,2.43,0,0,1,2.4-2.4h38.2a2.43,2.43,0,0,1,2.4,2.4v2.7A2.43,2.43,0,0,1,413.3,344.2Z" transform="translate(-372.45 -336.45)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.2,347.3" transform="translate(-372.45 -336.45)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.8,348.9a4,4,0,0,0,3.3-2.8,5.13,5.13,0,0,0-.4-4.3" transform="translate(-372.45 -336.45)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.8,350.7a6,6,0,0,0,6.2-4.9,5.77,5.77,0,0,0-3.2-7" transform="translate(-372.45 -336.45)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M375.5,352.8v77.8c.1,1.9,4.5,35.4,19.9,31.8,0,0,12.6,4.6,17.4-30.9v-.4l-.6-78.3a2.48,2.48,0,0,0-2.5-2.5H378A2.54,2.54,0,0,0,375.5,352.8Z" transform="translate(-372.45 -336.45)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M413,352.7H375.5a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4H413a2.43,2.43,0,0,1,2.4,2.4h0A2.43,2.43,0,0,1,413,352.7Z" transform="translate(-372.45 -336.45)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E3_open
    html = '<svg><title>E3_opened</title><path d="M476.1,406.36l0-3.43c-7.47-.37-13.8,4.31-18.61,9.22-1.94,2-3.63,4-5.06,5.73-2.81,3.43-7.38,4-11.39,3.72,2.67,10,8,22.27,17.67,20,0,0,12.62,4.63,17.42-30.86a2.66,2.66,0,0,0,0-.37Z" transform="translate(-435.8 -279.98)" fill="#26afe5"/><rect x="467.28" y="296.62" width="33.11" height="9.82" rx="2.36" ry="2.36" transform="translate(415.66 -414.19) rotate(98.22)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M475.18,326.55" transform="translate(-435.8 -279.98)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M478.75,328.86a3.88,3.88,0,0,0,4-1.66,4.85,4.85,0,0,0,.9-4.21" transform="translate(-435.8 -279.98)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M478.19,330.61a6,6,0,0,0,7.35-2.74,5.79,5.79,0,0,0-.88-7.65" transform="translate(-435.8 -279.98)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M438.51,332.08v77.6c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.66,2.66,0,0,0,0-.37l-.61-78.29a2.52,2.52,0,0,0-2.52-2.5H441A2.52,2.52,0,0,0,438.51,332.08Z" transform="translate(-435.8 -279.98)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="0.25" y="47.19" width="42.32" height="4.79" rx="2.4" ry="2.4" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="465.91" y="297.97" width="42.88" height="7.39" rx="2.36" ry="2.36" transform="translate(419.81 -417.52) rotate(98.22)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E5_empty_closed_w_empty_collector
    html = '<svg><title>12_E5xxx</title><path d="M375.2,260.4v77.8c.1,1.9,4.5,35.4,19.9,31.8,0,0,12.6,4.6,17.4-30.9v-.4l-.6-78.3a2.48,2.48,0,0,0-2.5-2.5H377.7A2.54,2.54,0,0,0,375.2,260.4Z" transform="translate(-371.65 -237.65)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M408,250.1H379.6a2.43,2.43,0,0,1-2.4-2.4v-5.1a2.43,2.43,0,0,1,2.4-2.4H408a2.43,2.43,0,0,1,2.4,2.4v5.1A2.5,2.5,0,0,1,408,250.1Z" transform="translate(-371.65 -237.65)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M410.8,252.4H376.4a1.16,1.16,0,0,1-1.2-1.2v-2.3a1.16,1.16,0,0,1,1.2-1.2h34.4a1.16,1.16,0,0,1,1.2,1.2v2.3A1.16,1.16,0,0,1,410.8,252.4Z" transform="translate(-371.65 -237.65)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M377.2,252.4v51.3a1.42,1.42,0,0,0,.9,1.4l5.6,3.1a1.69,1.69,0,0,1,.9,1.4v7.3a1.58,1.58,0,0,0,1.6,1.6h14.5a1.58,1.58,0,0,0,1.6-1.6v-7.3a1.86,1.86,0,0,1,.9-1.5l6.2-3.1a1.65,1.65,0,0,0,.9-1.5V252.3" transform="translate(-371.65 -237.65)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M400,314.8H386.9a1,1,0,0,1-1-1v-4.1a1,1,0,0,1,1-1H400a1,1,0,0,1,1,1v4.1A1.17,1.17,0,0,1,400,314.8Z" transform="translate(-371.65 -237.65)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.5,245.4H374.3a2.43,2.43,0,0,1-2.4-2.4v-2.7a2.43,2.43,0,0,1,2.4-2.4h38.2a2.43,2.43,0,0,1,2.4,2.4V243A2.43,2.43,0,0,1,412.5,245.4Z" transform="translate(-371.65 -237.65)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M416.1,248" transform="translate(-371.65 -237.65)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M411.4,248.5" transform="translate(-371.65 -237.65)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412,250.1a4,4,0,0,0,3.3-2.8,5.13,5.13,0,0,0-.4-4.3" transform="translate(-371.65 -237.65)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412,251.9a6,6,0,0,0,6.2-4.9,5.77,5.77,0,0,0-3.2-7" transform="translate(-371.65 -237.65)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.7,260.3H375.2a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4h37.5a2.43,2.43,0,0,1,2.4,2.4h0A2.43,2.43,0,0,1,412.7,260.3Z" transform="translate(-371.65 -237.65)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E5_full_open_w_empty_collector
    html = '<svg><title>27_loaded_E5</title><path d="M298.56,180.55v77.6c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.66,2.66,0,0,0,0-.37l-.61-78.29a2.52,2.52,0,0,0-2.52-2.5H301.08A2.52,2.52,0,0,0,298.56,180.55Z" transform="translate(-295.85 -127.07)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="0.25" y="48.56" width="42.32" height="4.79" rx="2.4" ry="2.4" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M300.7,176.75V228a1.65,1.65,0,0,0,.85,1.44l5.56,3.06A1.65,1.65,0,0,1,308,234v7.3a1.65,1.65,0,0,0,1.65,1.65h14.54a1.65,1.65,0,0,0,1.65-1.65V234a1.65,1.65,0,0,1,.91-1.48l6.18-3.09a1.65,1.65,0,0,0,.91-1.48V176.75" transform="translate(-295.85 -127.07)" fill="#f7fcfe" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M332.44,195.7c-4.78,2.8-6.52,9.41-14.41,11.9-6.3,2-13,0-17.32-2V228a1.65,1.65,0,0,0,.85,1.44l5.56,3.06A1.65,1.65,0,0,1,308,234v7.3a1.65,1.65,0,0,0,1.65,1.65h14.54a1.65,1.65,0,0,0,1.65-1.65V234a1.65,1.65,0,0,1,.91-1.48l6.18-3.09a1.65,1.65,0,0,0,.91-1.48V195.43Z" transform="translate(-295.85 -127.07)" fill="#26afe5" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M333.81,195.43V195a9.11,9.11,0,0,0-1.38.66Z" transform="translate(-295.85 -127.07)" fill="#26afe5" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="2.86" y="44.96" width="36.77" height="4.72" rx="1.19" ry="1.19" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="13.51" y="105.92" width="15.06" height="6.09" rx="0.98" ry="0.98" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M334.86,172.82" transform="translate(-295.85 -127.07)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M335.47,174.39a3.88,3.88,0,0,0,3.29-2.79,4.85,4.85,0,0,0-.42-4.28" transform="translate(-295.85 -127.07)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M335.47,176.23a6,6,0,0,0,6.16-4.86,5.79,5.79,0,0,0-3.17-7" transform="translate(-295.85 -127.07)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="317.6" y="144.54" width="33.11" height="9.82" rx="2.36" ry="2.36" transform="translate(161.16 -322.44) rotate(85.51)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="316.17" y="145.11" width="42.88" height="7.39" rx="2.36" ry="2.36" transform="translate(163.71 -326.48) rotate(85.51)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E5_empty_closed_w_full_collector
    html = '<svg><title>27.1_loaded_E5_close-filtrated</title><path d="M335.92,239.59l0-3.43c-7.47-.37-13.8,4.31-18.61,9.22-1.94,2-3.63,4-5.06,5.73-2.81,3.43-7.38,4-11.39,3.72,2.67,10,8,22.27,17.67,20,0,0,12.62,4.63,17.42-30.86a2.66,2.66,0,0,0,0-.37Z" transform="translate(-295.33 -142.61)" fill="#26afe5"/><path d="M298.84,165.31v77.6c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.66,2.66,0,0,0,0-.37l-.61-78.29a2.52,2.52,0,0,0-2.52-2.5H301.36A2.52,2.52,0,0,0,298.84,165.31Z" transform="translate(-295.33 -142.61)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="5.5" y="2.53" width="33.11" height="9.82" rx="2.36" ry="2.36" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="3.51" y="9.99" width="36.77" height="4.72" rx="1.19" ry="1.19" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M300.83,157.32v51.26a1.65,1.65,0,0,0,.85,1.44l5.56,3.06a1.65,1.65,0,0,1,.85,1.44v7.3a1.65,1.65,0,0,0,1.65,1.65h14.54a1.65,1.65,0,0,0,1.65-1.65v-7.25a1.65,1.65,0,0,1,.91-1.48L333,210a1.65,1.65,0,0,0,.91-1.48V157.32" transform="translate(-295.33 -142.61)" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="14.16" y="70.95" width="15.06" height="6.09" rx="0.98" ry="0.98" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="0.25" y="0.25" width="42.88" height="7.39" rx="2.36" ry="2.36" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M339.71,152.85" transform="translate(-295.33 -142.61)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M335,153.4" transform="translate(-295.33 -142.61)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M335.6,155a3.88,3.88,0,0,0,3.29-2.79,4.85,4.85,0,0,0-.42-4.28" transform="translate(-295.33 -142.61)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><path d="M335.6,156.8a6,6,0,0,0,6.16-4.86,5.79,5.79,0,0,0-3.17-7" transform="translate(-295.33 -142.61)" fill="none" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/><rect x="1.05" y="17.78" width="42.32" height="4.79" rx="2.4" ry="2.4" fill="#fff" stroke="#231f20" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def E6_closed
    html = '<svg><title>12_E6xxx</title><path d="M408,245.4H379.6a2.43,2.43,0,0,1-2.4-2.4v-5a2.43,2.43,0,0,1,2.4-2.4H408a2.43,2.43,0,0,1,2.4,2.4v5.1A2.41,2.41,0,0,1,408,245.4Z" transform="translate(-371.65 -232.95)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.5,240.7H374.3a2.43,2.43,0,0,1-2.4-2.4v-2.7a2.43,2.43,0,0,1,2.4-2.4h38.2a2.43,2.43,0,0,1,2.4,2.4v2.7A2.43,2.43,0,0,1,412.5,240.7Z" transform="translate(-371.65 -232.95)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M411.4,243.9" transform="translate(-371.65 -232.95)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412,245.4a4,4,0,0,0,3.3-2.8,5.13,5.13,0,0,0-.4-4.3" transform="translate(-371.65 -232.95)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412,247.3a6,6,0,0,0,6.2-4.9,5.77,5.77,0,0,0-3.2-7" transform="translate(-371.65 -232.95)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M412.2,249.3H374.7a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4h37.5a2.43,2.43,0,0,1,2.4,2.4h0A2.5,2.5,0,0,1,412.2,249.3Z" transform="translate(-371.65 -232.95)" fill="#fff" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/><path d="M374.6,249.3v55.2l11.3,68c.8,4.8,4.6,5.8,7.9,5.1s4.4-5.3,4.4-5.3l13.2-67.8V249.3Z" transform="translate(-371.65 -232.95)" fill="none" stroke="#000" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def sXXX_closed
    html = '<svg><defs><style>.cls-1{fill:#efe7a3;}.cls-2{fill:#fff;}.cls-2,.cls-3{stroke:#000;stroke-miterlimit:10;stroke-width:0.5px;}.cls-3{fill:none;}</style></defs><title>Sxxx_withplasma_close</title><path class="cls-1" d="M392.7,355.9c-.3-.2-.5-.3-.8-.5a16.7,16.7,0,0,0-13.4-2.8l.5,3.3,5.9,35.2c.8,4.8,4.6,5.8,7.9,5.1s4.4-5.3,4.4-5.3l6.2-32.1.6-2.9H392.7Z" transform="translate(-370.35 -251.55)"/><path class="cls-2" d="M406.6,264H378.2a2.43,2.43,0,0,1-2.4-2.4v-5.1a2.43,2.43,0,0,1,2.4-2.4h28.4a2.43,2.43,0,0,1,2.4,2.4v5.1A2.43,2.43,0,0,1,406.6,264Z" transform="translate(-370.35 -251.55)"/><path class="cls-2" d="M411.2,259.3H373a2.43,2.43,0,0,1-2.4-2.4v-2.7a2.43,2.43,0,0,1,2.4-2.4h38.2a2.43,2.43,0,0,1,2.4,2.4v2.7A2.58,2.58,0,0,1,411.2,259.3Z" transform="translate(-370.35 -251.55)"/><path class="cls-3" d="M410,262.4" transform="translate(-370.35 -251.55)"/><path class="cls-3" d="M410.6,264a4,4,0,0,0,3.3-2.8,5.13,5.13,0,0,0-.4-4.3" transform="translate(-370.35 -251.55)"/><path class="cls-3" d="M410.6,265.8a6,6,0,0,0,6.2-4.9,5.77,5.77,0,0,0-3.2-7" transform="translate(-370.35 -251.55)"/><path class="cls-2" d="M410.8,267.8H373.3a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4h37.5a2.43,2.43,0,0,1,2.4,2.4h0A2.37,2.37,0,0,1,410.8,267.8Z" transform="translate(-370.35 -251.55)"/><path class="cls-3" d="M373.3,267.8V323l11.3,68c.8,4.8,4.6,5.8,7.9,5.1s4.4-5.3,4.4-5.3L410.1,323V267.8Z" transform="translate(-370.35 -251.55)"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end

  def sXXX_open
    html = '<svg><title>17_Sxx_open</title><path d="M449.7,343.9c-.3-.2-.5-.3-.8-.5a16.7,16.7,0,0,0-13.4-2.8l.5,3.3,5.9,35.2c.8,4.8,4.6,5.8,7.9,5.1s4.4-5.3,4.4-5.3l6.2-32.1.6-2.9Z" transform="translate(-427.95 -203.14)" fill="#efe7a3"/><path d="M467.3,250.4" transform="translate(-427.95 -203.14)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M467.9,252a4,4,0,0,0,3.3-2.8,5.13,5.13,0,0,0-.4-4.3" transform="translate(-427.95 -203.14)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M467.9,253.8a6,6,0,0,0,6.2-4.9,5.77,5.77,0,0,0-3.2-7" transform="translate(-427.95 -203.14)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M468.1,255.8H430.6a2.43,2.43,0,0,1-2.4-2.4h0a2.43,2.43,0,0,1,2.4-2.4h37.5a2.43,2.43,0,0,1,2.4,2.4h0A2.37,2.37,0,0,1,468.1,255.8Z" transform="translate(-427.95 -203.14)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M430.5,255.8V311l11.3,68c.8,4.8,4.6,5.8,7.9,5.1s4.4-5.3,4.4-5.3L467.3,311V255.8Z" transform="translate(-427.95 -203.14)" fill="none" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M464.8,240.3,462,212a2.37,2.37,0,0,1,2.1-2.6l5.1-.5a2.37,2.37,0,0,1,2.6,2.1l2.9,28.3a2.37,2.37,0,0,1-2.1,2.6l-5.1.5A2.46,2.46,0,0,1,464.8,240.3Z" transform="translate(-427.95 -203.14)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/><path d="M470,244.3l-3.8-38a2.37,2.37,0,0,1,2.1-2.6l2.7-.3a2.37,2.37,0,0,1,2.6,2.1l3.8,38a2.37,2.37,0,0,1-2.1,2.6l-2.7.3A2.37,2.37,0,0,1,470,244.3Z" transform="translate(-427.95 -203.14)" fill="#fff" stroke="#010101" stroke-miterlimit="10" stroke-width="0.5"/></svg>'
    svg_from_html(html).translate!(0, 70)
  end
end

library: {name: SVGGraphics, category: OLASimple}
code_source:
############################################
#
# Generic SVG Graphics for lab work
#
############################################

require 'matrix'

module Graphics

  class Tag
    # an HTML/XML like tag
    #
    def initialize(tag_name, value: nil, properties: nil)
      if properties.nil?
        properties = {}
      end
      if value.nil?
        value = ""
      end
      @tag_name = tag_name
      @properties = properties
      @value = value
    end

    def Tag.property(label, value)
      return "#{label}=\"#{value}\""
    end

    def value
      @value
    end

    def update(props)
      @properties = @properties.merge(props)
    end

    def properties
      @properties.select {|_, v|
        !v.nil? and v != ""}.map {|k, v|
        Tag.property(k, v)
      }.join(' ')
    end

    def formatter
      REXML::Formatters::Pretty.new
    end

    def to_str
      props = self.properties
      if props != ""
        props = " " + props
      end
      if self.value == ""
        return "<#{@tag_name}#{props} />"
      end

      mystr = "<#{@tag_name}#{props}>#{self.value}</#{@tag_name}>"
      return mystr
      mydoc = REXML::Document.new(mystr)
      self.formatter.write(mydoc.root, "")
    end

    def dump
      {
          properties: @properties,
          value: @value,
          tag_name: @tag_name
      }
    end

    def self.load(props)
      print("loading #{self}")
      return self.new(props[:tag_name], value: props[:value], properties: props[:properties])
    end

    def inst
      self.class.load(self.dump)
    end

    # def inst
    #   Marshal.load(Marshal.dump(self))
    # end

    def to_s
      self.to_str
    end
  end

  # A vector image, like an icon
  class SVGElement < Tag
    attr_accessor :alignment, :value, :boundx, :boundy
    attr_reader :x, :y, :yscale, :rot, :xposrot, :yposrot, :xscale, :yscale, :name, :classname, :transformations

    @@debug = false

    # A SVG element to display in an image
    #
    def initialize(children: nil,
                   name: nil,
                   classname: nil,
                   x: 0,
                   y: 0,
                   boundx: 0,
                   boundy: 0,
                   alignment: 'top-left',
                   xscale: 1,
                   yscale: 1,
                   rot: 0,
                   xposrot: 0,
                   yposrot: 0,
                   properties: nil,
                   transformations: nil,
                   style: nil)
      properties = properties || {}
      classname = classname || ""
      children = [children] unless children.is_a?(Array)
      super("g", properties: properties)
      @name = name
      @classname = classname
      @boundx = boundx
      @boundy = boundy
      @children = children
      @alignment = alignment
      @style = style || ""
      @transformations = transformations || []
      self.update_coordinates!(x, y)
      @xscale = xscale
      @yscale = yscale
      if @transformations.empty?
        self.transform!(x: x, y: y, xscale: xscale, yscale: yscale, rot: rot, xposrot: xposrot, yposrot: yposrot)
      end
    end

    def update_coordinates!(x, y)
      @x = x
      @y = y
    end

    def dump
      tag_props = super
      tag_props.reject! {|k, v| ["tag_name", "value"].include?(k.to_s)}
      props = {
          x: @x,
          y: @y,
          xscale: @xscale,
          yscale: @yscale,
          name: @name,
          classname: @classname,
          alignment: @alignment,
          style: @style,
          transformations: @transformations.dup.compact,
          children: @children.dup.compact,
          boundx: @boundx,
          boundy: @boundy
      }
      props.merge(tag_props)
    end

    def self.load(props)
      self.new(**props)
    end

    # sets the debug mode on or off
    # debug mode will display bounding boxes and anchors
    def self.debug onoroff
      @@debug = onoroff
    end

    def value
      # override the Tag value for converting SVGElement to a string
      @value = "\n#{self.display}"
      super
    end

    def new_class(myclass)
      inst = self.inst
      inst.new_class!(myclass)
    end

    def new_name(myname)
      inst = self.inst
      inst.new_name!(myname)
    end

    def new_class!(myclass)
      @classname = myclass
      self
    end

    def new_name!(myname)
      @name = myname
      self
    end

    def svg_properties
      # additional svg properties
      props = {}
      if @name != ""
        props["id"] = @name
      end
      if @classname != ""
        props["class"] = @classname
      end
      props["transform"] = self.get_transform_attribute
      props
    end

    def properties
      # override the Tab properties to add additional svg-specific properties
      # such as id="" and transform
      @properties = @properties.merge(self.svg_properties)
      super
    end

    def origin
      self.get_anchor("upper-left")
    end

    def bounds
      self.bounds_helper(0, 0)
      # use min?
    end

    def align_with(other, other_anchor)
      self.translate!(-@x, -@y)
      v = other.get_abs_anchor(other_anchor)
      v = v - other.abs_anchor_vector
      # v = other.get_abs_anchor_vector(other_anchor)
      #
      self.translate!(*v)
    end

    def g id: nil, classname: nil
      # return a external new group with svg element as a child
      new_g = SVGElement.new(name: id, properties: {"class" => classname}, x: 0, y: 0)
      new_g.update_coordinates!(@x, @y)
      new_g.boundx = @boundx * @xscale
      new_g.boundy = @boundy * @yscale
      new_g.add_child(self)
    end

    # Sets the children array
    def children=(g)
      @children = g
    end

    # Returns the children array
    def children
      @children
    end

    def display
      inst = self
      if @@debug
        inst = inst.display_with_anchors.bb
      end
      if inst.children.is_a?(Array)
        inst.children.map do |child|
          if child.is_a?(SVGElement)
            "#{child}"
          else
            child
          end
        end.join("\n")
      else
        "#{inst.children}"
      end
    end

    def add_child(child)
      if child.is_a?(String)
        @children.push(child)
      else
        @children.push(child.inst)
      end
      self
    end

    def group_children id: nil, classname: nil
      # make an internal grouping of this elements children. Return that grouping
      child_group = SVGElement.new(name: id, classname: classname)
      child_group.children = self.children
      self.children = [child_group]
      return child_group
    end

    def cx
      return (@x + @boundx) / 2.0
    end

    def cy
      return (@y + @boundy) / 2.0
    end

    # ########################################################
    # Transformation
    # ########################################################

    # scaling always happens last in SVG transform attribute to avoid unusual SVG behavior
    def get_transform_attribute
      # transformations = [self.apply_scale, self.apply_translate, self.apply_rotate]
      transformations = []
      transformations += @transformations.dup
      transformations.push("scale(#{@xscale} #{@yscale})")
      transformations.push(self.anchor_translate)
      attr = transformations.join(' ')
      zero = "(-){0,1}0(\.0){0,1}"
      attr.gsub!(/translate\((-){0,1}0(\.0){0,1} (-){0,1}0(\.0){0,1}\)/, '')
      attr.gsub!(/translate\((-){0,1}0(\.0){0,1}\)/, '')
      attr.gsub!(/rotate\((-){0,1}0(\.0){0,1} (-){0,1}0(\.0){0,1} (-){0,1}0(\.0){0,1}\)\s+/, "")
      attr.gsub!(/scale\(1\)\s+/, "")
      attr.gsub!(/scale\(1 1\)\s+/, "")
      attr.strip.gsub(/\s+/, " ")
    end

    def align!(alignment)
      self.alignment = alignment
      self
    end

    def mirror_horizontal
      child_group = self.group_children(id: "mirror_horizontal")
      child_group.scale!(-1, 1).translate!(@boundx, 0)
      return self
    end

    def mirror_vertical
      child_group = self.group_children(id: "mirror_vertical")
      child_group.scale!(1, -1).translate!(0, @boundy)
      return self
    end

    def translate!(x, y = 0)
      @x += x
      y = y || 0
      @y += y
      if x != 0 or y != 0
        @transformations.push self.translate_helper(x, y)
      end
      self
    end

    def rotate!(a, x = 0, y = 0)
      if a != 0
        @transformations.push self.rotate_helper(a, x, y)
      end
      self
    end

    # Scalings must always happen last to avoid unusual SVG behaviors
    def scale!(x, y = nil)
      if y.nil?
        y = x
      end
      @xscale = x
      @yscale = y
      # if x != 1 and y != 1
      #   @transformations.push self.scale_helper(x, y)
      # end
      self
    end

    def transform!(x: 0, y: 0, xscale: 1, yscale: 1, rot: 0, xposrot: 0, yposrot: 0)
      # update the tranform values
      self.translate!(x, y)
          .rotate!(rot, xposrot, yposrot)
          .scale!(xscale, yscale)
    end

    def translate(x, y = nil)
      i = self.inst
      i.translate!(x, y)
    end

    def rotate(a, x = 0, y = 0)
      i = self.inst
      i.rotate!(a, x, y)
    end

    def scale(x, y = nil)
      i = self.inst
      i.scale!(x, y)
    end

    def align(alignment)
      inst = self.inst
      inst.align!(alignment)
    end

    def transform(x: 0, y: 0, xscale: 1, yscale: 1, rot: 0, xposrot: 0, yposrot: 0)
      # update the tranform values
      inst = self.inst
      inst.transform!(x: x, y: y, xscale: xscale, yscale: yscale, rot: rot, xposrot: xposrot, yposrot: yposrot)
    end

    def translate_helper(x, y = 0)
      "translate(#{x} #{y})"
    end

    def rotate_helper(a, x = 0, y = 0)
      # a: degrees
      # x: rotate point
      # y: rotate point
      "rotate(#{a} #{x} #{y})"
    end


    def scale_helper(x, y = 1)
      # a: degrees
      # x: rotate point
      # y: rotate point
      "scale(#{x} #{y})"
    end

    def anchor_translate
      x = self.anchor_vector
      self.translate_helper(-x[-0], -x[1])
    end

    def apply_rotate
      self.rotate_helper(@rot, @xposrot, @yposrot)
    end

    def apply_scale
      self.scale_helper(@xscale, @yscale)
    end

    # ########################################################
    # Anchors
    # ########################################################

    def get_anchor_vector(alignment)
      anchor_matrix = self.parse_alignment alignment
      cw = @boundx / 2.0
      cy = @boundy / 2.0
      Vector[(anchor_matrix[0] + 1) * cw, (anchor_matrix[1] + 1) * cy]
    end

    def anchor_vector
      self.get_anchor_vector @alignment
    end

    def get_anchor alignment
      p = Vector[@x, @y]
      p + self.get_anchor_vector(alignment)
    end

    def anchor
      p = Vector[@x, @y]
      p + self.get_anchor_vector(@alignment)
    end

    def get_abs_anchor alignment
      p = Vector[@x, @y]
      p + self.get_abs_anchor_vector(alignment)
    end

    def abs_anchor
      self.get_abs_anchor(@alignment)
    end

    # multiple the anchor vector by the scaling vector
    def abs_anchor_vector
      return self.get_abs_anchor_vector(@alignment)
    end

    def get_abs_anchor_vector alignment
      a = self.get_anchor_vector(alignment)
      return Vector[@xscale * a[0], @yscale * a[1]]
    end

    def display_with_anchors
      if @name == 'debuganchor'
        return self
      end
      cross = SVGElement.new(name: "debuganchor", boundx: 10, boundy: 10)
      cross.add_child Tag.new('line', properties: {x1: 0, y1: 0, x2: 10, y2: 10, stroke: 'red', 'stroke-width' => 0.5})
      cross.add_child Tag.new('line', properties: {x2: 0, y1: 0, x1: 10, y2: 10, stroke: 'red', 'stroke-width' => 0.5})
      cross.add_child Tag.new('rect', properties: {x: 0, y: 0, width: 10, height: 10, stroke: 'red', fill: 'none', 'stroke-width' => 0.5})
      cross.scale!(0.75)
      cross.align!('center-center')
      inst = self.inst
      halign = ['left', 'center', 'right']
      valign = ['top', 'center', 'bottom']
      halign.each do |h|
        valign.each do |v|
          inst.add_child(cross.translate(*inst.get_anchor_vector("#{h}-#{v}")))
        end
      end
      inst
    end

    def bb
      if @name == "debuganchor"
        return self
      end
      inst = self.inst
      ax, ay = self.anchor
      bounding_box = Tag.new('rect', properties: {
          x: 0,
          y: 0,
          width: @boundx,
          height: @boundy,
          "stroke-width" => 0.5,
          stroke: 'red',
          fill: 'none'
      })
      inst.add_child(bounding_box)
    end

    def parse_alignment(alignment)
      # parses an alignment string like 'center-left'

      tokens = alignment.split('-')
      if tokens.length != 2
        raise "Property 'alignment=#{alignment}' is improperly formatted (e.g. use 'alignment=\"center-left\"')"
      end

      if ['left', 'right'].include?(tokens[1])
        tokens[0], tokens[1] = tokens[1], tokens[0]
      end

      if ['upper', 'bottom', 'top'].include?(tokens[0])
        tokens[0], tokens[1] = tokens[1], tokens[0]
      end

      if ['left', 'right'].include?(tokens[1])
        raise "Property 'alignment' not understood. Cannot be aligned to both left and right. Found '#{alignment}'"
      end

      if ['top', 'upper', 'bottom'].include?(tokens[0])
        raise "Property 'alignment' not understood. Cannot be aligned to both top and bottom. Found '#{alignment}'"
      end

      anchor_dict = {
          left: -1,
          center: 0,
          right: 1,
          upper: -1,
          top: -1,
          bottom: 1
      }
      tokens.map {|t| anchor_dict[t.to_sym]}
    end

    # change relative coordinates to absolute coordinates
    def v(x, y)
      return Vector[x, y]
    end

    def abs_v(x, y)
      return Vector[@xscale * x, @yscale * y]
    end

    def style(mystyle)
      inst = self.inst
      inst.style!(mystyle)
    end

    def style!(mystyle)
      @style = Tag.new("style", value: mystyle)
    end

    def svg(width=nil, height=nil, scale = 1.0)
      width = width || @boundx * @xscale
      height = height || @boundy * @yscale
      Tag.new('svg',
              value: [@style, self.g(id: "svg").to_str].join(''), properties: {
              width: "#{width * scale}px",
              height: "#{height * scale}px",
              viewBox: "0 0 #{width} #{height}",
              version: "1.1",
              xmlns: "http://www.w3.org/2000/svg"
          })
    end
  end

  class Shape < SVGElement
    def initialize(x, y, shape, stroke = 'black', stroke_width = 1, shapevalue = nil, *args)

      super(*args)
      if @shape_properties.nil?
        @shape_properties = {}
      end
      @shape = shape
      @shapevalue = shapevalue
      self.update({stroke: stroke, "stroke-width" => stroke_width})
    end

    def dump
      elements_props = super
      {
          shape_properties: @shape_properties,
          shape: @shape,
          shapevalue: @shapevalue,
          element_props: elements_props
      }
    end

    def self.load(props)
      new = self.new(0, 0, props[:shape], 'black', 1, props[:shapevalue], **props[:element_props])
      new.update(props[:shape_properties])
    end

    def inst
      self.class.load(self.dump)
    end

    # def inst
    #   Marshal.load(Marshal.dump(self))
    # end

    def get_child
      Tag.new(@shape, value: @shapevalue, properties: @shape_properties)
    end

    def update new_hash
      @shape_properties.merge!(new_hash)
      @children[0] = self.get_child
      self
    end
  end

  class Rect < Shape
    def initialize(x, y, width, height, *args)
      @shape_properties = {width: width, height: height}
      super(x, y, 'rect', *args)
      @boundx = width
      @boundy = height
    end
  end

  class Circle < Shape
    def initialize(x, y, r, *args)
      @shape_properties = {r: r, cx: 0, cy: 0}
      super(x, y, 'circle', *args)
    end
  end

  class Line < Shape
    def initialize(x1, y1, x2, y2, *args)
      @shape_properties = {
          x1: x1,
          y1: y1,
          x2: x2,
          y2: y2}
      super(0, 0, 'line', *args)
    end
  end

  class VectorLine < Shape
    def initialize(x, y, dx, dy, *args)
      @shape_properties = {x1: 0, y1: 0, x2: dx, y2: dy}
      super(x, y, 'line', *args)
    end
  end

  def label(text, properties = nil)
    properties = properties || {}
    font_size = properties[:font_size] || 12
    boundx = font_size * text.length * 0.5
    boundy = font_size
    mylabel = SVGElement.new(boundx: boundx, boundy: boundy)
    a = mylabel.get_anchor_vector('center-center')
    properties[:x] = a[0]
    properties[:y] = a[1]
    properties["alignment-baseline".to_sym] = 'middle'
    properties["text-anchor".to_sym] = 'middle'
    properties['font-family'.to_sym] = "Verdana"
    mylabel.add_child(
        Tag.new("text", value: text, properties: properties)
    )
  end

  # class Label < Shape
  #   def initialize(label, font_size, x = 0, y = 0, font_family = "Arial", stroke='black', stroke_width=0, *args)
  #     @shape_properties = {
  #         x: 0, y: 0,
  #         "font-size" => font_size,
  #         "font-family" => font_family,
  #         'alignment-baseline' => 'middle',
  #         'text-anchor' => 'middle'}
  #     label = label || ""
  #     super(x, y, 'text', stroke, stroke_width, @shapevalue, *args)
  #     @shapevalue = label
  #     @boundy = font_size
  #     @boundx = @shapevalue.length * font_size
  #     self.update({})
  #   end
  #
  #   def self.load(props)
  #     new = self.new(props[:shapevalue], 0, 0, 0, "Arial", "black", 0, props[:element_props])
  #     new.update(props[:shape_properties])
  #   end
  #
  #   # Override x, y position so that label aligns with anchor
  #   def get_child
  #     s = @shape_properties.dup
  #     av = self.get_anchor_vector('center-center')
  #     s[:x] = av[0]
  #     s[:y] = av[1]
  #     Tag.new(@shape, value: @shapevalue, properties: s)
  #   end
  #
  #   # auto | baseline | before-edge | text-before-edge | middle | central | after-edge | text-after-edge | ideographic | alphabetic | hanging | mathematical | inherit
  #   def vertical_alignment(alignment)
  #     self.update('alignment-baseline' => alignment)
  #   end
  #
  #   # start | middle | end | inherit
  #   def text_anchor(alignment)
  #     self.update('text-anchor' => alignment)
  #   end
  # end

  # Organizes SVGElements on a grid of your choosing.
  # Makes it easier to position elements
  class SVGGrid < SVGElement
    attr_accessor :elements

    def initialize(xnum, ynum, xspacing, yspacing, *args)
      super(*args)
      if @name == ""
        @name = "grid"
      end
      @xnum = xnum
      @ynum = ynum
      @xspacing = xspacing
      @yspacing = yspacing
      @boundx = self.boundx
      @boundy = self.boundy
      @elements = Array.new(xnum) {Array.new(ynum) {[]}} # 3d array for displaying some elements on a 2D grid
    end

    def dump
      element_props = super
      {
          xspacing: @xspacing,
          yspacing: @yspacing,
          xnum: @xnum,
          ynum: @ynum,
          element_props: element_props,
          elements: @elements
      }
    end

    def self.load(props)
      newgrid = SVGGrid.new(props[:xnum], props[:ynum], props[:xspacing], props[:yspacing], props[:element_props])
      newgrid.update_elements(props[:elements])
      newgrid
    end

    def update_elements elements
      if elements.length != @xnum
        raise "Cannot update_elements. Number of rows must equal #{xnum} but was #{elements.length}"
      end

      col_lengths = elements.map {|row| row.length}.uniq

      if col_lengths.length != 1
        raise "Cannot update_elements. Rows have different number of columns."
      end

      if elements[0].length != @ynum
        raise "Cannot update_elements. Number of columns must equal #{@ynum} but was #{elements[0].length}"
      end

      @elements = elements
    end

    def inst
      self.class.load(self.dump)
    end

    # def inst
    #   Marshal.load(Marshal.dump(self))
    # end


    def pos(r, c)
      return Vector[r * @xspacing, c * @yspacing]
    end

    def abs_pos_vector(r, c)
      v = self.pos(r, c)
      return Vector[@xscale * v[0], @yscale * v[1]]
    end

    def grid_coor(r, c, x, y)
      px, py = self.pos(r, c)
      return [px + x, py + y]
    end

    def grid_elements
      @elements.map.with_index do |row, r|
        x = self.pos(r, 0)[0]
        row_element = SVGElement.new(name: "gridrow#{r}").translate(x, 0)
        row.each.with_index do |element, c|
          y = pos(0, c)[1]
          col_element = SVGElement.new(name: "gridcol#{c}").translate(0, y)
          col_element.children = element

          # don't add empty columns
          if not element.nil? and not element == "" and not element == []
            row_element.add_child(col_element)
          end
        end

        # don't add empty rows
        row_element unless row_element.children.empty?
      end.compact
    end

    def children
      children = @children.dup
      grid_elements = self.grid_elements
      grid_elements + children
    end

    def group_children id: nil, classname: nil
      raise "Cannot group children of a SVGGrid. Group using '.g' before grouping children"
    end

    def add(element, x, y)
      xfloor = x.floor
      xrem = (x - xfloor).round(1)
      yfloor = y.floor
      yrem = (y - yfloor).round(1)

      if xrem > 0 or yrem > 0
        element = element.g(id: "gridshift").translate(xrem * @xspacing, yrem * @yspacing)
      end
      ele = @elements[xfloor][yfloor]
      if ele.nil?
        ele = []
      end
      ele.push(element)
      @elements[xfloor][yfloor] = ele
    end

    # TODO: maximum width from individual elements bounding boxes...
    def boundx
      @xnum * @xspacing
    end

    # TODO: maximum height from individual elements bounding boxes...
    def boundy
      @ynum * @yspacing
    end

    # Applies the block through each element in the grid
    def each
      raise "#{self.class.name}.each needs a selection block" unless block_given?
      @elements.each.with_index do |row, r|
        row.each.with_index do |col, c|
          col.each do |element|
            Proc.new.call(element)
          end
        end
      end
    end

    # Applies the block through each row, col in the grid
    def each_pos
      raise "#{self.class.name}.each_pos needs a selection block" unless block_given?
      @elements.each.with_index do |row, r|
        row.each.with_index do |col, c|
          Proc.new.call(r, c)
        end
      end
    end

    def elements_at(r, c)
      @elements[r][c]
    end

    def select
      raise "#{self.class.name}.select needs a selection block" unless block_given?
      selected = []
      @elements.each.with_index do |row, r|
        row.each.with_index do |col, c|
          if Proc.new.call(r, c)
            selected.push(col)
          end
        end
      end
      return selected
    end

    # def add_each_pos
    #   raise "#{self.class.name}.add_each_pos needs a selection block" unless block_given?
    #   @elements.each.with_index do |row, r|
    #     row.each.with_index do |col, c|
    #       new_element = Proc.new.call(r, c)
    #       self.add(new_element, r, c)
    #     end
    #   end
    # end

    # return a copy of this grid with grid dots
    def griddots
      dot = Tag.new('circle', properties: {r: 3})
      inst = self.inst
      inst.each_pos do |r, c|
        inst.add(dot, r, c)
      end
      inst
    end
  end

  module FunctionalSVG
    def roundedtube(opened: false, contents: 'empty')
      _roundedtube = SVGElement.new(boundx: 46.92, boundy: 140)
      if contents == 'full'
        _roundedtube.add_child(
              '<svg><defs><style>.cls-1{fill:#26afe5;}.cls-2{fill:#fff;}.cls-2,.cls-3{stroke:#231f20;stroke-miterlimit:10;stroke-width:0.5px;}.cls-3{fill:none;}</style></defs><title>Untitled-18</title><path class="cls-1" d="M412.76,285.62c-8.82,5.75-17.91,3.62-26.54.87l-10.47,3v45.4c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.67,2.67,0,0,0,0-.37Z" transform="translate(-372.39 -241.25)"/><path class="cls-1" d="M383.88,285.72a15.52,15.52,0,0,0-8.13-.66v4.44l10.47-3Z" transform="translate(-372.39 -241.25)"/><rect class="cls-2" x="5.5" y="2.53" width="33.11" height="9.82" rx="2.36" ry="2.36"/><rect class="cls-2" x="0.25" y="0.25" width="42.88" height="7.39" rx="2.36" ry="2.36"/><path class="cls-3" d="M412.06,252" transform="translate(-372.39 -241.25)"/><path class="cls-3" d="M412.67,253.6a3.88,3.88,0,0,0,3.29-2.79,4.85,4.85,0,0,0-.42-4.28" transform="translate(-372.39 -241.25)"/><path class="cls-3" d="M412.67,255.44a6,6,0,0,0,6.16-4.86,5.79,5.79,0,0,0-3.17-7" transform="translate(-372.39 -241.25)"/><path class="cls-3" d="M375.39,257.57v77.6c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.66,2.66,0,0,0,0-.37l-.61-78.29a2.52,2.52,0,0,0-2.52-2.5H377.91A2.52,2.52,0,0,0,375.39,257.57Z" transform="translate(-372.39 -241.25)"/><rect class="cls-2" x="0.53" y="11.4" width="42.32" height="4.79" rx="2.4" ry="2.4"/></svg>'
              )
      elsif contents == 'empty'
        _roundedtube.add_child(
                '<svg><defs><style>.cls-1-emptytube{fill:#fff;}.cls-2{fill:#fff;}.cls-2,.cls-3{stroke:#231f20;stroke-miterlimit:10;stroke-width:0.5px;}.cls-3{fill:none;}</style></defs><title>Untitled-18</title><path class="cls-1-emptytube" d="M412.76,285.62c-8.82,5.75-17.91,3.62-26.54.87l-10.47,3v45.4c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.67,2.67,0,0,0,0-.37Z" transform="translate(-372.39 -241.25)"/><path class="cls-1-emptytube" d="M383.88,285.72a15.52,15.52,0,0,0-8.13-.66v4.44l10.47-3Z" transform="translate(-372.39 -241.25)"/><rect class="cls-2" x="5.5" y="2.53" width="33.11" height="9.82" rx="2.36" ry="2.36"/><rect class="cls-2" x="0.25" y="0.25" width="42.88" height="7.39" rx="2.36" ry="2.36"/><path class="cls-3" d="M412.06,252" transform="translate(-372.39 -241.25)"/><path class="cls-3" d="M412.67,253.6a3.88,3.88,0,0,0,3.29-2.79,4.85,4.85,0,0,0-.42-4.28" transform="translate(-372.39 -241.25)"/><path class="cls-3" d="M412.67,255.44a6,6,0,0,0,6.16-4.86,5.79,5.79,0,0,0-3.17-7" transform="translate(-372.39 -241.25)"/><path class="cls-3" d="M375.39,257.57v77.6c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.66,2.66,0,0,0,0-.37l-.61-78.29a2.52,2.52,0,0,0-2.52-2.5H377.91A2.52,2.52,0,0,0,375.39,257.57Z" transform="translate(-372.39 -241.25)"/><rect class="cls-2" x="0.53" y="11.4" width="42.32" height="4.79" rx="2.4" ry="2.4"/></svg>'
              )
      else
        return roundedtube(opened: false, contents: 'empty')
      end
      _roundedtube.translate!(0,70)
    end

    def screwbottle(opened: false, contents: 'empty')
      _screwbottle = SVGElement.new(boundx: 46.92, boundy: 140)
      _screwbottle.add_child(
          '<svg><defs><style>.cls-1{fill:#26afe5;}.cls-2,.cls-3{fill:none;}.cls-3,.cls-4{stroke:#231f20;stroke-miterlimit:10;stroke-width:0.5px;}.cls-4{fill:#fff;}</style></defs><path class="cls-1" d="M377.92,325.7c-4.23-1-8.46.27-11.89,2v31.86a8.73,8.73,0,0,0,8.71,8.71h41.68a8.73,8.73,0,0,0,8.71-8.71V328.25c-9.24.24-7.87,3.46-19.44,7.63S387.64,328,377.92,325.7Z" transform="translate(-365.78 -243.8)"/><path class="cls-2" d="M369,280.29" transform="translate(-365.78 -243.8)"/><rect class="cls-3" x="0.25" y="43.66" width="59.09" height="80.08" rx="8.6" ry="8.6"/><path class="cls-4" d="M395.58,244c-16.32,0-29.55,3.59-29.55,8V285.6c0,4.42,13.23,8,29.55,8s29.55-3.59,29.55-8V252.05C425.12,247.63,411.89,244,395.58,244Z" transform="translate(-365.78 -243.8)"/><ellipse class="cls-4" cx="29.8" cy="8.12" rx="22.86" ry="4.76"/><line class="cls-3" x1="5.46" y1="14.46" x2="5.46" y2="41.93"/><line class="cls-3" x1="30.86" y1="18.98" x2="30.86" y2="46.45"/><line class="cls-3" x1="55.9" y1="12.89" x2="55.9" y2="40.36"/><line class="cls-3" x1="44.1" y1="17.66" x2="44.1" y2="45.13"/><line class="cls-3" x1="17.63" y1="17.66" x2="17.63" y2="45.13"/></svg>'
          ).translate!(0, 70)
    end
    
    def samplecolumn(opened: false, contents: 'empty')
      column =  SVGElement.new(boundx: 46.92, boundy: 140)
      if contents == 'empty' && !opened
        column.add_child(
          '<svg><defs><style>.cls-1_sc{fill:#fff;}.cls-1_sc,.cls-2_sc{stroke:#231f20;stroke-miterlimit:10;stroke-width:0.5px;}.cls-2_sc{fill:none;}</style></defs><path class="cls-1_sc" d="M375.23,260.43V338c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.66,2.66,0,0,0,0-.37L412,260.41a2.52,2.52,0,0,0-2.52-2.5H377.75A2.52,2.52,0,0,0,375.23,260.43Z" transform="translate(-371.72 -237.72)"/><rect class="cls-1_sc" x="5.5" y="2.53" width="33.11" height="9.82" rx="2.36" ry="2.36"/><rect class="cls-1_sc" x="3.51" y="9.99" width="36.77" height="4.72" rx="1.19" ry="1.19"/><path class="cls-1_sc" d="M377.22,252.44v51.26a1.65,1.65,0,0,0,.85,1.44l5.56,3.06a1.65,1.65,0,0,1,.85,1.44v7.3a1.65,1.65,0,0,0,1.65,1.65h14.54a1.65,1.65,0,0,0,1.65-1.65v-7.25a1.65,1.65,0,0,1,.91-1.48l6.18-3.09a1.65,1.65,0,0,0,.91-1.48V252.44" transform="translate(-371.72 -237.72)"/><rect class="cls-1_sc" x="14.16" y="70.95" width="15.06" height="6.09" rx="0.98" ry="0.98"/><rect class="cls-1_sc" x="0.25" y="0.25" width="42.88" height="7.39" rx="2.36" ry="2.36"/><path class="cls-2_sc" d="M416.1,248" transform="translate(-371.72 -237.72)"/><path class="cls-2_sc" d="M411.38,248.51" transform="translate(-371.72 -237.72)"/><path class="cls-2_sc" d="M412,250.08a3.88,3.88,0,0,0,3.29-2.79,4.85,4.85,0,0,0-.42-4.28" transform="translate(-371.72 -237.72)"/><path class="cls-2_sc" d="M412,251.91a6,6,0,0,0,6.16-4.86,5.79,5.79,0,0,0-3.17-7" transform="translate(-371.72 -237.72)"/><rect class="cls-1_sc" x="1.05" y="17.78" width="42.32" height="4.79" rx="2.4" ry="2.4"/></svg>'
          )
      elsif contents == 'no-collector' && closed
        column.add_child(
          '<svg><defs><style>.cls-1_sc{fill:#fff;}.cls-1_sc,.cls-2_sc{stroke:#231f20;stroke-miterlimit:10;stroke-width:0.5px;}.cls-2_sc{fill:none;}</style></defs><rect class="cls-1_sc" x="5.5" y="2.53" width="33.11" height="9.82" rx="2.36" ry="2.36"/><rect class="cls-1_sc" x="3.51" y="9.99" width="36.77" height="4.72" rx="1.19" ry="1.19"/><path class="cls-1_sc" d="M377.46,280.13v51.26a1.65,1.65,0,0,0,.85,1.44l5.56,3.06a1.65,1.65,0,0,1,.85,1.44v7.3a1.65,1.65,0,0,0,1.65,1.65h14.54a1.65,1.65,0,0,0,1.65-1.65v-7.25a1.65,1.65,0,0,1,.91-1.48l6.18-3.09a1.65,1.65,0,0,0,.91-1.48V280.13" transform="translate(-371.95 -265.42)"/><rect class="cls-1_sc" x="14.16" y="70.95" width="15.06" height="6.09" rx="0.98" ry="0.98"/><rect class="cls-1_sc" x="0.25" y="0.25" width="42.88" height="7.39" rx="2.36" ry="2.36"/><path class="cls-2_sc" d="M416.34,275.65" transform="translate(-371.95 -265.42)"/><path class="cls-2_sc" d="M411.62,276.2" transform="translate(-371.95 -265.42)"/><path class="cls-2_sc" d="M412.23,277.77a3.88,3.88,0,0,0,3.29-2.79,4.85,4.85,0,0,0-.42-4.28" transform="translate(-371.95 -265.42)"/><path class="cls-2_sc" d="M412.23,279.61a6,6,0,0,0,6.16-4.86,5.79,5.79,0,0,0-3.17-7" transform="translate(-371.95 -265.42)"/></svg>'
          )
      else
        column.add_child(samplecolumn.translate!(0,-70)) #default to closed and empty if options could not be matched
      end
      column.translate!(0,70)
    end
    
    def collectiontube(contents: 'empty')
      ctube = SVGElement.new(boundx: 46.92, boundy: 140)
      if contents == 'empty'
        ctube.add_child(
          '<svg><defs><style>.cls-1_collection_tube{fill:none;stroke:#231f20;stroke-miterlimit:10;stroke-width:0.5px;}</style></defs><path class="cls-1_collection_tube" d="M377.69,251.62v77.6c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.66,2.66,0,0,0,0-.37l-.61-78.29a2.52,2.52,0,0,0-2.52-2.5H380.21A2.52,2.52,0,0,0,377.69,251.62Z" transform="translate(-374.97 -246.46)"/><rect class="cls-1_collection_tube" x="0.25" y="0.25" width="42.32" height="4.79" rx="2.4" ry="2.4"/></svg>'
          )
      elsif contents == 'full'
        ctube.add_child(
          '<svg><defs><style>.cls-1_collection_tube{fill:#26afe5;}.cls-2_collection_tube{fill:#fff;}.cls-2_collection_tube,.cls-3_collection_tube{stroke:#231f20;stroke-miterlimit:10;stroke-width:0.5px;}.cls-3_collection_tube{fill:none;}</style></defs><path class="cls-1_collection_tube" d="M412.76,285.62c-8.82,5.75-17.91,3.62-26.54.87l-10.47,3v45.4c0,.05,0,.1,0,.15.12,1.91,4.52,35.39,19.95,31.76,0,0,12.62,4.63,17.42-30.86a2.67,2.67,0,0,0,0-.37Z" transform="translate(-372.39 -241.25)"/><path class="cls-1_collection_tube" d="M383.88,285.72a15.52,15.52,0,0,0-8.13-.66v4.44l10.47-3Z" transform="translate(-372.39 -241.25)"/><rect class="cls-2_collection_tube" x="5.5" y="2.53" width="33.11" height="9.82" rx="2.36" ry="2.36"/></svg>'
          )
      end
    end    
    
    def svg_from_html(html, bx=50, by=140)
      __svg = SVGElement.new(boundx: bx, boundy: by)
      __svg.add_child(html)
      __svg
    end

    def icon_from_html(html)
      __svg = SVGElement.new(boundx: 500, boundy: 500)
      __svg.add_child(html)
      __svg
    end

    # svg_func: a symbol method name for a function that returns an SVGElement
    # svg_label: label for svg
    # opts: option hash to be applied to svg_func as named parameters
    #
    # example: svg = draw_svg(:tube, svg_label: "Hello\nWorld", opened: true, full: true)
    def draw_svg(svg_func, svg_label: nil, svg_label_initial_offset: 0, **opts)
      if opts.any?
        svg = method(svg_func).call(**opts)
      else
        svg = method(svg_func).call
      end
      svg = label_object(svg, svg_label, svg_label_initial_offset) if svg_label
      svg
    end

    def label_object(svg, _label, initial_offset=0)
      def label_helper(svg, labels, offsety = 0)
        l = label(labels.shift, "font-size".to_sym => 25)
        l.align!('center-center')
        l.translate!(svg.boundx / 2, svg.boundy / 2 + offsety.to_i)
        svg.add_child(l)
        return label_helper(svg, labels, offsety + 25) unless labels.empty?
        return svg
      end

      labels = _label.split("\n")
      return labels.empty? ? svg : label_helper(svg, labels, initial_offset)
    end
  end

  module MyGraphics
    attr_reader :tube, :openlid, :closedlid, :closedtube, :opentube, :detection_strip, :strip, :striplabel

    # bounding box for tube elements
    @@tubebb = SVGElement.new(boundx: 78.35, boundy: 242.95)

    def rarrow
      arrow = SVGElement.new(boundx: 33.48, boundy: 38.65)
      arrow.new_class!("rarrow")
      arrow.add_child('<polygon points="0,0 33.477,19.328 0,38.655 "/>')
    end

    def larrow
      self.rarrow.mirror_horizontal.new_class("larrow")
    end

    def uparrow
      arrow = SVGElement.new(boundx: 38.65, boundy: 33.48)
      arrow.new_class!("uparrow")
      arrow.add_child('<polygon points="0,33.477 19.328,0 38.655,33.477 "/>')
    end

    def downarrow
      self.uparrow.mirror_vertical.new_class("downarrow")
    end

    def tube
      _tube = @@tubebb.inst
      _tube.new_class!("tube")
      _tube.add_child(<<EOF
      <path fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M4.75,99.697v45.309l14.998,90.066
        c0,4.35,5.036,7.875,11.25,7.875c6.215,0,11.25-3.525,11.25-7.875l15-90.066V99.697H4.75z"/>
      <g>
        <path fill="#F7FCFE" d="M61.998,95.697c0,2.199-1.799,4-4,4h-54c-2.2,0-4-1.801-4-4v-1.875c0-2.201,1.8-4,4-4h54
          c2.201,0,4,1.799,4,4V95.697z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M61.998,95.697c0,2.199-1.799,4-4,4h-54c-2.2,0-4-1.801-4-4v-1.875
          c0-2.201,1.8-4,4-4h54c2.201,0,4,1.799,4,4V95.697z"/>
      </g>
EOF
      )
      # <line fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" x1="7.721" y1="123.572" x2="53.387" y2="123.572"/>
      _tube.inst
    end

    def tube2mL
      _tube = @@tubebb.inst
      _tube.new_class!("tube")
      _tube.add_child(<<EOF
        	<g id="2mLTube">
		<path id="_x32_mLTube" fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M57,96.698H4.503v42.581l0.479,2.704
		c-0.311,1.553-0.479,3.153-0.479,4.792v70.798c0,13.955,11.812,25.374,26.249,25.374c14.436,0,26.248-11.419,26.248-25.374v-70.798
		c0-1.639-0.17-3.239-0.48-4.792l0.48-2.704V96.698z"/></g>
EOF
      )
      _tube
    end

    def closedlid
      _closedlid = @@tubebb.inst
      _closedlid.new_class!("closedlid")
      _closedlid.add_child(<<EOF
      <g>
        <path fill="#F7FCFE" d="M55.854,80.713c22.801,0,22.801,18.312,0,18.312c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173
          C55.854,83.092,55.854,81.902,55.854,80.713z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M55.854,80.713c22.801,0,22.801,18.312,0,18.312
          c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173C55.854,83.092,55.854,81.902,55.854,80.713z"/>
      </g>
      <g>
        <path fill="#F7FCFE" d="M10.375,101.744c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688c0-1.1-0.535-2-1.188-2
          c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2s-1.188,0.9-1.188,2
          V101.744z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M10.375,101.744c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688
          c0-1.1-0.535-2-1.188-2c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2
          s-1.188,0.9-1.188,2V101.744z"/>
      </g>
      <g>
        <path fill="#F7FCFE" d="M1,81.851c-0.55-0.952-0.101-1.731,1-1.731h55.473c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121
          c0.381,1.032-0.209,1.877-1.309,1.877H5.972c-1.1,0-2.45-0.779-3-1.731L1,81.851z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M1,81.851c-0.55-0.952-0.101-1.731,1-1.731h55.473
          c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121c0.381,1.032-0.209,1.877-1.309,1.877H5.972c-1.1,0-2.45-0.779-3-1.731L1,81.851z"/>
      </g>
      <line fill="none" stroke="#000000" stroke-miterlimit="10" x1="72.809" y1="92.338" x2="73.953" y2="92.338"/>
EOF
      )
      _closedlid.inst
    end

    def openlid
      _openlid = @@tubebb.inst
      _openlid.new_class!("openlid")
      _openlid.add_child(<<EOF
      <g>
        <path fill="#F7FCFE" d="M72.42,77.695c-3.271,7.512-10.102,12.477-16.996,13.795c0.375,1.254,0.75,2.506,1.125,3.76
          c17.402-5.207,26.029-24.734,18.164-41.105c-1.178,0.566-2.357,1.133-3.537,1.699C74.844,61.828,75.77,70.221,72.42,77.695z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M72.42,77.695c-3.271,7.512-10.102,12.477-16.996,13.795
          c0.375,1.254,0.75,2.506,1.125,3.76c17.402-5.207,26.029-24.734,18.164-41.105c-1.178,0.566-2.357,1.133-3.537,1.699
          C74.844,61.828,75.77,70.221,72.42,77.695z"/>
      </g>
      <g>
        <path fill="#F7FCFE" d="M56.721,10.375c-1.1,0-2,0.9-2,2v37.25c0,1.1,0.9,2,2,2h0.688c1.1,0,2-0.534,2-1.188s0.9-1.188,2-1.188
          h8.938c1.1,0,2-0.9,2-2v-32.5c0-1.1-0.9-2-2-2h-8.938c-1.1,0-2-0.534-2-1.188s-0.9-1.188-2-1.188H56.721z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M56.721,10.375c-1.1,0-2,0.9-2,2v37.25c0,1.1,0.9,2,2,2h0.688
          c1.1,0,2-0.534,2-1.188s0.9-1.188,2-1.188h8.938c1.1,0,2-0.9,2-2v-32.5c0-1.1-0.9-2-2-2h-8.938c-1.1,0-2-0.534-2-1.188
          s-0.9-1.188-2-1.188H56.721z"/>
      </g>
      <g>
        <path fill="#F7FCFE" d="M76.613,1c0.953-0.55,1.732-0.1,1.732,1v55.471c0,1.1-0.846,2.311-1.877,2.69l-3.121,1.148
          c-1.033,0.38-1.877-0.21-1.877-1.31V5.971c0-1.1,0.779-2.45,1.73-3L76.613,1z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M76.613,1c0.953-0.55,1.732-0.1,1.732,1v55.471
          c0,1.1-0.846,2.311-1.877,2.69l-3.121,1.148c-1.033,0.38-1.877-0.21-1.877-1.31V5.971c0-1.1,0.779-2.45,1.73-3L76.613,1z"/>
      </g>
      <line fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" x1="60.408" y1="47.721" x2="60.408" y2="14.471"/>
EOF
      )
      _openlid.inst
    end

    def opentube
      _opentube = @@tubebb.inst
      _opentube.new_name!("opentube")
      _opentube.add_child(self.openlid)
      _opentube.add_child(self.tube).inst
    end

    def closedtube
      _closedtube = @@tubebb.inst
      _closedtube.new_name!("closedtube")
      _closedtube.add_child(self.closedlid)
      _closedtube.add_child(self.tube).inst
    end

    def strip
      mystrip = SVGElement.new(boundx: 83.1, boundy: 247.45)
      mystrip.add_child(<<EOF
<g id="Strip">
	<g>
		<rect x="4.75" fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" width="78.346" height="242.948"/>
		<line fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" x1="0" y1="247.448" x2="4.75" y2="242.948"/>
		<polygon fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" points="-0.067,4.777 4.75,0.001 4.75,242.948 0,247.448 		"/>
		<polygon fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" points="74.917,247.448 0,247.448 4.75,242.948 83.096,242.948 
					"/>
	</g>
	<g>
		<rect x="19.583" y="49.433" fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" width="46.667" height="80"/>
		<rect x="27.083" y="57.433" fill="#FFFFFF" stroke="#000000" stroke-miterlimit="10" width="31.667" height="64"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="27.083" y1="121.433" x2="19.583" y2="129.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="58.75" y1="121.433" x2="66.25" y2="129.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="58.75" y1="57.433" x2="66.25" y2="49.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="27.083" y1="57.433" x2="19.583" y2="49.433"/>
	</g>
	<g>
		<path fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" d="M57.524,216.515c0,4.385-3.693,7.938-8.249,7.938H36.557
			c-4.556,0-8.249-3.554-8.249-7.938v-22.164c0-4.385,3.693-7.939,8.249-7.939h12.718c4.556,0,8.249,3.554,8.249,7.939V216.515z"/>
		<path fill="#FFFFFF" stroke="#000000" stroke-miterlimit="10" d="M52.917,213.019c0,3.002-2.528,5.435-5.647,5.435h-8.706
			c-3.119,0-5.647-2.433-5.647-5.435v-15.172c0-3.001,2.528-5.435,5.647-5.435h8.706c3.119,0,5.647,2.433,5.647,5.435V213.019z"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="34.01" y1="216.224" x2="30.27" y2="221.647"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="51.823" y1="216.224" x2="55.562" y2="221.647"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="51.823" y1="194.642" x2="55.023" y2="188.663"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="34.01" y1="194.195" x2="30.27" y2="189.666"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="32.917" y1="205.433" x2="28.308" y2="205.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="52.917" y1="205.433" x2="57.524" y2="205.433"/>
	</g>

</g>
EOF
      )
    end

    def fluid_small
      fluid = @@tubebb.inst
      fluid.new_class!("fluid")
      fluid.new_name!("small_fluid")
      fluid.add_child(<<EOF
      <path id="FluidSmall" fill="#00AEEF" stroke="#000000" stroke-miterlimit="10" d="M44.565,216.853
	c-12.031,0-12.031,8.833-24.062,8.833c-0.825,0-1.589-0.045-2.309-0.122l1.584,9.509c0,4.35,5.036,7.875,11.249,7.875
	c6.215,0,11.25-3.525,11.25-7.875l3.031-18.202C45.063,216.862,44.821,216.853,44.565,216.853z"/>
EOF
      )
    end

    def fluid_medium
      fluid = @@tubebb.inst
      fluid.new_class!("fluid")
      fluid.new_name!("med_fluid")
      fluid.add_child(<<EOF
<path id="FluidMedium" fill="#00AEEF" stroke="#000000" stroke-miterlimit="10" d="M44.315,166.187
	c-12.031,0-12.031,8.833-24.062,8.833c-5.585,0-8.576-1.904-11.383-3.944l10.657,63.997c0,4.35,5.036,7.875,11.249,7.875
	c6.215,0,11.25-3.525,11.25-7.875l11.101-66.649C50.918,167.142,48.268,166.187,44.315,166.187z"/>
EOF
      )
    end

    def fluid_large
      fluid = @@tubebb.inst
      fluid.new_class!("fluid")
      fluid.new_name!("small_fluid")
      fluid.add_child(<<EOF
<path id="FluidLarge" fill="#BCE6FB" stroke="#000000" stroke-miterlimit="10" d="M43.202,110.52
	c-12.031,0-12.031,8.833-24.062,8.833c-7.554,0-10.365-3.483-14.39-6.075v31.729l14.998,90.066c0,4.35,5.036,7.875,11.249,7.875
	c6.215,0,11.25-3.525,11.25-7.875l15-90.066v-28.64C53.402,113.803,50.538,110.52,43.202,110.52z"/>
EOF
      )
    end

    def powder
      powder = @@tubebb.inst
      powder.new_class!("powder")
      powder.new_name!("powder")
      powder.add_child(<<EOF
         <path id="Powder" fill="#FFFFFF" stroke="#000000" stroke-miterlimit="10" d="M27.784,234.289c-0.647-2.643,1.036-2.308,2.842-2.495
	c1.183-0.124,3.538-0.179,4.792,0.55c0.33,0.957,1.645,1.147,1.775,1.945c0.106,0.649-1.18,1.446-1.407,1.983
	c-0.399,0.946,0.521,1.041-0.603,2.289c-0.534,0.593-2.338,1.107-3.088,1.463c-0.073,0.265-0.021,0.495-0.09,0.763
	c-1.498,0.401-7.79-0.416-4.875-2.518c-1.888-1.042-0.182-4.734,1.506-4.551"/>
EOF
      )
    end

    def striplabel
      mylabel = SVGElement.new(boundx: 83.1, boundy: 247.45)
      mylabel.add_child(<<EOF
<g id="StripLabel" class="fluid">
	<rect x="4.75" stroke="#000000" stroke-miterlimit="10" width="78.346" height="46.433"/>
</g>
EOF
      )
    end

    def detection_strip
      mystrip = SVGElement.new(boundx: 83.1, boundy: 247.45)
      mystrip.add_child(self.strip)
      mystrip.add_child(self.striplabel)
    end

    def control_band
      band = SVGElement.new(boundx: 83.1, boundy: 247.45)
      band.add_child(<<EOF
<line id="ControlBand" fill="none" stroke="#F7A7AB" stroke-width="6" stroke-miterlimit="10" x1="27.083" y1="68.432" x2="58.75" y2="68.432"/>
EOF
      )
    end

    def wt_band
      band = SVGElement.new(boundx: 83.1, boundy: 247.45)
      band.add_child(<<EOF
<line id="WTBand" fill="none" stroke="#F7A7AB" stroke-width="6" stroke-miterlimit="10" x1="27.089" y1="89.433" x2="58.756" y2="89.433"/>
EOF
      )
    end

    def mut_band
      band = SVGElement.new(boundx: 83.1, boundy: 247.45)
      band.add_child(<<EOF
<line id="MutantBand" fill="none" stroke="#F7A7AB" stroke-width="6" stroke-miterlimit="10" x1="27.089" y1="111.099" x2="58.756" y2="111.099"/>
EOF
      )
    end
  end

  ########################################################################
  # ####
  # ####
  # #### GRAPHICS TESTING
  # ####
  # ####
  ########################################################################


  def save_svg(filename, svg)
    File.write(filename, svg.to_str)
  end
end
