config:
  title: OLASimple workflow
  description: Aquarium workflow enabling rapid HIV diagnosis using the OLA simple technique.
  copyright: Lutz Lab
  version: 0.0.4
  maintainer: {name: Abe Miller, email: abraham.r.m@gmail.com}
  github: {user: Gamemackerel, repo: OLASimple-protocols}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
operation_type: Make Upload
category: Misc.
deployed: false
on_the_fly: false
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protocol:
needs "OLASimple/OLALib"

# TODO: There should be NO calculations in the show blocks

class Protocol
  include OLALib

  def main

    operations.retrieve.make
    
    show do
        note "<img src=\"http://0.0.0.0:8080/assets/biofab-logo.jpg\" />" 
    end
    
    result = show do
        title "Upload a picture or a video"
        
        upload var: :files
    end
    
    upload_hashes = result[:files]
    
    show do
        upload_hashes.each do |uhash|
            note "#{uhash[:name]} #{uhash[:id]}"
            raw display_upload(Upload.find(uhash[:id]))
        end
    end
    
    operations.store
    
    return {}
    
  end

end

operation_type: Pipette Training
category: Misc.
deployed: false
on_the_fly: false
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protocol:
class Protocol

def main
    
    show do
      title "Gather Materials"
      check "Four 14 mL test tubes"
      check "Four different colors of food coloring"
      check "Five 1.5 mL tubes"
    end

    show do
      title "Exercise Preparation"
      note "Fill each test tube about 2/3 full with sink water."
      note "To each test tube add one drop of a different color of food coloring."
      warning "Make sure the blue and purple drops are very small because the color is dark."
      note "Label tubes as I, II, III, and IV."
      note "Put test tubes in a test tube rack and set aside."
    end
    
    show do
      title "Large Volume Exercise"
      note "Take out five 1.5 mL tubes and label them A - E. Put tubes C - D off to the side."
      note "Using the 1 mL pipette, add solution I to the tubes: 100 uL to A and 150 uL to B."
      note "Using the same pipette but a fresh tip, add solution II to the tubes: 200 uL to A and 250 uL to B."
      note "Using the same pipette but a fresh tip, add solution III to the tubes: 150 uL to A and 350 uL to B."
      note "Using the same pipette but a fresh tip, and solution IV to the tubes: 550 uL to A and 250 uL to B."
      check "Each tube should now have 1 mL (total volume) in it, so, to check the error from pipetting, set the 1 mL pipette to 1000 uL and draw up as much liquid as possible from each tube."
    end
    
    calculate_error()
    
    show do
      title "Discard Tubes"
      check "Throw out tubes A and B"
    end
    
    show do 
      title "Small Volume Exercise"
    
      note "Take out tubes C - E, and the 10 uL pipette and pipette tip box."
      note "Add solution I to the tubes: 4 uL in in C, 4 uL in D, and 4 uL in E."
      note "Using the same pipette but a new tip, add solution II to the tubes: 5 uL to C, 5 uL to D, and 4 uL to E."
      note "Using the same pipette but a new tip, add solution III to the tuebs: 1 uL to C, and 1 uL to E."
      note "Using the same pipette but a new tip, add solution IV to the tubes: 1 uL to D and 1 uL to E."
      note "Each tube should now have 10 uL (total volume) in it, so to check the error from pipetting, set the 10 uL pipette to 10 uL and draw up as much liquid as possible from each tube."
    end
    
    calculate_error()
    
    show do
      title "Discard Tubes"
      check "Throw out tubes C, D, and E"
    end
    
    return {}

  end
  
  
  def calculate_error
    choice = show do
      title "Calculate Measurement Error"
      bullet "If there is still liquid left in the tube, too much was added."
      bullet "If there is air at the end of the tip, too little was added."
      bullet "If the tube is filled exactly with liquid, the measurement error is 0."
      
      select ["Too much", "Too little", "Just right"], var: "choice", label: "How much liquid did you add?", default: [0,1,2].sample
    end.get_response("choice")
      
    if choice == "Too much"
      show do
        title "Calculate Measurement Error"
        note "To determine the error if too much was added, follow thise steps:"
        check "Discard the tip with liquid in it and get a fresh tip. "
        check "Carefully pipette up the remaining liquid in the tip, and then rotate the volume dial until the liquid reaches the bottom of the tip." 
        note "The error rate is (new volume / total volume)"
      end
    elsif choice == "Too little"
      show do
        title "Calculate Measurement Error"
        note "To determine the error if too little was added, follow thise steps:"
        check "Slowly decrease the volume until the liquid reaches the end of the tip."
        note "The error rate is ((total volume - new volume) / total volume)"
      end
    else
      show do
        title "Calculate Measurement Error"
        note "If the tube is filled exactly with liquid, the measurement error is 0."
        note "Try again and mess up more so that you can practice calculating measurement error!"
      end
    end
  end
end

sample_types:
  - {name: OLASimple Sample, description: Patient sample and OLA kit}
    - {name: Patient ID, ftype: string}
    - {name: Secondary Patient ID, ftype: string}
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object_types:
  - {name: OLA lysed blood, description: OLA lysed blood, handler: sample_container, unit: OLASimple Sample, release_method: return, sample_type_name: OLASimple Sample}
  - {name: OLA Whole Blood, description: OLA blood, handler: sample_container, unit: OLASimple Sample, release_method: return, sample_type_name: OLASimple Sample}
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operation_type: OLASimple Cell Lysis
category: OLASimple
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: Lysed blood, sample_types: [OLASimple Sample], object_types: [OLA lysed blood], routing: C}
  - {ftype: sample, role: input, name: Whole Blood, sample_types: [OLASimple Sample], object_types: [OLA Whole Blood], routing: C}
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protocol:
##########################################
#
#
# OLASimple EasySep
# author: Justin Vrana
# date: March 2018
#
#
##########################################

needs "OLASimple/OLAConstants"
needs "OLASimple/OLALib"
needs "OLASimple/OLAGraphics"

# TODO: There should be NO calculations in the show blocks

class Protocol
  include OLAConstants
  include OLALib
  include OLAGraphics

  ##########################################
  # INPUT/OUTPUT
  ##########################################

  INPUT = "Whole Blood"
  OUTPUT = "Lysed blood"
  KIT_NUM = "Kit Number"
  BLOOD_SAMPLE = "blood sample"

  ##########################################
  # COMPONENTS
  ##########################################


  BSC = "BSC"
  THIS_UNIT = "A"
  MAGNETIC_BEADS_COMPONENT = "A"
  ANTIBODIES_COMPONENT = "B"
  PBS_COMPONENT1 = "C"
  RBC_COMPONENT = "D"
  PBS_COMPONENT2 = "E"
  CD4_LYSIS = "F"
  TUBE1 = "G"
  TUBE2 = "H"
  TUBE3 = "J"
  TUBE4 = "K"

  PACK_HASH = {
      "Unit Name" => "A",
      "Components" => {
          "magnetic beads" => "A",
          "antibodies" => "B",
          "1X PBS 1" => "C",
          "RBC lysis buffer" => "D",
          "1X PBS 2" => "E",
          "CD4 lysis buffer" => "F",
          "sample tube 1" => "G",
          "sample tube 2" => "H",
          "sample tube 3" => "J",
          "sample tube 4" => "K"
      }
  }

  def main
    if operations.length > 2
      raise "Batch size > 2 is not supported for this protocol. Please rebatch."
    end
    operations.retrieve interactive: false
    save_user operations

    operations.each.with_index do |op, i|
      if debug
        kit_num = rand(1..30)
        patient_id = rand(1..30)
      else
        kit_num = op.input(INPUT).item.get(KIT_KEY)
        patient_id = op.input(INPUT).item.get(PATIENT_ID_KEY)
      end
      op.temporary[:input_kit] = kit_num
      op.temporary[:patient] = patient_id

      if op.temporary[:input_kit].nil?
        raise "Input kit number cannot be nil"
      end
      op.temporary[:input_sample] = i + 1
    end

    operations.each do |op|
      op.temporary[:pack_hash] = PACK_HASH
    end

    save_temporary_output_values(operations.running)
    packages = group_packages(operations.running)
    this_package = packages.keys.first
    if packages.length > 1
        raise "More than one kit is not supported by this protocol. Please rebatch." 
    end
    
    # need to save :input_kit and :input_sample

    introduction
    safety_warning
    required_equipment
    additional_supplies

    show do
      title "Take package #{this_package.bold} from the #{FRIDGE_PRE} and place on the #{BENCH_PRE} in the #{BSC}"
    end

    show do
      title "Open package #{this_package}"
      note "There are two sub packages. Open sub packages."
      note "Arrange tubes on a plastic rack."
    end

    show do
      title "Spin down tubes"
      note "There should be 9 tubes with liquid and 8 empty tubes."
      note "Centrifuge the 9 tubes with liquid for <b>5 seconds</b> to pull down any fluid."
      note "Put tubes back on a plastic rack."
    end

    operations.running.each do |op|
      op.make_item_and_alias(OUTPUT, "sample tube 4", INPUT)
    end

    operations.running.each do |op|
      op.temporary[:blood_ref] = "#{op.temporary[:patient]}"
    end

    operations.running.each do |op|
      from = "#{op.temporary[:blood_ref]}"
      vol = 500
      show do
        title "Add #{vol.bold}uL of whole blood to empty tube #{op.ref("sample tube 1", true).bold}"
        note "Close both tubes after adding."
        tubeB = make_tube(opentube, "Blood", "#{from}", fluid = "medium", fluidclass: "redfluid")
        tubeE = make_tube(opentube, ["Empty", "tube"], op.tube_label("sample tube 1", true))
        img = make_transfer(tubeB, tubeE, 250, "#{vol}uL", "(#{P1000_PRE} pipette)")
        img.translate!(25)
        note display_svg(img, 0.75)
      end
    end

    show do
      title "Throw away blood samples"
      note "Dispose of blood samples #{operations.running.map {|op| op.temporary[:blood_ref].bold}.join(', ')} into biohazard waste."
    end


    operations.running.each do |op|
      vol = 25
      show do
        title "Add #{vol.bold}uL antibodies to tube #{op.ref("sample tube 1", true).bold}"
        note "Close both tubes after adding."
        tubeA = make_tube(opentube, "Antibodies", op.tube_label("antibodies"), fluid = "medium")
        tubeS = make_tube(opentube, ["Sample", "tube"], op.tube_label("sample tube 1", true), fluid = "medium", fluidclass: "redfluid")
        img = make_transfer(tubeA, tubeS, 250, "#{vol}uL", "(#{P200_PRE} pipette)")
        img.translate!(25)
        note display_svg(img, 0.75)
      end
    end
    
    show do
        title "Vortex magnetic beads #{operations.running.map { |op| op.ref("magnetic beads").bold }.uniq.join(', ') } for 30 seconds as max speed"
    end

    operations.running.each do |op|
      vol = 25
      show do
        title "Add #{vol.bold}uL magnetic beads to tube #{op.ref("sample tube 1", true).bold}"
        note "Close both tubes after adding."
        tubeB = make_tube(opentube, ["Magnetic", "beads"], op.tube_label("magnetic beads"), fluid = "small", fluidclass: "brownfluid")
        tubeS = make_tube(opentube, ["Sample", "tube"], op.tube_label("sample tube 1", true), fluid = "medium", fluidclass: "redfluid")
        img = make_transfer(tubeB, tubeS, 250, "#{vol}uL", "(#{P200_PRE} pipette)")
        img.translate!(25)
        note display_svg(img, 0.75)
      end
    end

    show do
      title "Mix blood"
      note "Close tubes"
      note "mix blood, antibody and magnetic bead mixture by gently pulse vortexing three times at low speed to avoid forming bubbles"
    end

    show do
      title "Incubate 5 min at room temperature in plastic rack"
      note "Set a 5 minute timer."
      note "Wait for 5 minute timer before continuing."
    end

    operations.running.each do |op|
      vol = 1000
      show do
        title "Add #{1000}uL 1X PBS to sample tube #{op.ref("sample tube 1", true).bold}"
        warning "Carefully mix by pipetting slowly up and down. Be careful not to overflow tube."
        note "Close both tubes after adding."
        tubeP = make_tube(opentube, "1X PBS", op.tube_label("1X PBS 1", true), fluid = "medium")
        tubeS = make_tube(opentube, ["Sample", "tube"], op.tube_label("sample tube 1", true), fluid = "medium", fluidclass: "redfluid")
        img = make_transfer(tubeP, tubeS, 250, "#{vol}uL", "(#{P1000_PRE} pipette)")
        img.translate!(25)
        note display_svg(img, 0.75)
        # transfer image
      end
    end

############################################
    # FIRST SEPARATION
############################################

    show do
      title "Magnetize samples"

      note "Move tube to the magnetic rack"
      note "Open tube caps"
      note "Set a timer for 5 minutes"
      note "Leave tubes to magnetize for 5 min at room temperature."
      bullet "Stagger the tubes so that the caps are not touching."
      warning "Image of tubes look like in a rack."
    end

    show do
      title "When timer expires, you will see dark material gathered on the side of the tube."
      # annotate this in image note "CD4+ cells are the light reddish-yellow liquid portion"
      warning "before and after IMAGES"
    end

    tubes = operations.running.map {|op| op.ref("sample tube 2", true)}

    show do
      title "Setup empty #{"tubes".pluralize(tubes)} #{tubes.join(', ').bold} on rack"
      note "Open tubes"
    end

    # show do
    #   title "Review the video below"
    #   note "In the next step, you will be transfering clear fluid to empty tube TUBE #2"
    #   note "You will hold the rack carefully without tilting rack"
    #   warning "You must pipette slowly and away from dark portion."
    #   warning "As liquid level decreases, the dark portion will \"droop\" and settle in the bottom of the tube."
    #   warning "VIDEO"
    # end

    operations.running.each do |op|
      show do
        title "Collect clear fluid from #{op.ref("sample tube 1", true)} and add to empty tube #{op.ref("sample tube 2", true).bold}"
        note "Use P1000 pipette set to 900uL"
        note "Point tip away from the dark portion and pipette up slowly."
        warning "Do not tilt the magnetic rack."
        tube = make_tube(opentube, ["empty", "tube"], op.tube_label("sample tube 2", true))
        img = make_transfer(sep_1_diagram, tube, 250, "900uL", P200_PRE)
        img.translate!(0, -100)
        note display_svg(img, 0.75)
        # warning "VIDEO HERE"
      end
    end

    # note "Use pipette to transfer clear fluid to empty TUBE #2"

    # title "Collect the clear fluid with P1000 set to 900l and transfer cell suspension to a new 2.0ml microfuge tube (TUBE #2)."
    # show do
    #   warning "IMAGE HERE"
    #   bullet "Pipet slowly pointing the tip to the wall away from the magnetized red cell portion"
    #   bullet "set the pipette tip just under the surface of the cell suspension (* in the image), and slowly begin to draw the liquid up, keeping the distance "
    #   # "between the pipette tip and the top of the liquid constant as you draw the liquid up by slowly lowering as you draw up more volume [video 2]"
    #   warning "As liquid level decreases, the dark red portion will begin to \"droop\" and settle in the bottom of the tube."
    #   note "If any clear liquid left behind, use the same pipette tip to draw as much of the non-red material as possible."
    #   warning "when drawing up the cell suspension, stop immediately if a flash of bright red appears in your pipette tip"
    #   warning "image of TUBE #1 after cell suspension has been collected [image 4]"
    # end

    # batch all steps by sample
    
############################################
    # SECOND SEPARATION
############################################

    operations.running.each do |op|
      vol = 25
      show do
        title "Add #{vol.bold}uL magnetic beads to cell suspension #{op.ref("sample tube 2", true).bold}"
        note "Quickly vortex magnetic beads before adding."
        note "Close both tubes after adding."
        note "Pulse vortex at low speed for 3 seconds to mix."
        tubeB = make_tube(opentube, ["Magnetic", "beads"], op.tube_label("magnetic beads"), fluid = "small", fluidclass: "brownfluid")
        tubeS = make_tube(opentube, ["Sample", "tube"], op.tube_label("sample tube 2", true), fluid = "large", fluidclass: "palefluid")
        img = make_transfer(tubeB, tubeS, 250, "#{vol}uL", "(#{P200_PRE} pipette)")
        img.translate!(25)
        note display_svg(img, 0.75)
      end
    end

    tubes = operations.running.map {|op| op.ref("sample tube 2", true)}
    remove_tubes = operations.running.map {|op| op.ref("sample tube 1", true)}
    show do
      title "Incubate cell and bead mixtures for 5 min at room temperature on plastic tube rack"
      warning "Do not add tubes #{tubes.join(', ')} to magnetic rack yet."
      note "Cap old tubes #{remove_tubes.join(', ').bold}, remove from magnetic rack and discard."
      note "Set timer for 5 minutes."
      # timer initialize: {timer: 5}
    end

    show do
      title "After 5 minute incubation, add cell suspensions #{tubes.join(', ')} to magnetic rack"
      note "Open caps of tubes."
      note "Magnetize for 5 min at room temperature."
      note "Set timer for 5 minutes"
    end
    # [image 5] [image 6] [video 4]

    operations.running.each do |op|
      show do
        title "After 5 minutes, collect clear fluid from #{op.ref("sample tube 2", true)} and add to empty tube #{op.ref("sample tube 3", true).bold}"
        note "Use P1000 pipette set to 900uL"
        note "Point tip away from the dark portion and pipette up slowly."
        warning "Do not tilt the magnetic rack."
        tube = make_tube(opentube, ["empty", "tube"], op.tube_label("sample tube 3", true))
        img = make_transfer(sep_2_diagram, tube, 250, "900uL", P1000_PRE)
        img.translate!(0, -100)
        note display_svg(img, 0.75)
        # warning "VIDEO HERE"
      end
    end

############################################
    # THIRD (FINAL) SEPARATION
############################################


    # show do
    #     title "Transfer cell suspension from 2.0ml TUBE #2 on the magnetic rack to a new 1.5ml microfuge tube (1.5ml TUBE #3) using a P1000 set to 1000l of"
    #     note "use same pipet tip to collect any remaining liquid without disturbing magnetized fraction"
    #     bullet "pipette along the inside of the tube farthest from the magnet"
    #     bullet "magnetized material should be significantly smaller this time which means should be able to collect all liquid without disturbing magnetized portion"
    #     #	video of collecting cell suspension [video 5]
    # end
    
    operations.running.each do |op|
      vol = 25
      show do
        title "Add #{vol.bold}uL magnetic beads to cell suspension #{op.ref("sample tube 3", true).bold}"
        note "Quickly vortex magnetic beads before adding."
        note "Close both tubes after adding."
        note "Pulse vortex at low speed for 3 seconds to mix."
        tubeB = make_tube(opentube, ["Magnetic", "beads"], op.tube_label("magnetic beads"), fluid = "small", fluidclass: "brownfluid")
        tubeS = make_tube(opentube, ["Sample", "tube"], op.tube_label("sample tube 3", true), fluid = "large", fluidclass: "palefluid")
        img = make_transfer(tubeB, tubeS, 250, "#{vol}uL", "(#{P200_PRE} pipette)")
        img.translate!(25)
        note display_svg(img, 0.75)
      end
    end
    
    tubes = operations.running.map {|op| op.ref("sample tube 3", true)}
    remove_tubes = operations.running.map {|op| op.ref("sample tube 2", true)}
    show do
      title "Incubate cell and bead mixtures for 5 min at room temperature on plastic tube rack"
      warning "Do not add tubes #{tubes.join(', ')} to magnetic rack yet."
      note "Cap old tubes #{remove_tubes.join(', ').bold}, remove from magnetic rack and discard."
      note "Set timer for 5 minutes."
      # timer initialize: {timer: 5}
    end

    show do
      title "After 5 minute incubation, add cell suspensions #{tubes.join(', ')} to magnetic rack"
      bullet "This is the final separation. There should be very little cells left to separate."
      note "Open caps of tubes."
      note "Magnetize for 5 min at room temperature."
      note "Set timer for 5 minutes"
    end

    operations.running.each do |op|
      show do
        title "After 5 minutes, add all remaining fluid from #{op.ref("sample tube 3", true)} and add to empty tube #{op.output_ref(OUTPUT).bold}"
        note "Use P1000 pipette set to 900uL"
        bullet "pipette along the inside of the tube farthest from the magnet"
        bullet "magnetized material should be significantly smaller this time which means should be able to collect all liquid without disturbing magnetized portion"
        tube = make_tube(opentube, ["empty", "tube"], op.output_tube_label(OUTPUT))
        img = make_transfer(sep_3_diagram, tube, 250, "all remaining fluid", "(P1000 pipette)")
        img.translate!(0, -100)
        note display_svg(img, 0.75)
        # warning "VIDEO HERE"
      end
    end

    # show do
    #     title "Transfer all remaining liquid to new 1.5ml tube (1.5ml TUBE #4) using P1000 [video 6]"
    #     bullet "pipette along the inside of 1.5ml TUBE #3 farthest from the magnet"
    #     bullet "1.5ml TUBE #4 now contains your final cell suspension"
    #     bullet "cap and discard 1.5ml TUBE #3"
    # end

    output_samples = operations.running.map { |op| op.output_ref(OUTPUT) }

    show do
      title "Centrifuge #{output_samples.join(', ').bold} in a microcentrifuge to pellet cells"
      warning "Remember samples are still infectious!"
      note "Add samples #{output_samples.join(', ').bold} centrifuge"
      note "Set centrifuge <b>10,000 RPM</b>"
      note "Centrifuge for <b>1.5 minutes</b>"
      warning "Balance tubes on opposite sides of the centrifuge"
      # note to say balance
    end
    
    show do
        title "Return samples from centrifuge to BSC"
        warning "Remember samples are still infectious!"
    end

    show do
      title "In the BSC, remove fluid from cell pellets carefully discard supernatant fluid."
      note "Visually confirm there are cell pellets for the tubes."
      bullet "These pellets contain CD4+ cells and red blood cells"
      warning "Try not to disturb cell pellet"
      note "Remove the fluid from the cell pellet. Discard fluid into bleach."
      warning "Change pipette tip between samples."
    end
    
    operations.running.each do |op|
      vol = 1000
      show do
        title "Add #{vol.bold}uL RBC lysis buffer to tube #{op.output_ref(OUTPUT).bold}"
        note "Close both tubes after adding."
        note "Gently pulse vortex at low speed to resuspend the cell pellet."
        tubeA = make_tube(opentube, ["Lysis", "buffer"], op.tube_label("RBC lysis buffer", true), fluid = "medium")
        tubeS = make_tube(opentube, ["Red blood", "cell pellet"], op.output_tube_label(OUTPUT), fluid = "powder", fluidclass: "palefluid")
        img = make_transfer(tubeA, tubeS, 250, "#{vol}uL", "(#{P1000_PRE} pipette)")
        img.translate!(25)
        note display_svg(img, 0.75)
      end
    end

    show do
      title "Incubate samples on a plastic rack for 3 min at room temperature to lyse red blood cells"
      note "The lysis buffer will kill off red blood cells, leaving the CD4+ cells"
      note "Set a timer for 3 minutes."
    end

    show do
      title "Centrifuge #{output_samples.join(', ').bold} in a microcentrifuge to pellet CD4+ cells"
      warning "Remember samples are still infectious!"
      note "Add samples #{output_samples.join(', ').bold} centrifuge"
      warning "Balance tubes on opposite sides of the centrifuge"
      note "Set centrifuge <b>10,000 RPM</b>"
      note "Centrifuge for <b>1.5 minutes</b>"
    end
    
    show do
        title "Return samples to BSC and remove fluid"
        note "Using #{P1000_PRE} pipette set to 900uL, remove fluid from cell pellet."
        note "Discard fluid into bleach"
        warning "Change pipette tip between samples."
    end

    operations.running.each do |op|
      vol = 1000
      show do
        title "Add #{1000}uL 1X PBS to tube #{op.output_ref(OUTPUT).bold} to wash cells"
        warning "Carefully mix by pipetting slowly up and down. Be careful not to overflow tube."
        note "Close both tubes after adding."
        note "Gently pulse vortex at low speed to resuspend cells."
        tubeP = make_tube(opentube, "1X PBS", op.tube_label("1X PBS 2", true), fluid = "medium")
        tubeS = make_tube(opentube, ["Sample", "tube"], op.output_tube_label(OUTPUT), fluid = "powder", fluidclass: "palefluid")
        img = make_transfer(tubeP, tubeS, 250, "#{vol}uL", "(#{P1000_PRE} pipette)")
        img.translate!(25)
        note display_svg(img, 0.75)
        # transfer image
      end
    end

    show do
      title "Centrifuge #{output_samples.join(', ').bold} in a microcentrifuge to pellet CD4+ cells"
      warning "Remember samples are still infectious!"
      note "Add samples #{output_samples.join(', ').bold} centrifuge"
      warning "Balance tubes on opposite sides of the centrifuge"
      note "Set centrifuge <b>10,000 RPM</b>"
      note "Centrifuge for <b>1.5 minutes</b>"
    end

    show do
      title "Return samples to BSC and remove all residual fluid."
      note "Use a P1000 set to 950ul to slowly draw up PBS superntant without disturbing the cell pellet."
      note "Use a P200 carefully remove all residual fluid making sure you don't touch the cells."
      note "Discard all fluid into bleach."
      warning "Cell pellet may be difficult to see, so pipette slowly to avoid disturbing cells"
      # warning "video of PBS removal after 1 min at 10,000 rpm spin [video 9]"
    end

    show do
      title "Contact #{SUPERVISOR} once you have reached this step."
      note "Make sure #{SUPERVISOR} adds proteinaseK to your tubes #{output_samples.join(', ').bold}."
    end

    show do
      title "Add 30l of lysis buffer/proteinaseK to tubes #{output_samples.join(', ').bold}"
      note "CLose tube and gently pulse vortex three times at low speed to resuspend the cell pellet"
      warning "Try not to introduce air bubbles."
    end

    show do
      title "Incubate samples for 10 min at 56C to lyse cells "
      note "Add samples #{output_samples.join(', ').bold} to 56C heat block."
      note "Set a timer for 10 minutes and wait."
    end

    show do
      title "Incubate for 5 min at 95C to heat deactivate proteinase K"
      note "Before adding samples, quick spin samples for 5 seconds."
      note "Add samples #{output_samples.join(', ').bold} to 95C heat block."
      note "Set a timer for 5 minutes and wait."
    end

    show do
      title "Quick spin the tubes"
      note "Spin samples for a few seconds to collect lysate and any condensation at the bottom of the tube"
      note "Let tube cool to room temperature and give to #{SUPERVISOR}."
      # note "Let tube cool to room temperature and proceed with PCR, or store lysate at -20C for later use."
    end

    show do
      title "Clean up Waste"
      bullet "Dispose of liquid waste in bleach down the sink with running water."
      bullet "Dispose of remaining tubes into biohazard waste."
    end

    show do
      title "Clean Biosafety Cabinet"
      note "Place items in the BSC off to the side."
      note "Spray down surface of BSC with 10% bleach. Wipe clean using paper towel."
      note "Spray down surface of BSC with 70% ethanol. Wipe clean using paper towel."
      note "After cleaning, dispose of gloves in biohazard waste."
    end


    # put down clean_area method here
    # after cleaning dispose of gloves into biohazard
    return {}

  end

  def save_user ops
    ops.each do |op|
      username = get_technician_name(self.jid)
      op.associate(:technician, username)
    end
  end

  def introduction
    show do
      title "Welcome to OLASimple Cell Lysis"

      note "In this protocol Blood CD4+ cells will be negatively selected and lysed. "
      note "You will use magnetic beads and antibodies to separate unwanted cells using a magnet. " \
          "You will repeat the magnetic separation for a total of 3 passes until all red material is removed."
      note "The separation leaves CD4+ and red blood cells (RBC) in the suspension."
      note display_svg(negative_selection_diagram, 1.0)
    end

    show do
      title "Welcome to OLASimple Cell Lysis"
      note "After separation, target CD4+ cells containing the HIV DNA will be in the clear fluid."
      note "Unwanted red blood cells will be lysed, leaving CD+ cells."
      note "Finally, CD+ cells will be lysed to release the DNA."
      note "This DNA will be used to detect HIV mutations."
    end
  end

  # TODO: add goggles?
  def safety_warning
    show do
      title "Review the safety warnings"
      warning "You will be working with infectious materials."
      note "Do <b>ALL</b> work in a biosafety cabinet (#{BSC.bold})"
      note "Always wear a lab coat and gloves for this protocol."
      check "Put on a lab coat and gloves now."
    end
  end

  def required_equipment
    show do
      title "Get required equipment"
      note "You will need the following equipment in the #{BSC.bold}"
      materials = [
          "P1000 pipette and filter tips",
          "P200 pipette and filter tips",
          "P20 pipette and filter tips",
          "magnetic rack",
          "vortex mixer",
          "tube rack",
          "timer",
          "bleach in a beaker",
          "70% v/v ethanol"
      ]
      materials.each do |m|
        check m
      end
    end
  end

  def additional_supplies
    show do
      title "Make sure heat blocks are set to 56C and 95C"
    end
  end

  def get_package myops
    show do
      title "Get package"
      warning "This step will ask tech to get the appropriate package."
    end
  end

  def open_package myops
    show do
      title "Open package"
      warning "This step will show a picture of the materials and ask tech to verify there are the right tubes."
    end
  end

  def sep_1_diagram
    img = SVGElement.new(boundx: 113, boundy: 394)
    img.add_child(<<EOF
      <g id="OpenLid">
	<g>
		<path fill="#F7FCFE" d="M81.992,179.294c-3.271,7.512-10.103,12.477-16.997,13.795c0.375,1.254,0.75,2.506,1.125,3.76
			c17.403-5.207,26.03-24.734,18.165-41.105c-1.178,0.566-2.357,1.133-3.537,1.699C84.416,163.427,85.342,171.819,81.992,179.294z"
			/>
		<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M81.992,179.294c-3.271,7.512-10.103,12.477-16.997,13.795
			c0.375,1.254,0.75,2.506,1.125,3.76c17.403-5.207,26.03-24.734,18.165-41.105c-1.178,0.566-2.357,1.133-3.537,1.699
			C84.416,163.427,85.342,171.819,81.992,179.294z"/>
	</g>
	<g>
		<path fill="#F7FCFE" d="M66.292,111.973c-1.1,0-2,0.9-2,2v37.25c0,1.1,0.9,2,2,2h0.688c1.1,0,2-0.535,2-1.188
			c0-0.654,0.9-1.188,2-1.188h8.938c1.1,0,2-0.9,2-2v-32.5c0-1.1-0.9-2-2-2h-8.938c-1.1,0-2-0.534-2-1.188s-0.9-1.188-2-1.188
			H66.292z"/>
		<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M66.292,111.973c-1.1,0-2,0.9-2,2v37.25c0,1.1,0.9,2,2,2h0.688
			c1.1,0,2-0.535,2-1.188c0-0.654,0.9-1.188,2-1.188h8.938c1.1,0,2-0.9,2-2v-32.5c0-1.1-0.9-2-2-2h-8.938c-1.1,0-2-0.534-2-1.188
			s-0.9-1.188-2-1.188H66.292z"/>
	</g>
	<g>
		<path fill="#F7FCFE" d="M86.186,102.598c0.953-0.55,1.732-0.1,1.732,1v55.471c0,1.1-0.846,2.311-1.877,2.689l-3.121,1.148
			c-1.033,0.381-1.877-0.209-1.877-1.309v-54.03c0-1.1,0.779-2.45,1.73-3L86.186,102.598z"/>
		<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M86.186,102.598c0.953-0.55,1.732-0.1,1.732,1v55.471
			c0,1.1-0.846,2.311-1.877,2.689l-3.121,1.148c-1.033,0.381-1.877-0.209-1.877-1.309v-54.03c0-1.1,0.779-2.45,1.73-3
			L86.186,102.598z"/>
	</g>
	<line fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" x1="69.979" y1="149.319" x2="69.979" y2="116.069"/>
</g>
<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M18.856,196.703v45.309l14.998,90.066c0,4.35,5.037,7.875,11.25,7.875
	c6.215,0,11.25-3.525,11.25-7.875l15-90.066v-45.309H18.856z"/>
<rect x="74.021" y="196.849" fill="#58595B" stroke="#000000" stroke-miterlimit="10" width="16.705" height="143.104"/>
<g>
	<path fill="#F2F5D1" stroke="#000000" stroke-miterlimit="10" d="M45.104,340.362c6.215,0,11.25-3.525,11.25-7.875l15-90.066
		v-20.619c-3.914-4.414-7.246-9.508-14.937-9.508c-13.567,0-13.567,15.856-27.136,15.856c-4.752,0-7.837-1.947-10.426-4.476v18.746
		l14.998,90.066C33.854,336.837,38.891,340.362,45.104,340.362z"/>
</g>
<text transform="matrix(1 0 0 1 11.3271 382.2627)" font-family="'MyriadPro-Regular'" font-size="25">Avoid</text>
<polygon fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" points="28.413,242.103 21.005,240.936 42.632,10.692 
	76.217,15.988 "/>
<g>
	<path fill="#F1F2F2" d="M76.104,192.703c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V192.703z
		"/>
	<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M76.104,192.703c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875
		c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V192.703z"/>
</g>
<g>
	<path id="smallgoop_1_" fill="#BE1E2D" d="M58.038,318.527c-0.48,0.29-0.853,0.667-1.167,1.104
		c-0.286,0.446-0.544,0.889-0.791,1.329c-0.345,0.425-0.624,0.832-0.864,1.229c-0.991,1.92-1.5,3.797-3.802,6.113
		c-0.326,0.24-0.664,0.473-1.014,0.702c-1.255,0.63-3.409,1.163-3.962,1.811c-0.864,0.87,0.737,0.984,2.856,0.351
		c2.816-0.787,5.354-1.938,7.215-3.107c0.564-0.939,0.878-1.972,0.878-3.055l1.118-6.713
		C58.341,318.363,58.183,318.44,58.038,318.527z"/>
</g>
<g>
	<path id="mediumgoop_1_" fill="#BE1E2D" d="M62.865,284.622c-1.722-0.176-2.978,0.252-3.904,1.139
		c-0.927,0.885-1.526,2.229-1.938,3.883c-0.338,1.717-0.611,3.434-0.859,5.154c-0.497,1.574-0.849,3.123-1.115,4.66
		c-0.877,7.564-0.631,15.314-4.343,23.576c-0.596,0.789-1.225,1.533-1.886,2.254c-2.521,1.754-7.274,2.385-8.095,4.764
		c-1.395,3.105,2.541,4.854,7.132,3.756c3.25-0.641,6.229-1.791,8.848-3.264c0.022-0.203,0.044-0.406,0.044-0.613l7.516-45.127
		C63.821,284.724,63.36,284.657,62.865,284.622z"/>
</g>
<g>
<path id="largegoop_1_" fill="#BE1E2D" d="M70.233,227.925c-0.539-0.592-1.101-1.156-1.7-1.677
		c-2.18-1.891-4.767-3.295-7.818-4.106c-3.108-0.959-5.194-0.299-6.55,1.576c-1.355,1.877-1.983,4.971-2.176,8.881
		c-0.043,4.081,0.029,8.187,0.148,12.31c-0.371,3.683-0.492,7.357-0.467,11.022c0.897,18.184,3.846,37.165-0.056,56.177
		c-0.8,1.744-1.673,3.365-2.61,4.925c-3.899,3.502-12.119,3.583-12.802,9.137c-1.465,7.144,6.075,12.614,13.855,11.348
		c1.231-0.126,2.429-0.324,3.597-0.573c0.996-1.113,1.578-2.408,1.578-3.796l15-85.266V227.925z"/>
</g>
<g>
	<polygon stroke="#000000" stroke-miterlimit="10" points="52.353,334.137 44.153,331.308 50.704,323.193 	"/>
	<line fill="none" stroke="#000000" stroke-width="3" stroke-miterlimit="10" x1="48.61" y1="331.569" x2="41.199" y2="361.209"/>
</g>
EOF
    )
    img
  end

  def sep_2_diagram
    img = SVGElement.new(boundx: 113, boundy: 394)
    img.add_child(<<EOF
      <g id="OpenLid">
	<g>
		<path fill="#F7FCFE" d="M81.992,179.294c-3.271,7.512-10.103,12.477-16.997,13.795c0.375,1.254,0.75,2.506,1.125,3.76
			c17.403-5.207,26.03-24.734,18.165-41.105c-1.178,0.566-2.357,1.133-3.537,1.699C84.416,163.427,85.342,171.819,81.992,179.294z"
			/>
		<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M81.992,179.294c-3.271,7.512-10.103,12.477-16.997,13.795
			c0.375,1.254,0.75,2.506,1.125,3.76c17.403-5.207,26.03-24.734,18.165-41.105c-1.178,0.566-2.357,1.133-3.537,1.699
			C84.416,163.427,85.342,171.819,81.992,179.294z"/>
	</g>
	<g>
		<path fill="#F7FCFE" d="M66.292,111.973c-1.1,0-2,0.9-2,2v37.25c0,1.1,0.9,2,2,2h0.688c1.1,0,2-0.535,2-1.188
			c0-0.654,0.9-1.188,2-1.188h8.938c1.1,0,2-0.9,2-2v-32.5c0-1.1-0.9-2-2-2h-8.938c-1.1,0-2-0.534-2-1.188s-0.9-1.188-2-1.188
			H66.292z"/>
		<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M66.292,111.973c-1.1,0-2,0.9-2,2v37.25c0,1.1,0.9,2,2,2h0.688
			c1.1,0,2-0.535,2-1.188c0-0.654,0.9-1.188,2-1.188h8.938c1.1,0,2-0.9,2-2v-32.5c0-1.1-0.9-2-2-2h-8.938c-1.1,0-2-0.534-2-1.188
			s-0.9-1.188-2-1.188H66.292z"/>
	</g>
	<g>
		<path fill="#F7FCFE" d="M86.186,102.598c0.953-0.55,1.732-0.1,1.732,1v55.471c0,1.1-0.846,2.311-1.877,2.689l-3.121,1.148
			c-1.033,0.381-1.877-0.209-1.877-1.309v-54.03c0-1.1,0.779-2.45,1.73-3L86.186,102.598z"/>
		<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M86.186,102.598c0.953-0.55,1.732-0.1,1.732,1v55.471
			c0,1.1-0.846,2.311-1.877,2.689l-3.121,1.148c-1.033,0.381-1.877-0.209-1.877-1.309v-54.03c0-1.1,0.779-2.45,1.73-3
			L86.186,102.598z"/>
	</g>
	<line fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" x1="69.979" y1="149.319" x2="69.979" y2="116.069"/>
</g>
<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M18.856,196.703v45.309l14.998,90.066c0,4.35,5.037,7.875,11.25,7.875
	c6.215,0,11.25-3.525,11.25-7.875l15-90.066v-45.309H18.856z"/>
<rect x="74.021" y="196.849" fill="#58595B" stroke="#000000" stroke-miterlimit="10" width="16.705" height="143.104"/>
<g>
	<path fill="#F2F5D1" stroke="#000000" stroke-miterlimit="10" d="M45.104,340.362c6.215,0,11.25-3.525,11.25-7.875l15-90.066
		v-20.619c-3.914-4.414-7.246-9.508-14.937-9.508c-13.567,0-13.567,15.856-27.136,15.856c-4.752,0-7.837-1.947-10.426-4.476v18.746
		l14.998,90.066C33.854,336.837,38.891,340.362,45.104,340.362z"/>
</g>
<text transform="matrix(1 0 0 1 11.3271 382.2627)" font-family="'MyriadPro-Regular'" font-size="25">Avoid</text>
<polygon fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" points="28.413,242.103 21.005,240.936 42.632,10.692 
	76.217,15.988 "/>
<g>
	<path fill="#F1F2F2" d="M76.104,192.703c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V192.703z
		"/>
	<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M76.104,192.703c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875
		c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V192.703z"/>
</g>
<g>
	<path id="mediumgoop_1_" fill="#BE1E2D" d="M62.865,284.622c-1.722-0.176-2.978,0.252-3.904,1.139
		c-0.927,0.885-1.526,2.229-1.938,3.883c-0.338,1.717-0.611,3.434-0.859,5.154c-0.497,1.574-0.849,3.123-1.115,4.66
		c-0.877,7.564-0.631,15.314-4.343,23.576c-0.596,0.789-1.225,1.533-1.886,2.254c-2.521,1.754-7.274,2.385-8.095,4.764
		c-1.395,3.105,2.541,4.854,7.132,3.756c3.25-0.641,6.229-1.791,8.848-3.264c0.022-0.203,0.044-0.406,0.044-0.613l7.516-45.127
		C63.821,284.724,63.36,284.657,62.865,284.622z"/>
</g>
<g>
	<polygon stroke="#000000" stroke-miterlimit="10" points="52.353,334.137 44.153,331.308 50.704,323.193 	"/>
	<line fill="none" stroke="#000000" stroke-width="3" stroke-miterlimit="10" x1="48.61" y1="331.569" x2="41.199" y2="361.209"/>
</g>
EOF
    )
    img
  end

  def sep_3_diagram
    img = SVGElement.new(boundx: 113, boundy: 394)
    img.add_child(<<EOF
      <g id="OpenLid">
	<g>
		<path fill="#F7FCFE" d="M81.992,179.294c-3.271,7.512-10.103,12.477-16.997,13.795c0.375,1.254,0.75,2.506,1.125,3.76
			c17.403-5.207,26.03-24.734,18.165-41.105c-1.178,0.566-2.357,1.133-3.537,1.699C84.416,163.427,85.342,171.819,81.992,179.294z"
			/>
		<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M81.992,179.294c-3.271,7.512-10.103,12.477-16.997,13.795
			c0.375,1.254,0.75,2.506,1.125,3.76c17.403-5.207,26.03-24.734,18.165-41.105c-1.178,0.566-2.357,1.133-3.537,1.699
			C84.416,163.427,85.342,171.819,81.992,179.294z"/>
	</g>
	<g>
		<path fill="#F7FCFE" d="M66.292,111.973c-1.1,0-2,0.9-2,2v37.25c0,1.1,0.9,2,2,2h0.688c1.1,0,2-0.535,2-1.188
			c0-0.654,0.9-1.188,2-1.188h8.938c1.1,0,2-0.9,2-2v-32.5c0-1.1-0.9-2-2-2h-8.938c-1.1,0-2-0.534-2-1.188s-0.9-1.188-2-1.188
			H66.292z"/>
		<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M66.292,111.973c-1.1,0-2,0.9-2,2v37.25c0,1.1,0.9,2,2,2h0.688
			c1.1,0,2-0.535,2-1.188c0-0.654,0.9-1.188,2-1.188h8.938c1.1,0,2-0.9,2-2v-32.5c0-1.1-0.9-2-2-2h-8.938c-1.1,0-2-0.534-2-1.188
			s-0.9-1.188-2-1.188H66.292z"/>
	</g>
	<g>
		<path fill="#F7FCFE" d="M86.186,102.598c0.953-0.55,1.732-0.1,1.732,1v55.471c0,1.1-0.846,2.311-1.877,2.689l-3.121,1.148
			c-1.033,0.381-1.877-0.209-1.877-1.309v-54.03c0-1.1,0.779-2.45,1.73-3L86.186,102.598z"/>
		<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M86.186,102.598c0.953-0.55,1.732-0.1,1.732,1v55.471
			c0,1.1-0.846,2.311-1.877,2.689l-3.121,1.148c-1.033,0.381-1.877-0.209-1.877-1.309v-54.03c0-1.1,0.779-2.45,1.73-3
			L86.186,102.598z"/>
	</g>
	<line fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" x1="69.979" y1="149.319" x2="69.979" y2="116.069"/>
</g>
<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M18.856,196.703v45.309l14.998,90.066c0,4.35,5.037,7.875,11.25,7.875
	c6.215,0,11.25-3.525,11.25-7.875l15-90.066v-45.309H18.856z"/>
<rect x="74.021" y="196.849" fill="#58595B" stroke="#000000" stroke-miterlimit="10" width="16.705" height="143.104"/>
<g>
	<path fill="#F2F5D1" stroke="#000000" stroke-miterlimit="10" d="M45.104,340.362c6.215,0,11.25-3.525,11.25-7.875l15-90.066
		v-20.619c-3.914-4.414-7.246-9.508-14.937-9.508c-13.567,0-13.567,15.856-27.136,15.856c-4.752,0-7.837-1.947-10.426-4.476v18.746
		l14.998,90.066C33.854,336.837,38.891,340.362,45.104,340.362z"/>
</g>
<text transform="matrix(1 0 0 1 11.3271 382.2627)" font-family="'MyriadPro-Regular'" font-size="25">Avoid</text>
<polygon fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" points="28.413,242.103 21.005,240.936 42.632,10.692 
	76.217,15.988 "/>
<g>
	<path fill="#F1F2F2" d="M76.104,192.703c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V192.703z
		"/>
	<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M76.104,192.703c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875
		c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V192.703z"/>
</g>
<g>
	<path id="smallgoop_1_" fill="#BE1E2D" d="M58.038,318.527c-0.48,0.29-0.853,0.667-1.167,1.104
		c-0.286,0.446-0.544,0.889-0.791,1.329c-0.345,0.425-0.624,0.832-0.864,1.229c-0.991,1.92-1.5,3.797-3.802,6.113
		c-0.326,0.24-0.664,0.473-1.014,0.702c-1.255,0.63-3.409,1.163-3.962,1.811c-0.864,0.87,0.737,0.984,2.856,0.351
		c2.816-0.787,5.354-1.938,7.215-3.107c0.564-0.939,0.878-1.972,0.878-3.055l1.118-6.713
		C58.341,318.363,58.183,318.44,58.038,318.527z"/>
</g>
<g>
	<polygon stroke="#000000" stroke-miterlimit="10" points="52.353,334.137 44.153,331.308 50.704,323.193 	"/>
	<line fill="none" stroke="#000000" stroke-width="3" stroke-miterlimit="10" x1="48.61" y1="331.569" x2="41.199" y2="361.209"/>
</g>
EOF
    )
    img
  end

end

operation_type: OLASimple Graphics Test
category: OLASimple
deployed: false
on_the_fly: false
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protocol:
##########################################
#
#
# OLASimple Visual Call
# author: Justin Vrana
# date: March 2018
#
#
##########################################
# This is a default, one-size-fits all protocol that shows how you can 
# access the inputs and outputs of the operations associated with a job.
# Add specific instructions for this protocol!
needs "OLASimple/OLAConstants"
needs "OLASimple/OLALib"
needs "OLASimple/OLAGraphics"

class Protocol
  include OLAConstants
  include OLAGraphics
  include OLALib
  def main

    def display_reading_window(kit, unit, component, sample, colorclass)
        strip_label = tube_label(kit, unit, component, sample)
        strip = make_strip(strip_label, colorclass).scale!(0.5)
        c = strip.group_children
        c.translate!(0, -35)
        strip.boundy = 50
        strip
    end
    
    show do 
      
      note display_svg(display_reading_window(4, "A", "B", 1, "bluestrip"))
    end
    
    show do
        c1 = display_svg(display_reading_window(4, "A", "B", 1, "bluestrip"))
        choices = [c1]
        select choices, var: "choice", label: "Choose something", default: 1
    end
    
    return {}
    
  end

end

operation_type: OLASimple Interactive Survey
category: OLASimple
deployed: false
on_the_fly: false
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protocol:
class Protocol

  def main

    show do
        title "Thank you for taking part in the OLASimple study!"
        
        note "Please continue to take part in an interactive survey"
        
    end
    choices = "Strongly agree", "Agree", "Neutral", "Disagree", "Strongly disagree"
    
    show do
        title "Section: Demographics"
        get "text", var: "age", label: "What is your age?", default: 50
        select ["male", "female", "none"], var: "gender", label: "What is your gender?", default: 2
        select ["no schooling", "nursery to secondary", "some secondary, no diploma", "completed secondary school or equivalent", 
                "some university credit, no degree", "trade school", "associate degree", "Bachelor's", "Master's", "Professional", "Doctorate"],
                var: "education", label: "What is your highest level of education?", default: 0
    end
    
    show do
        title "Section: Technician Experience"
        get "text", var: "years", label: "How many years of experience do you have as a lab technician?", default: 1
        select ["yes", "no"], var: "hours", label: "Have you worked with HIV before today?", default: 0
        select ["yes", "no"], var: "hours", label: "Have you ever performed a PCR?", default: 0
        select ["yes", "no"], var: "hours", label: "Have you ever used a thermocycler?", default: 0
    end
    
    show do
        title "Section: Self Evaluation"
        note "<b>For each section, select from the following choices:</b>"
        select choices, var: "question1", label: "I consider myself good at pipetting", default: 2
        select choices, var: "question2", label: "I consider myself good at laboratory techniques", default: 2
        select choices, var: "question3", label: "I enjoy lab work", default: 2
    end
    
    show do
        title "Section: Kit Evaluation"
        note "<b>For each section, select from the following choices:</b>"
        select choices, var: "question1", label: "I found the kit to be easy", default: 2
        select choices, var: "question2", label: "I found the instructions were clear", default: 2
        select choices, var: "question3", label: "I understood the purpose of the kit", default: 2
        select choices, var: "question4", label: "I understood the purpose of the strips", default: 2
    end
    
    show do
        title "Section: Digital Guidance Evaluation"
        note "<b>For each section, select from the following choices:</b>"
        select choices, var: "question1", label: "I found the instructions clear", default: 2
        select choices, var: "question2", label: "I thought the digital guidance was useful", default: 2
        select choices, var: "question3", label: "I would have preferred a paper protocol over digital guidance", default: 2
    end
    
    show do
        title "Written Section 1"
        note "<b>For each section, answer the following questions</b>"
         get "text", var: "written11", label: "What did you like best about using this kit?", default: ""
         get "text", var: "written12", label: "Which instruction(s) were not easy to follow? Please explain.", default: ""
         get "text", var: "written13", label: "What advice do you have for us to make kit and instructions easier to use?", default: ""
    end
    
    show do
        title "Written Section 2"
        note "<b>For each section, answer the following questions</b>"
         get "text", var: "written21", label: "What did you like best about using the digital guidance?", default: ""
         get "text", var: "written22", label: "Which parts of the guidance were not easy to follow?", default: ""
         get "text", var: "written23", label: "What advice do you have for us to make the digital guidance easier to use?", default: ""
    end
    
    return {}
    
  end

end

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operation_type: OLASimple Job Submission
category: OLASimple
deployed: false
on_the_fly: false
field_types:
  - {ftype: number, role: input, name: Patient Sample Identifier}
  - {ftype: sample, role: output, name: Patient Sample, sample_types: [OLASimple Sample], object_types: [OLA Whole Blood]}
  - {ftype: number, role: input, name: Kit Identifier}
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protocol:
# Protocol to initiate an ola simple workflow. Creates 

needs 'OLASimple/OLAConstants'
class Protocol
  include OLAConstants
  
  OUTPUT = 'Patient Sample'
  PATIENT_ID_INPUT = 'Patient Sample Identifier'
  KIT_ID_INPUT = 'Kit Identifier'
  def main

    operations.make
    
    operations.each do |op|
      # give id to each blood sample 
      patient = op.input(PATIENT_ID_INPUT).value.to_i
      kit_id = op.input(KIT_ID_INPUT).value.to_i
      op.output(OUTPUT).item.associate(PATIENT_ID_KEY, patient)
      op.output(OUTPUT).item.associate(KIT_KEY, kit_id)
    end

    {}

  end

end

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object_types:
  - {name: OLA PCR, description: OLA PCR, handler: sample_container, unit: OLASimple Sample, release_method: return, sample_type_name: OLASimple Sample}
  - {name: OLA Ligation Stripwell, description: OLA Ligation Stripwell, handler: collection, unit: Well, release_method: return, rows: 1, columns: 12}
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operation_type: OLASimple Ligation
category: OLASimple
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: PCR Product, sample_types: [OLASimple Sample], object_types: [OLA PCR], routing: PP}
  - {ftype: sample, role: output, name: Ligation Product, sample_types: [OLASimple Sample], object_types: [OLA Ligation Stripwell], routing: PP}
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cost_model:
def cost(op)
  { labor: 7.5, materials: 0 }
end

protocol:
##########################################
#
#
# OLASimple Ligation
# author: Justin Vrana
# date: March 2018
#
#
##########################################


needs "OLASimple/OLAConstants"
needs "OLASimple/OLALib"
needs "OLASimple/OLAGraphics"

class Protocol
  include OLALib
  include OLAGraphics
  include OLAConstants

  ##########################################
  # INPUT/OUTPUT
  ##########################################
  INPUT = "PCR Product"
  OUTPUT = "Ligation Product"
  PACK = "Ligation Pack"
  A = "Diluent A"


  ##########################################
  # TERMINOLOGY
  ##########################################

  ##########################################
  # Protocol Specifics
  ##########################################

  AREA = POST_PCR

  # for debugging
  PREV_COMPONENT = "B"
  PREV_UNIT = "B"

  CENTRIFUGE_TIME = "5 seconds" # time to pulse centrifuge to pull down dried powder
  VORTEX_TIME = "5 seconds" # time to pulse vortex to mix
  TUBE_CAP_WARNING = "Check to make sure tube caps are completely closed."

  PACK_HASH = LIGATION_UNIT
  LIGATION_VOLUME = PACK_HASH["Ligation Mix Rehydration Volume"]  # volume to rehydrate ligation mix
  SAMPLE_VOLUME = PACK_HASH["PCR to Ligation Mix Volume"] # volume of pcr product to ligation mix
  MATERIALS =  [
      "P200 pipette and filtered tips",
      "P10 pipette and filtered tips",
      "a spray bottle of 10% v/v bleach",
      "a spray bottle of 70% v/v ethanol",
      "a timer, practice how to use the timer",
      "balancing tube (on rack)",
      "a centrifuge",
      "a vortex mixer",
  ]
  COMPONENTS = PACK_HASH["Components"]["sample tubes"]

  ##########################################
  # ##
  # Input Restrictions:
  # Input needs a kit, unit, components,
  # and sample data associations to work properly
  ##########################################

  def main
    operations.running.retrieve interactive: false
    save_user operations
    debug_setup(operations) if debug
    save_temporary_input_values(operations, INPUT)
    # save_pack_hash(operations, PACK)
    operations.each do |op|
      op.temporary[:pack_hash] = PACK_HASH
    end
    save_temporary_output_values(operations)
    run_checks operations
    introduction(operations.running)
    area_preparation POST_PCR, MATERIALS, PRE_PCR
    get_samples_from_thermocycler(operations.running)
    get_ligation_packages(operations.running)
    open_ligation_packages(operations.running)
    check_for_tube_defects operations.running
    centrifuge_samples sorted_ops.running
    rehydrate_ligation_mix sorted_ops.running
    vortex_and_centrifuge_samples sorted_ops.running
    add_template sorted_ops.running
    vortex_and_centrifuge_samples sorted_ops.running
    cleanup sorted_ops
    start_ligation sorted_ops.running
    conclusion sorted_ops
    return {}
  end
 
  def sorted_ops
    operations.sort_by {|op| op.output_ref(OUTPUT)}.extend(OperationList)
  end

  def save_user ops
    ops.each do |op|
      username = get_technician_name(self.jid)
      op.associate(:technician, username)
    end
  end

  def debug_setup ops
    # make an alias for the inputs
    if debug
      ops.each do |op|
        kit_num = rand(1..60)
        make_alias(op.input(INPUT).item, kit_num, PREV_UNIT, PREV_COMPONENT, 1)
        # op.input(PACK).item.associate(KIT_KEY, kit_num)
      end

      if ops.length >= 2
        i = ops[-1].input(INPUT).item
        alias_array = get_alias_array(i)
        alias_array[3] = if (alias_array[3] == 1) then 2 else 1 end
        make_alias(ops[0].input(INPUT).item, *alias_array)

        # kit_num = ops[-1].input(PACK).item.get(KIT_KEY)
        # ops[0].input(PACK).item.associate(KIT_KEY, kit_num)
      end
    end
  end

  def run_checks myops
    if operations.running.empty?
      show do
        title "All operations have errored"
        note "Contact #{SUPERVISOR}"
        operations.each do |op|
          note "#{op.errors.map {|k, v| [k, v]}}"
        end
      end
      return {}
    end
  end

  def introduction ops
    kit_nums = ops.map {|op| op.input(INPUT).item.get(KIT_KEY)}.uniq
    samples = "#{ops.length} #{"sample".pluralize(ops.length)}"
    kits = "#{kit_nums.length} #{"kit".pluralize(kit_nums.length)}"
    username = get_technician_name(self.jid).color("darkblue")
    show do
      title "Welcome #{username} to OLASimple Ligation"
      note "You will be running the OLASimple Ligation protocol"
      note "In this protocol you will be using PCR samples from the last protocol" \
            " and adding small pieces of DNA which will allow you to detect HIV mutations."
      note "You will be running #{samples} from #{kits}."
      check "OLA Ligation is highly sensitive. Small contamination can cause false positive. Before proceed, please check with your assigner if the space and pipettes have been wiped with 10% bleach and 70% ethanol."
      check "Put on tight gloves. Tight gloves help reduce contamination risk"
      note "Click <b>OK</b> in the upper right corner to start the protocol."
    end
  end

  def get_ligation_packages myops
    gops = myops.group_by { |op| op.temporary[:output_kit_and_unit] }
    show do
      title "Take #{LIG_PKG_NAME.pluralize(gops.length)} from the R1 #{FRIDGE_POST} "
      gops.each do |unit, ops|
        check "#{PACKAGE_POST} #{unit.bold}"
      end
      check "Place #{pluralizer(PACKAGE_POST, gops.length)} on the #{BENCH_POST} in the #{AREA.bold}."
      check "Put on a new pair of gloves"
    end
  end

  def open_ligation_packages(myops)
    grouped_by_unit = operations.running.group_by {|op| op.temporary[:output_kit_and_unit]}
    grouped_by_unit.each do |kit_and_unit, ops|
      ops.each do |op|
        op.make_collection_and_alias(OUTPUT, "sample tubes", INPUT)
      end

      ops.each do |op|
        op.temporary[:label_string] = "#{op.output_refs(OUTPUT)[0]} through #{op.output_refs(OUTPUT)[-1]}"
      end


      ##################################
      # get output collection references
      #################################


      show_open_package(kit_and_unit, "", ops.first.temporary[:pack_hash][NUM_SUB_PACKAGES_FIELD_VALUE]) do
          tube = make_tube(closedtube, "", ops.first.tube_label("diluent A"), "medium")
          num_samples = ops.first.temporary[:pack_hash][NUM_SAMPLES_FIELD_VALUE]
          grid = SVGGrid.new(1, num_samples, 0, 100)
          tokens = ops.first.output_tokens(OUTPUT)
          num_samples.times.each do |i|
            _tokens = tokens.dup
            _tokens[-1] = i+1
            ligation_tubes = display_ligation_tubes(*_tokens, COLORS)
            stripwell = ligation_tubes.g
            grid.add(stripwell, 0, i)
          end
          grid.align_with(tube, 'center-right')
          grid.align!('center-left')
          img = SVGElement.new(children: [tube, grid], boundx: 1000, boundy: 300).translate!(30, -50)
        note "Check that the following tubes are in the pack:"
        # check "a 1.5mL tube of #{DILUENT_A} labeled #{ops.first.ref("diluent A")}"
        # ops.each do |op|
        #   check "a strip of colored tubes labeled #{op.temporary[:label_string].bold}"
        # end
        note display_svg(img, 0.75)
      end

      show do
        title "Place strips of tubes into a rack"
        check "Take #{pluralizer("tube strip", ops.length)} and place them in the plastic racks"
      end
    end
  end

  def centrifuge_samples ops
    labels = ops.map {|op| op.temporary[:label_string] }
    diluentALabels = ops.map { |op| op.ref("diluent A") }.uniq
    show do
        title "Centrifuge samples for 5 seconds to pull down reagents"
        note "Put the tag side of the rack toward the center of the centrifuge"
        image "Actions/OLA/striptubes_in_centrifuge.JPG"
    end
    # centrifuge_helper("tube set", labels, CENTRIFUGE_TIME,
    #                   "to pull down dried powder.",
    #                   "There may be dried powder on the inside of the tube #{"lid".pluralize(labels.length)}.")
    # centrifuge_helper("tube", diluentALabels, CENTRIFUGE_TIME,
    #                   "to pull down liquid.")
  end
  
  def vortex_and_centrifuge_samples ops
         labels = ops.map {|op| op.temporary[:label_string] }
         vortex_and_centrifuge_helper("tube set", labels, CENTRIFUGE_TIME, VORTEX_TIME,
                      "to mix.", "to pull down the fluid.", AREA)
    show do
        title "Check your tubes." 
        check "Dried powder of reagents should be dissolved at this point. Look on the side of the tubes to check if you see any remaining powder. If you notice any powder remains on the side, rotate the tubes while vortexing for 5 seconds and centrifuge for 5 seconds."
        check "All the tubes should have similar fluid levels. Check again if you have any cracked tubes that could cause fluid leakage. If you have a cracked tube, notify the assigner. We will replace a new tube for you."
    end
  end
  
  def get_samples_from_thermocycler myops
      show do
          title "Retrieve PCR samples from the #{THERMOCYCLER} or freezer"
          check "If your samples were stored in the freezer, get samples from the M20 freezer, 4th shelf down in the red box.Thaw samples."
          check "Else, if your samples are in the #{THERMOCYCLER}, cancel the run if the machine says \"hold at 4C\", and get your samples."
          check "Vortex and centrifuge samples for 5 seconds."
      end
  end

  def rehydrate_ligation_mix myops
    gops = myops.group_by {|op| op.temporary[:input_kit_and_unit]}
    gops.each do |unit, ops|
      ops.each do |op|
        # All 5 transfers at once...
        #   show do
        #     title "Add #{DILUENT_A} #{ref(op.output(A).item)} to #{LIGATION_SAMPLE}"
        #     labels.map! {|l| "<b>#{l}</b>"}
        #     note "In this step we will be adding #{vol}uL of #{DILUENT_A} into #{pluralizer("tube", COMPONENTS.length)} "
        #     "of the colored strip of tubes labeled <b>#{labels[0]} to #{labels[-1]}</b>"
        #     note "Using a P200 or P200 pipette, add #{vol}uL from #{DILUENT_A} #{bold_ref(op.output(A).item)} into each of the #{COMPONENTS.length} tubes."
        #     warning "Only open one of the ligation tubes at a time."
        #     note op.temporary[:labels]

        #     ligation_tubes = display_ligation_tubes(op.temporary[:input_kit], op.temporary[:output_unit], COMPONENTS, op.temporary[:input_sample])
        #     diluent_A = opentube.mirror_horizontal

        #     note display_svg(diluentA_to_ligation_tubes(
        # op.temporary[:input_kit], op.temporary[:output_unit], COMPONENTS, op.temporary[:input_sample],
        # ref(op.output(A).item), vol, [], "(each tube)"), 0.6)

        #     # t = Table.new
        #     # t.add_column("Tube", labels)
        #     # t.add_column("Color", COMPONENTS_COLOR_CODE)
        #     # table t
        #   end

        # each transfer
        from = op.ref("diluent A")
        ligation_tubes = display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS)
        ligation_tubes.align!('bottom-left')
        ligation_tubes.align_with(tube, 'bottom-right')
        ligation_tubes.translate!(50)
        tubeA = make_tube(closedtube, DILUENT_A, op.tube_label("diluent A"), "medium")
        image = SVGElement.new(children: [tubeA, ligation_tubes], boundx: 1000, boundy: tube.boundy)
        image.translate!(50, -50)
        show do
          title "Position #{DILUENT_A} #{from.bold} and colored tubes #{op.temporary[:label_string].bold} in front of you."
          note "In the next steps you will dissolve the powder in #{pluralizer("tube", COMPONENTS.length)} using #{DILUENT_A}"
          note display_svg(image, 0.75)
        end
        ligation_tubes_svg = display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS).translate!(0, -20)
        img = display_svg(ligation_tubes_svg, 0.7)
        # centrifuge_helper(LIGATION_SAMPLE, op.temporary[:labels], CENTRIFUGE_TIME, "to pull down dried powder.", img)

        labels = op.output_refs(OUTPUT)
        labels.each.with_index do |label, i|
          show do
            raw transfer_title_proc(LIGATION_VOLUME, from, label)
            # title "Add #{LIGATION_VOLUME}uL #{DILUENT_A} #{from.bold} to #{LIGATION_SAMPLE} #{label}
            warning "Change pipette tip between tubes"
            note "Set a #{P200_POST} pipette to [0 2 4]." 
            note "Add #{LIGATION_VOLUME}uL from #{from.bold} into tube #{label.bold}"
            note "Close tube #{label.bold}"
            tubeA = make_tube(opentube, [DILUENT_A, from], "", "medium")
            transfer_image = transfer_to_ligation_tubes_with_highlight(
                tubeA, i, *op.output_tokens(OUTPUT), COLORS, LIGATION_VOLUME, "(#{P200_POST} pipette)")
            note display_svg(transfer_image, 0.6)
          end
        end
        # vortex_and_centrifuge_helper(LIGATION_SAMPLE,
        #                              op.temporary[:labels],
        #                              VORTEX_TIME,
        #                              CENTRIFUGE_TIME,
        #                              "to mix well.",
        #                              "to pull down liquid.",
        #                              img)


        # show do
        #   title "Mix ligation tubes #{op.temporary[:labels][0]} through #{op.temporary[:labels][-1]}"
        #   note display_svg(display_ligation_tubes(op.temporary[:input_kit], THIS_UNIT, COMPONENTS, op.temporary[:input_sample]), 0.5)
        #   warning "Make sure tubes are firmly closed before proceeding."
        #   check "Vortex #{pluralizer("tube", COMPONENTS.length)} for 5 seconds to mix well."
        #   warning "Make sure all powder is dissolved. Vortex for 10 more seconds to dissolve powder."
        #   check "Centrifuge #{pluralizer("tube", COMPONENTS.length)} for 5 seconds to pull down liquid."
        #   check "Place tubes back into the rack."
        # end
      end
    end

    # vortex_and_centrifuge_helper("tube set",
    #                              myops.map { |op| op.temporary[:label_string] },
    #                              VORTEX_TIME,
    #                              CENTRIFUGE_TIME,
    #                              "to mix well.",
    #                              "to pull down liquid.")
  end

  def add_template myops

    show do
      title "Get #{PCR_SAMPLE.pluralize(myops.length)} from #{THERMOCYCLER}"
      note "If thermocycler run is complete (infinite hold at 4C), hit cancel followed by yes. Take #{PCR_SAMPLE.pluralize(myops.length)} #{myops.map { |op| ref(op.input(INPUT).item).bold}.join(', ')} from the #{THERMOCYCLER}"
      note "If they have been stored, retrieve PCR samples from M20 4th shelf down red box and thaw"
      check "Position #{PCR_SAMPLE.pluralize(myops.length)} on #{BENCH_POST} in front of you."
      centrifuge_proc(PCR_SAMPLE, myops.map { |op| ref(op.input(INPUT).item) }, "3 seconds", "to pull down liquid.", AREA, balance = false)
    end

    gops = myops.group_by {|op| op.temporary[:input_kit_and_unit]}
    gops.each do |unit, ops|
      ops.each do |op|
        from = op.input_ref(INPUT)
        show do
          title "Position #{PCR_SAMPLE} #{from.bold} and #{LIGATION_SAMPLE.pluralize(COMPONENTS.length)} #{op.temporary[:label_string].bold} in front of you."
          note "In the next steps you will add #{PCR_SAMPLE} to #{pluralizer("tube", COMPONENTS.length)}"
          tube = make_tube(closedtube, [PCR_SAMPLE, from], "", "small")
          ligation_tubes = display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS)
          ligation_tubes.align!('bottom-left')
          ligation_tubes.align_with(tube, 'bottom-right')
          ligation_tubes.translate!(50)
          image = SVGElement.new(children: [tube, ligation_tubes], boundx: 1000, boundy: tube.boundy)
          image.translate!(50, -30)
          note display_svg(image, 0.75)
        end
        labels = op.output_refs(OUTPUT)
        labels.each.with_index do |label, i|
          show do
            raw transfer_title_proc(SAMPLE_VOLUME, from, label)
            # title "Add #{PCR_SAMPLE} #{from.bold} to #{LIGATION_SAMPLE} #{label}"
            warning "Change of pipette tip between tubes"
            note "Using a #{"P10"} pipette set to [0 1 2], add #{SAMPLE_VOLUME}uL from #{from.bold} into tube #{label.bold}"
            note "Close tube #{label.bold}"
            tube = make_tube(opentube, ["PCR Sample"], op.input_tube_label(INPUT), "small").scale(0.75)
            img = transfer_to_ligation_tubes_with_highlight(tube, i, *op.output_tokens(OUTPUT), COLORS, SAMPLE_VOLUME, "(#{P20_POST} pipette)")
            note display_svg(img, 0.6)
          end
        end

        # ligation_tubes_svg = display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS)
        # img = display_svg(ligation_tubes_svg, 0.7)
        # vortex_and_centrifuge_helper(LIGATION_SAMPLE,
        #                              op.output_refs(OUTPUT),
        #                              VORTEX_TIME,
        #                              CENTRIFUGE_TIME,
        #                              "to mix well.",
        #                              "to pull down liquid.",
        #                              img)
      end
    end
  end

  def start_ligation myops
    gops = myops.group_by {|op| op.temporary[:input_kit_and_unit]}
    ops = gops.map {|unit, ops| ops}.flatten # organize by unit
    # show do
    #   title "Place #{LIGATION_SAMPLE.pluralize(COMPONENTS.length)} into #{THERMOCYCLER}"
    #   check "Place #{pluralizer(LIGATION_SAMPLE, ops.length * COMPONENTS.length)} (#{ops.length} #{"set".pluralize(ops.length)} of #{COMPONENTS.length})" \
    #     " in the #{THERMOCYCLER}"
    #   check "Close and tighten the lid."
    #   ops.each do |op|
    #     note display_svg(display_ligation_tubes(*op.output_tokens(OUTPUT), COLORS), 0.5)
    #   end
    # end

    add_to_thermocycler("sample", ops.length * COMPONENTS.length, LIG_CYCLE, ligation_cycle_table, "Ligation")

    show do
      title "Set a timer for 45 minutes"
      #   check "Return to the #{PRE_PCR}."
      check "Find a timer and set it for 45 minutes. Continue to next step."
    end
  end

  def ligation_cycle_table
    t = Table.new()
    cycles_temp = "<table style=\"width:100%\">
                        <tr><td>95C</td></tr>
                        <tr><td>37C</td></tr>
          </table>"
    cycles_time = "<table style=\"width:100%\">
                        <tr><td>30 sec</td></tr>
                        <tr><td>4 min</td></tr>
          </table>"
    # t.add_column("STEP", ["Initial Melt", "10 cycles of", "Hold"])
    t.add_column("TEMP", ["95C", cycles_temp, "4C"])
    t.add_column("TIME", ["4 min", cycles_time, "forever"])
    t
  end

  def cleanup myops

    items = [INPUT].map {|x| myops.map {|op| op.input(x)}}.flatten.uniq
    item_refs = [INPUT].map {|x| myops.map {|op| op.input_ref(x)}}.flatten.uniq
    if KIT_NAME == "uw kit"
        item_refs = [] 
    end
    temp_items = ["diluent A"].map {|x| myops.map {|op| op.ref(x)}}.flatten.uniq

    all_refs = temp_items + item_refs

    show do
      title "Throw items into the #{WASTE_POST}"

      note "Throw the following items into the #{WASTE_POST} in the #{AREA}"
      t = Table.new
      t.add_column("Tube", all_refs)
      table t
    end
    # clean_area AREA
  end

  def conclusion myops
    if KIT_NAME == "uw kit"
        show do
            title "Please return PCR products"
            check "Place #{"sample".pluralize(myops.length)} #{myops.map { |op| op.input_ref(INPUT) }.join(', ')} in the M20 4th shelf down in the corresponding red box labeled #{"STORED USED 1B - 24B".quote.bold} or #{"STORE USED 25B - 48B".quote.bold}."
            image "Actions/OLA/map_Klavins.svg "
        end
    end
    show do
      title "Thank you!"
      warning "<h2>You must click #{"OK".quote.bold} to complete the protocol</h2>"
      check " After clicking #{"OK".quote.bold}, discard your gloves and wash your hands with soap. "
      note "The #{THERMOCYCLER} will be done in 50 minutes."
    end

  end
end

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object_types:
  - {name: OLASimple Synthetic DNA, description: OLASimple Synthetic DNA, handler: sample_container, unit: OLASimple Sample, release_method: return, prefix: M20OLA, sample_type_name: OLASimple Sample}
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operation_type: OLASimple PCR
category: OLASimple
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Patient Sample, sample_types: [OLASimple Sample, OLASimple Sample], object_types: [OLASimple Synthetic DNA, OLA lysed blood], routing: P}
  - {ftype: sample, role: output, name: PCR Product, sample_types: [OLASimple Sample], object_types: [OLA PCR], routing: P}
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documentation:
New Documentation

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cost_model:
def cost(op)
  { labor: 7.5, materials: 0 }
end

protocol:
##########################################
#
#
# OLASimple PCR
# author: Justin Vrana
# date: March 2018
#
#
##########################################

needs "OLASimple/OLAConstants"
needs "OLASimple/OLALib"
needs "OLASimple/OLAGraphics"

# TODO: There should be NO calculations in the show blocks

class Protocol
  include OLAConstants
  include OLALib
  include OLAGraphics

  ##########################################
  # INPUT/OUTPUT
  ##########################################
  INPUT = "Patient Sample"
  OUTPUT = "PCR Product"
  PACK = "PCR Pack"
  A = "Diluent A"

  ##########################################
  # TERMINOLOGY
  ##########################################

  ##########################################
  # Protocol Specifics
  ##########################################


  # TUBE LABELS ARE DIFF FOR NUTTADA
  # Nuttada: Introduction NO CELL LYSATE OR MENTION BLOOD (USE NONINFECTION SYNTHETIC DNA)
  # use only P200 pipette
  # change to P20 pipette
  # eliminate 10% bleach / 70% ethanol
  # eliminate timer from materials list
  # NUTTADA: R1 fridge, name pre-pcr bench
  # "Tear open package. There are two section. Tear open both "
  # throw error if two operations have same input item
  # change transfer images to P200
  # centrifuge sample after vortexing (after pcr rehydration)
  # Nuttada: cell lysate > DNA sample

  # Manually put in pack hash...
  PACK_HASH = {
      "Unit Name" => "B",
      "Components" => {
          "sample tube" => "A",
          "diluent A" => "B"
      },
      "PCR Rehydration Volume" => 40,
      "Number of Samples" => 2,
      "Number of Sub Packages" => 2,
  }

  AREA = PRE_PCR
  SAMPLE_VOLUME = 10 # volume of sample to add to PCR mix
  PCR_MIX_VOLUME = PACK_HASH["PCR Rehydration Volume"] # volume of water to rehydrate PCR mix in
  CENTRIFUGE_TIME = "5 seconds" # time to pulse centrifuge to pull down dried powder
  VORTEX_TIME = "5 seconds" # time to pulse vortex to mix

  # for debugging
  PREV_COMPONENT = "K"
  PREV_UNIT = "A"


  TUBE_CAP_WARNING = "Check to make sure tube caps are completely closed."

  component_to_name_hash = {
      "diluent A" => "Diluent A",
      "sample tube" => "PCR sample"
  }

  MATERIALS = [
      "P200 pipette and filtered tips",
      "P20 pipette and filtered tips",
      "a timer",
      "nitrile gloves (wear tight gloves to reduce contamination risk)",
      "pre-PCR rack",
      "a balancing tube (on rack)",
      "biohazard waste (red bag)",
      "vortex",
      "centrifuge",
  ]
  
  
  SAMPLE_ALIAS = if KIT_NAME == "uw kit" then "DNA Sample" else CELL_LYSATE end

  ##########################################
  # ##
  # Input Restrictions:
  # Input needs a kit, unit, components,
  # and sample data associations to work properly
  ##########################################


  def main


    operations.running.retrieve interactive: false
    save_user operations
    debug_setup(operations) if debug
    
    if KIT_NAME == "uw kit"
        if debug
            labels = "ABCDEF".split('')
            operations.each.with_index do |op, i|
                op.input(INPUT).item.associate(SAMPLE_KEY, labels[i])  
                op.input(INPUT).item.associate(COMPONENT_KEY, "")  
            end
        end
    end
    
    save_temporary_input_values(operations, INPUT)
    operations.each do |op|
      op.temporary[:pack_hash] = PACK_HASH
    end
    save_temporary_output_values(operations)
    
    # reassign labels to sample numbers if uw kit
    if KIT_NAME == "uw kit"
        operations.each do |op|
            op.temporary[:output_sample] = {"A"=>1, "B"=>2}[op.temporary[:output_sample]]
        end 
    end
    
    run_checks operations
    if KIT_NAME == "uw kit"
        uw_kit_introduction operations.running
    else
        kenya_kit_introduction operations.running
    end
    area_preparation "pre-PCR", MATERIALS, POST_PCR
    get_pcr_packages operations.running
    open_pcr_packages operations.running
    debug_table operations.running
    check_for_tube_defects sorted_ops.running
    # nuttada thaw
    # nuttada needs vortex + centrigure
    centrifuge_samples sorted_ops.running
    resuspend_pcr_mix sorted_ops.running
    add_template_to_master_mix sorted_ops.running
    cleanup sorted_ops
    start_thermocycler sorted_ops.running
    conclusion sorted_ops
    return {}
  end # main

  # end of main


  #######################################
  # Utilities
  #######################################
  def save_user ops
    ops.each do |op|
      username = get_technician_name(self.jid)
      op.associate(:technician, username)
    end
  end

  def debug_setup ops
    # make an alias for the inputs
    if debug
      ops.each do |op|
        kit_num = rand(1..60)
        make_alias(op.input(INPUT).item, kit_num, PREV_UNIT, PREV_COMPONENT, 1)
        # op.input(PACK).item.associate(KIT_KEY, kit_num)
      end

      if ops.length >= 2
        i = ops[-1].input(INPUT).item
        alias_array = get_alias_array(i)
        alias_array[3] = if (alias_array[3] == 1) then
                           2
                         else
                           1
                         end
        make_alias(ops[0].input(INPUT).item, *alias_array)

        # kit_num = ops[-1].input(PACK).item.get(KIT_KEY)
        # ops[0].input(PACK).item.associate(KIT_KEY, kit_num)
      end
    end
  end

  def run_checks myops
    if operations.running.empty?
      show do
        title "All operations have errored"
        note "Contact #{SUPERVISOR}"
        operations.each do |op|
          note "#{op.errors.map {|k, v| [k, v]}}"
        end
      end
      return {}
    end
  end

  def sorted_ops
    operations.sort_by {|op| op.output_ref(OUTPUT)}.extend(OperationList)
  end

  #######################################
  # Instructions
  #######################################
 
  def uw_kit_introduction ops
    username = get_technician_name(self.jid).color("darkblue")
    kit_nums = ops.map {|op| op.input(INPUT).item.get(KIT_KEY)}.uniq
    samples = "#{ops.length} #{"sample".pluralize(ops.length)}"
    kits = "#{kit_nums.length} #{"kit".pluralize(kit_nums.length)}"
    show do
      title "Welcome #{username} to OLASimple PCR"
      note "You will be running the OLASimple PCR protocol. In this protocol, you will start with non-infectious, synthetic DNA. " \
           "You will generate PCR products from the samples and use them later to detect HIV mutations."
     check "OLASimple PCR assay is highly sensitive. If the space is not clean, this could cause false positive. Before proceeding this step, check with your assigner if the space and pipettes have been wiped with 10% bleach and 70% ethanol"
      note "You will be running #{samples} from #{kits}."
      note "Click <b>OK</b> in the upper right corner to start the protocol."
    end
  end
  
  def kenya_kit_introduction ops
    username = get_technician_name(self.jid).color("darkblue")
    kit_nums = ops.map {|op| op.input(INPUT).item.get(KIT_KEY)}.uniq
    samples = "#{ops.length} #{"sample".pluralize(ops.length)}"
    kits = "#{kit_nums.length} #{"kit".pluralize(kit_nums.length)}"
    show do
      title "Welcome #{username} to OLASimple PCR"
      note "You will be running the OLASimple PCR protocol. In this protocol, you will start with #{CELL_LYSATE}. " \
           "You will generate PCR products from the samples and use them later to detect HIV mutations."
      note "You will be running #{samples} from #{kits}."
      note "Click <b>OK</b> in the upper right corner to start the protocol."
    end
  end

  def get_pcr_packages myops
    # TODO: remove all references to 4C fridge and replace with refridgerator
    gops = group_packages(myops)
    show do
      title "Take #{PCR_PKG_NAME.pluralize(gops.length)} from the #{FRIDGE_PRE} and place on the #{BENCH_PRE} in the #{AREA}"
      # check "Take the following from the #{FRIDGE} and place #{pluralizer(PACKAGE, gops.length)} on the #{BENCH}"
      gops.each do |unit, ops|
        check "Take " "#{PACKAGE_PRE} #{unit.bold}" " from fridge."
        check "Place " "#{PACKAGE_PRE} #{unit.bold}" " on the bench." 
        check "Put on a new pair of gloves. Your gloves might have picked up some DNA that could contaminate your assay."
      end
    end
  end

  def open_pcr_packages myops
    grouped_by_unit = myops.group_by {|op| op.temporary[:output_kit_and_unit]}
    grouped_by_unit.each do |kit_and_unit, ops|
      ops.each do |op|
        op.make_item_and_alias(OUTPUT, "sample tube", INPUT)
      end



      show_open_package(kit_and_unit, "", ops.first.temporary[:pack_hash][NUM_SUB_PACKAGES_FIELD_VALUE]) do
          # img
          tube_labels = ops.map {|op| op.output_ref(OUTPUT)}
          tube_labels += ops.map {|op| op.ref("diluent A")}
          tube_labels.uniq.sort!
    
          num_samples = ops.first.temporary[:pack_hash][NUM_SAMPLES_FIELD_VALUE]
          kit, unit, component, sample = ops.first.output_tokens(OUTPUT)
          # diluentATube = label_tube(closedtube, tube_label(kit, unit, diluentAcomponent, ""))
          diluentATube = self.make_tube(closedtube, "Diluent A", ops.first.tube_label("diluent A"), "medium", true)
    
          grid = SVGGrid.new(num_samples, 1, 75, 10)
          num_samples.times.each do |i|
            pcrtube = self.make_tube(closedtube, "", ["#{kit}#{unit}", "#{component}#{i + 1}"], "powder", true).scale(0.75)
            grid.add(pcrtube, i, 0)
          end
          grid.boundy = closedtube.boundy * 0.75
          grid.align_with(diluentATube, 'center-right')
          grid.align!('center-left')
          grid.translate!(25, 25)
          img = SVGElement.new(children: [diluentATube, grid], boundy: diluentATube.boundy + 50, boundx: 300).translate!(20)
        
        check "Look for #{num_samples + 1} #{"tube".pluralize(num_samples)}" # labeled #{tube_labels.join(', ').bold}"
        check "Place tubes on a rack"
        note display_svg(img, 0.75)
      end
    end
  end

  def debug_table myops
    if debug
      show do
        title "DEBUG: I/O Table"

        table myops.running.start_table
                  .custom_column(heading: "Input Kit") {|op| op.temporary[:input_kit]}
                  .custom_column(heading: "Output Kit") {|op| op.temporary[:output_kit]}
                  .custom_column(heading: "Input Unit") {|op| op.temporary[:input_unit]}
                  .custom_column(heading: "Output Unit") {|op| op.temporary[:output_unit]}
                  .custom_column(heading: "Diluent A") {|op| op.ref("diluent A")}
                  .custom_column(heading: "Input Ref") {|op| op.input_ref(INPUT)}
                  .custom_column(heading: "Output Ref") {|op| op.output_ref(OUTPUT)}
                  .end_table
      end
    end
  end

  def centrifuge_samples ops
    labels = ops.map {|op| ref(op.output(OUTPUT).item)}
    diluentALabels = ops.map {|op| op.ref("diluent A")}
    show do
        title "Obtain samples from your assigner."
        check "Do the samples match your kit number?"
        check "Vortex sample tubes for 5 seconds."
    end
    show do
        title "Centrifuge all samples for 5 seconds" 
        check "Place diluent A (BB), balancing tube, PCR dried reagents (BA1, BA2), and DNA samples (AA and AB) in the centrifuge. It is important to balance all the tubes."
        image "Actions/OLA/centrifuge.svg"
        check "Centrifuge the tubes for 5 seconds to pull down liquid and dried reagents"
    end
    # centrifuge_helper("sample", labels, CENTRIFUGE_TIME,
    #                   "to pull down dried powder.",
    #                   "There may be dried powder on the inside of the tube #{"lid".pluralize(labels.length)}.")
    # centrifuge_helper("tube", diluentALabels, CENTRIFUGE_TIME,
    #                   "to pull down liquid.")
  end

  def resuspend_pcr_mix myops
    gops = group_packages(myops)
    gops.each do |unit, ops|
      from = ops.first.ref("diluent A")
      ops.each do |op|
        to_item = op.output(OUTPUT).item
        to = ref(to_item)
        tubeA = make_tube(opentube, [DILUENT_A, from], "", fluid = "medium")
        tubeP = make_tube(opentube, [PCR_SAMPLE, to], "", fluid = "powder").scale!(0.75)
        img = make_transfer(tubeA, tubeP, 250, "#{PCR_MIX_VOLUME}uL", "(#{P200_PRE} pipette)")
        img.translate!(25)
        show do
          raw transfer_title_proc(PCR_MIX_VOLUME, from, to)
          # title "Add #{PCR_MIX_VOLUME}uL from #{DILUENT_A} #{from.bold} to #{PCR_SAMPLE} #{to.bold}"
          note "#{DILUENT_A} will be used to dissolve the powder in the #{PCR_SAMPLE}."
          note "Use a #{P200_PRE} pipette and set it to [0 4 0]."
          note "Avoid touching the inside of the lid, as this could cause contamination. "
          note "Dispose of pipette tip."
          note display_svg(img, 0.75)
        end
      end

      # TODO: add "make sure tube caps are completely closed" for any centrifugation or vortexing step.
      #
    end

    labels = myops.map {|op| ref(op.output(OUTPUT).item)}
    vortex_and_centrifuge_helper("sample",
                                 labels,
                                 VORTEX_TIME, CENTRIFUGE_TIME,
                                 "to mix.", "to pull down liquid", AREA, mynote = nil)

  end

  def add_template_to_master_mix myops
    gops = group_packages(myops)

    # # TODO: Should this be moved to the preparation area?
    # show do
    #   title "Place #{SAMPLE_ALIAS.bold} samples in #{AREA.bold}."
    #
    #   note "Place the following #{SAMPLE_ALIAS.bold} samples into a rack in the #{AREA.bold}."
    #   t = Table.new
    #   t.add_column("Tube", myops.map {|op| ref(op.input(INPUT).item)})
    #   table t
    #   # check "Wipe with a #{WIPE}"
    # end

    gops.each do |unit, ops|
      samples = ops.map {|op| op.input(INPUT).item}
      sample_refs = samples.map {|sample| ref(sample)}
      ops.each do |op|
        from = ref(op.input(INPUT).item)
        to = ref(op.output(OUTPUT).item)
        show do
          raw transfer_title_proc(SAMPLE_VOLUME, "#{SAMPLE_ALIAS} #{from}", "#{PCR_SAMPLE} #{to}")
          warning "<h1>Labels look very similar. Read the label three times before proceeding.<h1\>"
          note "Carefully open tube #{from.bold} and tube #{to.bold}"
          note "Use a #{P20_PRE} pipette and set it to [1 0 0]."
          warning "Close both tubes and dispose of pipette tip."
          tubeS = make_tube(opentube, [SAMPLE_ALIAS, from], "", fluid = "medium")
          tubeP = make_tube(opentube, [PCR_SAMPLE, to], "", fluid = "medium").scale!(0.75)
          img = make_transfer(tubeS, tubeP, 250, "#{SAMPLE_VOLUME}uL", "(#{P20_PRE} pipette)")
          img.translate!(25)
          note display_svg(img, 0.75)

        end

        # show do
        #   title "Mix and vortex #{PCR_SAMPLE} #{to.bold}"

        #   warning TUBE_CAP_WARNING
        #   check "Vortex #{pluralizer("sample", 1)} for #{VORTEX_TIME} to mix."
        #   check "Centrifuge #{pluralizer("sample", ops.length)} for #{CENTRIFUGE_TIME} to pull down liquid."
        # end
      end
    end
  end

  def start_thermocycler ops
    # Adds the PCR tubes to the PCR machine.
    # Instructions for PCR cycles.
    #
    samples = ops.map {|op| op.output(OUTPUT).item}
    sample_refs = samples.map {|sample| ref(sample)}

    # show do
    #   title "Bring #{pluralizer(PCR_SAMPLE, ops.length)} to the #{POST_PCR.bold} area"
    #   check "Walk #{"tube".pluralize(ops.length)} #{ops.map {|op| ref(op.output(OUTPUT).item).bold}.join(', ')} to the #{POST_PCR.bold} area"
    #   image "Actions/OLA/map_Klavins.svg" if KIT_NAME == "uw kit"
    # end

    # END OF PRE_PCR PROTOCOL

    vortex_and_centrifuge_helper(PCR_SAMPLE,
                                 ops.map {|op| ref(op.output(OUTPUT).item)},
                                 VORTEX_TIME, CENTRIFUGE_TIME,
                                 "to mix.", "to pull down liquid", AREA, mynote = nil)


    # show do
    #   title "Place #{PCR_SAMPLE.pluralize(ops.length)} in #{THERMOCYCLER}, close and tighten the lid."
    # end

    t = Table.new()
    cycles_temp = "<table style=\"width:100%\">
                    <tr><td>95C</td></tr>
                    <tr><td>57C</td></tr>
                    <tr><td>72C</td></tr>
      </table>"
    cycles_time = "<table style=\"width:100%\">
                    <tr><td>30 sec</td></tr>
                    <tr><td>30 sec</td></tr>
                    <tr><td>30 sec</td></tr>
      </table>"
    t.add_column("STEP", ["Initial Melt", "45 cycles of", "Extension", "Hold"])
    t.add_column("TEMP", ["95C", cycles_temp, "72C", "4C"])
    t.add_column("TIME", ["4 min", cycles_time, "7 min", "forever"])
    
    
    show do
        title "Run PCR"
        check "Talk to your assigner which thermocycler to use"
        check "Close all the lids of the pipette tip boxes and pre-PCR rack"
        check "Take only the PCR tubes (BA1 and BA2) with you"
        check "Place the PCR samples in the assigned thermocycler, close, and tighten the lid"
        check "Select the program named #{PCR_CYCLE} under OS"
        check "Hit #{"Run".quote} and #{"OK to 50uL".quote}"
        table t
    end
    
    operations.each do |op|
      op.output(OUTPUT).item.move THERMOCYCLER
    end

    # END OF POST_PCR PCR REACTION...
  end

  def cleanup myops

    items = [INPUT].map {|x| myops.map {|op| op.input(x)}}.flatten.uniq
    item_refs = [INPUT].map {|x| myops.map {|op| op.input_ref(x)}}.flatten.uniq
    # if KIT_NAME == "uw kit"
    #     item_refs = [] 
    # end
    temp_items = ["diluent A"].map {|x| myops.map {|op| op.ref(x)}}.flatten.uniq

    all_refs = temp_items + item_refs

    show do
      title "Throw items into the #{WASTE_PRE}"

      note "Throw the following items into the #{WASTE_PRE}"
      t = Table.new
      t.add_column("Tube".bold, all_refs)
      table t
    end
    # clean_area AREA
  end

  def conclusion myops
    # if KIT_NAME == "uw kit"
    #     show do 
    #         title "Please return DNA tubes"
    #         check "Please return tubes #{myops.map { |op| op.input_ref(INPUT).bold}.join(', ')} to the <b>M20 \"BOX 1A-60D\"</b>"
    #         image "Actions/OLA/map_Klavins.svg "
    #     end
    # end
    show do
      title "Thank you!"
      warning "<h2>You must click #{"OK".quote.bold} to complete the protocol</h2>"
      check " After clicking #{"OK".quote.bold}, discard your gloves and wash your hands with soap. "
      note "You may start the next protocol in 2 hours."
    end
  end


end # Class

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object_types:
  - {name: OLA Detection Strips, description: OLA Detection STrips, handler: collection, unit: strip, release_method: return, rows: 1, columns: 12}
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operation_type: OLASimple Paper Detection
category: OLASimple
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Ligation Product, sample_types: [OLASimple Sample], object_types: [OLA Ligation Stripwell], routing: LP}
  - {ftype: sample, role: output, name: Detection Strip, sample_types: [OLASimple Sample], object_types: [OLA Detection Strips], routing: LP}
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cost_model:
def cost(op)
  { labor: 12.5, materials: 0 }
end

protocol:
##########################################
#
#
# OLASimple Detection
# author: Justin Vrana
# date: March 2018
#
#
##########################################

needs "OLASimple/OLAConstants"
needs "OLASimple/OLALib"
needs "OLASimple/OLAGraphics"

class Protocol
  include OLAConstants
  include OLALib
  include OLAGraphics

#   ##########################################
#   # INPUT/OUTPUT
#   ##########################################
#   F
  INPUT = "Ligation Product"
  OUTPUT = "Detection Strip"
  PACK = "Detection Pack"
  A = "Diluent A"
  G = "Gold Mix"
  S = "Stop Mix"

#   ##########################################
#   # TERMINOLOGY
#   ##########################################

#   ##########################################
#   # Protocol Specifics
#   ##########################################
  AREA = POST_PCR
  NUM_SUB_PACKAGES = 4

#   # 6 codons,
#   # GOLD_VOLUME = 600
#   # STOP_VOLUME = 36
#   # STOP_TO_SAMPLE_VOLUME = 2.4
#   # SAMPLE_TO_STRIP_VOLUME = 24
#   # GOLD_TO_STRIP_VOLUME = 40

#   # VOLUMES WILL CHANGES FOR 6 codons!!!!
  CENTRIFUGE_TIME = "5 seconds" # time to pulse centrifuge to pull down dried powder
  VORTEX_TIME = "5 seconds" # time to pulse vortex to mix
  TUBE_CAP_WARNING = "Check to make sure tube caps are completely closed."
  PACK_HASH = DETECTION_UNIT
  STOP_VOLUME = PACK_HASH["Stop Rehydration Volume"]
  GOLD_VOLUME = PACK_HASH["Gold Rehydration Volume"]
  STOP_TO_SAMPLE_VOLUME = PACK_HASH["Stop to Sample Volume"]  # volume of competitive oligos to add to sample
  SAMPLE_TO_STRIP_VOLUME = PACK_HASH["Sample to Strip Volume"] # volume of sample to add to the strips
  GOLD_TO_STRIP_VOLUME = PACK_HASH["Gold to Strip Volume"]
  PREV_COMPONENTS = PACK_HASH["Components"]["strips"]
  PREV_UNIT = "C"
  MATERIALS =  [
      "P1000 pipette and filtered tips",
      "P200 pipette and filtered tips",
      "P20 pipette and filtered tips",
      "a spray bottle of 10% v/v bleach",
      "a spray bottle of 70% v/v ethanol",
      "a timer",
      "nitrile gloves"
  ]
  
  POSITIVE = "positive"
  NEGATIVE = "negative"
  DEBUG_UPLOAD_ID = 3

##########################################
# ##
# Input Restrictions:
# Input needs a kit, unit, components,
# and sample data associations to work properly
##########################################

  def main
    operations.each do |op|
      op.temporary[:pack_hash] = PACK_HASH
    end
    save_user operations
    operations.running.retrieve interactive: false
    debug_setup operations
    save_temporary_input_values(operations, INPUT)
    save_temporary_output_values(operations)
    introduction operations.running
    area_preparation POST_PCR, MATERIALS, PRE_PCR
    get_detection_packages operations.running
    open_detection_packages operations.running
    rehydrate_stop_solution sorted_ops.running
    wait_for_pcr sorted_ops.running
    stop_ligation_product sorted_ops.running
    # short_timer
    rehydrate_gold_solution sorted_ops.running
    display_detection_strip_diagram
    add_ligation_product_to_strips sorted_ops.running
    add_gold_solution sorted_ops.running
    read_from_scanner sorted_ops.running
    
    analysis operations.running 
    
    cleanup sorted_ops
    conclusion sorted_ops
    return {"Ok" => 1}
  end

  def sorted_ops
    operations.sort_by {|op| op.output_ref(OUTPUT)}.extend(OperationList)
  end

  def save_user ops
    ops.each do |op|
      username = get_technician_name(self.jid)
      op.associate(:technician, username)
    end
  end

  def debug_setup ops
    # make an alias for the inputs
    if debug
      ops.each do |op|
        kit_num = rand(1..60)
        INPUT
        PREV_UNIT
        PREV_COMPONENTS
        make_alias(op.input(INPUT).item, kit_num, PREV_UNIT, PREV_COMPONENTS, 1)
        # op.input(PACK).item.associate(KIT_KEY, kit_num)
      end

      if ops.length >= 2
        i = ops[-1].input(INPUT).item
        alias_array = get_alias_array(i)
        alias_array[3] = if (alias_array[3] == 1) then 2 else 1 end
        make_alias(ops[0].input(INPUT).item, *alias_array)

        # kit_num = ops[-1].input(PACK).item.get(KIT_KEY)
        # ops[0].input(PACK).item.associate(KIT_KEY, kit_num)
      end
    end
  end

  def run_checks myops
    if operations.running.empty?
      show do
        title "All operations have errored"
        note "Contact #{SUPERVISOR}"
        operations.each do |op|
          note "#{op.errors.map {|k, v| [k, v]}}"
        end
      end
      return {}
    end
  end

  def introduction myops
    username = get_technician_name(self.jid).color("darkblue")
    show do
      title "Welcome #{username} to OLASimple Paper Detection procotol"
      note "In this protocol you will be adding samples from the ligation protocol onto paper detection strips. " \
            "You will then scan an image of the strips and upload the image. The strips will detect whether the sample has drug resistance mutations."
      check "Put on gloves."      
      note "Click \"OK\" to start the protocol."
    end
  end

  def get_detection_packages(myops)
    gops = group_packages(myops)
    show do
      title "Get #{DET_PKG_NAME.pluralize(gops.length)} from the #{FRIDGE_POST}"
      gops.each do |unit, ops|
        check "package #{unit.bold}"
      end
      check "Place #{pluralizer('package', gops.length)} on the bench in the #{AREA.bold} area."
    end
  end

  def open_detection_packages(myops)
    grouped_by_unit = myops.running.group_by {|op| op.temporary[:output_kit_and_unit]}
    grouped_by_unit.each do |unit, ops|
      ops.each do |op|
        op.make_collection_and_alias(OUTPUT, "strips", INPUT)
      end

      ops.each do |op|
        op.temporary[:label_string] = "#{op.output_refs(OUTPUT)[0]} through #{op.output_refs(OUTPUT)[-1]}"
      end

      #ljklakjdlkaj
      #Ljlkj

      tokens = ops.first.output_tokens(OUTPUT)
      num_samples = ops.first.temporary[:pack_hash][NUM_SAMPLES_FIELD_VALUE]

      grid = SVGGrid.new(num_samples, num_samples, 50, 50)
      num_samples.to_int.times.each do |i|
        _tokens = tokens.dup
        _tokens[-1] = i + 1
        grid.add(display_strip_panel(*_tokens, COLORS).scale!(0.5), i, i)
      end

      diluentATube = self.make_tube(closedtube, "Diluent A", ops.first.tube_label("diluent A"), "medium", true).scale!(0.75)
      stopTube = self.make_tube(closedtube, "Stop mix", ops.first.tube_label("stop"), "powder", true).scale!(0.75)
      goldTube = self.make_tube(closedtube, "Gold mix", ops.first.tube_label("gold"), "powder", true, fluidclass: "pinkfluid").scale!(0.75)
      diluentATube.translate!(50, 75)
      goldTube.align_with(diluentATube, 'top-right').translate!(50)
      stopTube.align_with(goldTube, 'top-right').translate!(50)
      img = SVGElement.new(children: [grid, diluentATube, goldTube, stopTube], boundx: 500, boundy: 220)
      img

      show_open_package(unit, "", NUM_SUB_PACKAGES) do
        note "Check that there are the following tubes and #{STRIPS}:"
        note display_svg(img, 1.0)
      end
    end

  end

  def rehydrate_stop_solution myops
    gops = group_packages(myops)
    gops.each do |unit, ops|
      from = ops.first.ref("diluent A")
      to = ops.first.ref("stop")
      show do
        raw transfer_title_proc(STOP_VOLUME, from, to)
        check "Centrifuge tube #{to} for 5 seconds to pull down powder."
        check "Set a #{P200_POST} pipette to [0 3 6]. Add #{STOP_VOLUME}uL from #{from.bold} into tube #{to.bold}"
        tubeA = make_tube(opentube, DILUENT_A, ops.first.tube_label("diluent A"), "medium")
        tubeS = make_tube(opentube, STOP_MIX, ops.first.tube_label("stop"), "powder")
        img = make_transfer(tubeA, tubeS, 200, "#{STOP_VOLUME}uL", "(#{P200_POST} pipette)")
        img.translate!(20)
        note display_svg(img, 0.75)
      end

      vortex_and_centrifuge_helper("tube",
                                   [to],
                                   VORTEX_TIME, CENTRIFUGE_TIME,
                                   "to mix.", "to pull down liquid", AREA, mynote = nil)
    end
  end

  def wait_for_pcr myops
    show do
      title "Wait for thermocycler to finish"

      note "The thermocycler containing the #{LIGATION_SAMPLE.pluralize(5)} needs to complete before continuing"
      check "Check the #{THERMOCYCLER} to see if the samples are done."
      bullet "If the cycle is at \"hold at 4C\" then it is done. If it is done, hit CANCEL followed by YES. If not, continue waiting."
      note "Else, if your ligation sample has been stored, retrieve from M20, 4th shelf down, green box."
      warning "Do not proceed until the #{THERMOCYCLER} is finished."
    end
  end

  def stop_ligation_product myops
    gops = myops.group_by { |op| op.temporary[:output_kit_and_unit] }
    num_tubes = myops.inject(0) { |sum, op| sum + op.output_refs(OUTPUT).length }
    # ordered_ops = gops.map {|unit, ops| ops}.flatten.extend(OperationList) # organize by unit
    show do
      title "Take #{pluralizer("sample", num_tubes)} from the #{THERMOCYCLER} and place on rack in #{AREA.bold} area"
      check "Centrifuge for 5 seconds to pull down liquid"
      check "Place on rack in post-PCR area"

      gops.each do |unit, ops|
        ops.each do |op|
          note display_svg(display_ligation_tubes(*op.input_tokens(INPUT), COLORS), 0.75)
        end
      end
    end

    gops.each do |unit, ops|
      from = ops.first.ref("stop")
      ops.each do |op|
        to_labels = op.input_refs(INPUT)
        show do
          # title "Get ready to add #{STOP_MIX} to #{LIGATION_SAMPLE.pluralize(MUTATIONS.length)} for #{unit}"
          title "Position #{STOP_MIX} #{from.bold} and colored tubes #{op.input_refs(INPUT)[0].bold} to #{op.input_refs(INPUT)[-1].bold} in front of you."
          note "In the next steps you will add #{STOP_MIX} to #{pluralizer("tube", PREV_COMPONENTS.length)}"
          tube = closedtube.scale(0.75)
          tube.translate!(0, -50)
          tube = tube.g
          tube.g.boundx = 0
          labeled_tube = make_tube(closedtube, STOP_MIX, op.tube_label("stop"), "medium", true)
          ligation_tubes = display_ligation_tubes(*op.input_tokens(INPUT), COLORS)
          ligation_tubes.align!('bottom-left')
          ligation_tubes.align_with(tube, 'bottom-right')
          ligation_tubes.translate!(50)
          image = SVGElement.new(children: [labeled_tube, ligation_tubes], boundx: 600, boundy: tube.boundy)
          image.translate!(50)
          image.boundy = image.boundy + 50
          note display_svg(image, 0.75)
        end

        to_labels.each.with_index do |label, i|
          show do
            raw transfer_title_proc(STOP_TO_SAMPLE_VOLUME, from, label)
            # title "Add #{STOP_TO_SAMPLE_VOLUME}uL #{STOP_MIX} #{from.bold} to #{LIGATION_SAMPLE} #{label}"
            note "Set a #{P20_POST} pipette to [0 2 4]. Add #{STOP_TO_SAMPLE_VOLUME}uL from #{from.bold} into tube #{label.bold}"
            note "Close tube #{label}."
            note "Discard pipette tip."
            tubeS = make_tube(opentube, STOP_MIX, op.tube_label("stop"), "medium")
            transfer_image = transfer_to_ligation_tubes_with_highlight(
                tubeS, i, *op.input_tokens(INPUT), COLORS, STOP_TO_SAMPLE_VOLUME, "(#{P20_POST} pipette)")
            note display_svg(transfer_image, 0.75)
          end
        end
      end
    end
    
    show do
      title "Vortex and centrifuge all 12 tubes for 5 seconds."
      check "Vortex for 5 seconds."
      check "Centrifuge for 5 seconds."
      note "This step is important to avoid FALSE POSITIVE."
    end

    t = Table.new()
    t.add_column("STEP", ["Initial Melt", "Annealing"])
    t.add_column("TEMP", ["95C", "37C"])
    t.add_column("TIME", ["30s", "4 min"])
    add_to_thermocycler("tube", myops.length * PREV_COMPONENTS.length, STOP_CYCLE, t, "Stop Cycle")
  end

  def short_timer
    show do
      title "Set timer for 6 minutes"
      check "Set a timer for 6 minutes. This will notify you when the thermocycler is done."
      timer initialize: {minute: 6}
      check "Click the \"<b>play</b>\" button on the left. Proceed to next step now."
    end
  end

  def display_detection_strip_diagram
    show do
      title "Review detection #{STRIP} diagram"
      note "In the next steps you will be adding ligation mixtures followed by the gold solutions to the detection strips."
      note "You will pipette into the <b>Port</b>. After pipetting, you should see the <b>Reading Window</b> become wet after a few minutes."
      warning "Do not add liquid directly to the <b>Reading Window</b>"
      note display_svg(detection_strip_diagram, 0.75)
    end
  end

  def add_ligation_product_to_strips myops
    gops = group_packages(myops)

    show do
      title "Wait for stop cycle to finish (5 minutes)."
      check "Wait for the #{THERMOCYCLER} containing your samples to finish. "
      bullet "If the #{THERMOCYCLER} beeps, it is done. If not, continue waiting."
      check "Once the #{THERMOCYCLER} finishes, IMMEDIATELY continue to the next step."
      check "Take all #{pluralizer("sample", myops.length * PREV_COMPONENTS.length)} from the #{THERMOCYCLER}."
      check "Vortex #{"sample".pluralize(PREV_COMPONENTS.length)} for 5 seconds to mix."
      check "Centrifuge #{"sample".pluralize(PREV_COMPONENTS.length)} for 5 seconds to pull down liquid"
      check "Place on rack in the #{POST_PCR.bold} area."
    end

    timer_set = false
    gops.each do |unit, ops|
      ops.each do |op|
        kit = op.temporary[:output_kit]
        sample = op.temporary[:output_sample]
        panel_unit = op.temporary[:output_unit]
        tube_unit = op.temporary[:input_unit]
        show do
          title "Arrange #{STRIPS} and tubes" # for sample 1?
          note "Place the detection #{STRIPS} and #{LIGATION_SAMPLE.pluralize(PREV_COMPONENTS.length)} as shown in the picture:"
          note display_svg(display_panel_and_tubes(kit, panel_unit, tube_unit, PREV_COMPONENTS, sample, COLORS).translate!(50), 0.6)
        end

        show do
          title "For each colored tube, add #{SAMPLE_TO_STRIP_VOLUME}uL of #{LIGATION_SAMPLE} to the sample port of each #{STRIP}."
          warning "<h2>Set a 5 minute timer after adding ligation sample to <b>FIRST A1</b> strip at the SAMPLE PORT.</h2>" unless timer_set
          warning "<h2>Add the rest of ligation samples to the rest of strips and then immediately click OK</h2>"
          timer_set = true
          #   check "Set a 5 minute timer" unless set_timer
          check "Set a #{P200_POST} pipette to [0 2 4]. Add #{SAMPLE_TO_STRIP_VOLUME}uL of <b>each</b> #{LIGATION_SAMPLE} to the corresponding #{STRIP}."
          note "Match the sample tube color with the #{STRIP} color. For example, match #{op.input_refs(INPUT)[0].bold} to #{op.output_refs(OUTPUT)[0].bold}"
        #   note "After adding the first sample, set the timer for 5 minutes"
          warning "Dispose of pipette tip and close tube after each strip."
          tubes = display_ligation_tubes(*op.input_tokens(INPUT), COLORS, (0..PREV_COMPONENTS.length - 1).to_a, [], 90)
          panel = display_strip_panel(*op.output_tokens(OUTPUT), COLORS)
          tubes.align_with(panel, 'center-bottom')
          tubes.align!('center-top')
          tubes.translate!(50, -50)
          img = SVGElement.new(children: [panel, tubes], boundy: 330, boundx: panel.boundx)
          note display_svg(img, 0.6)
        end
      end
    end
    show do
          title "Check to see if strips are wetting"
          note "You should see the strip become wet in reading window "
          note "If strips are not wetting after 2 minutes, contact #{SUPERVISOR}"
          warning "Do not continue until all strips are fully wet."
     end

  end

  def rehydrate_gold_solution myops
    gops = group_packages(myops)
    gops.each do |unit, ops|
      from = ops.first.ref("diluent A")
      to = ops.first.ref("gold")

      show do
        raw transfer_title_proc(GOLD_VOLUME, from, to)
        # title "Add #{GOLD_VOLUME}uL of #{DILUENT_A} #{from.bold} to #{GOLD_MIX} #{to.bold}"
        raw centrifuge_proc(GOLD_MIX, [to], CENTRIFUGE_TIME, "to pull down dried powder.", AREA)
        note "Set a #{P1000_POST} pipette to [ 0 6 0]. Add #{GOLD_VOLUME}uL from #{from.bold} into tube #{to.bold}."
        raw vortex_proc(GOLD_MIX, [to], "10 seconds", "to mix well.")
        warning "Make sure #{GOLD_MIX} is fully dissolved."
        warning "Do not centrifuge #{to.bold} after vortexing."
        tubeA = make_tube(opentube, DILUENT_A, ops.first.tube_label("diluent A"), "medium")
        tubeG = make_tube(opentube, GOLD_MIX, ops.first.tube_label("gold"), "powder", fluidclass: "pinkfluid")
        img = make_transfer(tubeA, tubeG, 200, "#{GOLD_VOLUME}uL", "(#{P1000_POST} pipette)")
        img.translate!(20)
        note display_svg(img, 0.75)
      end
    end
  end

  def add_gold_solution myops
    gops = group_packages(myops)
    set_timer = false

    show do
      title "Wait until 5 minute timer ends"
      warning "Do not proceed before 5 minute timer is up."
      note "The strips need a chance to become fully wet."
    end

    gops.each do |unit, ops|
        show do
            title "Add gold solution to #{pluralizer(STRIP, PREV_COMPONENTS.length * ops.length)}" 
            warning "<h2>Set a 10 minute timer after adding gold to <b>FIRST A1</b> strip at the SAMPLE PORT.</h2>"
            warning "<h2> Add gold to the rest of strips and then immediately click OK."
            warning "<h2> DO NOT add gold solution onto the reading window."
            check "Set a #{P200_POST} pipette to [0 4 0]. Transfer #{GOLD_TO_STRIP_VOLUME}uL of #{GOLD_MIX} #{ops.first.ref("gold").bold} to #{pluralizer(STRIP, PREV_COMPONENTS.length * ops.length)}."
            grid = SVGGrid.new(ops.length,  ops.length, 50, 50)
            ops.each.with_index do |op, i|
                _tokens = op.output_tokens(OUTPUT)
                grid.add(display_strip_panel(*_tokens, COLORS).scale!(0.5), i, i)
            end
            tubeG = make_tube(opentube, GOLD_MIX, ops.first.tube_label("gold"), "medium", fluidclass: "pinkfluid")
            img = make_transfer(tubeG, grid, 200, "#{GOLD_TO_STRIP_VOLUME}uL", "(each strip)")
            img.boundx = 900
            img.boundy = 400
            img.translate!(40)
            note display_svg(img, 0.6)
        end
      end
  end

  def read_from_scanner myops
    gops = group_packages(myops)
    show do
      title "Bring timer and #{pluralizer(STRIP, myops.length * PREV_COMPONENTS.length)} to the #{PHOTOCOPIER}."
      image "Actions/OLA/map_Klavins.svg" if KIT_NAME == "uw kit"
    end
    
    show do
      title "Wait until 10 minute timer is up"
      note "#{STRIPS.capitalize} need to rest for 10 minutes before taking an image."
      note "In the meantime, make sure you have access to the #{PHOTOCOPIER}."
      warning "<h2> Signal can develop more slowly if the room is humid. After the 10-min timer ends, you should see at least two lines on each strip. </h2>" 
      warning "If your signal is hard to see by eyes, give it another 5 minutes before clicking OK."
    end

    # show do
    #   title "IMPORTANT NOTE TO JUSTIN"
    #   warning "This protocol should be broken into two since technician will be moving from one computer to the next."
    #   note "This really depends on whether we want to use the laptop ONLY for detection purposes (I think we should)"
    # end

    myops.each do |op|
      op.temporary[:filename] = "#{op.output(OUTPUT).item.id}_#{op.temporary[:output_kit]}#{op.temporary[:output_sample]}"
    end

    gops.each do |unit, ops|
      ops.each do |op|
        labels = op.output_refs(OUTPUT)
        show do
          title "Scan #{STRIPS} <b>#{labels[0]} to #{labels[-1]}</b>"
          check "Open #{PHOTOCOPIER}"
          check "Place #{STRIPS} face down in the #{PHOTOCOPIER}"
          check "Align colored part of #{STRIPS} with the colored tape on the #{PHOTOCOPIER}"
          check "Close the #{PHOTOCOPIER}"
        end

        image_confirmed = false

        5.times.each do |this_try|
          unless image_confirmed
            show do
              title "Scan the image"
              check "Press the <b>\"AUTO SCAN\"</b> button firmly on the side of the #{PHOTOCOPIER} and hold for a few seonds. A new window should pop up, with a green bar indicating scanning in progress."
              check "Wait for #{PHOTOCOPIER} to complete. This takes about 1 minute."
            end

            rename = "<md-button ng-disabled=\"true\" class=\"md-raised\">rename</md-button>"
            copy = "<md-button ng-disabled=\"true\" class=\"md-raised\">copy</md-button>"
            paste = "<md-button ng-disabled=\"true\" class=\"md-raised\">paste</md-button>"

            show do
              title "Copy image file name #{op.temporary[:filename].bold}"
              note "1. highlight the file name: #{op.temporary[:filename].bold}"
              note "2. then click #{copy}"
              title "Then rename the new image file to #{op.temporary[:filename].bold}"
              note "1. a new file should appear on the desktop. Minimize this browser and find the new file."
              note "2. right-click and then click #{rename}"
              note "3. right-click and click #{paste} to rename file."
            end

            show_with_expected_uploads(op, op.temporary[:filename], SCANNED_IMAGE_UPLOAD_KEY) do
              title "Upload file <b>#{op.temporary[:filename]}</b>"
              note "Click the button below to upload file <b>#{op.temporary[:filename]}</b>"
              note "Navigate to the desktop. Click on file <b>#{op.temporary[:filename]}</b>"
            end
            
            if debug # false upload if debug
                op.temporary[SCANNED_IMAGE_UPLOAD_KEY] = Upload.find(DEBUG_UPLOAD_ID)
            end
            
            confirmed = show do
              title "Confirm image labels say #{op.temporary[:label_string].bold}"
              select [ "yes", "no"], var: "confirmed", label: "Do the image labels and your image match?", default: 0
              img = display_strip_panel(*op.output_tokens(OUTPUT), COLORS).g
              img.boundy = 50
              note display_svg(img, 0.75)
              raw display_upload(op.temporary[SCANNED_IMAGE_UPLOAD_KEY])
            end

            image_confirmed = confirmed[:confirmed] == "yes"

            unless image_confirmed
              show do
                title "You selected that the images don't match!"
                note "You will now be asked to scan and upload the strip again."
              end
            end
          end
        end

        op.associate(SCANNED_IMAGE_UPLOAD_ID_KEY, op.temporary[SCANNED_IMAGE_UPLOAD_KEY].id)
        op.output(OUTPUT).item.associate(SCANNED_IMAGE_UPLOAD_ID_KEY, op.temporary[SCANNED_IMAGE_UPLOAD_KEY].id)
      end
    end
  end

  def cleanup myops
    def discard_refs_from_op(op)
      refs = []
      refs.push("Diluent A " + op.ref("diluent A").bold)
      refs.push("Gold Mix " + op.ref("gold").bold)
      refs.push("Stop Mix " + op.ref("stop").bold)
      unless KIT_NAME == "uw kit"
        refs.push("Samples #{op.input_refs(INPUT).join(', ').bold}")
      end
      refs
    end

    all_refs = myops.map {|op| discard_refs_from_op(op)}.flatten.uniq

    show do
      title "Throw items into the #{WASTE_POST}"

      note "Throw the following items into the #{WASTE_POST} in the #{AREA.bold} area:"
      t = Table.new
      t.add_column("Item to throw away", all_refs)
      table t
    end

    show do
      disinfectant = "10% bleach"
      title "Wipe down #{AREA.bold} with #{disinfectant.bold}."
      note "Now you will wipe down your #{BENCH_POST} and equipment with #{disinfectant.bold}."
      check "Spray #{disinfectant.bold} onto a #{WIPE_POST} and clean off pipettes and pipette tip boxes."
      check "Spray a small amount of #{disinfectant.bold} on the bench surface. Clean bench with #{WIPE_POST}."
      # check "Spray some #{disinfectant.bold} on a #{WIPE}, gently wipe down keyboard and mouse of this computer/tablet."
      warning "Do not spray #{disinfectant.bold} onto tablet or computer!"
      check "Finally, spray outside of gloves with #{disinfectant.bold}."
    end

    show do
      disinfectant = "70% ethanol"
      title "Wipe down #{AREA.bold} with #{disinfectant.bold}."
      note "Now you will wipe down your #{BENCH_POST} and equipment with #{disinfectant.bold}."
      check "Spray #{disinfectant.bold} onto a #{WIPE_POST} and clean off pipettes and pipette tip boxes."
      check "Spray a small amount of #{disinfectant.bold} on the bench surface. Clean bench with #{WIPE_POST}."
    #   check "Spray a #{"small".bold} amount of #{disinfectant.bold} on a #{WIPE}. Gently wipe down keyboard and mouse of this computer/tablet."
      warning "Do not spray #{disinfectant.bold} onto tablet or computer!"
      check "Finally, dispose of gloves in garbage bin."
    end
  end

  def filename(op)
    item_id = op.output(OUTPUT).item.id
    labels = op.output_refs(OUTPUT)
    "#{labels[0]}_#{labels[-1]}_#{item_id}"
  end

  def conclusion myops
    show do
      title "Thank you!"
      warning "<h2>You must click #{"OK".quote.bold} to complete the protocol</h2>"
      note "Thank you for all your hard work."
    end
  end
  
  def analysis ops
    band_choices = {
        "M": {bands: [mut_band], description: "-CTRL -WT +MUT"},
        "N": {bands: [control_band, wt_band, mut_band], description: "+CTRL +WT +MUT"},
        "O": {bands: [control_band, mut_band], description: "+CTRL -WT +MUT"},
        "P": {bands: [control_band, wt_band], description: "+CTRL +WT -MUT"},
        "Q": {bands: [control_band], description: "+CTRL -WT -MUT"},
        "R": {bands: [], description: "-CTRL -WT -MUT"}
    }

    categories = {
        "M": POSITIVE,
        "N": POSITIVE,
        "O": POSITIVE,
        "P": NEGATIVE,
        "Q": "ligation failure",
        "R": "detection failure"
    }
    
    run_image_analysis ops.running, band_choices, categories
    show_calls ops.running, band_choices
    show_summary ops.running
  end
  
  def run_image_analysis ops, band_choices, category_hash
    ops.each do |op|
      image_result = nil
      5.times.each do |i|
          break if image_result
          upload = op.temporary[SCANNED_IMAGE_UPLOAD_KEY]
          image_result = make_calls_from_image(upload)
      end
      
      if image_result.nil?
        op.error(:image_result_failed, "Image processing has failed. Check that the OLA IP service is running and connected correctly, and that the file is in a normal image format.") 
        next
      end
        
      this_kit = op.temporary[:output_kit]
      this_unit = op.temporary[:output_unit]
      this_sample = op.temporary[:output_sample]
      
      
      prev_components = ANALYSIS_UNIT["Components"]["strips"]
      prev_components.each.with_index do |this_component, i|
        alias_label = op.output_refs(OUTPUT)[i]
        the_choice = image_result[i]
        op.output(OUTPUT).item.associate(make_call_key(alias_label), the_choice)
        op.output(OUTPUT).item.associate(make_call_category_key(alias_label), category_hash[the_choice.to_sym])
        op.associate(make_call_key(alias_label), the_choice)
        op.associate(make_call_category_key(alias_label), category_hash[the_choice.to_sym])
      end
    end
  end

  def make_call_key alias_label
    "#{alias_label}_call".to_sym
  end

  def make_call_description_key alias_label
    "#{alias_label}_call_description".to_sym
  end

  def make_call_category_key alias_label
    "#{alias_label}_call_category".to_sym
  end
  
  def show_calls myops, band_choices
    mutations_labels = ANALYSIS_UNIT["Mutation Labels"]
    myops.each do |op|
      kit_summary = {}

      this_kit = op.temporary[:input_kit]
      this_item = op.output(OUTPUT).item
      this_unit = op.temporary[:output_unit]
      this_sample = op.temporary[:output_sample]

      grid = SVGGrid.new(mutations_labels.length, 1, 90, 10)
      categories = []
      
      prev_components = ANALYSIS_UNIT["Components"]["strips"]
      prev_components.each.with_index do |this_component, i|
        alias_label = op.output_refs(OUTPUT)[i]
        strip_label = self.tube_label(this_kit, this_unit, this_component, this_sample)
        strip = make_strip(strip_label, COLORS[i] + "strip")
        band_choice = this_item.get(make_call_key(alias_label))
        codon_label = label(mutations_labels[i], "font-size".to_sym => 25)
        codon_label.align_with(strip, 'center-bottom')
        codon_label.align!('center-top').translate!(0, 30)
        category = this_item.get(make_call_category_key(alias_label))
        kit_summary[mutations_labels[i]] = {:alias => alias_label, :category => category.to_s, :call => band_choice.to_s}
        tokens = category.split(' ')
        tokens.push("") if tokens.length == 1
        category_label = two_labels(*tokens)
        category_label.scale!(0.75)
        category_label.align!('center-top')
        category_label.align_with(codon_label, 'center-bottom')
        category_label.translate!(0, 10)
        bands = band_choices[band_choice.to_sym][:bands]
        grid.add(strip, i, 0)
        grid.add(codon_label, i, 0)
        grid.add(category_label, i, 0)
        bands.each do |band|
          grid.add(band, i, 0)
        end
      end

      op.associate(:results, kit_summary)
      op.output(OUTPUT).item.associate(:results, kit_summary)
      op.temporary[:results] = kit_summary

      img = SVGElement.new(children: [grid], boundx: 600, boundy: 350)
      img.translate!(15)
      show do
        refs = op.output_refs(OUTPUT)
        title "Here is the summary of your results for <b>#{refs[0]}-#{refs[-1]}</b>"
        note display_svg(img)
      end
    end
  end

  def show_summary ops
    mutations_labels = ANALYSIS_UNIT["Mutation Labels"]
    ops.each do |op|
      hits = op.temporary[:results].select {|k, v| v == POSITIVE}
    end
    show do
      title "Sample summary"
      note "You analyzed #{ops.length} #{"kit".pluralize(ops.length)}. Below is the summarized data."

      results_hash = {}
      kits = ops.map {|op| op.output(OUTPUT).item.get(KIT_KEY)}
      samples = ops.map {|op| op.output(OUTPUT).item.get(SAMPLE_KEY)}
      t = Table.new
      t.add_column("Kit", kits)
      t.add_column("Sample", samples)
      mutations_labels.each do |label|
        col = ops.map {|op| op.temporary[:results][label][:category]}
        t.add_column(label, col)
        results_hash[label] = col
      end
      results_hash["kits"] = kits
      results_hash["samples"] = samples
      table t
    end
  end
end

operation_type: OLASimple Tests
category: OLASimple
deployed: false
on_the_fly: false
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protocol:
# This is a default, one-size-fits all protocol that shows how you can 
# access the inputs and outputs of the operations associated with a job.
# Add specific instructions for this protocol!
needs "OLASimple/OLALib"
class Protocol
include OLALib
  def main

    operations.retrieve.make
    
    tin  = operations.io_table "input"
    tout = operations.io_table "output"
    u = Upload.find(21404)
    show do 
        # raw display_upload(Upload.find(21404))
        # note "#{u.name}"
      title "Input Table"
      table tin.all.render
    end
    
    show do
        warning "<h1>A really big warning!</h1>" 
    end
    
    show do
        raw display_strip_section(u, 0, 6, "50%")
    end
    
    show do
        raw display_strip_section(u, 1, 6, "50%")
    end
    
    show do 
      title "Output Table"
      table tout.all.render
    end
    
    operations.store
    
    return {}
    
  end
  
  def display_strip_section(upload, display_section, num_sections, size)
      p = Proc.new do
          x = 100.0/num_sections
          styles = []
          num_sections.times.each do |section|
              x1 = 100 - (x * (section+1)).to_i
              x2 = (x*(section)).to_i
              styles.push(".clipimg#{section} { clip-path: inset(0% #{x1}% 0% #{x2}%); }")
          end
          style = "<head><style>#{styles.join(' ')}</style></head>"
          note style
          note "#{styles}"
          note "<img class=\"clipimg#{display_section}\" src=\"#{upload.expiring_url}\" width=\"#{size}\"></img>" 
      end
      ShowBlock.new(self).run(&p)
  end
  
end

library: {name: NetworkRequests, category: OLASimple}
code_source:
# This library allows complex network requests to be made from protocols
# so that external APIs can be consulted during protocol execution

require 'net/https'
module NetworkRequests
  
  # make post request to a URL, sending a Upload object as a file
  # returns the http response
  def post_file(post_url, key, aq_upload)
    file_url = aq_upload.url
    file_name = aq_upload.name
    file_obj = URI.open(file_url)
    
    uri = URI(post_url)
    req = Net::HTTP::Post.new(uri)
    req.set_form([[key, file_obj, {'filename': file_name}]], 'multipart/form-data')
    
    res = Net::HTTP.start(uri.hostname, uri.port) do |http|
      http.request(req)
    end
    return res
  end
  
end

library: {name: OLAConstants, category: OLASimple}
code_source:
needs "OLASimple/OLAKits"

module OLAConstants
  include OLAKits
  
  ##########################################
  # TECHNICAL (SHOULD NOT NEED TO CHANGE)
  ##########################################

  OLA_IP_API_URL = "http://ola_image_processing:5000/api/processimage" # URL of OLASimple strip image processing service 

  ##########################################
  # DATA ASSOCIATION KEYS (DO NOT CHANGE)
  ##########################################
  #
  PATIENT_ID_KEY = :patient
  ALIAS_KEY = :alias
  KIT_KEY = :kit
  UNIT_KEY = :unit
  COMPONENT_KEY = :component
  SAMPLE_KEY = :sample
  SCANNED_IMAGE_UPLOAD_KEY = :scanned_image_upload
  SCANNED_IMAGE_UPLOAD_ID_KEY = :scanned_image_upload_id

  ##########################################
  # KIT SELECTION
  ##########################################

  KIT_SELECTION = OLAKits.kenya_kit()
  KIT_NAME = KIT_SELECTION["name"]
  SAMPLE_PREP_UNIT = KIT_SELECTION["sample prep"]
  PCR_UNIT = KIT_SELECTION["pcr"]
  LIGATION_UNIT = KIT_SELECTION["ligation"]
  DETECTION_UNIT = KIT_SELECTION["detection"]
  ANALYSIS_UNIT = KIT_SELECTION["analysis"]
  COLORS = ANALYSIS_UNIT["Mutation Colors"]

  ##########################################
  # LAB SPECIFICATIONS
  ##########################################
  SAVE_SAMPLES = false
  SUPERVISOR = "Nuttada P. or Cami C."

  ##########################################
  # KIT SPECIFICATIONS
  ##########################################

  # mutations
  MUTATIONKEY = :mutations

  # kit components
  DILUENT_A = "Diluent A" # what to call the Diluent A tube (i.e. water)
  STOP_MIX = "stop mix" # what to call the input samples (cell lysates)
  GOLD_MIX = "gold mix"
  STRIP = "detection strip"
  STRIPS = STRIP.pluralize(10)
  BAND = "band"
  BANDS = "bands"
  PANEL = "panel"
  AQUARIUM = "Aquarium"

  ##########################################
  # CODONS
  ##########################################

  pcr_pkg_color = "STEELBLUE"
  lig_pkg_color = "PALETURQUOISE"
  det_pkg_color = "MEDIUMPURPLE"
  SAMPLE_PREP_PKG_NAME = "sample prep package"
  PCR_PKG_NAME = "PCR package"
  LIG_PKG_NAME = "ligation package"
  DET_PKG_NAME = "detection package"

  # names of sample field value and validate kit field types
  SAMPLE_PREP_FIELD_VALUE = "Sample Prep Pack"
  PCR_FIELD_VALUE = "PCR Pack"
  LIGATION_FIELD_VALUE = "Ligation Pack"
  DETECTION_FIELD_VALUE = "Detection Pack"
  KIT_FIELD_VALUE = "Kit"
  CODONS_FIELD_VALUE = "Codons"
  CODON_COLORS_FIELD_VALUE = "Codon Colors"
  NUM_SAMPLES_FIELD_VALUE = "Number of Samples"
  NUM_SUB_PACKAGES_FIELD_VALUE = "Number of Sub Packages"
  UNIT_NAME_FIELD_VALUE = "Unit Name"
  COMPONENTS_FIELD_VALUE = "Components"

  ##########################################
  # TERMINOLOGY
  ##########################################
  
  # areas
  PRE_PCR = "pre-PCR"
  POST_PCR = "post-PCR"

  # kit samples
  CELL_LYSATE = "cell lysate" # what to call the input samples (cell lysates)
  PCR_SAMPLE = "PCR sample" # what to call the tubes for the PCR protocol
  LIGATION_SAMPLE = "ligation sample"

  # equipment
  THERMOCYCLER = "thermocycler" # what to call the thermocycler
  CENTRIFUGE_PRE = "centrifuge 1 (in the #{PRE_PCR} area)"
  CENTRIFUGE_POST = "centrifuge 2 (in the #{POST_PCR} area)"
  PCR_RACK_PRE = "PCR rack 1 (in the #{PRE_PCR} area)" # what to call the racks the PCR tubes go in
  PCR_RACK_POST = "PCR rack 2 (in the #{POST_PCR} area)" # what to call the racks the PCR tubes go in
  PHOTOCOPIER = "scanner"
  BASIC_MATERIALS_PRE = [
      "200uL pipette and filtered tips",
      "20uL pipette and filtered tips",
      "a spray bottle of 10% v/v bleach",
      "a spray bottle of 70% v/v ethanol",
      "a timer",
      "latex gloves"
  ]
  BASIC_MATERIALS_POST = [
      "200uL pipette and filtered tips",
      "20uL pipette and filtered tips",
      "a spray bottle of 10% v/v bleach",
      "a spray bottle of 70% v/v ethanol",
      "a timer",
      "latex gloves"
  ]
  TRASH_PRE = "trash 1 (in the #{PRE_PCR} area)"
  TRASH_POST = "trash 2 (in the #{POST_PCR} area)"
  WASTE_PRE = "biohazard waste 1 (red bag in the #{PRE_PCR} area)"
  WASTE_POST = "biohazard waste 2 (red bag in the #{POST_PCR} area)"
  BENCH_PRE = "bench 1 (in the #{PRE_PCR} area)"
  BENCH_POST = "bench 2 (in the #{POST_PCR} area)"
  PACKAGE_PRE = "package (#{PRE_PCR})"
  PACKAGE_POST = "package (#{POST_PCR})"
  FRIDGE_PRE = "fridge 1 (in the #{PRE_PCR} area)"
  FRIDGE_POST = "fridge 2 (in the #{POST_PCR} area)"
  P20_PRE = "#{PRE_PCR} P20"
  P20_POST = "#{POST_PCR} P20"
  P200_PRE = "#{PRE_PCR} P200"
  P200_POST = "#{POST_PCR} P200"
  P1000_PRE = "#{PRE_PCR} P1000"
  P1000_POST = "#{POST_PCR} P1000"
  WIPE_PRE = "KimWipe (from the #{PRE_PCR} area)"
  WIPE_POST = "KimWipe (from the #{POST_PCR} area)"

  # verbs
  CENTRIFUGE_VERB = "centrifuge" # or spin?

  PCR_CYCLE = "OSPCR"
  LIG_CYCLE = "OSLIG"
  STOP_CYCLE = "OSSTOP"

  def map_temporary_from_input(input, outputs, keys)
    outputs = [outputs].flatten
    keys = [keys].flatten
    operations.each do |op|
      input_item = op.input(input).item
      outputs.each do |out|
        keys.each do |k|
          op.output(out).item.associate LOT, input_item.get(k)
        end
      end
    end
  end

  def explicit_retrieve
    operations.retrieve interactive: false

    show do
      title "Retrieve the following items:"

      t = Table.new
      input_items = operations.map {|op| op.inputs.map {|i| i.item}}.flatten
      t.add_column("ID", input_items.map {|i| i.id})
      t.add_column("Type", input_items.map {|i| i.object_type.name})
      t.add_column("Location", input_items.map {|i| i.location})
      table t
    end
  end
end

library: {name: OLAGraphics, category: OLASimple}
code_source:
# require_relative 'graphics'
needs "OLASimple/SVGGraphics"

module OLAGraphics
  include Graphics
  include Graphics::MyGraphics

  @@colors = ["red", "yellow", "green", "blue", "purple"]

  def self.set_tube_colors(new_colors)
    @@colrs = new_colors
  end


  #####################################
  # BASICS
  #####################################

  def get_style
    <<EOF
      /* <![CDATA[ */
      
      #svg .yellow path {
          fill: #f7f9c2;
      }
      
      #svg .white rect {
          fill: #ffffff;
      }
      
      #svg .blue path {
          fill: #bdf8f9;
      }
      
      #svg .red path {
          fill: #ffc4c4;
      }
      
      #svg .green path {
          fill: #c4f9c2;
      }
      
      #svg .purple path {
          fill: #f1e0fc;
      }

      #svg .hidden {
        opacity: 0.3;
      }

      #svg .yellowstrip rect {
          fill: #f7f9c2;
      }
      
      #svg .bluestrip rect {
          fill: #bdf8f9;
      }
      
      #svg .whitestrip rect {
          fill: #ffffff;
      }
      
      #svg .redstrip rect {
          fill: #ffc4c4;
      }
      
      #svg .greenstrip rect {
          fill: #c4f9c2;
      }
      
      #svg .purplestrip rect {
          fill: #f1e0fc;
      }

      #svg .redfluid path {
        fill: #ff7c66;
      }
      
      #svg .brownfluid path {
        fill: #8B4513;
      }

      #svg .pinkfluid path {
        fill: #ff8eec;
      }
      
      #svg .palefluid path {
          fill: #F2F5D1;
      }
      /* ]]> */
EOF
  end

  def display_svg(element, scale = 1)
    element.style!(self.get_style)
    element.svg(element.boundx, element.boundy, scale).to_str
  end

  # two labels on top of each other
  def two_labels(text1, text2)
    label1 = label(text1, "font-size".to_sym => 25)
    label2 = label(text2, "font-size".to_sym => 25)
    label2.align!('center-top')
    label2.align_with(label1, 'center-bottom')
    label2.translate!(0, 12)
    SVGElement.new(children: [label1, label2], boundx: label1.boundx, boundy: label1.boundy * 2)
  end

  # make a tube label
  def tube_label(kit, unit, component, sample)
    self.two_labels("#{kit}#{unit}", "#{component}#{sample}")
  end

  def make_arrow(from, to, tlabel = nil, blabel = nil, tfontsize = 25, bfontsize = 25)
    # make right arrow
    top_label = label(tlabel, "font-size".to_sym => tfontsize)
    bottom_label = label(blabel, "font-size".to_sym => bfontsize)
    arrow = rarrow.scale(0.75)
    arrow.align!('center-right')
    arrow.align_with(to, 'center-left')
    v1 = from.get_abs_anchor('center-right') - from.abs_anchor_vector
    v2 = to.get_abs_anchor('center-left') - to.abs_anchor_vector
    m = (v1 + v2) / 2.0
    line = Line.new(*v1, *v2, 'black', 3)
    unless top_label.nil?
      top_label.translate!(*m)
      top_label.align!('center-bottom').translate!(0, -10)
    end
    unless bottom_label.nil?
      bottom_label.translate!(*m)
      puts bottom_label
      bottom_label.align!('center-top').translate!(0, 10)
    end
    myarrow = SVGElement.new(children: [line, arrow, bottom_label, top_label].compact)
  end

  def make_transfer(from, to, spacing, top_label, bottom_label)
    to.align_with(from, 'center-right').align!('center-left')
    to.translate!(spacing)
    arrow = make_arrow(from, to, top_label, bottom_label)
    elements = [arrow, from, to]
    puts elements.map {|e| Vector[e.x, e.y] + e.get_abs_anchor('center-right')}
    max_x = elements.map {|e| (Vector[e.x, e.y] + e.get_abs_anchor('center-right'))[0]}.max
    max_y = elements.map {|e| (Vector[e.x, e.y] + e.get_abs_anchor('center-bottom'))[1]}.max
    svg = SVGElement.new(
        children: elements,
        boundx: 700,
        boundy: 300,
        )
    svg.translate!(20)
  end

  def make_tube(tube, bottom_label, middle_label, fluid = nil, cropped_for_closed_tube = false, fluidclass: nil)
    bottom_label = bottom_label.join("\n") if bottom_label.is_a?(Array)
    middle_label = middle_label.join("\n") if middle_label.is_a?(Array)
    img = SVGElement.new(boundx: tube.boundx, boundy: tube.boundy)
    tube_group = tube
    bottom_labels = bottom_label.split("\n")
    middle_labels = middle_label.split("\n")

    img.add_child(tube)
    fluidImage = nil
    if fluid == "small"
      fluidImage = fluid_small
    elsif fluid == "medium"
      fluidImage = fluid_medium
    elsif fluid == "large"
      fluidImage = fluid_large
    elsif fluid == "powder"
      fluidImage = powder
    end
    puts fluid
    fluidImage.new_class!(fluidclass) unless fluidImage.nil? or fluidclass.nil?
    img.add_child(fluidImage) unless fluidImage.nil?
    puts fluid
    if bottom_label != ""
      bl = nil
      if bottom_labels.length == 2
        bl = two_labels(*bottom_labels)
      else
        label = label(bottom_label, "font-size".to_sym => 25)
        bl = label
      end
      bl.align!('center-top')
      bl.align_with(tube, 'center-bottom')
      bl.translate!(-5 * tube.xscale, 5 * tube.yscale)
      tube.boundy = tube.boundy + bl.boundy
      img.add_child(bl)
    end

    if middle_label != ""
      ml = nil
      if middle_labels.length == 2
        ml = two_labels(*middle_labels)
      else
        ml = label(middle_label, "font-size".to_sym => 25)
      end
      ml.align!('center-center')
      ml.align_with(tube, 'center-bottom')
      ml.translate!(-9 * tube.xscale, -110 * tube.yscale)
      img.add_child(ml)
    end


    img.boundx = tube.boundx
    img.boundy = tube.boundy
    if cropped_for_closed_tube
      shift = 70
      img.boundy = img.boundy - shift
      img.group_children.translate!(0, -shift)
    end
    img.translate!(10)
  end

  #####################################
  # LIGATIONS
  #####################################

  def display_ligation_tubes(kit, unit, components, sample, colors, open_tubes = nil, hide = nil, spacing = 70)
    def stripwell(kit, unit, components, sample, open_tubes, apply_classes, hide, spacing)
      open_tubes = open_tubes || []
      hide = hide || []
      apply_classes = apply_classes || []
      num = components.length
      grid = SVGGrid.new(num, 1, spacing, opentube.boundy)
      grid.each_pos do |r, c|

        # add label
        tube_label = self.tube_label(kit, unit, components[r], sample)
        tube_type = closedtube
        if open_tubes.include?(r)
          tube_type = opentube
        end
        tube = make_tube(tube_type,
                         "",
                         ["#{kit}#{unit}", "#{components[r]}#{sample}"],
                         nil,
                         false)
        tube.new_class!(apply_classes[r])
        if hide.include?(r)
          tube = tube.g(classname: 'hidden')
        end
        grid.add(tube, r, c)
      end
      grid
    end

    mystripwell = stripwell(kit, unit, components, sample, open_tubes, colors, hide, spacing).scale!(0.75)
    myimage = SVGElement.new(boundx: 500, boundy: 190)
    myimage.add_child(mystripwell)
  end

  def highlight_ligation_tube(i, kit, unit, components, sample, colors)
    ligation_tubes = self.display_ligation_tubes(
        kit, unit, components, sample, colors, [i], (0..components.length - 1).to_a.reject {|x| x == i})
    ligation_tubes
  end

  def transfer_to_ligation_tubes_with_highlight(from, i, kit, unit, components, sample, colors, vol, bottom_label = nil)
    bottom_label = bottom_label || ""
    ligation_tubes = self.highlight_ligation_tube(i, kit, unit, components, sample, colors)
    ligation_tubes.align_with(from, 'center-right').align!('center-left')
    ligation_label = label("ligation tubes", "font-size".to_sym => 25)
    # ligation_label.align_with(ligation_tubes, 'center-bottom').align!('center-top')
    svg = self.make_transfer(from, ligation_tubes, 200, "#{vol}uL", bottom_label)
    svg.translate!(20)
    svg.boundy = svg.boundy - 20
    svg.boundx = 700
    svg.boundy = 295
    svg
  end

  #####################################
  # DETECTION
  #####################################

  def display_strip_panel(kit, unit, components, sample, colors)
    def panel kit, unit, components, sample, apply_classes
      apply_classes = apply_classes || []
      num = components.length
      strip = make_strip(nil, "")
      grid = SVGGrid.new(num, 1, 90, strip.boundy)
      grid.each_pos do |r, c|

        # add label
        strip_label = self.tube_label(kit, unit, components[r], sample).scale(0.8)
        strip = make_strip(strip_label, apply_classes[r] + "strip")
        grid.add(strip, r, c)
      end
      grid.scale!(0.75)
    end
    
    mypanel = panel(kit, unit, components, sample, colors)
    mypanel.boundx = 600
    mypanel
  end

  def display_panel_and_tubes(kit, panel_unit, tube_unit, components, sample, colors)
    tubes = display_ligation_tubes(kit, tube_unit, components, sample, colors)
    panel = display_strip_panel(kit, panel_unit, components, sample, colors)
    tubes.align_with(panel, 'center-bottom')
    tubes.align!('center-top')
    tubes.translate!(0, -50)
    img = SVGElement.new(children: [tubes, panel], boundy: 330, boundx: panel.boundx)
  end

  def make_strip mylabel, classname
    mystrip = SVGElement.new(boundx: 83.1, boundy: 247.45)
    mystrip.add_child(self.strip)
    mystrip.add_child(self.striplabel.new_class(classname))
    # mylabel = label("Strip", "font-size".to_sym=>20)
    unless mylabel.nil?
      mylabel.align_with(mystrip, 'center-top')
      mylabel.align!('center-center')
      mylabel.translate!(0, 20)
      mystrip.add_child(mylabel)
    end
    mystrip
  end

  def detection_strip_diagram
    img = SVGElement.new(boundx: 270, boundy: 270)
    img.add_child(<<EOF
     <g id="Strip">
	<g>
		<rect x="4.75" fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" width="78.346" height="242.948"/>
		<line fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" x1="0" y1="247.448" x2="4.75" y2="242.948"/>
		<polygon fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" points="-0.067,4.777 4.75,0.001 4.75,242.948 0,247.448 		"/>
		<polygon fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" points="74.917,247.448 0,247.448 4.75,242.948 83.096,242.948 
					"/>
	</g>
	<g>
		<rect x="19.583" y="49.433" fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" width="46.667" height="80"/>
		<rect x="27.083" y="57.433" fill="#FFFFFF" stroke="#000000" stroke-miterlimit="10" width="31.667" height="64"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="27.083" y1="121.433" x2="19.583" y2="129.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="58.75" y1="121.433" x2="66.25" y2="129.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="58.75" y1="57.433" x2="66.25" y2="49.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="27.083" y1="57.433" x2="19.583" y2="49.433"/>
	</g>
	<g>
		<path fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" d="M57.524,216.515c0,4.385-3.693,7.938-8.249,7.938H36.557
			c-4.556,0-8.249-3.554-8.249-7.938v-22.164c0-4.385,3.693-7.939,8.249-7.939h12.718c4.556,0,8.249,3.554,8.249,7.939V216.515z"/>
		<path fill="#FFFFFF" stroke="#000000" stroke-miterlimit="10" d="M52.917,213.019c0,3.002-2.528,5.435-5.647,5.435h-8.706
			c-3.119,0-5.647-2.433-5.647-5.435v-15.172c0-3.001,2.528-5.435,5.647-5.435h8.706c3.119,0,5.647,2.433,5.647,5.435V213.019z"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="34.01" y1="216.224" x2="30.27" y2="221.647"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="51.823" y1="216.224" x2="55.562" y2="221.647"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="51.823" y1="194.642" x2="55.023" y2="188.663"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="34.01" y1="194.195" x2="30.27" y2="189.666"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="32.917" y1="205.433" x2="28.308" y2="205.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="52.917" y1="205.433" x2="57.524" y2="205.433"/>
	</g>
</g>
<g id="StripLabel">
	<rect x="4.75" fill="#ED1C24" stroke="#000000" stroke-miterlimit="10" width="78.346" height="46.433"/>
</g>
<polygon fill="#BBC9E7" stroke="#000000" stroke-miterlimit="10" points="43.923,198.542 48.016,201.414 166.567,59.148 
	141.463,41.534 "/>
<text transform="matrix(1 0 0 1 -60.75 216.2236)" font-family="'MyriadPro-Regular'" font-size="20">Port</text>
<text transform="matrix(1 0 0 1 -87.2627 91.1001)"><tspan x="0" y="0" font-family="'MyriadPro-Regular'" font-size="20">Reading</tspan><tspan x="0" y="24" font-family="'MyriadPro-Regular'" font-size="20">Window</tspan></text>
<line fill="none" stroke="#000000" stroke-width="4" stroke-miterlimit="10" x1="-11.417" y1="95.1" x2="32.917" y2="94.1"/>
<line fill="none" stroke="#000000" stroke-width="4" stroke-miterlimit="10" x1="-17.417" y1="209.401" x2="26.917" y2="208.401"/>
EOF
    )
    img.translate!(100)
    return img
  end

  def negative_selection_diagram
    img = SVGElement.new(boundx: 600, boundy: 262)
    img.add_child(<<EOF
<g id="SingleTubes_3_">
	<g id="ClosedLid_3_">
		<g>
			<path fill="#F7FCFE" d="M363.205,46.889c22.801,0,22.801,18.312,0,18.312c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173
				C363.205,49.268,363.205,48.078,363.205,46.889z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M363.205,46.889c22.801,0,22.801,18.312,0,18.312
				c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173C363.205,49.268,363.205,48.078,363.205,46.889z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M317.727,67.92c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688c0-1.1-0.535-2-1.188-2
				c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2s-1.188,0.9-1.188,2
				V67.92z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M317.727,67.92c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688
				c0-1.1-0.535-2-1.188-2c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2
				s-1.188,0.9-1.188,2V67.92z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M308.352,48.026c-0.55-0.952-0.1-1.731,1-1.731h55.473c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121
				c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731L308.352,48.026z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M308.352,48.026c-0.55-0.952-0.1-1.731,1-1.731h55.473
				c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731
				L308.352,48.026z"/>
		</g>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="380.16" y1="58.514" x2="381.305" y2="58.514"/>
	</g>
	<g id="Tube_3_">
		<path fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M312.102,65.873v45.309l14.998,90.066
			c0,4.35,5.037,7.875,11.25,7.875c6.215,0,11.25-3.525,11.25-7.875l15-90.066V65.873H312.102z"/>
		<g>
			<path fill="#F7FCFE" d="M369.35,61.873c0,2.199-1.799,4-4,4h-54c-2.199,0-4-1.801-4-4v-1.875c0-2.201,1.801-4,4-4h54
				c2.201,0,4,1.799,4,4V61.873z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M369.35,61.873c0,2.199-1.799,4-4,4h-54c-2.199,0-4-1.801-4-4
				v-1.875c0-2.201,1.801-4,4-4h54c2.201,0,4,1.799,4,4V61.873z"/>
		</g>
	</g>
</g>
<g id="SingleTubes_1_">
	<g id="ClosedLid_1_">
		<g>
			<path fill="#F7FCFE" d="M175.96,48.821c22.801,0,22.801,18.312,0,18.312c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173
				C175.96,51.2,175.96,50.011,175.96,48.821z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M175.96,48.821c22.801,0,22.801,18.312,0,18.312
				c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173C175.96,51.2,175.96,50.011,175.96,48.821z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M130.481,69.853c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688c0-1.1-0.535-2-1.188-2
				c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2s-1.188,0.9-1.188,2
				V69.853z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M130.481,69.853c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688
				c0-1.1-0.535-2-1.188-2c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2
				s-1.188,0.9-1.188,2V69.853z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M121.106,49.959c-0.55-0.952-0.1-1.731,1-1.731h55.473c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121
				c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731L121.106,49.959z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M121.106,49.959c-0.55-0.952-0.1-1.731,1-1.731h55.473
				c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731
				L121.106,49.959z"/>
		</g>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="192.915" y1="60.446" x2="194.06" y2="60.446"/>
	</g>
	<g id="Tube_1_">
		<path fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M124.856,67.806v45.309l14.998,90.066
			c0,4.35,5.037,7.875,11.25,7.875c6.215,0,11.25-3.525,11.25-7.875l15-90.066V67.806H124.856z"/>
		<g>
			<path fill="#F7FCFE" d="M182.104,63.806c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V63.806
				z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M182.104,63.806c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875
				c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V63.806z"/>
		</g>
	</g>
</g>
<g id="SingleTubes_2_">
	<g id="ClosedLid_2_">
		<g>
			<path fill="#F7FCFE" d="M272.545,47.965c22.801,0,22.801,18.312,0,18.312c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173
				C272.545,50.344,272.545,49.154,272.545,47.965z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M272.545,47.965c22.801,0,22.801,18.312,0,18.312
				c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173C272.545,50.344,272.545,49.154,272.545,47.965z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M227.066,68.996c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688c0-1.101-0.534-2-1.188-2
				s-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2s-1.188,0.899-1.188,2V68.996z"
				/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M227.066,68.996c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688
				c0-1.101-0.534-2-1.188-2s-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2
				s-1.188,0.899-1.188,2V68.996z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M217.691,49.103c-0.55-0.953-0.1-1.732,1-1.732h55.473c1.1,0,2.311,0.845,2.69,1.877l1.146,3.121
				c0.38,1.032-0.21,1.877-1.31,1.877h-54.028c-1.1,0-2.45-0.779-3-1.732L217.691,49.103z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M217.691,49.103c-0.55-0.953-0.1-1.732,1-1.732h55.473
				c1.1,0,2.311,0.845,2.69,1.877l1.146,3.121c0.38,1.032-0.21,1.877-1.31,1.877h-54.028c-1.1,0-2.45-0.779-3-1.732L217.691,49.103z
				"/>
		</g>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="289.5" y1="59.59" x2="290.645" y2="59.59"/>
	</g>
	<g id="Tube_2_">
		<path fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M221.441,66.949v45.309l14.998,90.066
			c0,4.35,5.037,7.875,11.25,7.875c6.215,0,11.25-3.525,11.25-7.875l15-90.066V66.949H221.441z"/>
		<g>
			<path fill="#F7FCFE" d="M278.689,62.949c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V62.949
				z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M278.689,62.949c0,2.2-1.8,4-4,4h-54c-2.2,0-4-1.8-4-4v-1.875
				c0-2.2,1.8-4,4-4h54c2.2,0,4,1.8,4,4V62.949z"/>
		</g>
	</g>
</g>
<g id="SingleTubes_4_">
	<g id="ClosedLid_4_">
		<g>
			<path fill="#F7FCFE" d="M459.754,47.131c22.801,0,22.801,18.312,0,18.312c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173
				C459.754,49.51,459.754,48.32,459.754,47.131z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M459.754,47.131c22.801,0,22.801,18.312,0,18.312
				c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173C459.754,49.51,459.754,48.32,459.754,47.131z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M414.275,68.162c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688c0-1.1-0.535-2-1.188-2
				c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2s-1.188,0.9-1.188,2
				V68.162z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M414.275,68.162c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688
				c0-1.1-0.535-2-1.188-2c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2
				s-1.188,0.9-1.188,2V68.162z"/>
		</g>
		<g>
			<path fill="#F7FCFE" d="M404.9,48.269c-0.55-0.952-0.1-1.731,1-1.731h55.473c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121
				c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731L404.9,48.269z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M404.9,48.269c-0.55-0.952-0.1-1.731,1-1.731h55.473
				c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121c0.381,1.032-0.209,1.877-1.309,1.877h-54.028c-1.101,0-2.45-0.779-3.001-1.731
				L404.9,48.269z"/>
		</g>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="476.709" y1="58.756" x2="477.854" y2="58.756"/>
	</g>
	<g id="Tube_4_">
		<path fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M408.65,66.115v45.309l14.998,90.066
			c0,4.35,5.037,7.875,11.25,7.875c6.215,0,11.25-3.525,11.25-7.875l15-90.066V66.115H408.65z"/>
		<g>
			<path fill="#F7FCFE" d="M465.898,62.115c0,2.199-1.799,4-4,4h-54c-2.199,0-4-1.801-4-4V60.24c0-2.201,1.801-4,4-4h54
				c2.201,0,4,1.799,4,4V62.115z"/>
			<path fill="none" stroke="#000000" stroke-miterlimit="10" d="M465.898,62.115c0,2.199-1.799,4-4,4h-54c-2.199,0-4-1.801-4-4
				V60.24c0-2.201,1.801-4,4-4h54c2.201,0,4,1.799,4,4V62.115z"/>
		</g>
	</g>
</g>
<rect x="180.021" y="67.951" fill="#58595B" stroke="#000000" stroke-miterlimit="10" width="16.705" height="143.104"/>
<rect x="276.023" y="68.36" fill="#58595B" stroke="#000000" stroke-miterlimit="10" width="16.705" height="143.104"/>
<rect x="366.934" y="66.539" fill="#58595B" stroke="#000000" stroke-miterlimit="10" width="16.705" height="143.104"/>
<g>
	<path fill="#F2F5D1" stroke="#000000" stroke-miterlimit="10" d="M151.104,211.465c6.215,0,11.25-3.525,11.25-7.875l15-90.066
		V92.904c-3.914-4.414-7.246-9.508-14.937-9.508c-13.567,0-13.567,15.856-27.136,15.856c-4.752,0-7.837-1.947-10.426-4.476v18.746
		l14.998,90.066C139.854,207.939,144.891,211.465,151.104,211.465z"/>
	<path id="largegoop_1_" fill="#BE1E2D" d="M176.233,99.027c-0.539-0.592-1.101-1.156-1.7-1.677
		c-2.18-1.891-4.767-3.295-7.818-4.106c-3.108-0.959-5.194-0.299-6.55,1.576c-1.355,1.877-1.983,4.971-2.176,8.881
		c-0.043,4.081,0.029,8.187,0.148,12.31c-0.371,3.683-0.492,7.357-0.467,11.022c0.897,18.184,3.846,37.165-0.056,56.177
		c-0.8,1.744-1.673,3.365-2.61,4.925c-3.899,3.502-12.119,3.583-12.802,9.137c-1.465,7.144,6.075,12.614,13.855,11.348
		c1.231-0.126,2.429-0.324,3.597-0.573c0.996-1.113,1.578-2.408,1.578-3.796l15-85.266V99.027z"/>
</g>
<g>
	<path fill="#F2F5D1" stroke="#000000" stroke-miterlimit="10" d="M338.349,210.596c6.215,0,11.25-3.525,11.25-7.875l15-90.066
		V92.035c-3.914-4.414-7.246-9.508-14.937-9.508c-13.567,0-13.567,15.856-27.136,15.856c-4.752,0-7.837-1.947-10.426-4.476v18.746
		l14.998,90.066C327.099,207.07,332.136,210.596,338.349,210.596z"/>
	<path id="smallgoop_1_" fill="#BE1E2D" d="M351.601,187.893c-0.48,0.29-0.853,0.667-1.167,1.104
		c-0.286,0.446-0.544,0.889-0.791,1.329c-0.345,0.425-0.624,0.832-0.864,1.229c-0.991,1.92-1.5,3.797-3.802,6.113
		c-0.326,0.24-0.664,0.473-1.014,0.702c-1.255,0.63-3.409,1.163-3.962,1.811c-0.864,0.87,0.737,0.984,2.856,0.351
		c2.816-0.787,5.354-1.938,7.215-3.107c0.564-0.939,0.878-1.972,0.878-3.055l1.118-6.713
		C351.903,187.729,351.745,187.806,351.601,187.893z"/>
</g>
<g>
	<path fill="#F2F5D1" stroke="#000000" stroke-miterlimit="10" d="M247.69,210.199c6.215,0,11.25-3.525,11.25-7.875l15-90.066
		V91.639c-3.914-4.414-7.246-9.508-14.937-9.508c-13.567,0-13.567,15.856-27.136,15.856c-4.752,0-7.837-1.947-10.426-4.476v18.746
		l14.998,90.066C236.44,206.674,241.478,210.199,247.69,210.199z"/>
	<path id="mediumgoop_1_" fill="#BE1E2D" d="M265.456,155.475c-1.722-0.177-2.978,0.252-3.904,1.138s-1.526,2.229-1.938,3.884
		c-0.338,1.716-0.611,3.433-0.859,5.154c-0.497,1.573-0.849,3.123-1.115,4.659c-0.877,7.564-0.631,15.315-4.343,23.576
		c-0.596,0.789-1.225,1.533-1.886,2.255c-2.521,1.753-7.274,2.385-8.095,4.764c-1.395,3.104,2.541,4.853,7.132,3.756
		c3.25-0.642,6.229-1.791,8.848-3.264c0.022-0.203,0.044-0.406,0.044-0.613l7.516-45.127
		C266.412,155.575,265.951,155.51,265.456,155.475z"/>
</g>
<g>
	<path fill="#F2F5D1" stroke="#000000" stroke-miterlimit="10" d="M434.899,209.771c6.215,0,11.25-3.525,11.25-7.875l15-90.066
		V91.211c-3.914-4.414-7.246-9.508-14.937-9.508c-13.567,0-13.567,15.856-27.136,15.856c-4.752,0-7.837-1.947-10.426-4.476v18.746
		l14.998,90.066C423.649,206.246,428.687,209.771,434.899,209.771z"/>
</g>
<text transform="matrix(1 0 0 1 11.918 253.2422)" font-family="'MyriadPro-Regular'" font-size="25">Unwanted Cells</text>
<text transform="matrix(1 0 0 1 12.8271 173.3662)" font-family="'MyriadPro-Regular'" font-size="25">CD+ Cells</text>
<g>
	<polygon stroke="#000000" stroke-miterlimit="10" points="158.353,205.239 150.153,202.41 156.704,194.296 	"/>
	<line fill="none" stroke="#000000" stroke-width="3" stroke-miterlimit="10" x1="154.61" y1="202.672" x2="147.199" y2="232.312"/>
</g>
<g>
	<polygon stroke="#000000" stroke-miterlimit="10" points="135.032,139.835 133.309,134.386 142.02,130.715 	"/>
	
		<line fill="none" stroke="#000000" stroke-width="3" stroke-miterlimit="10" x1="135.147" y1="136.361" x2="110.832" y2="156.343"/>
</g>
<text transform="matrix(1 0 0 1 140.5879 38.501)" font-family="'MyriadPro-Regular'" font-size="41">1</text>
<text transform="matrix(1 0 0 1 234.8652 36.8428)" font-family="'MyriadPro-Regular'" font-size="41">2</text>
<text transform="matrix(1 0 0 1 326.0049 38.4541)" font-family="'MyriadPro-Regular'" font-size="41">3</text>
<text transform="matrix(1 0 0 1 435.0049 38.4541)" font-family="'MyriadPro-Regular'" text-anchor="middle" font-size="25">CD4+/RBC</text>
EOF
    )
    img
  end
end

library: {name: OLAKits, category: OLASimple}
code_source:
module OLAKits
  def self.kenya_kit
    {
        "name" => "kenya kit",
        "sample prep" => {
            "Unit Name" => "A",
            "Components" => {
                "magnetic beads" => "A",
                "antibodies" => "B",
                "1X PBS 1" => "C",
                "RBC lysis buffer" => "D",
                "1X PBS 2" => "E",
                "CD4 lysis buffer" => "F",
                "sample tube 1" => "G",
                "sample tube 2" => "H",
                "sample tube 3" => "J",
                "sample tube 4" => "K"
            }
        },

        "pcr" => {
            "Unit Name" => "B",
            "Components" => {
                "sample tube" => "A",
                "diluent A" => "B"
            },
            "PCR Rehydration Volume" => 40,
            "Sample Volume" => 10,
            "Number of Samples" => 2,
            "Number of Sub Packages" => 2,
        },

        "ligation" => {
            "Unit Name" => "C",
            "Components" => {
                "sample tubes" => [
                    "A",
                    "B",
                    "C",
                    "D",
                    "E"
                ],
                "diluent A" => "F"
            },
            "PCR to Ligation Mix Volume" => 2.4,
            "Ligation Mix Rehydration Volume" => 24,
            "Number of Samples" => 2,
            "Number of Sub Packages" => 2
        },

        "detection" => {
            "Unit Name" => "D",
            "Components" => {
                "strips" => [
                    "A",
                    "B",
                    "C",
                    "D",
                    "E"
                ],
                "stop" => "F",
                "gold" => "G",
                "diluent A" => "H"
            },
            "Number of Samples" => 2,
            "Number of Sub Packages" => 4,
            "Stop Rehydration Volume" => 40,
            "Gold Rehydration Volume" => 480,
            "Gold to Strip Volume" => 40,
            "Sample to Strip Volume" => 24,
            "Stop to Sample Volume" => 2.4,
        },

        "analysis" => {
            "Components" => {
                "strips" => [
                    "A",
                    "B",
                    "C",
                    "D",
                    "E"
                ],
            },
            "Mutation Labels" => [
                "K65R",
                "K103N",
                "Y181C",
                "M184V",
                "G190A"
            ],
            "Mutation Colors" => ["red", "yellow", "green", "blue", "purple"]
        }

    }
  end

  def self.uw_kit()
    {
        "name" => "uw kit",
        "sample prep" => {
            "Unit Name" => "A",
            "Components" => {
                "sample tube 1" => "AA",
                "sample tube 2" => "AB",
            }
        },

        "pcr" => {
            "Unit Name" => "B",
            "Components" => {
                "sample tube" => "A",
                "diluent A" => "B"
            },
            "PCR Rehydration Volume" => 40,
            "Sample Volume" => 10,
            "Number of Samples" => 2,
            "Number of Sub Packages" => 2,
        },

        "ligation" => {
            "Unit Name" => "C",
            "Components" => {
                "sample tubes" => [
                    "A",
                    "B",
                    "C",
                    "D",
                    "E",
                    "F"
                ],
                "diluent A" => "G"
            },
            "PCR to Ligation Mix Volume" => 1.2,
            "Ligation Mix Rehydration Volume" => 24,
            "Number of Samples" => 2,
            "Number of Sub Packages" => 2
        },

        "detection" => {
            "Unit Name" => "D",
            "Components" => {
                "strips" => [
                    "A",
                    "B",
                    "C",
                    "D",
                    "E",
                    "F"
                ],
                "stop" => "G",
                "gold" => "H",
                "diluent A" => "I"
            },
            "Number of Samples" => 2,
            "Number of Sub Packages" => 4,
            "Stop Rehydration Volume" => 36,
            "Gold Rehydration Volume" => 600,
            "Gold to Strip Volume" => 40,
            "Sample to Strip Volume" => 24,
            "Stop to Sample Volume" => 2.4,
            "Sample Volume" => 2.4
        },

        "analysis" => {
            "Components" => {
                "strips" => [
                    "A",
                    "B",
                    "C",
                    "D",
                    "E",
                    "F"
                ],
            },
            "Mutation Labels" => [
                "K65R",
                "K103N",
                "V106M",
                "Y181C",
                "M184V",
                "G190A"
            ],
            "Mutation Colors" => ["red", "yellow", "white", "green", "blue", "purple"]
        }

    }
  end
end

library: {name: OLALib, category: OLASimple}
code_source:
# Library code here
# category = "Tissue Culture Libs"
# needs "#{category}/TissueCulture"
needs "OLASimple/OLAConstants"
needs "OLASimple/OLAGraphics"
needs "OLASimple/NetworkRequests"

module TextExtension
  include ActionView::Helpers::TagHelper

  def bold
    return content_tag(:b, "#{self}")
  end

  def ital
    return content_tag(:i, "#{self}")
  end

  def strong
    return content_tag(:strong, "#{self}")
  end

  def color(which_color)
    return content_tag(:font, "#{self}", color: which_color)
  end

  def cap
    remaining = ""
    remaining = self[1..-1] if self.length > 1
    return self[0].capitalize + remaining
  end

  def quote
    return "\"#{self}\""
  end
end

module RefExtension
  include OLAConstants
  # this requires :output_kit, :output_unit, :output_sample, and :pack_hash temporary values
  # references require :kit, :unit, :component, and :sample keys

  def sort_by &block
    super(&block).extend(OperationList)
  end

  def component(name)
    self.temporary[:pack_hash][COMPONENTS_FIELD_VALUE][name]
  end

  def input_component(name)
    get_input_item_helper(name).get(COMPONENT_KEY)
  end

  def output_component(name)
    self.get_output_item_helper(name).get(COMPONENT_KEY)
  end

  def ref(name, with_sample = false)
    # returns the label for a temporary item by name
    t = self.temporary
    c = self.component(name)
    kit = t[:output_kit]
    unit = t[:output_unit]
    # samp = t[:output_sample]
    samp = ""
    if with_sample
      samp = t[:output_sample]
    end
    self.alias_helper(kit, unit, c, samp)
  end

  def tube_label(name, with_sample = false)
    self.label_helper(*self.ref_tokens(name, with_sample))
  end

  def label_helper(k, u, c, s)
    ["#{k}#{u}", "#{c}#{s}"]
  end

  def input_tube_label(name)
    self.label_helper(*self.input_tokens(name))
  end

  def output_tube_label(name)
    self.label_helper(*self.output_tokens(name))
  end

  # TOKENS
  def ref_tokens(name, with_sample = false)
    # return array for kit-unit and component-sample, usually for labeling purposes
    t = self.temporary
    c = self.component(name)
    kit = t[:output_kit]
    unit = t[:output_unit]
    samp = "" #t[:output_sample]
    if with_sample
      samp = t[:output_sample]
    end
    [kit, unit, c, samp]
  end

  def ref_tokens_helper(item)
    [item.get(KIT_KEY), item.get(UNIT_KEY), item.get(COMPONENT_KEY), item.get(SAMPLE_KEY)]
  end

  def input_tokens(name)
    self.ref_tokens_helper(self.get_input_item_helper(name))
  end

  def output_tokens(name)
    self.ref_tokens_helper(self.get_output_item_helper(name))
  end

  def alias_helper(kit, unit, component, sample)
    # returns the label given kit, unit, comp and sample
    "#{kit}#{unit}#{component}#{sample}"
  end

  def ref_helper(item)
    # returns the label for an item
    self.alias_helper(*self.ref_tokens_helper(item))
  end

  def refs_helper(item)
    # returns an array of labels for a collection
    components = item.get(COMPONENT_KEY)
    raise "Components must be an array to use refs_helper" unless components.is_a?(Array)
    components.map do |c|
      self.alias_helper(item.get(KIT_KEY), item.get(UNIT_KEY), c, item.get(SAMPLE_KEY))
    end
  end

  def get_input_item_helper(name)
    input = self.input(name)
    raise "Could not find input field_value #{name}" if input.nil?
    item = input(name).item
    raise "Input #{name} has no item" if item.nil?
    item
  end

  def get_output_item_helper(name)
    output = self.output(name)
    raise "Could not find output field_value \"#{name}\"" if output.nil?
    item = output(name).item
    raise "Output \"#{name}\" has no item" if item.nil?
    item
  end

  def input_ref(name)
    # return the label for an input
    self.ref_helper(get_input_item_helper(name))
  end

  def input_ref_tokens(name)
    # return the label for an input
    self.ref_tokens_helper(get_input_item_helper(name))
  end

  def output_ref(name)
    # return the label for an output
    self.ref_helper(get_output_item_helper(name))
  end

  def output_ref_tokens(name)
    # return the label for an input
    self.ref_tokens_helper(get_output_item_helper(name))
  end

  def input_refs(name)
    # return the array of labels for an input
    self.refs_helper(get_input_item_helper(name))
  end

  def output_refs(name)
    # return the array of labels for an output
    self.refs_helper(get_output_item_helper(name))
  end

  def make_alias_from_pack_hash(output_item, package_name, from_item)
    kit = self.temporary[:output_kit]
    unit = self.temporary[:output_unit]
    component = self.component(package_name)
    sample = self.temporary[:output_sample]
    patient = self.temporary[:patient]

    raise "Kit is nil" if kit.nil?
    raise "Unit is nil" if unit.nil?
    raise "Component is nil" if component.nil?
    raise "Sample is nil" if sample.nil?
    raise "Patient ID is nil" if sample.nil?

    output_item.associate(KIT_KEY, kit)
    output_item.associate(UNIT_KEY, unit)
    output_item.associate(COMPONENT_KEY, component)
    output_item.associate(SAMPLE_KEY, sample)
    output_item.associate(PATIENT_ID_KEY, patient)
    output_item.associate(ALIAS_KEY, self.ref_helper(output_item))

    # from associations
    output_item.associate(:from, self.input(from_item).item.id)
    output_item.associate(:fromref, self.input_ref(from_item))
    output_item.associate(:from_pack, "#{self.temporary[:input_kit]}#{self.temporary[:input_unit]}")
    output_item
  end

  def make_item_and_alias(name, package_name, from_item)
    output_item = self.output(name).make
    self.make_alias_from_pack_hash(output_item, package_name, from_item)
  end

  def make_collection_and_alias(name, package_name, from_item)
    output_collection = self.output(name).make_collection
    components = self.component(package_name)
    components.each do |c|
      output_collection.add_one(self.output(name).sample)
    end
    output_item = self.output(name).item
    self.make_alias_from_pack_hash(output_item, package_name, from_item)
  end
end

module OLALib
  include OLAConstants
  include NetworkRequests

  String.send(:prepend, TextExtension)
  Integer.send(:prepend, TextExtension)
  Float.send(:prepend, TextExtension)
  Operation.send(:prepend, RefExtension)
#   include TissueCulture

#######################################
# OLA image processing API
#######################################

  # TODO add error handling to this function, since function could fail if api service disconnected
  def make_calls_from_image(image_upload)
    res = post_file(OLA_IP_API_URL, 'file', image_upload)
    return JSON.parse(res.body)['results']
  end

#######################################
# Utilities
#######################################

  def pluralizer(noun, num)
    if num == 1
      "the #{noun.pluralize(num)}"
    elsif num == 2
      "both #{noun.pluralize(num)}"
    else
      "all #{num} #{noun.pluralize(num)}"
    end
  end

  def group_by_unit ops
    ops.running.group_by {|op| op.temporary[:unit]}
  end

  def get_technician_name(job_id)
    job = Job.find(job_id)
    user_id = job.user_id
    username = "\"unknown user\""
    unless user_id.nil?
      username = User.find(job.user_id).name
    end
    username
  end

####################################
# Item Alias
####################################

  def alias_helper(kit, unit, component, sample = nil)
    sample = sample || ""
    "#{kit}#{unit}#{component}#{sample}"
  end

  def make_alias(item, kit, unit, component, sample = nil)
    sample = sample || ""
    label = alias_helper(kit, unit, component, sample)
    item.associate(ALIAS_KEY, label)
    item.associate(KIT_KEY, kit)
    item.associate(UNIT_KEY, unit)
    item.associate(COMPONENT_KEY, component)
    item.associate(SAMPLE_KEY, sample)
  end

  def get_alias_array(item)
    [item.get(KIT_KEY), item.get(UNIT_KEY), item.get(COMPONENT_KEY), item.get(SAMPLE_KEY), item.get(PATIENT_ID_KEY)]
  end

  def ref(item)
    "#{item.get(KIT_KEY)}#{item.get(UNIT_KEY)}#{item.get(COMPONENT_KEY)}#{item.get(SAMPLE_KEY)}"
  end

  def save_temporary_input_values(ops, input)
    # get the aliases from the inputs
    ops.each do |op|
      kit, unit, component, sample, patient = get_alias_array(op.input(input).item)
      op.temporary[:patient] = patient
      op.temporary[:input_kit] = kit
      op.temporary[:input_unit] = unit
      op.temporary[:input_component] = component
      op.temporary[:input_sample] = sample
      op.temporary[:input_kit_and_unit] = [kit, unit].join('')
    end
  end

  def save_pack_hash(ops, pack)
    ops.running.each do |op|
      op.temporary[:pack_hash] = get_pack_hash(op.input(pack).sample)
    end
  end

  def save_temporary_output_values(myops)
    myops.each do |op|
      op.temporary[:output_kit] = op.temporary[:input_kit]
      op.temporary[:output_unit] = op.temporary[:pack_hash][UNIT_NAME_FIELD_VALUE]
      op.temporary[:output_sample] = op.temporary[:input_sample]
      op.temporary[:output_kit_and_unit] = [op.temporary[:output_kit], op.temporary[:output_unit]].join('')
      op.temporary[:output_number_of_samples] = op.temporary[:pack_hash][NUM_SAMPLES_FIELD_VALUE]
    end
  end

#   def save_temporary_output_values(myops, pack_field_value_name, unit)
#     myops.each do |op|
#       op.temporary[:output_kit] = op.temporary[:input_kit]
#       op.temporary[:output_sample] = op.temporary[:input_sample]
#       op.temporary[:output_unit] = unit
#       op.temporary[:output_kit_and_unit] = [op.temporary[:output_kit], op.temporary[:output_unit]].join('')
#     end
#   end

  def group_packages(myops)
    myops.group_by {|op| op.temporary[:output_kit_and_unit]}
  end


####################################
# Collection Alias
####################################

  def make_array_association(item, label, data)
    raise "must be an item not a collection for array associations" unless item.is_a?(Item)
    data.each.with_index do |d, i|
      item.associate("#{label}#{i}".to_sym, d)
    end
  end

  def get_array_association(item, label, i)
    item.get("#{label}#{i}".to_sym)
  end

  def make_collection_alias(item, kit, unit, components, sample = nil)
    sample = sample || ""
    raise "must be an item not a collection for array associations" unless item.is_a?(Item)
    item.associate(KIT_KEY, kit)
    item.associate(UNIT_KEY, unit)
    make_array_association(item, COMPONENT_KEY, components)
    item.associate(SAMPLE_KEY, sample)
  end

  def collection_ref(collection, index)
    component = get_array_association(collection, COMPONENT_KEY, index)
    "#{collection.get(KIT_KEY)}#{collection.get(UNIT_KEY)}#{component}#{collection.get(SAMPLE_KEY)}"
  end

  def get_collection_refs(item, length)
    length.times.map do |i|
      collection_ref(item, i)
    end
  end

####################################
# Kit and Package Parser
####################################

  def parse_component(component_string)
    # parses the component value for a OLASimple Package sample
    # values are formatted as "key: value" or "key: [val1, val2, val3]"
    val = nil
    tokens = component_string.split(/\s*\:\s*/)
    m = /\[(.+)\]/.match(tokens[1])
    if not m.nil?
      arr_str = m[1]
      val = arr_str.split(/\s*,\s*/).map {|x| x.strip()}
    else
      val = tokens[1]
    end
    return tokens[0], val
  end

  def get_component_dictionary(package_sample)
    # parses all of the components in a OLASimple Package
    components = package_sample.properties[COMPONENTS_FIELD_VALUE]
    components.map {|v| [*parse_component(v)]}.to_h
  end


  def get_pack_hash(sample)
    pack_hash = {}
    # get the properties for the output pack sample
    pack_hash = sample.properties

    # parse the component values, formatted as "key: value" or "key: [val1, val2, val3]"
    pack_hash[COMPONENTS_FIELD_VALUE] = get_component_dictionary(sample)
    pack_hash
  end

  def get_kit_hash(op)
    kit_hash = {}
    # validates that input and output kits sample definitions are formatted correctly
    [SAMPLE_PREP_FIELD_VALUE, PCR_FIELD_VALUE, LIGATION_FIELD_VALUE, DETECTION_FIELD_VALUE].each do |x|
      # validate that the input kit is the same as the expected output kits
      output_sample = op.output(x).sample
      kit_hash[x] = get_pack_hash(output_sample)
    end

    kit_hash
  end

  def kit_hash_to_json(kit_hash)
    h = kit_hash.map {|k, v| [k, v.reject {|key, val| key == KIT_FIELD_VALUE}]}.to_h
    JSON.pretty_generate(h)
  end

  def validate_kit_hash(op, kit_hash)
    # validates the kit hash
    errors = []


    kit_hash.each do |pack_name, pack_properties|
      if pack_properties.empty?
        errors.push(["components_empty_for_#{pack_name}".to_sym, "Package components are empty!"])
      end

      if pack_properties[KIT_FIELD_VALUE] != op.input(KIT_FIELD_VALUE).sample
        errors.push(["kit_not_found_in_input_for_#{pack_name}".to_sym, "Input kit does not match output package definition."])
      end
    end

    kit_sample = op.input(KIT_FIELD_VALUE).sample
    kit_sample_props = kit_sample.properties
    num_codons = kit_sample_props[CODONS_FIELD_VALUE].length
    num_codon_colors = kit_sample_props[CODON_COLORS_FIELD_VALUE].length
    num_ligation_tubes = kit_hash[LIGATION_FIELD_VALUE][COMPONENTS_FIELD_VALUE]["sample tubes"].length
    num_strips = kit_hash[DETECTION_FIELD_VALUE][COMPONENTS_FIELD_VALUE]["strips"].length

    if debug
      show do
        title "DEBUG: Kit Hash Errors"
        errors.each do |k, v|
          note "#{k}: #{v}"
        end
      end
    end

    errors.each do |k, v|
      op.error(k, v)
    end

    if debug
      show do
        title "DEBUG: Kit Hash"
        note "#{kit_hash_to_json(kit_hash)}"
        # note "#{kit_hash}"
      end
    end
  end

####################################
# Step Utilities
####################################

  def check_for_tube_defects myops
    # show do
    defects = show do
      title "Check for cracked or damaged tubes."
      select ["No", "Yes"], var: "cracked", label: "If there are cracks or defects in the tube, select \"Yes\" from the dropdown menu below.", default: 0
      note "If yes, #{SUPERVISOR} will replace the samples or tubes for you."
    end

    if defects["cracked"] == "Yes"
      show do
        title "Contact #{SUPERVISOR} about missing or damaged tubes."

        note "You said there are some problems with the samples."
        check "Contact #{SUPERVISOR} about this issue."
        note "We will simply replace these samples for you."
      end
    end
  end

  def area_preparation which_area, materials, other_area
    show do
     title "Put on a pair of gloves"
    end

    show do
      title "#{which_area.cap} preparation"

      note "You will be doing the protocol in the #{which_area.bold} area"
      warning "Put on a pair of gloves now"
      warning "Keep all materials in the #{which_area.bold} area separate from the #{other_area.bold} area"
      note "Before continuing, make sure you have the following items in the #{which_area.bold} area:"
      materials.each do |i|
        check i
      end
    end
  end

  def put_on_ppe which_area
    show do
      title "Put on Lab Coat and Gloves"

      check "Put on a lab coat"
      warning "make sure lab coat is from the #{which_area.bold}"
      check "Put on a pair of latex gloves."
    end
  end

  def transfer_title_proc(vol, from, to)
    p = Proc.new {
      title "Add #{vol}uL from #{from.bold} to #{to.bold}"
    }
    ShowBlock.new(self).run(&p)
  end

  def show_open_package(kit, unit, num_sub_packages)
    show do
      title "Tear open #{kit.bold}#{unit.bold}"
      if num_sub_packages > 0
        note "Tear open all smaller packages."
      end
      self.run(&Proc.new) if block_given?
      check "Discard the packaging material in the paper box on your right."
    end
  end

  def centrifuge_proc(sample_identifier, sample_labels, time, reason, area, balance = false)
    if area == PRE_PCR
        centrifuge = CENTRIFUGE_PRE
    elsif area == POST_PCR
        centrifuge = CENTRIFUGE_POST
    else
        raise "Invalid Area"
    end
    p = Proc.new {
      check "Place #{sample_identifier.pluralize(sample_labels.length)} #{sample_labels.join(', ').bold} in the #{centrifuge}"
      check "#{CENTRIFUGE_VERB.cap} #{pluralizer(sample_identifier, sample_labels.length)} for #{time} #{reason}"
      if balance
        if num.even?
          warning "Balance tubes in the #{centrifuge} by placing #{num / 2} #{sample_identifier.pluralize(num / 2)} on each side."
        else
          warning "Use a spare tube to balance #{sample_identifier.pluralize(num)}."
        end
      end
    }
    ShowBlock.new(self).run(&p)
  end

  def vortex_proc(sample_identifier, sample_labels, time, reason)
    p = Proc.new {
      # check "Vortex #{pluralizer(sample_identifier, num)} for #{time} #{reason}"
      check "Vortex #{sample_identifier.pluralize(sample_labels.length)} #{sample_labels.join(', ').bold} for #{time} #{reason}"
      # check "Vortex #{sample_identifier.pluralize(sample_labels.length)} #{sample_labels.map { |label| label.bold })}
    }
    ShowBlock.new(self).run(&p)
  end

  def centrifuge_helper(sample_identifier, sample_labels, time, reason, area, mynote = nil)
    sample_labels = sample_labels.uniq
    show do
      title "#{CENTRIFUGE_VERB.cap} #{sample_identifier.pluralize(sample_labels.length)} for #{time}"
      if not mynote.nil?
        note mynote
      end
      warning "Close #{pluralizer("tube cap", sample_labels.length)}."
      raw centrifuge_proc(sample_identifier, sample_labels, time, reason, area)
    end
  end

  def vortex_helper(sample_identifier,
                    sample_labels,
                    vortex_time,
                    vortex_reason, mynote = nil)
    num = sample_labels.length
    show do
      title "Vortex #{sample_identifier.pluralize(num)}"
      if not mynote.nil?
        note mynote
      end
      warning "Close #{pluralizer("tube cap", sample_labels.length)}."
      raw vortex_proc(sample_identifier, sample_labels, vortex_time, vortex_reason)
    end
  end

  def vortex_and_centrifuge_helper(sample_identifier,
                                   sample_labels,
                                   vortex_time, spin_time,
                                   vortex_reason, spin_reason, area, mynote = nil)
    num = sample_labels.length
    show do
      title "Vortex and #{CENTRIFUGE_VERB} #{sample_identifier.pluralize(num)}"
      if not mynote.nil?
        note mynote
      end
      warning "Close #{pluralizer("tube cap", sample_labels.length)}."
      # note "Using #{sample_identifier.pluralize(num)} #{sample_labels.join(', ').bold}:"
      raw vortex_proc(sample_identifier, sample_labels, vortex_time, vortex_reason)
      raw centrifuge_proc(sample_identifier, sample_labels, spin_time, spin_reason, area)
      check "Place the tubes back on rack"
    end
  end

  def add_to_thermocycler(sample_identifier, sample_labels, program_name, program_table, name)
    if sample_labels.is_a?(Array)
      len = sample_labels.length
    else
      len = sample_labels
    end

    show do
      title "Run #{name}"
      check "Add #{pluralizer(sample_identifier, len)} to #{THERMOCYCLER}"
      check "Close and tighten the lid."
      check "Select the program named #{program_name.bold} under the <b>OS</b>"
      check "Hit <b>\"Run\"</b> and click <b>\"OK\"</b>"
      table program_table
    end
  end

  def clean_area which_area
    show do
      disinfectant = "10% bleach"
      title "Wipe down #{which_area.bold} with #{disinfectant.bold}."
      note "Now you will wipe down your #{BENCH} and equipment with #{disinfectant.bold}."
      check "Spray #{disinfectant.bold} onto a #{WIPE} and clean off pipettes and pipette tip boxes."
      check "Spray a small amount of #{disinfectant.bold} on the bench surface. Clean bench with #{WIPE}."
      # check "Spray some #{disinfectant.bold} on a #{WIPE}, gently wipe down keyboard and mouse of this computer/tablet."
      warning "Do not spray #{disinfectant.bold} onto tablet or computer!"
      check "Finally, spray outside of gloves with #{disinfectant.bold}."
    end

    show do
      disinfectant = "70% ethanol"
      title "Wipe down #{which_area.bold} with #{disinfectant.bold}."
      note "Now you will wipe down your #{BENCH} and equipment with #{disinfectant.bold}."
      check "Spray #{disinfectant.bold} onto a #{WIPE} and clean off pipettes and pipette tip boxes."
      check "Spray a small amount of #{disinfectant.bold} on the bench surface. Clean bench with #{WIPE}."
      #   check "Spray a #{"small".bold} amount of #{disinfectant.bold} on a #{WIPE}. Gently wipe down keyboard and mouse of this computer/tablet."
      warning "Do not spray #{disinfectant.bold} onto tablet or computer!"
      check "Finally, spray outside of gloves with #{disinfectant.bold}."
    end
  end

  def area_setup area, materials, other_area = nil
    area_preparation area, materials, other_area
    put_on_ppe area
    clean_area area
  end


####################################
# Displaying Images
######################################
  def extract_basename filename
    ext = File.extname(filename)
    basename = File.basename(filename, ext)
    basename
  end

  def show_with_expected_uploads(op, filename, save_key = nil, num_tries = 5)
    upload_hashes = []
    warning_msg = nil
    num_tries.times.each do |i|
      if upload_hashes.empty?
        # ask for uploads
        result = show do
          warning warning_msg unless warning_msg.nil?
          self.run(&Proc.new) if block_given?
          upload var: :files
        end
        upload_hashes = result[:files] || []

        if debug and i >= 1
          n = "default_filename.txt"
          if i >= 2
            n = filename
          end
          upload_hashes.push({:id => 12345, :name => n})
        end

        # try again if not files were uploaded
        if upload_hashes.empty?
          warning_msg = "You did not upload any files! Please try again."
        end

        unless upload_hashes.empty?
          # get name to id hash
          name_to_id_hash = upload_hashes.map {|u| [extract_basename(u[:name]), u[:id]]}.to_h

          # get the file even if technician uploaded multiple files
          if name_to_id_hash.keys.include?(extract_basename(filename))
            upload_hashes = [{name: filename, id: name_to_id_hash[filename]}]
          else
            warning_msg = "File #{filename} not uploaded. Please find file <b>\"#{filename}\"</b>. You uploaded files #{name_to_id_hash.keys.join(', ')}"
            upload_hashes = []
          end
        end
      end
    end
    raise "Expected file uploads, but there were none!" if upload_hashes.empty?

    upload_ids = upload_hashes.map {|uhash| uhash[:id]}
    uploads = []
    if debug
      random_uploads = Upload.includes(:job)
      uploads = upload_ids.map {|u| random_uploads.sample}
    else
      uploads = upload_ids.map {|u_id| Upload.find(u_id)}
    end
    upload = uploads.first
    op.temporary[save_key] = upload unless save_key.nil?
    op.temporary["#{save_key}_id".to_sym] = upload.id unless save_key.nil?
    return upload
  end

  def display_upload(upload, size = "100%")
    p = Proc.new do
      note "<img src=\"#{upload.expiring_url}\" width=\"#{size}\"></img>"
    end
    ShowBlock.new(self).run(&p)
  end

    def display_strip_section(upload, display_section, num_sections, size)
      p = Proc.new do
          x = 100.0/num_sections
          styles = []
          num_sections.times.each do |section|
              x1 = 100 - (x * (section+1)).to_i
              x2 = (x*(section)).to_i
              styles.push(".clipimg#{section} { clip-path: inset(0% #{x1}% 0% #{x2}%); }")
          end
          style = "<head><style>#{styles.join(' ')}</style></head>"
          note style
          note "<img class=\"clipimg#{display_section}\" src=\"#{upload.expiring_url}\" width=\"#{size}\"></img>" 
      end
      ShowBlock.new(self).run(&p)
  end

end

library: {name: SVGGraphics, category: OLASimple}
code_source:
############################################
#
# Generic SVG Graphics for lab work
#
############################################

require 'matrix'

module Graphics

  class Tag
    # an HTML/XML like tag
    #
    def initialize(tag_name, value: nil, properties: nil)
      if properties.nil?
        properties = {}
      end
      if value.nil?
        value = ""
      end
      @tag_name = tag_name
      @properties = properties
      @value = value
    end

    def Tag.property(label, value)
      return "#{label}=\"#{value}\""
    end

    def value
      @value
    end

    def update(props)
      @properties = @properties.merge(props)
    end

    def properties
      @properties.select {|_, v|
        !v.nil? and v != ""}.map {|k, v|
        Tag.property(k, v)
      }.join(' ')
    end

    def formatter
      REXML::Formatters::Pretty.new
    end

    def to_str
      props = self.properties
      if props != ""
        props = " " + props
      end
      if self.value == ""
        return "<#{@tag_name}#{props} />"
      end

      mystr = "<#{@tag_name}#{props}>#{self.value}</#{@tag_name}>"
      return mystr
      mydoc = REXML::Document.new(mystr)
      self.formatter.write(mydoc.root, "")
    end

    def dump
      {
          properties: @properties,
          value: @value,
          tag_name: @tag_name
      }
    end

    def self.load(props)
      print("loading #{self}")
      return self.new(props[:tag_name], value: props[:value], properties: props[:properties])
    end

    def inst
      self.class.load(self.dump)
    end

    # def inst
    #   Marshal.load(Marshal.dump(self))
    # end

    def to_s
      self.to_str
    end
  end

  # A vector image, like an icon
  class SVGElement < Tag
    attr_accessor :alignment, :value, :boundx, :boundy
    attr_reader :x, :y, :yscale, :rot, :xposrot, :yposrot, :xscale, :yscale, :name, :classname, :transformations

    @@debug = false

    # A SVG element to display in an image
    #
    def initialize(children: nil,
                   name: nil,
                   classname: nil,
                   x: 0,
                   y: 0,
                   boundx: 0,
                   boundy: 0,
                   alignment: 'top-left',
                   xscale: 1,
                   yscale: 1,
                   rot: 0,
                   xposrot: 0,
                   yposrot: 0,
                   properties: nil,
                   transformations: nil,
                   style: nil)
      properties = properties || {}
      classname = classname || ""
      children = [children] unless children.is_a?(Array)
      super("g", properties: properties)
      @name = name
      @classname = classname
      @boundx = boundx
      @boundy = boundy
      @children = children
      @alignment = alignment
      @style = style || ""
      @transformations = transformations || []
      self.update_coordinates!(x, y)
      @xscale = xscale
      @yscale = yscale
      if @transformations.empty?
        self.transform!(x: x, y: y, xscale: xscale, yscale: yscale, rot: rot, xposrot: xposrot, yposrot: yposrot)
      end
    end

    def update_coordinates!(x, y)
      @x = x
      @y = y
    end

    def dump
      tag_props = super
      tag_props.reject! {|k, v| ["tag_name", "value"].include?(k.to_s)}
      props = {
          x: @x,
          y: @y,
          xscale: @xscale,
          yscale: @yscale,
          name: @name,
          classname: @classname,
          alignment: @alignment,
          style: @style,
          transformations: @transformations.dup.compact,
          children: @children.dup.compact,
          boundx: @boundx,
          boundy: @boundy
      }
      props.merge(tag_props)
    end

    def self.load(props)
      self.new(**props)
    end

    # sets the debug mode on or off
    # debug mode will display bounding boxes and anchors
    def self.debug onoroff
      @@debug = onoroff
    end

    def value
      # override the Tag value for converting SVGElement to a string
      @value = "\n#{self.display}"
      super
    end

    def new_class(myclass)
      inst = self.inst
      inst.new_class!(myclass)
    end

    def new_name(myname)
      inst = self.inst
      inst.new_name!(myname)
    end

    def new_class!(myclass)
      @classname = myclass
      self
    end

    def new_name!(myname)
      @name = myname
      self
    end

    def svg_properties
      # additional svg properties
      props = {}
      if @name != ""
        props["id"] = @name
      end
      if @classname != ""
        props["class"] = @classname
      end
      props["transform"] = self.get_transform_attribute
      props
    end

    def properties
      # override the Tab properties to add additional svg-specific properties
      # such as id="" and transform
      @properties = @properties.merge(self.svg_properties)
      super
    end

    def origin
      self.get_anchor("upper-left")
    end

    def bounds
      self.bounds_helper(0, 0)
      # use min?
    end

    def align_with(other, other_anchor)
      self.translate!(-@x, -@y)
      v = other.get_abs_anchor(other_anchor)
      v = v - other.abs_anchor_vector
      # v = other.get_abs_anchor_vector(other_anchor)
      #
      self.translate!(*v)
    end

    def g id: nil, classname: nil
      # return a external new group with svg element as a child
      new_g = SVGElement.new(name: id, properties: {"class" => classname}, x: 0, y: 0)
      new_g.update_coordinates!(@x, @y)
      new_g.boundx = @boundx * @xscale
      new_g.boundy = @boundy * @yscale
      new_g.add_child(self)
    end

    # Sets the children array
    def children=(g)
      @children = g
    end

    # Returns the children array
    def children
      @children
    end

    def display
      inst = self
      if @@debug
        inst = inst.display_with_anchors.bb
      end
      if inst.children.is_a?(Array)
        inst.children.map do |child|
          if child.is_a?(SVGElement)
            "#{child}"
          else
            child
          end
        end.join("\n")
      else
        "#{inst.children}"
      end
    end

    def add_child(child)
      if child.is_a?(String)
        @children.push(child)
      else
        @children.push(child.inst)
      end
      self
    end

    def group_children id: nil, classname: nil
      # make an internal grouping of this elements children. Return that grouping
      child_group = SVGElement.new(name: id, classname: classname)
      child_group.children = self.children
      self.children = [child_group]
      return child_group
    end

    def cx
      return (@x + @boundx) / 2.0
    end

    def cy
      return (@y + @boundy) / 2.0
    end

    # ########################################################
    # Transformation
    # ########################################################

    # scaling always happens last in SVG transform attribute to avoid unusual SVG behavior
    def get_transform_attribute
      # transformations = [self.apply_scale, self.apply_translate, self.apply_rotate]
      transformations = []
      transformations += @transformations.dup
      transformations.push("scale(#{@xscale} #{@yscale})")
      transformations.push(self.anchor_translate)
      attr = transformations.join(' ')
      zero = "(-){0,1}0(\.0){0,1}"
      attr.gsub!(/translate\((-){0,1}0(\.0){0,1} (-){0,1}0(\.0){0,1}\)/, '')
      attr.gsub!(/translate\((-){0,1}0(\.0){0,1}\)/, '')
      attr.gsub!(/rotate\((-){0,1}0(\.0){0,1} (-){0,1}0(\.0){0,1} (-){0,1}0(\.0){0,1}\)\s+/, "")
      attr.gsub!(/scale\(1\)\s+/, "")
      attr.gsub!(/scale\(1 1\)\s+/, "")
      attr.strip.gsub(/\s+/, " ")
    end

    def align!(alignment)
      self.alignment = alignment
      self
    end

    def mirror_horizontal
      child_group = self.group_children(id: "mirror_horizontal")
      child_group.scale!(-1, 1).translate!(@boundx, 0)
      return self
    end

    def mirror_vertical
      child_group = self.group_children(id: "mirror_vertical")
      child_group.scale!(1, -1).translate!(0, @boundy)
      return self
    end

    def translate!(x, y = 0)
      @x += x
      y = y || 0
      @y += y
      if x != 0 or y != 0
        @transformations.push self.translate_helper(x, y)
      end
      self
    end

    def rotate!(a, x = 0, y = 0)
      if a != 0
        @transformations.push self.rotate_helper(a, x, y)
      end
      self
    end

    # Scalings must always happen last to avoid unusual SVG behaviors
    def scale!(x, y = nil)
      if y.nil?
        y = x
      end
      @xscale = x
      @yscale = y
      # if x != 1 and y != 1
      #   @transformations.push self.scale_helper(x, y)
      # end
      self
    end

    def transform!(x: 0, y: 0, xscale: 1, yscale: 1, rot: 0, xposrot: 0, yposrot: 0)
      # update the tranform values
      self.translate!(x, y)
          .rotate!(rot, xposrot, yposrot)
          .scale!(xscale, yscale)
    end

    def translate(x, y = nil)
      i = self.inst
      i.translate!(x, y)
    end

    def rotate(a, x = 0, y = 0)
      i = self.inst
      i.rotate!(a, x, y)
    end

    def scale(x, y = nil)
      i = self.inst
      i.scale!(x, y)
    end

    def align(alignment)
      inst = self.inst
      inst.align!(alignment)
    end

    def transform(x: 0, y: 0, xscale: 1, yscale: 1, rot: 0, xposrot: 0, yposrot: 0)
      # update the tranform values
      inst = self.inst
      inst.transform!(x: x, y: y, xscale: xscale, yscale: yscale, rot: rot, xposrot: xposrot, yposrot: yposrot)
    end

    def translate_helper(x, y = 0)
      "translate(#{x} #{y})"
    end

    def rotate_helper(a, x = 0, y = 0)
      # a: degrees
      # x: rotate point
      # y: rotate point
      "rotate(#{a} #{x} #{y})"
    end


    def scale_helper(x, y = 1)
      # a: degrees
      # x: rotate point
      # y: rotate point
      "scale(#{x} #{y})"
    end

    def anchor_translate
      x = self.anchor_vector
      self.translate_helper(-x[-0], -x[1])
    end

    def apply_rotate
      self.rotate_helper(@rot, @xposrot, @yposrot)
    end

    def apply_scale
      self.scale_helper(@xscale, @yscale)
    end

    # ########################################################
    # Anchors
    # ########################################################

    def get_anchor_vector(alignment)
      anchor_matrix = self.parse_alignment alignment
      cw = @boundx / 2.0
      cy = @boundy / 2.0
      Vector[(anchor_matrix[0] + 1) * cw, (anchor_matrix[1] + 1) * cy]
    end

    def anchor_vector
      self.get_anchor_vector @alignment
    end

    def get_anchor alignment
      p = Vector[@x, @y]
      p + self.get_anchor_vector(alignment)
    end

    def anchor
      p = Vector[@x, @y]
      p + self.get_anchor_vector(@alignment)
    end

    def get_abs_anchor alignment
      p = Vector[@x, @y]
      p + self.get_abs_anchor_vector(alignment)
    end

    def abs_anchor
      self.get_abs_anchor(@alignment)
    end

    # multiple the anchor vector by the scaling vector
    def abs_anchor_vector
      return self.get_abs_anchor_vector(@alignment)
    end

    def get_abs_anchor_vector alignment
      a = self.get_anchor_vector(alignment)
      return Vector[@xscale * a[0], @yscale * a[1]]
    end

    def display_with_anchors
      if @name == 'debuganchor'
        return self
      end
      cross = SVGElement.new(name: "debuganchor", boundx: 10, boundy: 10)
      cross.add_child Tag.new('line', properties: {x1: 0, y1: 0, x2: 10, y2: 10, stroke: 'red', 'stroke-width' => 0.5})
      cross.add_child Tag.new('line', properties: {x2: 0, y1: 0, x1: 10, y2: 10, stroke: 'red', 'stroke-width' => 0.5})
      cross.add_child Tag.new('rect', properties: {x: 0, y: 0, width: 10, height: 10, stroke: 'red', fill: 'none', 'stroke-width' => 0.5})
      cross.scale!(0.75)
      cross.align!('center-center')
      inst = self.inst
      halign = ['left', 'center', 'right']
      valign = ['top', 'center', 'bottom']
      halign.each do |h|
        valign.each do |v|
          inst.add_child(cross.translate(*inst.get_anchor_vector("#{h}-#{v}")))
        end
      end
      inst
    end

    def bb
      if @name == "debuganchor"
        return self
      end
      inst = self.inst
      ax, ay = self.anchor
      bounding_box = Tag.new('rect', properties: {
          x: 0,
          y: 0,
          width: @boundx,
          height: @boundy,
          "stroke-width" => 0.5,
          stroke: 'red',
          fill: 'none'
      })
      inst.add_child(bounding_box)
    end

    def parse_alignment(alignment)
      # parses an alignment string like 'center-left'

      tokens = alignment.split('-')
      if tokens.length != 2
        raise "Property 'alignment=#{alignment}' is improperly formatted (e.g. use 'alignment=\"center-left\"')"
      end

      if ['left', 'right'].include?(tokens[1])
        tokens[0], tokens[1] = tokens[1], tokens[0]
      end

      if ['upper', 'bottom', 'top'].include?(tokens[0])
        tokens[0], tokens[1] = tokens[1], tokens[0]
      end

      if ['left', 'right'].include?(tokens[1])
        raise "Property 'alignment' not understood. Cannot be aligned to both left and right. Found '#{alignment}'"
      end

      if ['top', 'upper', 'bottom'].include?(tokens[0])
        raise "Property 'alignment' not understood. Cannot be aligned to both top and bottom. Found '#{alignment}'"
      end

      anchor_dict = {
          left: -1,
          center: 0,
          right: 1,
          upper: -1,
          top: -1,
          bottom: 1
      }
      tokens.map {|t| anchor_dict[t.to_sym]}
    end

    # change relative coordinates to absolute coordinates
    def v(x, y)
      return Vector[x, y]
    end

    def abs_v(x, y)
      return Vector[@xscale * x, @yscale * y]
    end

    def style(mystyle)
      inst = self.inst
      inst.style!(mystyle)
    end

    def style!(mystyle)
      @style = Tag.new("style", value: mystyle)
    end

    def svg(width=nil, height=nil, scale = 1.0)
      width = width || @boundx * @xscale
      height = height || @boundy * @yscale
      Tag.new('svg',
              value: [@style, self.g(id: "svg").to_str].join(''), properties: {
              width: "#{width * scale}px",
              height: "#{height * scale}px",
              viewBox: "0 0 #{width} #{height}",
              version: "1.1",
              xmlns: "http://www.w3.org/2000/svg"
          })
    end
  end

  class Shape < SVGElement
    def initialize(x, y, shape, stroke = 'black', stroke_width = 1, shapevalue = nil, *args)

      super(*args)
      if @shape_properties.nil?
        @shape_properties = {}
      end
      @shape = shape
      @shapevalue = shapevalue
      self.update({stroke: stroke, "stroke-width" => stroke_width})
    end

    def dump
      elements_props = super
      {
          shape_properties: @shape_properties,
          shape: @shape,
          shapevalue: @shapevalue,
          element_props: elements_props
      }
    end

    def self.load(props)
      new = self.new(0, 0, props[:shape], 'black', 1, props[:shapevalue], **props[:element_props])
      new.update(props[:shape_properties])
    end

    def inst
      self.class.load(self.dump)
    end

    # def inst
    #   Marshal.load(Marshal.dump(self))
    # end

    def get_child
      Tag.new(@shape, value: @shapevalue, properties: @shape_properties)
    end

    def update new_hash
      @shape_properties.merge!(new_hash)
      @children[0] = self.get_child
      self
    end
  end

  class Rect < Shape
    def initialize(x, y, width, height, *args)
      @shape_properties = {width: width, height: height}
      super(x, y, 'rect', *args)
      @boundx = width
      @boundy = height
    end
  end

  class Circle < Shape
    def initialize(x, y, r, *args)
      @shape_properties = {r: r, cx: 0, cy: 0}
      super(x, y, 'circle', *args)
    end
  end

  class Line < Shape
    def initialize(x1, y1, x2, y2, *args)
      @shape_properties = {
          x1: x1,
          y1: y1,
          x2: x2,
          y2: y2}
      super(0, 0, 'line', *args)
    end
  end

  class VectorLine < Shape
    def initialize(x, y, dx, dy, *args)
      @shape_properties = {x1: 0, y1: 0, x2: dx, y2: dy}
      super(x, y, 'line', *args)
    end
  end

  def label(text, properties = nil)
    properties = properties || {}
    font_size = properties[:font_size] || 12
    boundx = font_size * text.length * 0.5
    boundy = font_size
    mylabel = SVGElement.new(boundx: boundx, boundy: boundy)
    a = mylabel.get_anchor_vector('center-center')
    properties[:x] = a[0]
    properties[:y] = a[1]
    properties["alignment-baseline".to_sym] = 'middle'
    properties["text-anchor".to_sym] = 'middle'
    properties['font-family'.to_sym] = "Verdana"
    mylabel.add_child(
        Tag.new("text", value: text, properties: properties)
    )
  end

  # class Label < Shape
  #   def initialize(label, font_size, x = 0, y = 0, font_family = "Arial", stroke='black', stroke_width=0, *args)
  #     @shape_properties = {
  #         x: 0, y: 0,
  #         "font-size" => font_size,
  #         "font-family" => font_family,
  #         'alignment-baseline' => 'middle',
  #         'text-anchor' => 'middle'}
  #     label = label || ""
  #     super(x, y, 'text', stroke, stroke_width, @shapevalue, *args)
  #     @shapevalue = label
  #     @boundy = font_size
  #     @boundx = @shapevalue.length * font_size
  #     self.update({})
  #   end
  #
  #   def self.load(props)
  #     new = self.new(props[:shapevalue], 0, 0, 0, "Arial", "black", 0, props[:element_props])
  #     new.update(props[:shape_properties])
  #   end
  #
  #   # Override x, y position so that label aligns with anchor
  #   def get_child
  #     s = @shape_properties.dup
  #     av = self.get_anchor_vector('center-center')
  #     s[:x] = av[0]
  #     s[:y] = av[1]
  #     Tag.new(@shape, value: @shapevalue, properties: s)
  #   end
  #
  #   # auto | baseline | before-edge | text-before-edge | middle | central | after-edge | text-after-edge | ideographic | alphabetic | hanging | mathematical | inherit
  #   def vertical_alignment(alignment)
  #     self.update('alignment-baseline' => alignment)
  #   end
  #
  #   # start | middle | end | inherit
  #   def text_anchor(alignment)
  #     self.update('text-anchor' => alignment)
  #   end
  # end

  # Organizes SVGElements on a grid of your choosing.
  # Makes it easier to position elements
  class SVGGrid < SVGElement
    attr_accessor :elements

    def initialize(xnum, ynum, xspacing, yspacing, *args)
      super(*args)
      if @name == ""
        @name = "grid"
      end
      @xnum = xnum
      @ynum = ynum
      @xspacing = xspacing
      @yspacing = yspacing
      @boundx = self.boundx
      @boundy = self.boundy
      @elements = Array.new(xnum) {Array.new(ynum) {[]}} # 3d array for displaying some elements on a 2D grid
    end

    def dump
      element_props = super
      {
          xspacing: @xspacing,
          yspacing: @yspacing,
          xnum: @xnum,
          ynum: @ynum,
          element_props: element_props,
          elements: @elements
      }
    end

    def self.load(props)
      newgrid = SVGGrid.new(props[:xnum], props[:ynum], props[:xspacing], props[:yspacing], props[:element_props])
      newgrid.update_elements(props[:elements])
      newgrid
    end

    def update_elements elements
      if elements.length != @xnum
        raise "Cannot update_elements. Number of rows must equal #{xnum} but was #{elements.length}"
      end

      col_lengths = elements.map {|row| row.length}.uniq

      if col_lengths.length != 1
        raise "Cannot update_elements. Rows have different number of columns."
      end

      if elements[0].length != @ynum
        raise "Cannot update_elements. Number of columns must equal #{@ynum} but was #{elements[0].length}"
      end

      @elements = elements
    end

    def inst
      self.class.load(self.dump)
    end

    # def inst
    #   Marshal.load(Marshal.dump(self))
    # end


    def pos(r, c)
      return Vector[r * @xspacing, c * @yspacing]
    end

    def abs_pos_vector(r, c)
      v = self.pos(r, c)
      return Vector[@xscale * v[0], @yscale * v[1]]
    end

    def grid_coor(r, c, x, y)
      px, py = self.pos(r, c)
      return [px + x, py + y]
    end

    def grid_elements
      @elements.map.with_index do |row, r|
        x = self.pos(r, 0)[0]
        row_element = SVGElement.new(name: "gridrow#{r}").translate(x, 0)
        row.each.with_index do |element, c|
          y = pos(0, c)[1]
          col_element = SVGElement.new(name: "gridcol#{c}").translate(0, y)
          col_element.children = element

          # don't add empty columns
          if not element.nil? and not element == "" and not element == []
            row_element.add_child(col_element)
          end
        end

        # don't add empty rows
        row_element unless row_element.children.empty?
      end.compact
    end

    def children
      children = @children.dup
      grid_elements = self.grid_elements
      grid_elements + children
    end

    def group_children id: nil, classname: nil
      raise "Cannot group children of a SVGGrid. Group using '.g' before grouping children"
    end

    def add(element, x, y)
      xfloor = x.floor
      xrem = (x - xfloor).round(1)
      yfloor = y.floor
      yrem = (y - yfloor).round(1)

      if xrem > 0 or yrem > 0
        element = element.g(id: "gridshift").translate(xrem * @xspacing, yrem * @yspacing)
      end
      ele = @elements[xfloor][yfloor]
      if ele.nil?
        ele = []
      end
      ele.push(element)
      @elements[xfloor][yfloor] = ele
    end

    # TODO: maximum width from individual elements bounding boxes...
    def boundx
      @xnum * @xspacing
    end

    # TODO: maximum height from individual elements bounding boxes...
    def boundy
      @ynum * @yspacing
    end

    # Applies the block through each element in the grid
    def each
      raise "#{self.class.name}.each needs a selection block" unless block_given?
      @elements.each.with_index do |row, r|
        row.each.with_index do |col, c|
          col.each do |element|
            Proc.new.call(element)
          end
        end
      end
    end

    # Applies the block through each row, col in the grid
    def each_pos
      raise "#{self.class.name}.each_pos needs a selection block" unless block_given?
      @elements.each.with_index do |row, r|
        row.each.with_index do |col, c|
          Proc.new.call(r, c)
        end
      end
    end

    def elements_at(r, c)
      @elements[r][c]
    end

    def select
      raise "#{self.class.name}.select needs a selection block" unless block_given?
      selected = []
      @elements.each.with_index do |row, r|
        row.each.with_index do |col, c|
          if Proc.new.call(r, c)
            selected.push(col)
          end
        end
      end
      return selected
    end

    # def add_each_pos
    #   raise "#{self.class.name}.add_each_pos needs a selection block" unless block_given?
    #   @elements.each.with_index do |row, r|
    #     row.each.with_index do |col, c|
    #       new_element = Proc.new.call(r, c)
    #       self.add(new_element, r, c)
    #     end
    #   end
    # end

    # return a copy of this grid with grid dots
    def griddots
      dot = Tag.new('circle', properties: {r: 3})
      inst = self.inst
      inst.each_pos do |r, c|
        inst.add(dot, r, c)
      end
      inst
    end
  end

  module MyGraphics
    attr_reader :tube, :openlid, :closedlid, :closedtube, :opentube, :detection_strip, :strip, :striplabel

    # bounding box for tube elements
    @@tubebb = SVGElement.new(boundx: 78.35, boundy: 242.95)

    def rarrow
      arrow = SVGElement.new(boundx: 33.48, boundy: 38.65)
      arrow.new_class!("rarrow")
      arrow.add_child('<polygon points="0,0 33.477,19.328 0,38.655 "/>')
    end

    def larrow
      self.rarrow.mirror_horizontal.new_class("larrow")
    end

    def uparrow
      arrow = SVGElement.new(boundx: 38.65, boundy: 33.48)
      arrow.new_class!("uparrow")
      arrow.add_child('<polygon points="0,33.477 19.328,0 38.655,33.477 "/>')
    end

    def downarrow
      self.uparrow.mirror_vertical.new_class("downarrow")
    end

    def tube
      _tube = @@tubebb.inst
      _tube.new_class!("tube")
      _tube.add_child(<<EOF
      <path fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M4.75,99.697v45.309l14.998,90.066
        c0,4.35,5.036,7.875,11.25,7.875c6.215,0,11.25-3.525,11.25-7.875l15-90.066V99.697H4.75z"/>
      <g>
        <path fill="#F7FCFE" d="M61.998,95.697c0,2.199-1.799,4-4,4h-54c-2.2,0-4-1.801-4-4v-1.875c0-2.201,1.8-4,4-4h54
          c2.201,0,4,1.799,4,4V95.697z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M61.998,95.697c0,2.199-1.799,4-4,4h-54c-2.2,0-4-1.801-4-4v-1.875
          c0-2.201,1.8-4,4-4h54c2.201,0,4,1.799,4,4V95.697z"/>
      </g>
EOF
      )
      # <line fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" x1="7.721" y1="123.572" x2="53.387" y2="123.572"/>
      _tube.inst
    end

    def tube2mL
      _tube = @@tubebb.inst
      _tube.new_class!("tube")
      _tube.add_child(<<EOF
        	<g id="2mLTube">
		<path id="_x32_mLTube" fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" d="M57,96.698H4.503v42.581l0.479,2.704
		c-0.311,1.553-0.479,3.153-0.479,4.792v70.798c0,13.955,11.812,25.374,26.249,25.374c14.436,0,26.248-11.419,26.248-25.374v-70.798
		c0-1.639-0.17-3.239-0.48-4.792l0.48-2.704V96.698z"/></g>
EOF
      )
      _tube
    end

    def closedlid
      _closedlid = @@tubebb.inst
      _closedlid.new_class!("closedlid")
      _closedlid.add_child(<<EOF
      <g>
        <path fill="#F7FCFE" d="M55.854,80.713c22.801,0,22.801,18.312,0,18.312c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173
          C55.854,83.092,55.854,81.902,55.854,80.713z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M55.854,80.713c22.801,0,22.801,18.312,0,18.312
          c0-1.189,0-2.38,0-3.57c13.912,0,13.912-11.173,0-11.173C55.854,83.092,55.854,81.902,55.854,80.713z"/>
      </g>
      <g>
        <path fill="#F7FCFE" d="M10.375,101.744c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688c0-1.1-0.535-2-1.188-2
          c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2s-1.188,0.9-1.188,2
          V101.744z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M10.375,101.744c0,1.1,0.9,2,2,2h37.25c1.1,0,2-0.9,2-2v-0.688
          c0-1.1-0.535-2-1.188-2c-0.654,0-1.188-0.9-1.188-2v-8.938c0-1.1-0.9-2-2-2h-32.5c-1.1,0-2,0.9-2,2v8.938c0,1.1-0.534,2-1.188,2
          s-1.188,0.9-1.188,2V101.744z"/>
      </g>
      <g>
        <path fill="#F7FCFE" d="M1,81.851c-0.55-0.952-0.101-1.731,1-1.731h55.473c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121
          c0.381,1.032-0.209,1.877-1.309,1.877H5.972c-1.1,0-2.45-0.779-3-1.731L1,81.851z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M1,81.851c-0.55-0.952-0.101-1.731,1-1.731h55.473
          c1.1,0,2.311,0.845,2.689,1.877l1.146,3.121c0.381,1.032-0.209,1.877-1.309,1.877H5.972c-1.1,0-2.45-0.779-3-1.731L1,81.851z"/>
      </g>
      <line fill="none" stroke="#000000" stroke-miterlimit="10" x1="72.809" y1="92.338" x2="73.953" y2="92.338"/>
EOF
      )
      _closedlid.inst
    end

    def openlid
      _openlid = @@tubebb.inst
      _openlid.new_class!("openlid")
      _openlid.add_child(<<EOF
      <g>
        <path fill="#F7FCFE" d="M72.42,77.695c-3.271,7.512-10.102,12.477-16.996,13.795c0.375,1.254,0.75,2.506,1.125,3.76
          c17.402-5.207,26.029-24.734,18.164-41.105c-1.178,0.566-2.357,1.133-3.537,1.699C74.844,61.828,75.77,70.221,72.42,77.695z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M72.42,77.695c-3.271,7.512-10.102,12.477-16.996,13.795
          c0.375,1.254,0.75,2.506,1.125,3.76c17.402-5.207,26.029-24.734,18.164-41.105c-1.178,0.566-2.357,1.133-3.537,1.699
          C74.844,61.828,75.77,70.221,72.42,77.695z"/>
      </g>
      <g>
        <path fill="#F7FCFE" d="M56.721,10.375c-1.1,0-2,0.9-2,2v37.25c0,1.1,0.9,2,2,2h0.688c1.1,0,2-0.534,2-1.188s0.9-1.188,2-1.188
          h8.938c1.1,0,2-0.9,2-2v-32.5c0-1.1-0.9-2-2-2h-8.938c-1.1,0-2-0.534-2-1.188s-0.9-1.188-2-1.188H56.721z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M56.721,10.375c-1.1,0-2,0.9-2,2v37.25c0,1.1,0.9,2,2,2h0.688
          c1.1,0,2-0.534,2-1.188s0.9-1.188,2-1.188h8.938c1.1,0,2-0.9,2-2v-32.5c0-1.1-0.9-2-2-2h-8.938c-1.1,0-2-0.534-2-1.188
          s-0.9-1.188-2-1.188H56.721z"/>
      </g>
      <g>
        <path fill="#F7FCFE" d="M76.613,1c0.953-0.55,1.732-0.1,1.732,1v55.471c0,1.1-0.846,2.311-1.877,2.69l-3.121,1.148
          c-1.033,0.38-1.877-0.21-1.877-1.31V5.971c0-1.1,0.779-2.45,1.73-3L76.613,1z"/>
        <path fill="none" stroke="#000000" stroke-miterlimit="10" d="M76.613,1c0.953-0.55,1.732-0.1,1.732,1v55.471
          c0,1.1-0.846,2.311-1.877,2.69l-3.121,1.148c-1.033,0.38-1.877-0.21-1.877-1.31V5.971c0-1.1,0.779-2.45,1.73-3L76.613,1z"/>
      </g>
      <line fill="#F7FCFE" stroke="#000000" stroke-miterlimit="10" x1="60.408" y1="47.721" x2="60.408" y2="14.471"/>
EOF
      )
      _openlid.inst
    end

    def opentube
      _opentube = @@tubebb.inst
      _opentube.new_name!("opentube")
      _opentube.add_child(self.openlid)
      _opentube.add_child(self.tube).inst
    end

    def closedtube
      _closedtube = @@tubebb.inst
      _closedtube.new_name!("closedtube")
      _closedtube.add_child(self.closedlid)
      _closedtube.add_child(self.tube).inst
    end

    def strip
      mystrip = SVGElement.new(boundx: 83.1, boundy: 247.45)
      mystrip.add_child(<<EOF
<g id="Strip">
	<g>
		<rect x="4.75" fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" width="78.346" height="242.948"/>
		<line fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" x1="0" y1="247.448" x2="4.75" y2="242.948"/>
		<polygon fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" points="-0.067,4.777 4.75,0.001 4.75,242.948 0,247.448 		"/>
		<polygon fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" points="74.917,247.448 0,247.448 4.75,242.948 83.096,242.948 
					"/>
	</g>
	<g>
		<rect x="19.583" y="49.433" fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" width="46.667" height="80"/>
		<rect x="27.083" y="57.433" fill="#FFFFFF" stroke="#000000" stroke-miterlimit="10" width="31.667" height="64"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="27.083" y1="121.433" x2="19.583" y2="129.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="58.75" y1="121.433" x2="66.25" y2="129.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="58.75" y1="57.433" x2="66.25" y2="49.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="27.083" y1="57.433" x2="19.583" y2="49.433"/>
	</g>
	<g>
		<path fill="#E6E7E8" stroke="#000000" stroke-miterlimit="10" d="M57.524,216.515c0,4.385-3.693,7.938-8.249,7.938H36.557
			c-4.556,0-8.249-3.554-8.249-7.938v-22.164c0-4.385,3.693-7.939,8.249-7.939h12.718c4.556,0,8.249,3.554,8.249,7.939V216.515z"/>
		<path fill="#FFFFFF" stroke="#000000" stroke-miterlimit="10" d="M52.917,213.019c0,3.002-2.528,5.435-5.647,5.435h-8.706
			c-3.119,0-5.647-2.433-5.647-5.435v-15.172c0-3.001,2.528-5.435,5.647-5.435h8.706c3.119,0,5.647,2.433,5.647,5.435V213.019z"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="34.01" y1="216.224" x2="30.27" y2="221.647"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="51.823" y1="216.224" x2="55.562" y2="221.647"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="51.823" y1="194.642" x2="55.023" y2="188.663"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="34.01" y1="194.195" x2="30.27" y2="189.666"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="32.917" y1="205.433" x2="28.308" y2="205.433"/>
		<line fill="none" stroke="#000000" stroke-miterlimit="10" x1="52.917" y1="205.433" x2="57.524" y2="205.433"/>
	</g>

</g>
EOF
      )
    end

    def fluid_small
      fluid = @@tubebb.inst
      fluid.new_class!("fluid")
      fluid.new_name!("small_fluid")
      fluid.add_child(<<EOF
      <path id="FluidSmall" fill="#00AEEF" stroke="#000000" stroke-miterlimit="10" d="M44.565,216.853
	c-12.031,0-12.031,8.833-24.062,8.833c-0.825,0-1.589-0.045-2.309-0.122l1.584,9.509c0,4.35,5.036,7.875,11.249,7.875
	c6.215,0,11.25-3.525,11.25-7.875l3.031-18.202C45.063,216.862,44.821,216.853,44.565,216.853z"/>
EOF
      )
    end

    def fluid_medium
      fluid = @@tubebb.inst
      fluid.new_class!("fluid")
      fluid.new_name!("med_fluid")
      fluid.add_child(<<EOF
<path id="FluidMedium" fill="#00AEEF" stroke="#000000" stroke-miterlimit="10" d="M44.315,166.187
	c-12.031,0-12.031,8.833-24.062,8.833c-5.585,0-8.576-1.904-11.383-3.944l10.657,63.997c0,4.35,5.036,7.875,11.249,7.875
	c6.215,0,11.25-3.525,11.25-7.875l11.101-66.649C50.918,167.142,48.268,166.187,44.315,166.187z"/>
EOF
      )
    end

    def fluid_large
      fluid = @@tubebb.inst
      fluid.new_class!("fluid")
      fluid.new_name!("small_fluid")
      fluid.add_child(<<EOF
<path id="FluidLarge" fill="#BCE6FB" stroke="#000000" stroke-miterlimit="10" d="M43.202,110.52
	c-12.031,0-12.031,8.833-24.062,8.833c-7.554,0-10.365-3.483-14.39-6.075v31.729l14.998,90.066c0,4.35,5.036,7.875,11.249,7.875
	c6.215,0,11.25-3.525,11.25-7.875l15-90.066v-28.64C53.402,113.803,50.538,110.52,43.202,110.52z"/>
EOF
      )
    end

    def powder
      powder = @@tubebb.inst
      powder.new_class!("powder")
      powder.new_name!("powder")
      powder.add_child(<<EOF
         <path id="Powder" fill="#FFFFFF" stroke="#000000" stroke-miterlimit="10" d="M27.784,234.289c-0.647-2.643,1.036-2.308,2.842-2.495
	c1.183-0.124,3.538-0.179,4.792,0.55c0.33,0.957,1.645,1.147,1.775,1.945c0.106,0.649-1.18,1.446-1.407,1.983
	c-0.399,0.946,0.521,1.041-0.603,2.289c-0.534,0.593-2.338,1.107-3.088,1.463c-0.073,0.265-0.021,0.495-0.09,0.763
	c-1.498,0.401-7.79-0.416-4.875-2.518c-1.888-1.042-0.182-4.734,1.506-4.551"/>
EOF
      )
    end

    def striplabel
      mylabel = SVGElement.new(boundx: 83.1, boundy: 247.45)
      mylabel.add_child(<<EOF
<g id="StripLabel" class="fluid">
	<rect x="4.75" stroke="#000000" stroke-miterlimit="10" width="78.346" height="46.433"/>
</g>
EOF
      )
    end

    def detection_strip
      mystrip = SVGElement.new(boundx: 83.1, boundy: 247.45)
      mystrip.add_child(self.strip)
      mystrip.add_child(self.striplabel)
    end

    def control_band
      band = SVGElement.new(boundx: 83.1, boundy: 247.45)
      band.add_child(<<EOF
<line id="ControlBand" fill="none" stroke="#F7A7AB" stroke-width="6" stroke-miterlimit="10" x1="27.083" y1="68.432" x2="58.75" y2="68.432"/>
EOF
      )
    end

    def wt_band
      band = SVGElement.new(boundx: 83.1, boundy: 247.45)
      band.add_child(<<EOF
<line id="WTBand" fill="none" stroke="#F7A7AB" stroke-width="6" stroke-miterlimit="10" x1="27.089" y1="89.433" x2="58.756" y2="89.433"/>
EOF
      )
    end

    def mut_band
      band = SVGElement.new(boundx: 83.1, boundy: 247.45)
      band.add_child(<<EOF
<line id="MutantBand" fill="none" stroke="#F7A7AB" stroke-width="6" stroke-miterlimit="10" x1="27.089" y1="111.099" x2="58.756" y2="111.099"/>
EOF
      )
    end
  end

  ########################################################################
  # ####
  # ####
  # #### GRAPHICS TESTING
  # ####
  # ####
  ########################################################################


  def save_svg(filename, svg)
    File.write(filename, svg.to_str)
  end
end
